<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="FFMpeg File" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\User\Applications\ffmpeg-n4.4-latest-win64-gpl-shared-4.4\bin\ffmpeg.exe</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>FFMpeg Executable</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="File Path" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\User\Documents\Hugo\20220120 - Bonsai Videos for Conversion Tests\ori</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>File Path</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Conversion Args" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>-y -f rawvideo -vcodec rawvideo -s 636x278 -r 330 -pix_fmt gray -i \\.\pipe\video -c:v libx264 -b:v 5212K -maxrate 5212K -bufsize 5M</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Conversion Args</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>File Path</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFiles">
                <io:Path>C:\Users\User\Documents\Hugo\20220120 - Bonsai Videos for Conversion Tests\ori</io:Path>
                <io:SearchPattern>*.txt</io:SearchPattern>
                <io:SearchOption>TopDirectoryOnly</io:SearchOption>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>File List</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Number of Files</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Current File Index</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Output File</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Conversion String</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>File List</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Current File Index</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Value" Selector="Item2" />
        </PropertyMappings>
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>3</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Update Output File</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFileNameWithoutExtension" />
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>.mp4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>File Path</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\User\Documents\Hugo\20220120 - Bonsai Videos for Conversion Tests\ori</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>\</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 + Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Output File</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="11" Label="Source1" />
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="8" Label="Source2" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Update Args String</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Conversion Args</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>-y -f rawvideo -vcodec rawvideo -s 636x278 -r 330 -pix_fmt gray -i \\.\pipe\video -c:v libx264 -b:v 5212K -maxrate 5212K -bufsize 5M</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value />
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Output File</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\User\Documents\Hugo\20220120 - Bonsai Videos for Conversion Tests\ori\teste_22_127_2_tied_0,275_0,275_1_10.mp4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 + " """ + Item2 + """"</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Conversion String</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="13" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Convert File</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixReader">
                <dsp:Path>C:\Users\User\Documents\Hugo\20220120 - Bonsai Videos for Conversion Tests\ori\teste_22_127_2_tied_0,275_0,275_1_10.txt</dsp:Path>
                <dsp:FileName>C:\Users\User\Documents\Hugo\20220120 - Bonsai Videos for Conversion Tests\ori\teste_22_127_2_tied_0,275_0,275_1_10.txt</dsp:FileName>
                <dsp:Offset>0</dsp:Offset>
                <dsp:SampleRate>2000000000</dsp:SampleRate>
                <dsp:ChannelCount>1</dsp:ChannelCount>
                <dsp:BufferLength>177452</dsp:BufferLength>
                <dsp:Depth>U8</dsp:Depth>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Submatrix">
                <dsp:StartRow>0</dsp:StartRow>
                <dsp:EndRow xsi:nil="true" />
                <dsp:StartCol>8</dsp:StartCol>
                <dsp:EndCol xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Reshape">
                <dsp:Channels>1</dsp:Channels>
                <dsp:Rows>279</dsp:Rows>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Resize">
                <cv:Size>
                  <cv:Width>636</cv:Width>
                  <cv:Height>278</cv:Height>
                </cv:Size>
                <cv:Interpolation>Linear</cv:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ImageWriter">
                <cv:Path>\\.\pipe\video</cv:Path>
                <cv:Suffix>None</cv:Suffix>
                <cv:Overwrite>true</cv:Overwrite>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Conversion String</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Arguments" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FFMpeg Executable</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:StartProcess">
                <io:FileName>C:\Users\User\Applications\ffmpeg-n4.4-latest-win64-gpl-shared-4.4\bin\ffmpeg.exe</io:FileName>
                <io:Arguments>-y -f rawvideo -vcodec rawvideo -s 636x278 -r 330 -pix_fmt gray -i \\.\pipe\video -c:v libx264 -b:v 5212K -maxrate 5212K -bufsize 5M "C:\Users\User\Documents\Hugo\20220120 - Bonsai Videos for Conversion Tests\ori\teste_22_127_2_tied_0,275_0,275_1_10.mp4"</io:Arguments>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Next File</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Current File Index</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Current File Index</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Number of Files</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>16</rx:Count>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>