WorkflowBuilder(Version=2.8.5)
GroupWorkflow PulsePalChannelConfig
    IntProperty(Value=0) => #0
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #2
    #0, #2 -> Bonsai.PulsePal.ConfigureOutputChannel => #3
      PortName=COM12
      Channel=1
      Biphasic=false
      Phase1Voltage=5
      Phase2Voltage=0
      RestingVoltage=0
      Phase1Duration=0.002
      InterPhaseInterval=0
      Phase2Duration=0.0001
      InterPulseInterval=0.002
      BurstDuration=0
      InterBurstInterval=0
      PulseTrainDuration=1.5
      PulseTrainDelay=0
      CustomTrainIdentity=None
      CustomTrainTarget=PulseOnset
      CustomTrainLoop=false
      TriggerOnChannel1=false
      TriggerOnChannel2=true
      ContinuousLoop=false
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #5
    #3, #5 -> Bonsai.PulsePal.ConfigureOutputChannel => #6
      PortName=COM12
      Channel=2
      Biphasic=false
      Phase1Voltage=3
      Phase2Voltage=0
      RestingVoltage=0
      Phase1Duration=0.45
      InterPhaseInterval=0
      Phase2Duration=0.0001
      InterPulseInterval=10
      BurstDuration=0
      InterBurstInterval=0
      PulseTrainDuration=100
      PulseTrainDelay=0.3
      CustomTrainIdentity=None
      CustomTrainTarget=PulseOnset
      CustomTrainLoop=false
      TriggerOnChannel1=false
      TriggerOnChannel2=false
      ContinuousLoop=false
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #8
    #6, #8 -> Bonsai.PulsePal.ConfigureOutputChannel => #9
      PortName=COM12
      Channel=3
      Biphasic=false
      Phase1Voltage=1.5
      Phase2Voltage=0
      RestingVoltage=0
      Phase1Duration=0.48
      InterPhaseInterval=0
      Phase2Duration=0.0001
      InterPulseInterval=10
      BurstDuration=0
      InterBurstInterval=0
      PulseTrainDuration=100
      PulseTrainDelay=0.23
      CustomTrainIdentity=None
      CustomTrainTarget=PulseOnset
      CustomTrainLoop=false
      TriggerOnChannel1=false
      TriggerOnChannel2=false
      ContinuousLoop=false
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #11
    #9, #11 -> Bonsai.PulsePal.ConfigureOutputChannel => #12
      PortName=COM12
      Channel=4
      Biphasic=false
      Phase1Voltage=5
      Phase2Voltage=0
      RestingVoltage=0
      Phase1Duration=0.05
      InterPhaseInterval=0
      Phase2Duration=0.0001
      InterPulseInterval=10
      BurstDuration=0
      InterBurstInterval=0
      PulseTrainDuration=100
      PulseTrainDelay=0.687
      CustomTrainIdentity=None
      CustomTrainTarget=PulseOnset
      CustomTrainLoop=false
      TriggerOnChannel1=false
      TriggerOnChannel2=false
      ContinuousLoop=false
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #14
    #12, #14 -> Bonsai.PulsePal.ConfigureTriggerChannel(PortName=COM12, Channel=2, TriggerMode=PulseGated)

GroupWorkflow "Set Session Parameters"
    BooleanProperty(Value=false)
    -> BehaviorSubject Init

    ExternalizedMapping(Value(DisplayName="Session Path"))
    -> StringProperty(Value=D:\movies_fast)
    -> BehaviorSubject "Session Path"

    ExternalizedMapping(Value(DisplayName="Trial Start Nr"))
    -> IntProperty(Value=1)
    -> BehaviorSubject "Current Trial"

    ExternalizedMapping(Value(DisplayName="Trial Duration"))
    -> FloatProperty(Value=1.5)
    -> BehaviorSubject "Trial Duration"
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject "Trial Duration Timer"

    ExternalizedMapping(Value(DisplayName="ITI Lower (s)"))
    -> IntProperty(Value=8)
    -> BehaviorSubject "ITI Lower"

    ExternalizedMapping(Value(DisplayName="ITI Upper (s)"))
    -> IntProperty(Value=13)
    -> BehaviorSubject "ITI Upper"

    ExternalizedMapping(Value(DisplayName=".VIS US+"))
    -> IntProperty(Value=9)
    -> BehaviorSubject "VIS US+" => #21
    ExternalizedMapping(Value(DisplayName=".TAC US+"))
    -> IntProperty(Value=0)
    -> BehaviorSubject "TAC US+" => #24
    ExternalizedMapping(Value(DisplayName=".VIS US-"))
    -> IntProperty(Value=1)
    -> BehaviorSubject "VIS US-" => #27
    ExternalizedMapping(Value(DisplayName=".TAC US-"))
    -> IntProperty(Value=0)
    -> BehaviorSubject "TAC US-" => #30
    ExternalizedMapping(Value(DisplayName=".TAC VIS US+"))
    -> IntProperty(Value=0)
    -> BehaviorSubject "TAC VIS US+" => #33
    ExternalizedMapping(Value(DisplayName=".TAC VIS US-"))
    -> IntProperty(Value=0)
    -> BehaviorSubject "TAC VIS US-" => #36
    ExternalizedMapping(Value(DisplayName=.US+))
    -> IntProperty(Value=0)
    -> BehaviorSubject US+ => #39
    ExternalizedMapping(Value(DisplayName=.BLANK))
    -> IntProperty(Value=0)
    -> BehaviorSubject BLANK => #42
    #21, #24, #27, #30, #33, #36, #39, #42 -> Zip
    -> Add
    -> BehaviorSubject "Block Length" => #45
    ExternalizedMapping(Value(DisplayName="Number of Repetitions"))
    -> IntProperty(Value=10)
    -> BehaviorSubject "Number of Repetitions" => #48
    #45, #48 -> Zip
    -> Multiply
    -> BehaviorSubject "Number of Trials"
    -> Add(Operand=IntProperty(Value=-1))
    -> BehaviorSubject "Number of Trials Minus One"
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName="Eye Video Frame Rate"))
    -> FloatProperty(Value=250)
    -> BehaviorSubject "Eye Video Frame Rate"

    ExternalizedMapping(Value(DisplayName="PulsePal Port"))
    -> StringProperty(Value=COM12)
    -> BehaviorSubject "PulsePal Port"

    ExternalizedMapping(Value(DisplayName="Eye Area Threshold"))
    -> DoubleProperty(Value=4000)
    -> BehaviorSubject "Eye Area Threshold"

    ExternalizedMapping(Value(DisplayName="Eye Detection Threshold"))
    -> DoubleProperty(Value=40)
    -> BehaviorSubject "Eye Detection Threshold"

GroupWorkflow "Init Session"
    BooleanProperty(Value=false)
    -> Bonsai.Arduino.DigitalOutput(PortName=myArduino, Pin=2)

    Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
    -> Disable MulticastSubject Commands

    SubscribeSubject "Session Path" => #4
    -> Add(Operand=StringProperty(Value=\movie))
    -> BehaviorSubject "Eye Video Filestem" => #6
    #4 -> Add(Operand=StringProperty(Value=\conditions.txt))
    -> BehaviorSubject "Conditions File" => #8
    #4 -> Add(Operand=StringProperty(Value=\ITI.txt))
    -> BehaviorSubject "ITI File" => #10
    #4 -> Add(Operand=StringProperty(Value=\realITI.txt))
    -> BehaviorSubject "Real ITI File" => #12
    #4 -> Add(Operand=StringProperty(Value=\running.txt))
    -> BehaviorSubject "Treadmill Tick File" => #14
    #4 -> Add(Operand=StringProperty(Value=\ITI_init.txt))
    -> BehaviorSubject "ITI Init File" => #16
    #4 -> Add(Operand=StringProperty(Value=\conditions_init.txt))
    -> BehaviorSubject "Conditions Init File" => #18
    #6, #8, #10, #12, #14, #16, #18 -> Zip => #19
    IntProperty(Value=0)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.UtcDateTime.TimeOfDay.TotalSeconds)
    -> BehaviorSubject "Trial End Time" => #23
    SubscribeSubject "Number of Trials" => #24
    SubscribeSubject "Current Trial"
    -> Take(Count=1) => #26
    #24, #26 -> Zip
    -> Subtract
    -> Add(Operand=IntProperty(Value=1))
    -> BehaviorSubject "Remaining Trials" => #30
    IntProperty(Value=0)
    -> BehaviorSubject "Trial Treadmill Tick Count" => #32
    IntProperty(Value=0)
    -> BehaviorSubject "Session Treadmill Tick Count" => #34
    #19, #23, #30, #32, #34 -> Zip
    -> BooleanProperty(Value=true)
    -> BehaviorSubject "Init Complete"

    StringProperty(Value=Init)
    -> BehaviorSubject "State Machine Info"

Disable GroupWorkflow "Harp Logging"
    BehaviorSubject<Bonsai.Harp.HarpMessage> "Device Commands"
    -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> BehaviorSubject "Device Events"

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=200)) => #3
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #4
    #3, #4 -> Merge
    -> MulticastSubject "Device Commands" => #6
    SubscribeSubject "Start Session" => #7
    #6, #7 -> SubscribeWhen

    SubscribeSubject "Device Events"
    -> MemberSelector(Selector=MessageBytes) => #10
    SubscribeSubject "Session Path"
    -> Add(Operand=StringProperty(Value=\harp_file.bin))
    -> PropertyMapping(Path) => #13
    #10, #13 -> Bonsai.Dsp.MatrixWriter(Path=G:\movies_fast\harp_file.bin, Suffix=None, Overwrite=true, Layout=ColumnMajor)

GroupWorkflow "Treadmill Tick Count"
    Bonsai.DAQmx.AnalogInput
      SignalSource=""
      SampleRate=100
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1
      SamplesPerChannel=nil
      Channels
        AnalogInputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai3, TerminalConfiguration=Differential, VoltageUnits=Volts)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Val0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it > 2.5 ? 1 : 0
    -> BehaviorSubject "Treadmill Ticks"
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> GroupWorkflow "Update Trial Treadmill Tick Count"
        WorkflowInput Source1 => #0
        SubscribeSubject "Trial Treadmill Tick Count" => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject "Trial Treadmill Tick Count"
        -> WorkflowOutput
    -> WorkflowOutput

Disable GroupWorkflow "Body Camera"
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #0
    -> ElementIndex
    #0 -> MemberSelector(Selector=Metadata)
    -> BehaviorSubject "Body Camera Metadata"
    #0 -> MemberSelector(Selector=Image)
    -> Disable MulticastSubject "Camera Frames"
    -> BehaviorSubject "Body Frames To Write"

    SubscribeSubject "Body Frames To Write"
    -> Bonsai.Vision.VideoWriter
      FileName=D:\body_cam\body_cam.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=MJPG
      FrameRate=100
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    SubscribeSubject "Body Camera Metadata" => #9
    Disable SubscribeSubject "Eye Video Metadata File" => #10
    StringProperty(Value=D:\body_cam\body_cam.csv) => #11
    #10, #11 -> PropertyMapping(FileName) => #12
    #9, #12 -> GroupWorkflow "Save Metadata"
        WorkflowInput Source1 => #0
        ExternalizedMapping(FileName) => #1
        #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\body_cam\body_cam.csv, Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=false)
        -> WorkflowOutput
    -> StringProperty

GroupWorkflow GUI
    SubscribeSubject "Camera Frames"
    -> VisualizerMapping => #1
    SubscribeSubject "State Machine Info"
    -> VisualizerMapping => #3
    SubscribeSubject EyeContours
    -> VisualizerMapping => #5
    SubscribeSubject LargestBinaryRegion
    -> VisualizerMapping => #7
    SubscribeSubject "Eye Area"
    -> VisualizerMapping => #9
    SubscribeSubject "Current Trial"
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #11
    SubscribeSubject ITI
    -> VisualizerMapping => #13
    SubscribeSubject "Treadmill Ticks"
    -> VisualizerMapping => #15
    #1, #3, #5, #7, #9, #11, #13, #15 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

SubscribeSubject "Current Trial" => #7
-> Condition
    SubscribeSubject "Current Trial"
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> GroupWorkflow "Check Output Directory for Trial 1"
    WorkflowInput Source1 => #0
    SubscribeSubject "Session Path"
    -> PropertyMapping(Path)
    -> Bonsai.IO.GetFiles(Path=D:\movies_fast, SearchPattern=*.*, SearchOption=TopDirectoryOnly) => #3
    #0, #3 -> Zip
    -> MemberSelector(Selector=Item2.Length)
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> WorkflowOutput

    StringProperty(Value="Error! Output directory is not empty for Trial = 1!")
    -> MulticastSubject "State Machine Info"
-> SelectMany "Generate Session Files"
    WorkflowInput Source1 => #0
    -> GroupWorkflow "Generate ITI File" => #1
        WorkflowInput Source1
        -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
        SubscribeSubject "ITI Lower"
        -> PropertyMapping(Lower) => #3
        SubscribeSubject "ITI Upper"
        -> PropertyMapping(Upper) => #5
        #1, #3, #5 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=8, Upper=13) => #6
        SubscribeSubject "Number of Trials"
        -> PropertyMapping(Count) => #8
        #6, #8 -> Bonsai.Numerics.Distributions.SampleArray(Count=30)
        -> ToIntArray => #10
        SubscribeSubject "ITI Init File"
        -> PropertyMapping(FileName) => #12
        #10, #12 -> GroupWorkflow "CSV Writer"
            WorkflowInput Source1 => #0
            ExternalizedMapping(FileName) => #1
            #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\ITI_init.txt, Delimiter=\n, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    #0 -> GroupWorkflow "Generate Conditions File" => #2
        Defer
            GroupWorkflow "VIS US+" => #0
                SubscribeSubject "VIS US+"
                -> PropertyMapping(Count)
                -> Range(Start=0, Count=6) => #2
                -> IntProperty(Value=1) => #3
                #2 -> IntProperty(Value=0) => #4
                #2 -> IntProperty(Value=1) => #5
                #3, #4, #5 -> Zip
                -> WorkflowOutput
            GroupWorkflow "TAC US+" => #1
                SubscribeSubject "TAC US+"
                -> PropertyMapping(Count)
                -> Range(Start=0, Count=0) => #2
                -> IntProperty(Value=0) => #3
                #2 -> IntProperty(Value=1) => #4
                #2 -> IntProperty(Value=1) => #5
                #3, #4, #5 -> Zip
                -> WorkflowOutput
            GroupWorkflow "VIS US-" => #2
                SubscribeSubject "VIS US-"
                -> PropertyMapping(Count)
                -> Range(Start=0, Count=4) => #2
                -> IntProperty(Value=1) => #3
                #2 -> IntProperty(Value=0) => #4
                #2 -> IntProperty(Value=0) => #5
                #3, #4, #5 -> Zip
                -> WorkflowOutput
            GroupWorkflow "TAC US-" => #3
                SubscribeSubject "TAC US-"
                -> PropertyMapping(Count)
                -> Range(Start=0, Count=0) => #2
                -> IntProperty(Value=0) => #3
                #2 -> IntProperty(Value=1) => #4
                #2 -> IntProperty(Value=0) => #5
                #3, #4, #5 -> Zip
                -> WorkflowOutput
            GroupWorkflow "TAC VIS US+" => #4
                SubscribeSubject "TAC VIS US+"
                -> PropertyMapping(Count)
                -> Range(Start=0, Count=0) => #2
                -> IntProperty(Value=1) => #3
                #2 -> IntProperty(Value=1) => #4
                #2 -> IntProperty(Value=1) => #5
                #3, #4, #5 -> Zip
                -> WorkflowOutput
            GroupWorkflow "TAC VIS US-" => #5
                SubscribeSubject "TAC VIS US-"
                -> PropertyMapping(Count)
                -> Range(Start=0, Count=0) => #2
                -> IntProperty(Value=1) => #3
                #2 -> IntProperty(Value=1) => #4
                #2 -> IntProperty(Value=0) => #5
                #3, #4, #5 -> Zip
                -> WorkflowOutput
            GroupWorkflow US+ => #6
                SubscribeSubject US+
                -> PropertyMapping(Count)
                -> Range(Start=0, Count=0) => #2
                -> IntProperty(Value=0) => #3
                #2 -> IntProperty(Value=0) => #4
                #2 -> IntProperty(Value=1) => #5
                #3, #4, #5 -> Zip
                -> WorkflowOutput
            GroupWorkflow BLANK => #7
                SubscribeSubject BLANK
                -> PropertyMapping(Count)
                -> Range(Start=0, Count=0) => #2
                -> IntProperty(Value=0) => #3
                #2 -> IntProperty(Value=0) => #4
                #2 -> IntProperty(Value=0) => #5
                #3, #4, #5 -> Zip
                -> WorkflowOutput
            #0, #1, #2, #3, #4, #5, #6, #7 -> Merge
            -> Bonsai.Numerics.Permutation => #9
            SubscribeSubject "Number of Repetitions"
            -> PropertyMapping(Count) => #11
            #9, #11 -> RepeatCount(Count=3) => #12
            SubscribeSubject "Conditions Init File"
            -> PropertyMapping(FileName) => #14
            #12, #14 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\conditions_init.txt, ListSeparator=;, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)

            Timer(DueTime=PT5S, Period=PT0S)
            -> WorkflowOutput
        -> WorkflowOutput

        WorkflowInput Source1
    #1, #2 -> Zip
    -> Take(Count=1)
    -> WorkflowOutput

    StringProperty(Value="Generating Session Files (trial = 1)")
    -> MulticastSubject "State Machine Info"
-> BooleanProperty(Value=false) => #11
#7 -> Condition
    SubscribeSubject "Current Trial"
    -> GreaterThan(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> GroupWorkflow "Check Output Directory for Trial > 1"
    WorkflowInput Source1 => #0
    SubscribeSubject "Session Path"
    -> PropertyMapping(Path)
    -> Bonsai.IO.GetFiles(Path=D:\movies_fast, SearchPattern=*.*, SearchOption=TopDirectoryOnly) => #3
    #0, #3 -> Zip
    -> MemberSelector(Selector=Item2.Length)
    -> Condition
        WorkflowInput Source1
        -> NotEqual(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> WorkflowOutput

    StringProperty(Value="Error! Output directory is empty for Trial > 1!")
    -> MulticastSubject "State Machine Info"
-> SelectMany "Update Session Files"
    WorkflowInput Source1 => #0
    -> SelectMany "Update Real ITI File" => #1
        WorkflowInput Source1 => #0
        SubscribeSubject "Real ITI File" => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject "Current Trial"
        -> Subtract(Operand=IntProperty(Value=1)) => #4
        #2, #4 -> WithLatestFrom
        -> InputMapping(Selector=Item1.Item1, FileName(Selector=Item1.Item2), Count(Selector=Item2))
        -> SelectMany => #7
            ExternalizedMapping(FileName)
            -> Bonsai.IO.CsvReader(FileName=D:\movies_fast\realITI.txt, SkipRows=0) => #1
            ExternalizedMapping(Count) => #2
            #1, #2 -> Take(Count=90)
            -> ToArray
            -> WorkflowOutput
        SubscribeSubject "Real ITI File"
        -> PropertyMapping(FileName) => #9
        #7, #9 -> SelectMany
            WorkflowInput Source1 => #0
            ExternalizedMapping(FileName) => #1
            #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\realITI.txt, ListSeparator=\n, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> SelectMany "Update Treadmill Tick File" => #2
        WorkflowInput Source1 => #0
        SubscribeSubject "Treadmill Tick File" => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject "Current Trial"
        -> Subtract(Operand=IntProperty(Value=1)) => #4
        #2, #4 -> WithLatestFrom
        -> InputMapping(Selector=Item1.Item1, FileName(Selector=Item1.Item2), Count(Selector=Item2))
        -> SelectMany => #7
            ExternalizedMapping(FileName)
            -> Bonsai.IO.CsvReader(FileName=D:\movies_fast\running.txt, SkipRows=0) => #1
            ExternalizedMapping(Count) => #2
            #1, #2 -> Take(Count=90)
            -> ToArray
            -> WorkflowOutput
        SubscribeSubject "Treadmill Tick File"
        -> PropertyMapping(FileName) => #9
        #7, #9 -> SelectMany => #10
            WorkflowInput Source1 => #0
            ExternalizedMapping(FileName) => #1
            #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\running.txt, ListSeparator=\n, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
            -> WorkflowOutput
        SubscribeSubject "Current Trial"
        -> Subtract(Operand=IntProperty(Value=2)) => #12
        #10, #12 -> WithLatestFrom
        -> InputMapping(Selector=Item1, Value(Selector=Item2))
        -> Index(Operand=IntProperty(Value=89))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Int32.Parse(it)
        -> MulticastSubject "Session Treadmill Tick Count"
        -> Take(Count=1)
        -> WorkflowOutput
    #0 -> SelectMany "Update ITI File" => #3
        WorkflowInput Source1 => #0
        SubscribeSubject "ITI Init File" => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject "Current Trial"
        -> Subtract(Operand=IntProperty(Value=1)) => #4
        #2, #4 -> WithLatestFrom
        -> InputMapping(Selector=Item1.Item1, FileName(Selector=Item1.Item2), Count(Selector=Item2))
        -> SelectMany => #7
            ExternalizedMapping(FileName)
            -> Bonsai.IO.CsvReader(FileName=D:\movies_fast\ITI_init.txt, SkipRows=0) => #1
            ExternalizedMapping(Count) => #2
            #1, #2 -> Take(Count=90)
            -> ToArray
            -> WorkflowOutput
        SubscribeSubject "ITI File"
        -> PropertyMapping(FileName) => #9
        #7, #9 -> SelectMany
            WorkflowInput Source1 => #0
            ExternalizedMapping(FileName) => #1
            #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\ITI.txt, ListSeparator=\n, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> SelectMany "Update Conditions File" => #4
        WorkflowInput Source1 => #0
        SubscribeSubject "Conditions Init File" => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject "Current Trial"
        -> Subtract(Operand=IntProperty(Value=1)) => #4
        #2, #4 -> WithLatestFrom
        -> InputMapping(Selector=Item1.Item1, FileName(Selector=Item1.Item2), Count(Selector=Item2))
        -> SelectMany => #7
            ExternalizedMapping(FileName)
            -> Bonsai.IO.CsvReader(FileName=D:\movies_fast\conditions_init.txt, SkipRows=0) => #1
            ExternalizedMapping(Count) => #2
            #1, #2 -> Take(Count=90)
            -> ToArray
            -> WorkflowOutput
        SubscribeSubject "Conditions File"
        -> PropertyMapping(FileName) => #9
        #7, #9 -> SelectMany
            WorkflowInput Source1 => #0
            ExternalizedMapping(FileName) => #1
            #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\conditions.txt, ListSeparator=\n, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
            -> WorkflowOutput
        -> WorkflowOutput
    #1, #2, #3, #4 -> Zip
    -> Take(Count=1)
    -> WorkflowOutput

    StringProperty(Value="Updating Session Files (trial <> 1)")
    -> MulticastSubject "State Machine Info"
-> BooleanProperty(Value=true) => #15
#11, #15 -> Merge
-> Take(Count=1)
-> GroupWorkflow "Get Camera Frame"
    WorkflowInput Source1
    -> SelectMany
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> InputMapping(Selector=it, TriggerOnChannel2(Selector=it)) => #2
        SubscribeSubject "PulsePal Port"
        -> PropertyMapping(PortName) => #4
        #2, #4 -> Bonsai.PulsePal.ConfigureChannelParameter(PortName=COM12, Parameter=Bonsai.PulsePal.TriggerOnChannel2Configuration(Channel=1, TriggerOnChannel2=true))
        -> WorkflowOutput
    -> SelectMany => #2
        Bonsai.PointGrey.FlyCapture(Index=1, ColorProcessing=Default)
        -> MemberSelector(Selector=Image) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=95, MaxValue=255, ThresholdType=BinaryInv)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion => #5
        #1, #5 -> Zip
        -> Take(Count=1) => #7
        -> BooleanProperty(Value=false)
        -> Bonsai.Arduino.DigitalOutput(PortName=myArduino, Pin=2) => #9
        #7, #9 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput

        Timer(DueTime=PT1S, Period=PT0S)
        -> BooleanProperty(Value=true)
        -> Bonsai.Arduino.DigitalOutput(PortName=myArduino, Pin=2)
    -> MemberSelector(Selector=Item1) => #3
    -> BehaviorSubject "Camera Frames"
    -> WorkflowOutput
    #3 -> BehaviorSubject EyeThresholdImage
    #2 -> MemberSelector(Selector=Item2)
    -> BehaviorSubject "Eye State"
    #2 -> MemberSelector(Selector=Item2.Area)
    -> DoubleProperty(Value=0)
    -> BehaviorSubject "Eye Area"

    StringProperty(Value="Getting Init Camera Frame")
    -> MulticastSubject "State Machine Info"

    BehaviorSubject<Bonsai.Vision.Contours>
    -> BehaviorSubject EyeContours

    BehaviorSubject<Bonsai.Vision.ConnectedComponent>
    -> BehaviorSubject LargestBinaryRegion
-> Take(Count=1)
-> BehaviorSubject "Start Session"

GroupWorkflow "Init Trial"
    GroupWorkflow "Set Number of Past Trials" => #0
        SubscribeSubject "Current Trial"
        -> Subtract(Operand=IntProperty(Value=1))
        -> BehaviorSubject "Number of Past Trials"
        -> WorkflowOutput
    -> GroupWorkflow "Set Video Filenames" => #1
        WorkflowInput Source1 => #0
        SubscribeSubject "Eye Video Filestem" => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject "Current Trial"
        -> GroupWorkflow "Format Number" => #5
            WorkflowInput Source1 => #0
            -> Condition
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it > 9 && it <100)? True : False
                -> WorkflowOutput
            -> StringProperty(Value=0) => #2
            #0 -> Condition
                WorkflowInput Source1
                -> LessThan(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            -> StringProperty(Value=00) => #4
            #0 -> Condition
                WorkflowInput Source1
                -> GreaterThan(Operand=IntProperty(Value=99))
                -> WorkflowOutput
            -> StringProperty(Value="") => #6
            #2, #4, #6 -> Merge => #7
            #0 -> Format(Format="") => #8
            #7, #8 -> Zip
            -> Add
            -> WorkflowOutput
        #3, #5 -> WithLatestFrom
        -> Add => #7
        -> Add(Operand=StringProperty(Value=.avi))
        -> BehaviorSubject "Eye Video File" => #9
        #7 -> Add(Operand=StringProperty(Value=.csv))
        -> BehaviorSubject "Eye Video Metadata File" => #11
        #3 -> Add(Operand=StringProperty(Value=ITI)) => #12
        SubscribeSubject "Current Trial"
        -> GroupWorkflow "Format Number" => #14
            WorkflowInput Source1 => #0
            -> Condition
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it > 9 && it <100)? True : False
                -> WorkflowOutput
            -> StringProperty(Value=0) => #2
            #0 -> Condition
                WorkflowInput Source1
                -> LessThan(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            -> StringProperty(Value=00) => #4
            #0 -> Condition
                WorkflowInput Source1
                -> GreaterThan(Operand=IntProperty(Value=99))
                -> WorkflowOutput
            -> StringProperty(Value="") => #6
            #2, #4, #6 -> Merge => #7
            #0 -> Format(Format="") => #8
            #7, #8 -> Zip
            -> Add
            -> WorkflowOutput
        #12, #14 -> WithLatestFrom
        -> Add => #16
        -> Add(Operand=StringProperty(Value=.avi))
        -> BehaviorSubject "ITI Video File" => #18
        #16 -> Add(Operand=StringProperty(Value=.csv))
        -> BehaviorSubject "ITI Video Metadata File" => #20
        #9, #11, #18, #20 -> Zip
        -> WorkflowOutput
    #0 -> GroupWorkflow "Set ITI" => #2
        WorkflowInput Source1 => #0
        SubscribeSubject "ITI Init File"
        -> PropertyMapping(FileName) => #2
        SubscribeSubject "Number of Past Trials"
        -> PropertyMapping(SkipRows) => #4
        #0, #2, #4 -> SelectMany "ITI Reader"
            WorkflowInput Source1 => #0
            ExternalizedMapping(FileName, SkipRows) => #1
            #0, #1 -> Bonsai.IO.CsvReader(FileName=D:\movies_fast\ITI_init.txt, SkipRows=100)
            -> WorkflowOutput
        -> Take(Count=1)
        -> BehaviorSubject ITI
        -> WorkflowOutput
    #0 -> GroupWorkflow "Set CS1-CS2-US Conditions" => #3
        WorkflowInput Source1 => #0
        SubscribeSubject "Conditions Init File"
        -> PropertyMapping(FileName) => #2
        SubscribeSubject "Number of Past Trials"
        -> PropertyMapping(SkipRows) => #4
        #0, #2, #4 -> SelectMany "Conditions Reader"
            WorkflowInput Source1 => #0
            ExternalizedMapping(FileName, SkipRows) => #1
            #0, #1 -> Bonsai.IO.CsvReader(FileName=D:\movies_fast\conditions_init.txt, ScanPattern="%i,%i,%i", SkipRows=100)
            -> WorkflowOutput
        -> Take(Count=1) => #6
        -> MemberSelector(Selector=Item3)
        -> BehaviorSubject "Present US String"
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == 1 ? true : false
        -> BehaviorSubject "Present US"
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 1 : 0
        -> BehaviorSubject "Present US Int" => #12
        #6 -> MemberSelector(Selector=Item2)
        -> BehaviorSubject "Present CS2 String"
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == 1 ? true : false
        -> BehaviorSubject "Present CS2"
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 1 : 0
        -> BehaviorSubject "Present CS2 Int" => #18
        #6 -> MemberSelector(Selector=Item1)
        -> BehaviorSubject "Present CS1 String"
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == 1 ? true : false
        -> BehaviorSubject "Present CS1"
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 1 : 0
        -> BehaviorSubject "Present CS1 Int" => #24
        #12, #18, #24 -> Disable Merge
        -> Zip
        -> WorkflowOutput
    #0 -> IntProperty(Value=0)
    -> MulticastSubject "Trial Treadmill Tick Count" => #5
    #1, #2, #3, #5 -> Zip => #6
    -> BooleanProperty(Value=true)
    -> InputMapping(Selector=it, TriggerOnChannel2(Selector=it)) => #8
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #10
    #8, #10 -> Bonsai.PulsePal.ConfigureChannelParameter(PortName=COM12, Parameter=Bonsai.PulsePal.TriggerOnChannel2Configuration(Channel=1, TriggerOnChannel2=true)) => #11
    #6 -> BooleanProperty(Value=false)
    -> InputMapping(Selector=it, TriggerOnChannel2(Selector=it)) => #13
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #15
    #13, #15 -> Bonsai.PulsePal.ConfigureChannelParameter(PortName=COM12, Parameter=Bonsai.PulsePal.TriggerOnChannel2Configuration(Channel=2, TriggerOnChannel2=false)) => #16
    #6 -> BooleanProperty(Value=false)
    -> InputMapping(Selector=it, TriggerOnChannel2(Selector=it)) => #18
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #20
    #18, #20 -> Bonsai.PulsePal.ConfigureChannelParameter(PortName=COM12, Parameter=Bonsai.PulsePal.TriggerOnChannel2Configuration(Channel=3, TriggerOnChannel2=false)) => #21
    #6 -> BooleanProperty(Value=false)
    -> InputMapping(Selector=it, TriggerOnChannel2(Selector=it)) => #23
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #25
    #23, #25 -> Bonsai.PulsePal.ConfigureChannelParameter(PortName=COM12, Parameter=Bonsai.PulsePal.TriggerOnChannel2Configuration(Channel=4, TriggerOnChannel2=false)) => #26
    #11, #16, #21, #26 -> Zip
    -> Take(Count=1)
    -> WorkflowOutput

    StringProperty(Value="Init Trial")
    -> MulticastSubject "State Machine Info"

    WorkflowInput Source1
-> SelectMany ITI
    SubscribeSubject ITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToDouble(it)
    -> InputMapping(Selector=it, PulseTrainDuration(Selector=it))
    -> Bonsai.PulsePal.ConfigureOutputChannel
      PortName=COM12
      Channel=1
      Biphasic=false
      Phase1Voltage=5
      Phase2Voltage=0
      RestingVoltage=0
      Phase1Duration=0.002
      InterPhaseInterval=0
      Phase2Duration=0.0001
      InterPulseInterval=0.002
      BurstDuration=0
      InterBurstInterval=0
      PulseTrainDuration=11
      PulseTrainDelay=0
      CustomTrainIdentity=None
      CustomTrainTarget=PulseOnset
      CustomTrainLoop=false
      TriggerOnChannel1=false
      TriggerOnChannel2=true
      ContinuousLoop=false

    BooleanProperty(Value=true)
    -> Bonsai.Arduino.DigitalOutput(PortName=myArduino, Pin=2)

    SubscribeSubject ITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(Convert.ToDouble(it))
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT11S, Period=PT0S)
    -> BooleanProperty(Value=false)
    -> Bonsai.Arduino.DigitalOutput(PortName=myArduino, Pin=2)
    -> WorkflowOutput

    StringProperty(Value="Wait ITI")
    -> MulticastSubject "State Machine Info"

    Bonsai.PointGrey.FlyCapture(Index=1, ColorProcessing=Default) => #15
    -> ElementIndex
    #15 -> MemberSelector(Selector=Metadata)
    -> BehaviorSubject "Camera Metadata"
    #15 -> MemberSelector(Selector=Image)
    -> MulticastSubject "Camera Frames"
    -> BehaviorSubject "Frames To Write"

    SubscribeSubject "Frames To Write" => #22
    SubscribeSubject "Eye Video Frame Rate"
    -> PropertyMapping(FrameRate) => #24
    SubscribeSubject "ITI Video File"
    -> PropertyMapping(FileName(Selector=it)) => #26
    #22, #24, #26 -> Bonsai.Vision.VideoWriter
      FileName=D:\movies_fast\movieITI100.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=MJPG
      FrameRate=250
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    SubscribeSubject "Camera Metadata" => #28
    SubscribeSubject "ITI Video Metadata File"
    -> PropertyMapping(FileName) => #30
    #28, #30 -> GroupWorkflow "Save Metadata"
        WorkflowInput Source1 => #0
        ExternalizedMapping(FileName) => #1
        #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\movieITI100.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
        -> WorkflowOutput
    -> StringProperty
-> Take(Count=1)
-> SelectMany "Check Eye State"
    FloatProperty(Value=60)
    -> InputMapping(Selector=it, PulseTrainDuration(Selector=it))
    -> Bonsai.PulsePal.ConfigureOutputChannel
      PortName=COM12
      Channel=1
      Biphasic=false
      Phase1Voltage=5
      Phase2Voltage=0
      RestingVoltage=0
      Phase1Duration=0.002
      InterPhaseInterval=0
      Phase2Duration=0.0001
      InterPulseInterval=0.002
      BurstDuration=0
      InterBurstInterval=0
      PulseTrainDuration=60
      PulseTrainDelay=0
      CustomTrainIdentity=None
      CustomTrainTarget=PulseOnset
      CustomTrainLoop=false
      TriggerOnChannel1=false
      TriggerOnChannel2=true
      ContinuousLoop=false

    BooleanProperty(Value=true)
    -> Bonsai.Arduino.DigitalOutput(PortName=myArduino, Pin=2)

    Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
    -> Disable MulticastSubject Commands

    Bonsai.PointGrey.FlyCapture(Index=1, ColorProcessing=Default)
    -> MemberSelector(Selector=Image)
    -> MulticastSubject "Camera Frames" => #9
    -> GroupWorkflow "Eye State" => #10
        WorkflowInput Source1 => #0
        SubscribeSubject "Eye Detection Threshold" => #1
        #0, #1 -> WithLatestFrom
        -> InputMapping(Selector=Item1, ThresholdValue(Selector=Item2))
        -> Bonsai.Vision.Threshold(ThresholdValue=40, MaxValue=255, ThresholdType=BinaryInv)
        -> MulticastSubject EyeThresholdImage
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> MulticastSubject EyeContours
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MulticastSubject LargestBinaryRegion => #10
        -> MemberSelector(Selector=Area)
        -> Bonsai.Dsp.Buffer(Count=250, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #14
        -> WorkflowOutput
        #14 -> MulticastSubject "Eye Area"
        #10 -> MulticastSubject "Eye State"
    SubscribeSubject "Eye Area Threshold"
    -> PropertyMapping(Value) => #12
    #10, #12 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=4000))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> Bonsai.Arduino.DigitalOutput(PortName=myArduino, Pin=2)
    -> Take(Count=1)
    -> WorkflowOutput
    #9 -> PublishSubject "Eye State Images"

    StringProperty(Value="Check Eye State")
    -> MulticastSubject "State Machine Info"
-> Take(Count=1)
-> SelectMany "Prepare Trial"
    SubscribeSubject "Trial Duration"
    -> InputMapping(Selector=it, PulseTrainDuration(Selector=it))
    -> Bonsai.PulsePal.ConfigureOutputChannel
      PortName=COM12
      Channel=1
      Biphasic=false
      Phase1Voltage=5
      Phase2Voltage=0
      RestingVoltage=0
      Phase1Duration=0.002
      InterPhaseInterval=0
      Phase2Duration=0.0001
      InterPulseInterval=0.002
      BurstDuration=0
      InterBurstInterval=0
      PulseTrainDuration=1.5
      PulseTrainDelay=0
      CustomTrainIdentity=None
      CustomTrainTarget=PulseOnset
      CustomTrainLoop=false
      TriggerOnChannel1=false
      TriggerOnChannel2=true
      ContinuousLoop=false

    WorkflowInput Source1 => #3
    -> GroupWorkflow "Save ITI" => #4
        WorkflowInput Source1 => #0
        SubscribeSubject ITI => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject "ITI File"
        -> PropertyMapping(FileName) => #5
        #3, #5 -> GroupWorkflow
            WorkflowInput Source1 => #0
            ExternalizedMapping(FileName) => #1
            #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\ITI.txt, ListSeparator=\n, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)
            -> WorkflowOutput
        -> WorkflowOutput
    #3 -> GroupWorkflow "Save Conditions" => #5
        WorkflowInput Source1 => #0
        SubscribeSubject "Present CS1 Int" => #1
        SubscribeSubject "Present CS2 Int" => #2
        SubscribeSubject "Present US Int" => #3
        #1, #2, #3 -> Zip => #4
        #0, #4 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #6
        SubscribeSubject "Conditions File"
        -> PropertyMapping(FileName) => #8
        #6, #8 -> GroupWorkflow
            WorkflowInput Source1 => #0
            ExternalizedMapping(FileName) => #1
            #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\conditions.txt, ListSeparator=\n, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject "Present CS1" => #6
    SubscribeSubject "Present CS2" => #7
    SubscribeSubject "Present US" => #8
    #6, #7, #8 -> Zip => #9
    #3, #9 -> WithLatestFrom => #10
    -> MemberSelector(Selector=Item2.Item1)
    -> InputMapping(Selector=it, TriggerOnChannel2(Selector=it)) => #12
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #14
    #12, #14 -> Bonsai.PulsePal.ConfigureChannelParameter(PortName=COM12, Parameter=Bonsai.PulsePal.TriggerOnChannel2Configuration(Channel=2, TriggerOnChannel2=true)) => #15
    #10 -> MemberSelector(Selector=Item2.Item2)
    -> InputMapping(Selector=it, TriggerOnChannel2(Selector=it)) => #17
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #19
    #17, #19 -> Bonsai.PulsePal.ConfigureChannelParameter(PortName=COM12, Parameter=Bonsai.PulsePal.TriggerOnChannel2Configuration(Channel=3, TriggerOnChannel2=false)) => #20
    #10 -> MemberSelector(Selector=Item2.Item3)
    -> InputMapping(Selector=it, TriggerOnChannel2(Selector=it)) => #22
    SubscribeSubject "PulsePal Port"
    -> PropertyMapping(PortName) => #24
    #22, #24 -> Bonsai.PulsePal.ConfigureChannelParameter(PortName=COM12, Parameter=Bonsai.PulsePal.TriggerOnChannel2Configuration(Channel=4, TriggerOnChannel2=true)) => #25
    #15, #20, #25 -> Zip => #26
    #3, #4, #5, #26 -> Zip
    -> GroupWorkflow "Save Real ITI"
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.UtcDateTime.TimeOfDay.TotalSeconds) => #3
        SubscribeSubject "Trial End Time" => #4
        #3, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(Item1 - Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> ReplaySubject "Real ITI"(BufferSize=nil) => #8
        SubscribeSubject "Real ITI File"
        -> PropertyMapping(FileName) => #10
        #8, #10 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\realITI.txt, ListSeparator=\n, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)
        -> WorkflowOutput
    -> WorkflowOutput

    StringProperty(Value="Prepare Trial")
    -> MulticastSubject "State Machine Info"
-> SelectMany Trial
    StringProperty(Value="Running Trial")
    -> MulticastSubject "State Machine Info"

    Timer(DueTime=PT0.3S, Period=PT0S)
    -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
    -> Disable MulticastSubject Commands
    -> BooleanProperty(Value=true)
    -> Bonsai.Arduino.DigitalOutput(PortName=myArduino, Pin=2) => #6
    SubscribeSubject "Trial Duration Timer" => #7
    #6, #7 -> WithLatestFrom
    -> InputMapping(Selector=Item1, DueTime(Selector=Item2))
    -> Delay(DueTime=PT1.5S)
    -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
    -> Disable MulticastSubject Commands
    -> BooleanProperty(Value=false)
    -> Bonsai.Arduino.DigitalOutput(PortName=myArduino, Pin=2)
    -> WorkflowOutput

    Bonsai.PointGrey.FlyCapture(Index=1, ColorProcessing=Default) => #16
    -> ElementIndex
    #16 -> MemberSelector(Selector=Metadata)
    -> BehaviorSubject "Camera Metadata"
    #16 -> MemberSelector(Selector=Image)
    -> MulticastSubject "Camera Frames"
    -> BehaviorSubject "Frames To Write"

    SubscribeSubject "Frames To Write" => #23
    SubscribeSubject "Eye Video Frame Rate"
    -> PropertyMapping(FrameRate) => #25
    SubscribeSubject "Eye Video File"
    -> PropertyMapping(FileName(Selector=it)) => #27
    #23, #25, #27 -> Bonsai.Vision.VideoWriter
      FileName=D:\movies_fast\movie100.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=MJPG
      FrameRate=250
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    SubscribeSubject "Camera Metadata" => #29
    SubscribeSubject "Eye Video Metadata File"
    -> PropertyMapping(FileName) => #31
    #29, #31 -> GroupWorkflow "Save Metadata"
        WorkflowInput Source1 => #0
        ExternalizedMapping(FileName) => #1
        #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\movie100.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
        -> WorkflowOutput
    -> StringProperty
-> Take(Count=1)
-> SelectMany "Finalize Trial"
    IntProperty(Value=0)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.UtcDateTime.TimeOfDay.TotalSeconds)
    -> MulticastSubject "Trial End Time" => #3
    SubscribeSubject "Number of Trials" => #4
    WorkflowInput Source1 => #5
    SubscribeSubject "Current Trial" => #6
    #5, #6 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #8
    #4, #8 -> Zip
    -> Subtract
    -> MulticastSubject "Remaining Trials" => #11
    #8 -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject "Current Trial" => #13
    Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
    -> Disable MulticastSubject Commands => #15
    #5 -> SelectMany "Update Treadmill Ticks" => #16
        WorkflowInput Source1 => #0
        SubscribeSubject "Trial Treadmill Tick Count" => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject "Session Treadmill Tick Count" => #4
        #3, #4 -> WithLatestFrom
        -> Add
        -> MulticastSubject "Session Treadmill Tick Count" => #7
        SubscribeSubject "Treadmill Tick File"
        -> PropertyMapping(FileName) => #9
        #7, #9 -> Bonsai.IO.CsvWriter(FileName=D:\movies_fast\running.txt, ListSeparator=\n, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)
        -> IntProperty(Value=0)
        -> MulticastSubject "Trial Treadmill Tick Count"
        -> WorkflowOutput
    BooleanProperty(Value=false)
    -> Bonsai.Arduino.DigitalOutput(PortName=myArduino, Pin=2) => #18
    #3, #11, #13, #15, #16, #18 -> Zip
    -> WorkflowOutput

    StringProperty(Value="Finalizing Trial")
    -> MulticastSubject "State Machine Info"
-> Take(Count=1) => #30
SubscribeSubject "Remaining Trials"
-> PropertyMapping(Count) => #32
#30, #32 -> RepeatCount(Count=30) => #33
SubscribeSubject "Start Session" => #34
#33, #34 -> SubscribeWhen

SubscribeSubject "Remaining Trials"
-> Condition
    SubscribeSubject "Remaining Trials"
    -> Equal(Operand=IntProperty(Value=0))
    -> WorkflowOutput
-> Take(Count=1)
-> WorkflowOutput

Disable SubscribeSubject TrialType
SubscribeSubject "State Machine Info"
SubscribeSubject "Eye State"

SubscribeSubject "Present CS1" => #43
SubscribeSubject "Present CS2" => #44
SubscribeSubject "Present US" => #45
#43, #44, #45 -> Zip

Bonsai.Arduino.CreateArduino(Name=myArduino, PortName=COM14, BaudRate=57600, SamplingInterval=19)
