WorkflowBuilder(Version=2.7.1)
GroupWorkflow InitProperties
    ExternalizedMapping(Value(DisplayName="Protocol File"))
    -> StringProperty(Value=protocol.csv)
    -> BehaviorSubject "Protocol File"

    ExternalizedMapping(Value(DisplayName="Trial Nr"))
    -> IntProperty(Value=1)
    -> BehaviorSubject "Current Trial"

    ExternalizedMapping(Value(DisplayName="Speed Right"))
    -> FloatProperty(Value=0.1)
    -> BehaviorSubject "Speed Right"

    ExternalizedMapping(Value(DisplayName="Speed Left"))
    -> FloatProperty(Value=0.1)
    -> BehaviorSubject "Speed Left"

    ExternalizedMapping(Value(DisplayName="Trial Type"))
    -> StringProperty(Value=0)
    -> BehaviorSubject "Trial Type"

    ExternalizedMapping(Value(DisplayName="Animal Age"))
    -> IntProperty(Value=68)
    -> BehaviorSubject "Animal Age"

    ExternalizedMapping(Value(DisplayName="Animal Weight"))
    -> IntProperty(Value=19)
    -> BehaviorSubject "Animal Weight"

    ExternalizedMapping(Value(DisplayName="Session Nr"))
    -> IntProperty(Value=1)
    -> BehaviorSubject "Session Nr"

    ExternalizedMapping(Value(DisplayName="Animal Name"))
    -> StringProperty(Value=VIV40923)
    -> BehaviorSubject "Animal Name"

    ExternalizedMapping(Value(DisplayName="Run Protocol"))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject "Run Protocol"

    ExternalizedMapping(Value(DisplayName="Trial Duration (s)"))
    -> IntProperty(Value=60)
    -> BehaviorSubject "Trial Duration"

    ExternalizedMapping(Value(DisplayName="ITI (s)"))
    -> IntProperty(Value=1)
    -> BehaviorSubject ITI

    ExternalizedMapping(Value(DisplayName="Output Path"))
    -> StringProperty(Value=D:\)
    -> BehaviorSubject "Output Path"

    ExternalizedMapping(Value(DisplayName="MP4 Conversion Args"))
    -> StringProperty
      Value: -y -f rawvideo -vcodec rawvideo -s 1088x420 -r 333 -pix_fmt gray -i \\.\pipe\video -c:v libx264 -preset ultrafast -b:v 5212K -maxrate 5212K -bufsize 5M
    -> BehaviorSubject "MP4 Conversion Args"

    ExternalizedMapping(Value(DisplayName="FFMpeg Executable"))
    -> StringProperty(Value="C:\Users\Carey Lab\Documents\Treadmill Platform\ffmpeg-5.1.2-essentials_build\bin\ffmpeg.exe")
    -> BehaviorSubject "FFMpeg Executable"

    StringProperty(Value="")
    -> BehaviorSubject "Trial Filestem"

    IntProperty(Value=0)
    -> BehaviorSubject "Number of Trials"

    IntProperty(Value=0)
    -> BehaviorSubject "Trial Frames"

    StringProperty(Value="")
    -> BehaviorSubject "Conversion String"

    StringProperty(Value="")
    -> BehaviorSubject "Behavior File"

    StringProperty(Value="")
    -> BehaviorSubject "Synch File"

    StringProperty(Value="")
    -> BehaviorSubject "Online Track File"

    StringProperty(Value="")
    -> BehaviorSubject "Behavior Metadata File"

    SubscribeSubject "Trial Duration"
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject "Time Duration Seconds"

    IntProperty(Value=0)
    -> BehaviorSubject "Interframe Camera Interval"

    IntProperty(Value=0)
    -> BehaviorSubject "Interframe Track Interval"

    IntProperty(Value=0)
    -> BehaviorSubject "DLC State"

    BooleanProperty(Value=false)
    -> BehaviorSubject "Stance Detection"

    BooleanProperty(Value=false)
    -> BehaviorSubject "Swing Detection"

GroupWorkflow "Init Platform"
    BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName=EnableLeft, Grouping=OneChannelForEachLine, Lines=Dev1/port0/line3))

    BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName=DirectionLeft, Grouping=OneChannelForEachLine, Lines=Dev1/port0/line4))

    BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName=EnableRight, Grouping=OneChannelForEachLine, Lines=Dev1/port0/line1))

    BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName=DirectionRight, Grouping=OneChannelForEachLine, Lines=Dev1/port0/line2))

SubscribeSubject "Run Protocol" => #2
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany "Define Protocol Settings"
    SubscribeSubject "Protocol File"
    -> PropertyMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=protocol.csv, ScanPattern="%d %f %f %s", SkipRows=0)
    -> ToList
    -> MemberSelector(Selector=Count) => #4
    SubscribeSubject "Current Trial" => #5
    #4, #5 -> Zip
    -> Subtract
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject "Number of Trials"
    -> WorkflowOutput
-> BooleanProperty(Value=true) => #5
#2 -> Condition
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> SelectMany "Define No-Protocol Settings"
    IntProperty(Value=1)
    -> MulticastSubject "Number of Trials"
    -> WorkflowOutput
-> BooleanProperty(Value=false) => #8
#5, #8 -> Merge
-> Delay(DueTime=PT0.5S)
-> BehaviorSubject Go

IntProperty(Value=0)
-> SelectMany "Init Trial"
    SubscribeSubject "Run Protocol" => #0
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany "Set Trial Params from Protocol" => #2
        SubscribeSubject "Protocol File"
        -> PropertyMapping(FileName) => #1
        SubscribeSubject "Current Trial"
        -> Subtract(Operand=IntProperty(Value=1))
        -> PropertyMapping(SkipRows) => #4
        #1, #4 -> Bonsai.IO.CsvReader(FileName=protocol.csv, ScanPattern="%d %f %f %s", SkipRows=9)
        -> Take(Count=1) => #6
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject "Speed Left" => #8
        #6 -> MemberSelector(Selector=Item3)
        -> MulticastSubject "Speed Right" => #10
        #6 -> MemberSelector(Selector=Item4)
        -> MulticastSubject "Trial Type" => #12
        #8, #10, #12 -> Zip
        -> WorkflowOutput
    #0 -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany "Set Trial Params from Vars" => #4
        SubscribeSubject "Speed Left" => #0
        SubscribeSubject "Speed Right" => #1
        SubscribeSubject "Trial Type" => #2
        #0, #1, #2 -> Zip
        -> WorkflowOutput
    #2, #4 -> Merge
    -> SelectMany "Create Filestem"
        SubscribeSubject "Animal Name"
        -> Add(Operand=StringProperty(Value=_)) => #1
        SubscribeSubject "Animal Age"
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression: it.ToString() + "_"
        #1, #3 -> WithLatestFrom
        -> Add => #5
        SubscribeSubject "Animal Weight"
        -> Bonsai.Scripting.ExpressionTransform => #7
          Expression: it.ToString() + "_"
        #5, #7 -> WithLatestFrom
        -> Add => #9
        SubscribeSubject "Speed Left"
        -> Bonsai.Scripting.ExpressionTransform => #11
          Expression: it.ToString() + "_"
        SubscribeSubject "Speed Right"
        -> Bonsai.Scripting.ExpressionTransform => #13
          Expression: it.ToString() + "_"
        #11, #13 -> WithLatestFrom
        -> Add => #15
        SubscribeSubject "Trial Type"
        -> Add(Operand=StringProperty(Value=_)) => #17
        #15, #17 -> WithLatestFrom
        -> Add => #19
        SubscribeSubject "Current Trial"
        -> Bonsai.Scripting.ExpressionTransform => #21
          Expression: it.ToString()
        SubscribeSubject "Session Nr"
        -> Bonsai.Scripting.ExpressionTransform => #23
          Expression: it.ToString() + "_"
        #23, #21 -> WithLatestFrom
        -> Add => #25
        #19, #25 -> WithLatestFrom
        -> Add => #27
        #9, #27 -> WithLatestFrom
        -> Add
        -> MulticastSubject "Trial Filestem"
        -> WorkflowOutput
    -> SelectMany "Create Filenames"
        WorkflowInput Source1 => #0
        SubscribeSubject "Output Path"
        -> Add(Operand=StringProperty(Value=\)) => #2
        SubscribeSubject "Trial Filestem"
        -> Add(Operand=StringProperty(Value=.mp4)) => #4
        #2, #4 -> Zip
        -> Add
        -> MulticastSubject "Behavior File" => #7
        SubscribeSubject "Trial Filestem"
        -> Add(Operand=StringProperty(Value=_synch.bin)) => #9
        SubscribeSubject "Trial Filestem"
        -> Add(Operand=StringProperty(Value=_otrack.csv)) => #11
        SubscribeSubject "Trial Filestem"
        -> Add(Operand=StringProperty(Value=_meta.csv)) => #13
        SubscribeSubject "Output Path"
        -> Add(Operand=StringProperty(Value=\)) => #15
        #15, #9 -> Zip
        -> Add
        -> MulticastSubject "Synch File" => #18
        SubscribeSubject "Output Path"
        -> Add(Operand=StringProperty(Value=\)) => #20
        #20, #11 -> Zip
        -> Add
        -> MulticastSubject "Online Track File" => #23
        SubscribeSubject "Output Path"
        -> Add(Operand=StringProperty(Value=\)) => #25
        #25, #13 -> Zip
        -> Add
        -> MulticastSubject "Behavior Metadata File" => #28
        #0, #7, #18, #23, #28 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany "Update Conversion String"
        WorkflowInput Source1 => #0
        SubscribeSubject "MP4 Conversion Args" => #1
        #0, #1 -> WithLatestFrom
        -> InputMapping(Selector=Item1, Value(Selector=Item2))
        -> StringProperty
          Value: -y -f rawvideo -vcodec rawvideo -s 1088x420 -r 333 -pix_fmt gray -i \\.\pipe\video -c:v libx264 -preset ultrafast -b:v 5212K -maxrate 5212K -bufsize 5M
        -> Add(Operand=StringProperty(Value="")) => #5
        SubscribeSubject "Behavior File" => #6
        #0, #6 -> WithLatestFrom
        -> InputMapping(Selector=Item1, Value(Selector=Item2))
        -> StringProperty(Value=D:\\VIV40923_68_19_0.375_0.175_split_1_10.mp4) => #9
        #5, #9 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Item1 + " """ + Item2 + """"
        -> MulticastSubject "Conversion String" => #12
        #0, #12 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> WorkflowOutput

    BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port0/line3))
-> SelectMany "Run Trial MP4"
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default)
    -> BehaviorSubject "Camera Data"

    Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Enable, IgnoreErrors=false, PortName=COM6) => #2
    SubscribeSubject "Synch File"
    -> PropertyMapping(Path) => #4
    #2, #4 -> GroupWorkflow "Save Metadata"
        WorkflowInput Source1
        -> MemberSelector(Selector=MessageBytes) => #1
        ExternalizedMapping(Path) => #2
        #1, #2 -> Bonsai.Dsp.MatrixWriter(Path=D:\\VIV40923_68_19_0.375_0.175_split_1_10_synch.bin, Suffix=None, Overwrite=true, Layout=ColumnMajor)
        -> WorkflowOutput
    #2 -> Bonsai.Harp.CF.SynchronizerEvent(Type=Input0)
    #2 -> Bonsai.Harp.CF.SynchronizerEvent(Type=Input1)

    Timer(DueTime=PT0S, Period=PT0S)
    -> Delay(DueTime=PT0.25S)
    -> GroupWorkflow "Start Trigger Trial"
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line3))
        -> WorkflowOutput
    -> SelectMany "Motors ON" => #11
        BooleanProperty(Value=true)
        -> Bonsai.DAQmx.DigitalOutput => #1
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName=EnableLeft, Grouping=OneChannelForEachLine, Lines=Dev1/port0/line3))
        BooleanProperty(Value=true)
        -> Bonsai.DAQmx.DigitalOutput => #3
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName=EnableRight, Grouping=OneChannelForEachLine, Lines=Dev1/port0/line1))
        #1, #3 -> Zip
        -> WorkflowOutput

        SubscribeSubject "Speed Left"
        -> Subtract(Operand=FloatProperty(Value=0.000724081))
        -> Divide(Operand=FloatProperty(Value=0.204041))
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=1
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=1
          Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=0, MaximumValue=5, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))

        SubscribeSubject "Speed Right"
        -> Subtract(Operand=FloatProperty(Value=0.000724081))
        -> Divide(Operand=FloatProperty(Value=0.204041))
        -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=1
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=1
          Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=0, MaximumValue=5, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts))
    SubscribeSubject "Trial Duration"
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #14
    #11, #14 -> GroupWorkflow "Wait Trial Duration"
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Delay(DueTime=PT1M)
        -> WorkflowOutput
    -> SelectMany "Motors OFF" => #16
        BooleanProperty(Value=false)
        -> Bonsai.DAQmx.DigitalOutput => #1
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName=EnableLeft, Grouping=OneChannelForEachLine, Lines=Dev1/port0/line3))
        FloatProperty(Value=5)
        -> Bonsai.DAQmx.AnalogOutput => #3
          SignalSource=""
          SampleRate=1
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=1
          Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=0, MaximumValue=5, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts))
        BooleanProperty(Value=false)
        -> Bonsai.DAQmx.DigitalOutput => #5
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName=EnableRight, Grouping=OneChannelForEachLine, Lines=Dev1/port0/line1))
        FloatProperty(Value=5)
        -> Bonsai.DAQmx.AnalogOutput => #7
          SignalSource=""
          SampleRate=1
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=1
          Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=0, MaximumValue=5, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))
        #1, #3, #5, #7 -> Zip
        -> WorkflowOutput
    SubscribeSubject "Conversion String"
    -> PropertyMapping(Arguments) => #18
    SubscribeSubject "FFMpeg Executable"
    -> PropertyMapping(FileName) => #20
    #20, #18 -> Bonsai.IO.StartProcess
      FileName="C:\Users\Carey Lab\Documents\Treadmill Platform\ffmpeg-5.1.2-essentials_build\bin\ffmpeg.exe"
      Arguments: -y -f rawvideo -vcodec rawvideo -s 1088x420 -r 333 -pix_fmt gray -i \\.\pipe\video -c:v libx264 -preset ultrafast -b:v 5212K -maxrate 5212K -bufsize 5M "D:\\VIV40923_68_19_0.375_0.175_split_1_10.mp4"
    -> Last => #22
    SubscribeSubject "Camera Data"
    -> MemberSelector(Selector=Image)
    -> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=true) => #25
    #25, #16 -> SkipUntil
    -> BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line3))
    -> Delay(DueTime=PT0.5S)
    -> Take(Count=1) => #30
    #30, #22 -> Zip
    -> Delay(DueTime=PT0.5S)
    -> Take(Count=1)
    -> WorkflowOutput

    SubscribeSubject "Camera Data"
    -> ObserveOn(Scheduler=TaskPoolScheduler) => #36
    -> Condition "DLC Init" => #37
        WorkflowInput Source1
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    #36 -> Condition "DLC State Wait"
        WorkflowInput Source1
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it > 0 && it < 500 ? True : False
        -> WorkflowOutput
    -> Slice(Start=1000, Step=4, Stop=nil) => #39
    #36 -> Condition "DLC State Ready"
        WorkflowInput Source1
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it >= 500 ? True : False
        -> WorkflowOutput
    -> Slice(Start=0, Step=4, Stop=nil) => #41
    #37, #39, #41 -> Merge
    -> GroupWorkflow EventDetection => #43
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Image) => #1
        -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr)
        -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=280, Width=990, Height=130))
        -> Bonsai.DeepLabCut.PredictPose => #4
          ModelFileName: C:\Users\Carey Lab\Documents\Treadmill Platform\DLC live model\DLC_TM_CLTM_BottomCrop_Mobile\DLC_DeepLocoTM_MdV_Miniscope_ClosedLoop_mobilenet_v2_0.35_iteration-0_shuffle-1\snapshot-1950000.pb
          PoseConfigFileName: C:\Users\Carey Lab\Documents\Treadmill Platform\DLC live model\DLC_TM_CLTM_BottomCrop_Mobile\DLC_DeepLocoTM_MdV_Miniscope_ClosedLoop_mobilenet_v2_0.35_iteration-0_shuffle-1\pose_cfg.yaml
          MinConfidence=0.9
          ScaleFactor=nil
          ColorConversion=nil
        -> Bonsai.DeepLabCut.GetBodyPart(Name=FRpaw)
        -> MemberSelector(Selector=Position.X) => #6
        #4 -> Bonsai.DeepLabCut.GetBodyPart(Name=HRpaw)
        -> MemberSelector(Selector=Position.X) => #8
        #6, #8 -> Zip
        -> Subtract => #10
        -> GroupWorkflow Stance
            WorkflowInput Source1 => #0
            -> Condition
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it > 200 && it < 300 ? True : False
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #2
            #0 -> Condition Condition
                WorkflowInput Source1
                -> LessThanOrEqual(Operand=FloatProperty(Value=200))
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #4
            #0 -> Condition Condition
                WorkflowInput Source1
                -> GreaterThanOrEqual(Operand=FloatProperty(Value=300))
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #6
            #0 -> Condition Condition => #7
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Double.IsNaN(it) ? True : False
                -> WorkflowOutput
            SubscribeSubject "Stance Detection" => #8
            #7, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #10
            #2, #4, #6, #10 -> Merge
            -> WorkflowOutput
        -> MulticastSubject "Stance Detection"
        -> Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line1))
        -> Bonsai.DAQmx.DigitalOutput => #14
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port0/line6))
        #10 -> GroupWorkflow Swing
            WorkflowInput Source1 => #0
            -> Condition
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it < 100 && it > 0 ? True : False
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #2
            #0 -> Condition Condition
                WorkflowInput Source1
                -> GreaterThanOrEqual(Operand=FloatProperty(Value=100))
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #4
            #0 -> Condition Condition
                WorkflowInput Source1
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #6
            #0 -> Condition Condition => #7
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Double.IsNaN(it) ? True : False
                -> WorkflowOutput
            SubscribeSubject "Swing Detection" => #8
            #7, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #10
            #2, #4, #6, #10 -> Merge
            -> WorkflowOutput
        -> MulticastSubject "Swing Detection"
        -> Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line2))
        -> Bonsai.DAQmx.DigitalOutput => #18
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port0/line7))
        #1 -> TimeInterval
        -> MemberSelector(Selector=Interval.Milliseconds)
        -> MulticastSubject "Interframe Track Interval"
        #0 -> MemberSelector(Selector=Metadata.embeddedTimeStamp) => #22
        #0 -> MemberSelector(Selector=Metadata.embeddedFrameCounter) => #23
        #22, #23, #10, #14, #18 -> Zip
        -> WorkflowOutput
    SubscribeSubject "Online Track File"
    -> PropertyMapping(FileName) => #45
    #43, #45 -> GroupWorkflow "Save Tracks"
        WorkflowInput Source1 => #0
        ExternalizedMapping(FileName) => #1
        #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\\VIV40923_68_19_0.375_0.175_split_1_10_otrack.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
        -> WorkflowOutput

    SubscribeSubject "Camera Data" => #47
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> MulticastSubject "Trial Frames"
    #47 -> TimeInterval
    -> MemberSelector(Selector=Interval.Milliseconds)
    -> MulticastSubject "Interframe Camera Interval"
    #47 -> MemberSelector(Selector=Metadata) => #54
    SubscribeSubject "Behavior Metadata File"
    -> PropertyMapping(FileName) => #56
    #54, #56 -> GroupWorkflow "Save Metadata"
        WorkflowInput Source1 => #0
        ExternalizedMapping(FileName) => #1
        #0, #1 -> Bonsai.IO.CsvWriter(FileName=D:\\VIV40923_68_19_0.375_0.175_split_1_10_meta.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
        -> WorkflowOutput
    #54 -> MemberSelector(Selector=embeddedGPIOPinState)
-> SelectMany "Terminate Trial"
    WorkflowInput Source1 => #0
    SubscribeSubject "Current Trial" => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject "Current Trial"
    -> Take(Count=1)
    -> WorkflowOutput
    #0 -> GroupWorkflow "End Trial Trigger"
        WorkflowInput Source1
        -> Disable BooleanProperty(Value=false)
        -> Disable Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line1))
        -> Disable BooleanProperty(Value=false)
        -> Disable Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line2))
        -> Disable BooleanProperty(Value=false)
        -> Disable Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port0/line6))
        -> Disable BooleanProperty(Value=false)
        -> Disable Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port0/line7))
        -> WorkflowOutput

    Disable BooleanProperty(Value=false)
    -> Disable Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line1))

    Disable BooleanProperty(Value=false)
    -> Disable Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line2))

    Disable BooleanProperty(Value=false)
    -> Disable Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port0/line6))

    Disable BooleanProperty(Value=false)
    -> Disable Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port0/line7))
-> Take(Count=1)
-> Repeat => #17
Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
-> SelectMany "Motors OFF"
    BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput => #1
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName=EnableLeft, Grouping=OneChannelForEachLine, Lines=Dev1/port0/line3))
    FloatProperty(Value=0)
    -> Bonsai.DAQmx.AnalogOutput => #3
      SignalSource=""
      SampleRate=1
      ActiveEdge=Rising
      SampleMode=FiniteSamples
      BufferSize=1
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=0, MaximumValue=5, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts))
    BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput => #5
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName=EnableRight, Grouping=OneChannelForEachLine, Lines=Dev1/port0/line1))
    FloatProperty(Value=0)
    -> Bonsai.DAQmx.AnalogOutput => #7
      SignalSource=""
      SampleRate=1
      ActiveEdge=Rising
      SampleMode=FiniteSamples
      BufferSize=1
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=0, MaximumValue=5, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))
    #1, #3, #5, #7 -> Zip
    -> WorkflowOutput
-> IntProperty(Value=0) => #20
SubscribeSubject "Number of Trials"
-> Subtract(Operand=IntProperty(Value=1))
-> PropertyMapping(Count) => #23
#17, #23 -> Skip(Count=9) => #24
#24, #20 -> Amb => #25
SubscribeSubject Go => #26
#25, #26 -> SubscribeWhen
-> GroupWorkflow "Switch OFF Ports"
    WorkflowInput Source1 => #0
    -> BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line3))
    -> WorkflowOutput
    #0 -> BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port0/line6))
    #0 -> BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port0/line7))
    #0 -> BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line1))
    #0 -> BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line2))
-> Take(Count=1)
-> WorkflowOutput

SubscribeSubject "Trial Filestem"
SubscribeSubject "Number of Trials"
SubscribeSubject "Current Trial"
SubscribeSubject "Trial Frames"
SubscribeSubject "Online Track File"
SubscribeSubject "Interframe Camera Interval"
SubscribeSubject "Interframe Track Interval"
