WorkflowBuilder(Version=2.9.0)
GroupWorkflow Init
    StringProperty(Value=data\)
    -> BehaviorSubject LoggingPath

    Disable Bonsai.IO.Ports.SerialRead(PortName=MySerial, Count=1)
    -> Disable DelaySubscription(DueTime=PT3S)

    DoubleProperty(Value=0)
    -> BehaviorSubject TranslZ

    DoubleProperty(Value=0)
    -> BehaviorSubject TranslX

    DoubleProperty(Value=0)
    -> BehaviorSubject AngleY

    ExternalizedMapping(Value(DisplayName=Value0))

    Disable Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=false)
    -> Disable SelectMany
        ExternalizedMapping(Value(DisplayName=Value0))
        -> ByteProperty(Value=254) => #1
        ExternalizedMapping(Value(DisplayName=Value1))
        -> ByteProperty(Value=0) => #3
        #1, #3 -> Merge
        -> Take(Count=2)
        -> ToArray
        -> WorkflowOutput
    -> Disable BehaviorSubject SerialCommand
    -> Disable MemberSelector(Selector=Length)

    Disable Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
    -> Disable SelectMany
        ExternalizedMapping(Value(DisplayName=Value0))
        -> ByteProperty(Value=246) => #1
        ExternalizedMapping(Value(DisplayName=Value1))
        -> ByteProperty(Value=0) => #3
        #1, #3 -> Merge
        -> Take(Count=2)
        -> ToArray
        -> WorkflowOutput
    -> Disable MulticastSubject SerialCommand

    IntProperty(Value=0)
    -> BehaviorSubject ExperimentTime

    IntProperty(Value=40)
    -> BehaviorSubject NumberOfTrials

    Disable Bonsai.Windows.Input.KeyDown(Filter=D3, SuppressRepetitions=false)
    -> Disable SelectMany
        ExternalizedMapping(Value(DisplayName=Value0))
        -> ByteProperty(Value=255) => #1
        ExternalizedMapping(Value(DisplayName=Value1))
        -> ByteProperty(Value=0) => #3
        #1, #3 -> Merge
        -> Take(Count=2)
        -> ToArray
        -> WorkflowOutput
    -> Disable MulticastSubject SerialCommand

    Disable Bonsai.IO.Ports.SerialWrite(PortName=MySerial)
    Disable MulticastSubject SerialCommand
    Disable PublishSubject SerialCommand

    Bonsai.uEye.uEyeCapture(DeviceId=1, ConfigFile=C:\Users\Administrador\Desktop\rc-cam-60fps.ini) => #28
    -> MemberSelector(Selector=Image)
    -> BehaviorSubject Frames
    #28 -> MemberSelector(Selector=ImageInfo.FrameNumber)
    -> BehaviorSubject FramesNumber

GroupWorkflow "Scene Rendering"
    GroupWorkflow 3DScene
        Disable SubscribeSubject Draw => #0
        -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=black_circle_wall_stripes, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=25
          TranslationY=0
          TranslationZ=0
          RotationZ=0
          RotationY=90
          RotationX=0
          ScaleX=0
          ScaleY=0
          ScaleZ=0
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #0 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=calibration_left, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-25
          TranslationY=0
          TranslationZ=0
          RotationZ=0
          RotationY=90
          RotationX=0
          ScaleX=0
          ScaleY=0
          ScaleZ=0
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #0 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=calibration_right, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=0
          TranslationZ=25
          RotationZ=0
          RotationY=0
          RotationX=0
          ScaleX=0
          ScaleY=0
          ScaleZ=0
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #0 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=black_line_wall, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=0
          TranslationZ=-25
          RotationZ=0
          RotationY=0
          RotationX=0
          ScaleX=0
          ScaleY=0
          ScaleZ=0
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #0 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=CheckerBoard, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-5
          TranslationZ=0
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=2
          ScaleZ=2
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #0 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=image, TextureName=calibration_front, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=5
          TranslationZ=0
          RotationZ=0
          RotationY=90
          RotationX=0
          ScaleX=0
          ScaleY=0
          ScaleZ=0
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane

        Disable SubscribeSubject Draw => #13
        -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=calibration_front, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=25
          TranslationY=0
          TranslationZ=0
          RotationZ=0
          RotationY=90
          RotationX=0
          ScaleX=50
          ScaleY=10
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #13 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=calibration_left, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-25
          TranslationY=0
          TranslationZ=0
          RotationZ=0
          RotationY=90
          RotationX=0
          ScaleX=50
          ScaleY=10
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #13 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=calibration_right, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=0
          TranslationZ=25
          RotationZ=0
          RotationY=0
          RotationX=0
          ScaleX=50
          ScaleY=10
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #13 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=black_line_wall, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=0
          TranslationZ=-25
          RotationZ=0
          RotationY=0
          RotationX=0
          ScaleX=50
          ScaleY=10
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #13 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=CheckerBoard, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-5
          TranslationZ=0
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=50
          ScaleY=50
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane

        Disable SubscribeSubject Draw => #24
        -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=calibration_left, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1.2
          TranslationZ=0
          RotationZ=0
          RotationY=87
          RotationX=0
          ScaleX=50
          ScaleY=100
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=inwards_cylinder
        #24 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=calibration_right, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=0
          TranslationZ=25
          RotationZ=0
          RotationY=0
          RotationX=0
          ScaleX=50
          ScaleY=10
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #24 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=black_line_wall, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=0
          TranslationZ=-25
          RotationZ=0
          RotationY=0
          RotationX=0
          ScaleX=50
          ScaleY=10
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #24 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=CheckerBoard, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-5
          TranslationZ=0
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=50
          ScaleY=50
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane

    Bonsai.Shaders.CreateWindow
      Width=1000
      Height=450
      VSync=On
      SwapSync=false
      ClearColor=Transparent
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=2000, Y=400)
      WindowBorder=Hidden
      WindowState=Normal
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.MeshResources
      Meshes
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cone, FileName=Models\cone.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube, FileName=Models\cube.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cylinder, FileName=Models\cylinder.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=icosphere, FileName=Models\icosphere.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=Models\sphere.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=suzanne, FileName=Models\suzanne.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=torus, FileName=Models\torus.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=inwards_cylinder, FileName=Models\inwards_cylinder.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=empty_cylinder, FileName=Models\empty_cylinder.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=ArenaProjectionPlanes, FileName=Meshes\ArenaProjectionPlanes.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=CylinderPlane, FileName=Meshes\CylinderPlane.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=ProjectionPlanesBlended, FileName=Meshes\ProjectionPlanesBlended.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=ProjectionPlanes2, FileName=Meshes\ProjectionPlanes2.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=ProjectionPlane3, FileName=Meshes\ProjectionPlanes3.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=PanoramicMesh, QuadEffects=None)
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MyShader
          RenderState=""
          ShaderUniforms(UniformConfiguration=Bonsai.Shaders.FloatUniform(Name=height, Value=100))
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=panorama, TextureSlot=Texture0, TextureName=PatternedArena, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\cyl.vert
          FragmentShader=Shaders\cyl.frag
          MeshName=empty_cylinder
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=WarpQuad
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\WarpQuad.vert
          FragmentShader=Shaders\WarpQuad.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Panoramic
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\panoramic.vert
          FragmentShader=Shaders\panoramic.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PanoramicSliced
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\panoramic.vert
          FragmentShader=Shaders\panoramic_sliced.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PanoramicUnevenSlicing
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\panoramic.vert
          FragmentShader=Shaders\panoramic_sliced_uneven_angle_distribution.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=image
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\disk.vert
          FragmentShader=Shaders\disk.frag
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=PatternedArena
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\PatternedArena.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=big_cicle
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\big_circle.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=one_line
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\one_line.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=three_lines
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\three_lines.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=small_circles
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\small_circles.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=black_circle_wall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\black_circle_wall.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=black_circle_wall_stripes
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\black_circle_wall_stripes.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=black_line_wall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\black_line_wall.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=black_line_wall_stripes
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\black_line_wall_stripes.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=CheckerBoard
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\CheckerBoard.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=calibration_front
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\calibration_front.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=calibration_left
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\calibration_left.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=calibration_right
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\calibration_right.png
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.UpdateRenderState
      RenderState
        StateConfiguration=Bonsai.Shaders.EnableState(Capability=Blend)
        StateConfiguration=Bonsai.Shaders.EnableState(Capability=DepthTest)
        StateConfiguration=Bonsai.Shaders.BlendFunctionState(SourceFactor=SrcAlpha, DestinationFactor=OneMinusSrcAlpha)
        StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Lequal)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> GroupWorkflow CubemapView
        WorkflowInput Source1 => #0
        SubscribeSubject CameraPosition
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (it.X as X,
             -it.Y as Y,
             -it.Z  as Z
            )
        -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
        -> Bonsai.Shaders.CreateVector3(X=-0.0353087336, Y=-0, Z=0.497903645)
        -> PropertyMapping(Eye) => #5
        #0, #5 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=-0.0353087336, Y=-0, Z=0.497903645), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0)) => #6
        -> MemberSelector(Selector=ViewMatrix) => #7
        SubscribeSubject CameraOrientation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Math.Atan2(it.X, -it.Z)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Append, Angle=3.07079649) => #11
        #11, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (
            Item1 as ViewMatrix,
            Item2.ProjectionMatrix as ProjectionMatrix,
            Item2.Light as Light
            )
        -> WorkflowOutput
    -> PublishSubject Draw
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=White, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
    -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #12
    -> GroupWorkflow DrawLeftMesh
        WorkflowInput Source1 => #0
        ExternalizedMapping(SliceIndex) => #1
        #0, #1 -> Sink UpdateSliceIndexUniform
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=SliceIndex)) => #1
            #0, #1 -> IntProperty(Value=0) => #2
            ExternalizedMapping(ShaderName) => #3
            #2, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=sliceIndex, ShaderName=PanoramicUnevenSlicing)
            -> WorkflowOutput
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicUnevenSlicing, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicUnevenSlicing, MeshName=PanoramicMesh)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicSliced, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicSliced, MeshName=PanoramicMesh)
        -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))
        -> Bonsai.Shaders.RenderTexture
          RenderState=""
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=WarpQuad, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=WarpQuad, MeshName=WarpQuad)
        -> WorkflowOutput
    -> IncludeWorkflow
      Path=BonVision:Environment.PerspectiveMapping.bonsai
      ClearColor=IndianRed
      Destination(Point2f(X=-0.50625, Y=-0.85), Point2f(X=-0.493749976, Y=0.808333337), Point2f(X=-0.65625, Y=0.725), Point2f(X=-0.6875, Y=-0.6833333))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
    #12 -> GroupWorkflow DrawCenterMesh
        WorkflowInput Source1 => #0
        ExternalizedMapping(SliceIndex) => #1
        #0, #1 -> Sink UpdateSliceIndexUniform
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=SliceIndex)) => #1
            #0, #1 -> IntProperty(Value=1) => #2
            ExternalizedMapping(ShaderName) => #3
            #2, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=sliceIndex, ShaderName=PanoramicUnevenSlicing)
            -> WorkflowOutput
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicUnevenSlicing, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicUnevenSlicing, MeshName=PanoramicMesh)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicSliced, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicSliced, MeshName=PanoramicMesh)
        -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))
        -> Bonsai.Shaders.RenderTexture
          RenderState=""
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=WarpQuad, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=WarpQuad, MeshName=WarpQuad)
        -> WorkflowOutput
    -> IncludeWorkflow
      Path=BonVision:Environment.PerspectiveMapping.bonsai
      ClearColor=IndianRed
      Destination(Point2f(X=-0.225000024, Y=-0.7916666), Point2f(X=-0.21875, Y=0.875), Point2f(X=0.225000024, Y=0.875), Point2f(X=0.225000024, Y=-0.7916666))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
    #12 -> GroupWorkflow DrawRightMesh
        WorkflowInput Source1 => #0
        ExternalizedMapping(SliceIndex) => #1
        #0, #1 -> Sink UpdateSliceIndexUniform
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=SliceIndex)) => #1
            #0, #1 -> IntProperty(Value=2) => #2
            ExternalizedMapping(ShaderName) => #3
            #2, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=sliceIndex, ShaderName=PanoramicUnevenSlicing)
            -> WorkflowOutput
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicUnevenSlicing, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicUnevenSlicing, MeshName=PanoramicMesh)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicSliced, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicSliced, MeshName=PanoramicMesh)
        -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))
        -> Bonsai.Shaders.RenderTexture
          RenderState=""
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=WarpQuad, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=WarpQuad, MeshName=WarpQuad)
        -> WorkflowOutput
    -> IncludeWorkflow
      Path=BonVision:Environment.PerspectiveMapping.bonsai
      ClearColor=IndianRed
      Destination(Point2f(X=0.5875, Y=-0.5916667), Point2f(X=0.5875, Y=0.6166667), Point2f(X=0.424999952, Y=0.691666663), Point2f(X=0.4375, Y=-0.7583333))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)

    SubscribeSubject Draw => #22
    SubscribeSubject TranslX
    -> PropertyMapping(TranslationX) => #24
    SubscribeSubject TranslZ
    -> PropertyMapping(TranslationZ) => #26
    #22, #24, #26 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=18.4998569
      TranslationY=-4
      TranslationZ=7.59968948
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=2
      ScaleY=1
      ScaleZ=5
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=10
      MeshName=sphere

    Disable SubscribeSubject Draw
    -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=calibration_left, TextureTarget=Texture2D) => #29
    Disable SubscribeSubject AngleY
    -> Disable PropertyMapping(RotationY) => #31
    #29, #31 -> Disable IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=0
      TranslationY=-1.2
      TranslationZ=0
      RotationZ=0
      RotationY=-50.709095
      RotationX=0
      ScaleX=50
      ScaleY=100
      ScaleZ=50
      Ambient(X=0.8, Y=0.8, Z=0.8)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=inwards_cylinder

GroupWorkflow Navigation
    DoubleProperty(Value=5) => #0
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> DoubleProperty(Value=-1) => #2
    Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> DoubleProperty(Value=1) => #4
    #0, #2, #4 -> Merge => #5
    ExternalizedMapping(Value(DisplayName=RotationGain))
    -> FloatProperty(Value=0.3) => #7
    #5, #7 -> WithLatestFrom
    -> Multiply
    -> Accumulate => #10
    -> Bonsai.Numerics.Cos => #11
    #10 -> FloatProperty(Value=0) => #12
    #10 -> Bonsai.Numerics.Sin => #13
    #11, #12, #13 -> Zip
    -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
    -> Bonsai.Shaders.CreateVector3(X=0.0707371458, Y=0, Z=0.997495)
    -> BehaviorSubject CameraOrientation

    FloatProperty(Value=0) => #18
    Bonsai.Windows.Input.KeyDown(Filter=W, SuppressRepetitions=false)
    -> FloatProperty(Value=1) => #20
    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> FloatProperty(Value=-1) => #22
    #18, #20, #22 -> Merge => #23
    ExternalizedMapping(Value(DisplayName=SpeedGain))
    -> FloatProperty(Value=0.5) => #25
    #23, #25 -> WithLatestFrom
    -> Multiply => #27
    SubscribeSubject CameraOrientation
    -> GroupWorkflow NormVector => #29
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=X) => #1
        #0 -> MemberSelector(Selector=LengthFast) => #2
        #1, #2 -> Zip
        -> Divide => #4
        #0 -> MemberSelector(Selector=Y) => #5
        #5, #2 -> Zip
        -> Divide => #7
        #0 -> MemberSelector(Selector=Z) => #8
        #8, #2 -> Zip
        -> Divide => #10
        #4, #7, #10 -> Zip
        -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
        -> Bonsai.Shaders.CreateVector3(X=0.07061747, Y=0, Z=0.9958073)
        -> WorkflowOutput
    #27, #29 -> WithLatestFrom
    -> InputMapping(Selector=Item2, Value(Selector=Item1))
    -> GroupWorkflow Vector3Multiply
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=X) => #1
        ExternalizedMapping(Value)
        -> FloatProperty(Value=-0.5) => #3
        #1, #3 -> WithLatestFrom
        -> Multiply => #5
        #0 -> MemberSelector(Selector=Y) => #6
        #6, #3 -> WithLatestFrom
        -> Multiply => #8
        #0 -> MemberSelector(Selector=Z) => #9
        #9, #3 -> WithLatestFrom
        -> Multiply => #11
        #5, #8, #11 -> Zip
        -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
        -> Bonsai.Shaders.CreateVector3(X=-0.0353087336, Y=-0, Z=-0.497903645)
        -> WorkflowOutput
    -> Accumulate
    -> BehaviorSubject CameraPosition

    SubscribeSubject CameraPosition => #35
    SubscribeSubject CameraOrientation => #36
    #35, #36 -> CombineLatest
    -> Add
    -> BehaviorSubject CameraTarget

GroupWorkflow BallNavigation
    Bonsai.IO.Ports.CreateSerialPort
      Name=MySerial
      PortName=COM4
      BaudRate=1250000
      Encoding=""
      NewLine=\r\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=true
      ReadBufferSize=2400
      WriteBufferSize=50000
      ReceivedBytesThreshold=1

    SubscribeSubject SerialCommand
    -> Bonsai.IO.Ports.SerialWrite(PortName=MySerial)

    ByteProperty(Value=254) => #3
    ByteProperty(Value=0) => #4
    #3, #4 -> Merge
    -> Take(Count=2)
    -> ToArray
    -> IgnoreElements
    -> BehaviorSubject SerialBuffer

    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> SelectMany StopCommunication
        ByteProperty(Value=254) => #0
        ByteProperty(Value=0) => #1
        #0, #1 -> Merge
        -> Take(Count=2)
        -> ToArray
        -> Bonsai.IO.Ports.SerialWrite(PortName=MySerial)
        -> WorkflowOutput
    -> SelectMany EmptyReadBuffer
        Bonsai.IO.Ports.SerialRead(PortName=MySerial, Count=0) => #0
        Annotation "Read until bytes read = 0"(Text="") => #1
        #0, #1 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Length)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> CreateObservable StartCommunication
        Bonsai.IO.Ports.SerialRead(PortName=MySerial, Count=2400)
        -> MulticastSubject SerialBuffer
        -> WorkflowOutput

        ByteProperty(Value=255) => #3
        ByteProperty(Value=255) => #4
        #3, #4 -> Merge
        -> Take(Count=2)
        -> ToArray
        -> DelaySubscription(DueTime=PT0.1S)
        -> Bonsai.IO.Ports.SerialWrite(PortName=MySerial)
    -> Switch

    Bonsai.IO.CsvReader(FileName=ThreadmillCommand.csv, ListSeparator=",", ScanPattern="", SkipRows=0)
    -> CreateObservable
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression:
            new(
            double.Parse(it[0]) as Value0,
            double.Parse(it[1]) as Value1)
        -> MemberSelector(Selector=Value0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: Convert.ToByte(it)
        #2 -> MemberSelector(Selector=Value1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: Convert.ToByte(it)
        #4, #6 -> Merge
        -> Take(Count=2)
        -> ToArray
        -> Take(Count=1)
        -> WorkflowOutput
    -> Concat
    -> BehaviorSubject SerialCommand

    SubscribeSubject SerialBuffer
    -> CreateObservable
        WorkflowInput Source1
        -> Concat
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> WorkflowOutput
        -> Count
        -> WorkflowOutput
    -> Concat

    SubscribeSubject SerialBuffer
    -> Concat => #23
    -> Condition => #24
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    #23, #24 -> Disable WindowTrigger(Count=12)
    -> BufferTrigger(Count=nil)
    -> CreateObservable
        WorkflowInput Source1 => #0
        -> Index(Operand=IntProperty(Value=1))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: Convert.ToInt32(it)-128
        #0 -> Index(Operand=IntProperty(Value=2))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: Convert.ToInt32(it)-128
        #0 -> Index(Operand=IntProperty(Value=3))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: Convert.ToInt32(it)-128
        #0 -> Index(Operand=IntProperty(Value=4))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
          Expression: Convert.ToInt32(it)-128
        Annotation "Append Package Number"(Text="") => #9
        #0, #9 -> Index(Operand=IntProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #11
          Expression: Convert.ToInt32(it)
        #2, #4, #6, #8, #11 -> Merge
        -> Take(Count=5)
        -> ToArray => #14
        -> Condition ValidData?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Math.Abs(it[0]) < 3 && Math.Abs(it[1]) < 3 && Math.Abs(it[2]) < 3 && Math.Abs(it[3]) < 3
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
        #14 -> Condition InvalidData?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Math.Abs(it[0]) < 3 && Math.Abs(it[1]) < 3 && Math.Abs(it[2]) < 3 && Math.Abs(it[3]) < 3
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany
            Range(Start=0, Count=4)
            -> IntProperty(Value=0) => #1
            WorkflowInput Source1
            -> Index(Operand=IntProperty(Value=4)) => #3
            #1, #3 -> Concat
            -> ToArray
            -> WorkflowOutput
    -> Concat
    -> Condition => #29
        WorkflowInput Source1
        -> MemberSelector(Selector=Length) => #1
        ExternalizedMapping(Value(DisplayName=ArrayLength)) => #2
        #1, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> Index(Operand=IntProperty(Value=1))
    -> BehaviorSubject Cam1X
    #29 -> Index(Operand=IntProperty(Value=1))
    -> BehaviorSubject Cam1Y
    #29 -> Index(Operand=IntProperty(Value=1))
    -> BehaviorSubject Cam2X
    #29 -> Index(Operand=IntProperty(Value=1))
    -> BehaviorSubject Cam2Y

    Disable IntProperty(Value=0)
    -> Disable BehaviorSubject Cam1X
    -> Disable BehaviorSubject Cam1Y
    -> Disable BehaviorSubject Cam2X
    -> Disable BehaviorSubject Cam2Y

    Disable DoubleProperty(Value=5) => #43
    Disable SubscribeSubject Pan => #44
    #43, #44 -> Disable Merge => #45
    Disable ExternalizedMapping(Value(DisplayName=RotationGain))
    -> Disable FloatProperty(Value=0.05) => #47
    #45, #47 -> Disable WithLatestFrom
    -> Disable Multiply
    -> Disable Accumulate => #50
    -> Disable Bonsai.Numerics.Cos => #51
    #50 -> Disable FloatProperty(Value=0) => #52
    #50 -> Disable Bonsai.Numerics.Sin => #53
    #51, #52, #53 -> Disable Zip
    -> Disable InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
    -> Disable Bonsai.Shaders.CreateVector3(X=0.9689124, Y=0, Z=0.247403964)
    -> Disable BehaviorSubject CameraOrientation

    Disable Bonsai.IO.Ports.SerialRead(PortName=MySerial, Count=2400)
    -> Disable Concat
    -> Disable Index(Operand=IntProperty(Value=0)) => #60
    -> Disable Condition => #61
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    #60, #61 -> Disable WindowTrigger(Count=6)
    -> Disable CreateObservable
        Disable WorkflowInput Source2
        -> Disable ElementIndex => #1
        -> Disable Condition => #2
            WorkflowInput Source1
            -> MemberSelector(Selector=Index)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it > 1 && it < 6
            -> WorkflowOutput
        #1 -> Disable Condition => #3
            WorkflowInput Source1
            -> MemberSelector(Selector=Index)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it > 1 && it < 6
            -> BitwiseNot
            -> WorkflowOutput
        #2, #3 -> Disable Merge
        -> Disable MemberSelector(Selector=Value)
        -> Disable Take(Count=4)
        -> Disable ToArray
        -> Disable WorkflowOutput

        WorkflowInput Source1
        -> ElementIndex => #10
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression: it.ToString() + ", "
        #10 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #16
          Expression: it.ToString() + ", "
        #10 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=4))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #19
          Expression: it.ToString() + ", "
        #10 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=5))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #22
          Expression: it.ToString()
        #13, #16, #19, #22 -> Disable Zip
        -> Disable Add
        -> Merge
        -> Take(Count=4)
        -> ToArray
        -> Take(Count=1)
        -> WorkflowOutput
    -> Disable Concat
    -> Disable Condition => #65
        WorkflowInput Source1
        -> MemberSelector(Selector=Length)
        -> GreaterThanOrEqual(Operand=IntProperty(Value=4))
        -> WorkflowOutput
    -> Disable Index(Operand=IntProperty(Value=0))
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it) - 128
    -> Disable BehaviorSubject Cam1X
    #65 -> Disable Index(Operand=IntProperty(Value=1))
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it) - 128
    -> Disable BehaviorSubject Cam1Y
    #65 -> Disable Index(Operand=IntProperty(Value=2))
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it) - 128
    -> Disable BehaviorSubject Cam2X
    #65 -> Disable Index(Operand=IntProperty(Value=3))
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it) - 128
    -> Disable BehaviorSubject Cam2Y

    Disable Bonsai.IO.CsvReader(FileName=claire_test.txt, ListSeparator=",", ScanPattern=%i, SkipRows=0)

    Disable Bonsai.IO.Ports.SerialRead(PortName=MySerial, Count=12) => #79
    -> Disable Index(Operand=IntProperty(Value=2))
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it) - 128
    -> Disable BehaviorSubject Cam1X
    #79 -> Disable MemberSelector(Selector=Length)
    #79 -> Disable Index(Operand=IntProperty(Value=3))
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it) - 128
    -> Disable BehaviorSubject Cam1Y
    #79 -> Disable Index(Operand=IntProperty(Value=4))
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it) - 128
    -> Disable BehaviorSubject Cam2X
    #79 -> Disable Index(Operand=IntProperty(Value=5))
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it) - 128
    -> Disable BehaviorSubject Cam2Y

    Disable DoubleProperty(Value=0) => #93
    Disable SubscribeSubject Tilt => #94
    #93, #94 -> Disable Merge => #95
    Disable ExternalizedMapping(Value(DisplayName=SpeedGain))
    -> Disable FloatProperty(Value=0.2) => #97
    #95, #97 -> Disable WithLatestFrom
    -> Disable Multiply => #99
    Disable SubscribeSubject CameraOrientation
    -> Disable GroupWorkflow NormVector => #101
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=X) => #1
        #0 -> MemberSelector(Selector=LengthFast) => #2
        #1, #2 -> Zip
        -> Divide => #4
        #0 -> MemberSelector(Selector=Y) => #5
        #5, #2 -> Zip
        -> Divide => #7
        #0 -> MemberSelector(Selector=Z) => #8
        #8, #2 -> Zip
        -> Divide => #10
        #4, #7, #10 -> Zip
        -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
        -> Bonsai.Shaders.CreateVector3(X=0.9672731, Y=0, Z=0.246985376)
        -> WorkflowOutput
    #99, #101 -> Disable WithLatestFrom
    -> Disable InputMapping(Selector=Item2, Value(Selector=Item1))
    -> Disable GroupWorkflow Vector3Multiply
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=X) => #1
        ExternalizedMapping(Value)
        -> FloatProperty(Value=0) => #3
        #1, #3 -> WithLatestFrom
        -> Multiply => #5
        #0 -> MemberSelector(Selector=Y) => #6
        #6, #3 -> WithLatestFrom
        -> Multiply => #8
        #0 -> MemberSelector(Selector=Z) => #9
        #9, #3 -> WithLatestFrom
        -> Multiply => #11
        #5, #8, #11 -> Zip
        -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
        -> WorkflowOutput
    -> Disable Accumulate
    -> Disable BehaviorSubject CameraPosition

    Disable SubscribeSubject CameraPosition => #107
    Disable SubscribeSubject CameraOrientation => #108
    #107, #108 -> Disable CombineLatest
    -> Disable Add
    -> Disable BehaviorSubject CameraTarget

    Disable Bonsai.IO.Ports.CreateSerialPort
      Name=MySerial
      PortName=COM4
      BaudRate=1250000
      NewLine=\r\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=false
      RtsEnable=false
      ReadBufferSize=50000
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Disable Bonsai.IO.Ports.SerialRead(PortName=MySerial, Count=0)
    Disable ExternalizedMapping(Value(DisplayName=Value0))

    Disable Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=false)
    -> Disable SelectMany
        ExternalizedMapping(Value(DisplayName=Value0))
        -> ByteProperty(Value=254) => #1
        ExternalizedMapping(Value(DisplayName=Value1))
        -> ByteProperty(Value=0) => #3
        #1, #3 -> Merge
        -> Take(Count=2)
        -> ToArray
        -> WorkflowOutput
    -> Disable BehaviorSubject SerialCommand

    Disable Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
    -> Disable SelectMany
        ExternalizedMapping(Value(DisplayName=Value0))
        -> ByteProperty(Value=246) => #1
        ExternalizedMapping(Value(DisplayName=Value1))
        -> ByteProperty(Value=0) => #3
        #1, #3 -> Merge
        -> Take(Count=2)
        -> ToArray
        -> WorkflowOutput
    -> Disable MulticastSubject SerialCommand

    Disable Bonsai.Windows.Input.KeyDown(Filter=D3, SuppressRepetitions=false)
    -> Disable SelectMany
        ExternalizedMapping(Value(DisplayName=Value0))
        -> ByteProperty(Value=255) => #1
        ExternalizedMapping(Value(DisplayName=Value1))
        -> ByteProperty(Value=0) => #3
        #1, #3 -> Merge
        -> Take(Count=2)
        -> ToArray
        -> WorkflowOutput
    -> Disable MulticastSubject SerialCommand

    Disable SubscribeSubject SerialCommand
    -> Disable Bonsai.IO.Ports.SerialWrite(PortName=MySerial)

SubscribeSubject ExperimentTime
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: TimeSpan.FromMilliseconds(Convert.ToDouble(it))

IntProperty(Value=0)
-> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: Convert.ToInt32(it)
-> BehaviorSubject StartTime

Timer(DueTime=PT0S)
-> SelectMany InterTrialInterval
    WorkflowInput Source1 => #0
    ExternalizedMapping(DueTime) => #1
    #0, #1 -> Delay(DueTime=PT1S)
    -> WorkflowOutput

    DoubleProperty(Value=50)
    -> MulticastSubject TranslX

    DoubleProperty(Value=20)
    -> MulticastSubject TranslZ
-> SelectMany Trial
    GroupWorkflow Logger
        SubscribeSubject Cam1X => #0
        SubscribeSubject Cam1Y => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject Cam2X => #3
        #2, #3 -> WithLatestFrom => #4
        SubscribeSubject Cam2Y => #5
        #4, #5 -> WithLatestFrom => #6
        SubscribeSubject FramesNumber => #7
        #6, #7 -> WithLatestFrom => #8
        SubscribeSubject TranslZ => #9
        #8, #9 -> WithLatestFrom => #10
        SubscribeSubject TranslX => #11
        #10, #11 -> WithLatestFrom
        -> Timestamp => #13
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
          Expression: Convert.ToInt32(it)
        SubscribeSubject StartTime => #16
        #15, #16 -> WithLatestFrom
        -> Subtract
        -> MulticastSubject ExperimentTime => #19
        #13 -> MemberSelector(Selector=Value.Item1.Item1) => #20
        #13 -> MemberSelector(Selector=Value.Item1.Item2) => #21
        #13 -> MemberSelector(Selector=Value.Item2) => #22
        #19, #20, #21, #22 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #24
          Expression:
            new(
              Item1 as Timestamp,
              Item2 as Cam1X,
              Item3 as Cam1Y,
              Item4 as Cam2X


            )
        SubscribeSubject LoggingPath
        -> Add(Operand=StringProperty(Value=BehaviorLog.csv))
        -> PropertyMapping(FileName) => #27
        #24, #27 -> Bonsai.IO.CsvWriter(FileName=data\BehaviorLog.csv, ListSeparator=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> WorkflowOutput

        SubscribeSubject Frames => #30
        SubscribeSubject LoggingPath
        -> Add(Operand=StringProperty(Value=BehaviorFrames.avi))
        -> PropertyMapping(FileName) => #33
        #30, #33 -> Bonsai.Vision.VideoWriter
          FileName=data\BehaviorFrames.avi
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=70
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor

    ExternalizedMapping(DueTime(DisplayName="Trial Duration"))
    -> Timer(DueTime=PT40S)
    -> WorkflowOutput

    Annotation StartTime(Text="")
    -> Bonsai.Shaders.Timer(DueTime=PT5S, Period=PT0.02S) => #5
    Annotation EndTime(Text="")
    -> Bonsai.Shaders.Timer(DueTime=PT33.3S) => #7
    #5, #7 -> TakeUntil => #8
    -> GroupWorkflow X => #9
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName="AngularSpeed (w)"))
        -> FloatProperty(Value=0.03) => #2
        #0, #2 -> WithLatestFrom
        -> Multiply
        -> Bonsai.Numerics.Sin => #5
        ExternalizedMapping(Value(DisplayName="HalfCenter (A)"))
        -> FloatProperty(Value=2) => #7
        #5, #7 -> WithLatestFrom
        -> Multiply => #9
        ExternalizedMapping(Value(DisplayName="CenterAngle (Theta0)"))
        -> FloatProperty(Value=-1.5) => #11
        #9, #11 -> WithLatestFrom
        -> Add
        -> Bonsai.Numerics.Cos => #14
        ExternalizedMapping(Value(DisplayName="Radius (R)"))
        -> FloatProperty(Value=20) => #16
        #14, #16 -> WithLatestFrom
        -> Multiply
        -> WorkflowOutput
    DoubleProperty(Value=0) => #10
    #9, #10 -> Merge
    -> MulticastSubject TranslX
    #8 -> GroupWorkflow Z => #13
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName="AngularSpeed (w)"))
        -> FloatProperty(Value=0.03) => #2
        #0, #2 -> WithLatestFrom
        -> Multiply
        -> Bonsai.Numerics.Sin => #5
        ExternalizedMapping(Value(DisplayName="HalfCenter (A)"))
        -> FloatProperty(Value=2) => #7
        #5, #7 -> WithLatestFrom
        -> Multiply => #9
        ExternalizedMapping(Value(DisplayName="CenterAngle (Theta0)"))
        -> FloatProperty(Value=-1.5) => #11
        #9, #11 -> WithLatestFrom
        -> Add
        -> Bonsai.Numerics.Sin => #14
        ExternalizedMapping(Value(DisplayName="Radius (R)"))
        -> FloatProperty(Value=20) => #16
        #14, #16 -> WithLatestFrom
        -> Multiply
        -> WorkflowOutput
    DoubleProperty(Value=-20) => #14
    #13, #14 -> Merge
    -> MulticastSubject TranslZ
    #8 -> GroupWorkflow Angle
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName="AngularSpeed (w)"))
        -> FloatProperty(Value=0.03) => #2
        #0, #2 -> WithLatestFrom
        -> Multiply
        -> Bonsai.Numerics.Sin => #5
        ExternalizedMapping(Value(DisplayName="HalfCenter (A)"))
        -> FloatProperty(Value=2) => #7
        #5, #7 -> WithLatestFrom
        -> Multiply
        -> WorkflowOutput
    -> MulticastSubject AngleY
-> Take(Count=1)
-> RepeatCount(Count=40)
-> WorkflowOutput

SubscribeSubject TranslZ
SubscribeSubject TranslX
