WorkflowBuilder(Version=2.9.0)
GroupWorkflow Init
    IntProperty(Value=0)
    -> BehaviorSubject ExperimentTime

    IntProperty(Value=0)
    -> BehaviorSubject Laser

    StringProperty(Value=data\)
    -> BehaviorSubject LoggingPath

GroupWorkflow "Scene Rendering"
    GroupWorkflow 3DScene
        SubscribeSubject Draw => #0
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=calibration_front, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=25
          TranslationY=0
          TranslationZ=0
          RotationZ=0
          RotationY=90
          RotationX=0
          ScaleX=50
          ScaleY=10
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #0 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=calibration_left, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-25
          TranslationY=0
          TranslationZ=0
          RotationZ=0
          RotationY=90
          RotationX=0
          ScaleX=50
          ScaleY=10
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #0 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=calibration_right, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=0
          TranslationZ=25
          RotationZ=0
          RotationY=0
          RotationX=0
          ScaleX=50
          ScaleY=10
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #0 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=black_line_wall, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=0
          TranslationZ=-25
          RotationZ=0
          RotationY=0
          RotationX=0
          ScaleX=50
          ScaleY=10
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        #0 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=CheckerBoard, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-5
          TranslationZ=0
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=50
          ScaleY=50
          ScaleZ=50
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane

    Bonsai.Shaders.CreateWindow
      Width=320
      Height=240
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=0, Y=0)
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.MeshResources
      Meshes
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cone, FileName=Models\cone.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube, FileName=Models\cube.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cylinder, FileName=Models\cylinder.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=icosphere, FileName=Models\icosphere.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=Models\sphere.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=suzanne, FileName=Models\suzanne.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=torus, FileName=Models\torus.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=inwards_cylinder, FileName=Models\inwards_cylinder.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=empty_cylinder, FileName=Models\empty_cylinder.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=ArenaProjectionPlanes, FileName=Meshes\ArenaProjectionPlanes.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=CylinderPlane, FileName=Meshes\CylinderPlane.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=ProjectionPlanesBlended, FileName=Meshes\ProjectionPlanesBlended.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=ProjectionPlanes2, FileName=Meshes\ProjectionPlanes2.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=ProjectionPlane3, FileName=Meshes\ProjectionPlanes3.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=PanoramicMesh, QuadEffects=None)
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MyShader
          RenderState=""
          ShaderUniforms(UniformConfiguration=Bonsai.Shaders.FloatUniform(Name=height, Value=100))
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=panorama, TextureSlot=Texture0, TextureName=PatternedArena, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\cyl.vert
          FragmentShader=Shaders\cyl.frag
          MeshName=empty_cylinder
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=WarpQuad
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\WarpQuad.vert
          FragmentShader=Shaders\WarpQuad.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=Panoramic
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\panoramic.vert
          FragmentShader=Shaders\panoramic.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PanoramicSliced
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\panoramic.vert
          FragmentShader=Shaders\panoramic_sliced.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PanoramicUnevenSlicing
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\panoramic.vert
          FragmentShader=Shaders\panoramic_sliced_uneven_angle_distribution.frag
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=PatternedArena
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\PatternedArena.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=big_cicle
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\big_circle.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=one_line
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\one_line.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=three_lines
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\three_lines.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=small_circles
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\small_circles.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=black_circle_wall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\black_circle_wall.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=black_circle_wall_stripes
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\black_circle_wall_stripes.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=black_line_wall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\black_line_wall.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=black_line_wall_stripes
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\black_line_wall_stripes.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=CheckerBoard
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\CheckerBoard.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=calibration_front
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\calibration_front.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=calibration_left
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\calibration_left.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=calibration_right
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Arenas\calibration_right.png
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.UpdateRenderState
      RenderState
        StateConfiguration=Bonsai.Shaders.EnableState(Capability=Blend)
        StateConfiguration=Bonsai.Shaders.EnableState(Capability=DepthTest)
        StateConfiguration=Bonsai.Shaders.BlendFunctionState(SourceFactor=SrcAlpha, DestinationFactor=OneMinusSrcAlpha)
        StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Lequal)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> GroupWorkflow CubemapView
        WorkflowInput Source1 => #0
        SubscribeSubject CameraPosition
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (it.X as X,
             -it.Y as Y,
             -it.Z  as Z
            )
        -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=-0, Z=-0)
        -> PropertyMapping(Eye) => #5
        #0, #5 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=-0, Z=-0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0)) => #6
        -> MemberSelector(Selector=ViewMatrix) => #7
        SubscribeSubject CameraOrientation => #8
        Source3=#8 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Math.Atan2(it.X, -it.Z)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Append, Angle=3.07079649) => #11
        #11, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (
            Item1 as ViewMatrix,
            Item2.ProjectionMatrix as ProjectionMatrix,
            Item2.Light as Light
            )
        -> WorkflowOutput
    -> PublishSubject Draw
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
    -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #12
    -> GroupWorkflow DrawLeftMesh
        WorkflowInput Source1 => #0
        ExternalizedMapping(SliceIndex) => #1
        #0, #1 -> Sink UpdateSliceIndexUniform
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=SliceIndex)) => #1
            #0, #1 -> IntProperty(Value=0) => #2
            ExternalizedMapping(ShaderName) => #3
            #2, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=sliceIndex, ShaderName=PanoramicUnevenSlicing)
            -> WorkflowOutput
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicUnevenSlicing, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicUnevenSlicing, MeshName=PanoramicMesh)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicSliced, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicSliced, MeshName=PanoramicMesh)
        -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))
        -> Bonsai.Shaders.RenderTexture
          RenderState=""
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=WarpQuad, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=WarpQuad, MeshName=WarpQuad)
        -> WorkflowOutput
    -> IncludeWorkflow
      Path=BonVision:Environment.PerspectiveMapping.bonsai
      ClearColor=IndianRed
      Destination(Point2f(X=-0.21875, Y=-0.291666627), Point2f(X=-0.212499976, Y=0.408333361), Point2f(X=-0.33125, Y=0.308333337), Point2f(X=-0.33125, Y=-0.308333278))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
    #12 -> GroupWorkflow DrawCenterMesh
        WorkflowInput Source1 => #0
        ExternalizedMapping(SliceIndex) => #1
        #0, #1 -> Sink UpdateSliceIndexUniform
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=SliceIndex)) => #1
            #0, #1 -> IntProperty(Value=1) => #2
            ExternalizedMapping(ShaderName) => #3
            #2, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=sliceIndex, ShaderName=PanoramicUnevenSlicing)
            -> WorkflowOutput
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicUnevenSlicing, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicUnevenSlicing, MeshName=PanoramicMesh)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicSliced, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicSliced, MeshName=PanoramicMesh)
        -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))
        -> Bonsai.Shaders.RenderTexture
          RenderState=""
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=WarpQuad, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=WarpQuad, MeshName=WarpQuad)
        -> WorkflowOutput
    -> IncludeWorkflow
      Path=BonVision:Environment.PerspectiveMapping.bonsai
      ClearColor=IndianRed
      Destination
        Point2f(X=-0.0303030014, Y=-0.3525499)
        Point2f(X=-0.0242424011, Y=0.308204)
        Point2f(X=0.162500024, Y=0.3333333)
        Point2f(X=0.163793087, Y=-0.359019279)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
    #12 -> GroupWorkflow DrawRightMesh
        WorkflowInput Source1 => #0
        ExternalizedMapping(SliceIndex) => #1
        #0, #1 -> Sink UpdateSliceIndexUniform
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=SliceIndex)) => #1
            #0, #1 -> IntProperty(Value=2) => #2
            ExternalizedMapping(ShaderName) => #3
            #2, #3 -> Bonsai.Shaders.UpdateUniform(UniformName=sliceIndex, ShaderName=PanoramicUnevenSlicing)
            -> WorkflowOutput
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicUnevenSlicing, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicUnevenSlicing, MeshName=PanoramicMesh)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicSliced, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicSliced, MeshName=PanoramicMesh)
        -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))
        -> Bonsai.Shaders.RenderTexture
          RenderState=""
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=WarpQuad, TextureName="", TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=WarpQuad, MeshName=WarpQuad)
        -> WorkflowOutput
    -> IncludeWorkflow
      Path=BonVision:Environment.PerspectiveMapping.bonsai
      ClearColor=IndianRed
      Destination
        Point2f(X=0.418750048, Y=-0.325000048)
        Point2f(X=0.4375, Y=0.274999976)
        Point2f(X=0.337499976, Y=0.266666651)
        Point2f(X=0.309316754, Y=-0.329710126)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)

    SubscribeSubject Draw => #22
    Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.01S) => #23
    -> GroupWorkflow X
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName="AngularSpeed (w)"))
        -> FloatProperty(Value=0.01) => #2
        #0, #2 -> WithLatestFrom
        -> Multiply
        -> Bonsai.Numerics.Sin => #5
        ExternalizedMapping(Value(DisplayName="HalfCenter (A)"))
        -> FloatProperty(Value=0.9) => #7
        #5, #7 -> WithLatestFrom
        -> Multiply => #9
        ExternalizedMapping(Value(DisplayName="CenterAngle (Theta0)"))
        -> FloatProperty(Value=-1.5) => #11
        #9, #11 -> WithLatestFrom
        -> Add
        -> Bonsai.Numerics.Cos => #14
        ExternalizedMapping(Value(DisplayName="Radius (R)"))
        -> FloatProperty(Value=20) => #16
        #14, #16 -> WithLatestFrom
        -> Multiply
        -> WorkflowOutput
    -> PropertyMapping(TranslationX) => #25
    #23 -> GroupWorkflow Z
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName="AngularSpeed (w)"))
        -> FloatProperty(Value=0.01) => #2
        #0, #2 -> WithLatestFrom
        -> Multiply
        -> Bonsai.Numerics.Sin => #5
        ExternalizedMapping(Value(DisplayName="HalfCenter (A)"))
        -> FloatProperty(Value=0.9) => #7
        #5, #7 -> WithLatestFrom
        -> Multiply => #9
        ExternalizedMapping(Value(DisplayName="CenterAngle (Theta0)"))
        -> FloatProperty(Value=-1.5) => #11
        #9, #11 -> WithLatestFrom
        -> Add
        -> Bonsai.Numerics.Sin => #14
        ExternalizedMapping(Value(DisplayName="Radius (R)"))
        -> FloatProperty(Value=20) => #16
        #14, #16 -> WithLatestFrom
        -> Multiply
        -> WorkflowOutput
    -> PropertyMapping(TranslationZ) => #27
    #22, #25, #27 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=-14.4981432
      TranslationY=0
      TranslationZ=-13.7769318
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=5
      ScaleY=5
      ScaleZ=5
      Ambient(X=0.2, Y=0.2, Z=0.2)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=sphere

GroupWorkflow Navigation
    DoubleProperty(Value=5) => #0
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> DoubleProperty(Value=-1) => #2
    Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> DoubleProperty(Value=1) => #4
    #0, #2, #4 -> Merge => #5
    ExternalizedMapping(Value(DisplayName=RotationGain))
    -> FloatProperty(Value=0.3) => #7
    #5, #7 -> WithLatestFrom
    -> Multiply
    -> Accumulate => #10
    -> Bonsai.Numerics.Cos => #11
    #10 -> FloatProperty(Value=0) => #12
    #10 -> Bonsai.Numerics.Sin => #13
    #11, #12, #13 -> Zip
    -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
    -> Bonsai.Shaders.CreateVector3(X=0.0707371458, Y=0, Z=0.997495)
    -> BehaviorSubject CameraOrientation

    FloatProperty(Value=0) => #18
    Bonsai.Windows.Input.KeyDown(Filter=W, SuppressRepetitions=false)
    -> FloatProperty(Value=1) => #20
    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> FloatProperty(Value=-1) => #22
    #18, #20, #22 -> Merge => #23
    ExternalizedMapping(Value(DisplayName=SpeedGain))
    -> FloatProperty(Value=0.5) => #25
    #23, #25 -> WithLatestFrom
    -> Multiply => #27
    SubscribeSubject CameraOrientation
    -> GroupWorkflow NormVector => #29
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=X) => #1
        #0 -> MemberSelector(Selector=LengthFast) => #2
        #1, #2 -> Zip
        -> Divide => #4
        #0 -> MemberSelector(Selector=Y) => #5
        #5, #2 -> Zip
        -> Divide => #7
        #0 -> MemberSelector(Selector=Z) => #8
        #8, #2 -> Zip
        -> Divide => #10
        #4, #7, #10 -> Zip
        -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
        -> Bonsai.Shaders.CreateVector3(X=0.07061747, Y=0, Z=0.9958073)
        -> WorkflowOutput
    #27, #29 -> WithLatestFrom
    -> InputMapping(Selector=Item2, Value(Selector=Item1))
    -> GroupWorkflow Vector3Multiply
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=X) => #1
        ExternalizedMapping(Value)
        -> FloatProperty(Value=0) => #3
        #1, #3 -> WithLatestFrom
        -> Multiply => #5
        #0 -> MemberSelector(Selector=Y) => #6
        #6, #3 -> WithLatestFrom
        -> Multiply => #8
        #0 -> MemberSelector(Selector=Z) => #9
        #9, #3 -> WithLatestFrom
        -> Multiply => #11
        #5, #8, #11 -> Zip
        -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
        -> WorkflowOutput
    -> Accumulate
    -> BehaviorSubject CameraPosition

    SubscribeSubject CameraPosition => #35
    SubscribeSubject CameraOrientation => #36
    #35, #36 -> CombineLatest
    -> Add
    -> BehaviorSubject CameraTarget

Disable GroupWorkflow BallNavigation
    DoubleProperty(Value=5) => #0
    SubscribeSubject Pan => #1
    #0, #1 -> Merge => #2
    ExternalizedMapping(Value(DisplayName=RotationGain))
    -> FloatProperty(Value=0.05) => #4
    #2, #4 -> WithLatestFrom
    -> Multiply
    -> Accumulate => #7
    -> Bonsai.Numerics.Cos => #8
    #7 -> FloatProperty(Value=0) => #9
    #7 -> Bonsai.Numerics.Sin => #10
    #8, #9, #10 -> Zip
    -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
    -> Bonsai.Shaders.CreateVector3(X=0.9689124, Y=0, Z=0.247403964)
    -> BehaviorSubject CameraOrientation

    DoubleProperty(Value=0) => #15
    SubscribeSubject Tilt => #16
    #15, #16 -> Merge => #17
    ExternalizedMapping(Value(DisplayName=SpeedGain))
    -> FloatProperty(Value=0.2) => #19
    #17, #19 -> WithLatestFrom
    -> Multiply => #21
    SubscribeSubject CameraOrientation
    -> GroupWorkflow NormVector => #23
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=X) => #1
        #0 -> MemberSelector(Selector=LengthFast) => #2
        #1, #2 -> Zip
        -> Divide => #4
        #0 -> MemberSelector(Selector=Y) => #5
        #5, #2 -> Zip
        -> Divide => #7
        #0 -> MemberSelector(Selector=Z) => #8
        #8, #2 -> Zip
        -> Divide => #10
        #4, #7, #10 -> Zip
        -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
        -> Bonsai.Shaders.CreateVector3(X=0.9672731, Y=0, Z=0.246985376)
        -> WorkflowOutput
    #21, #23 -> WithLatestFrom
    -> InputMapping(Selector=Item2, Value(Selector=Item1))
    -> GroupWorkflow Vector3Multiply
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=X) => #1
        ExternalizedMapping(Value)
        -> FloatProperty(Value=0) => #3
        #1, #3 -> WithLatestFrom
        -> Multiply => #5
        #0 -> MemberSelector(Selector=Y) => #6
        #6, #3 -> WithLatestFrom
        -> Multiply => #8
        #0 -> MemberSelector(Selector=Z) => #9
        #9, #3 -> WithLatestFrom
        -> Multiply => #11
        #5, #8, #11 -> Zip
        -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
        -> WorkflowOutput
    -> Accumulate
    -> BehaviorSubject CameraPosition

    SubscribeSubject CameraPosition => #29
    SubscribeSubject CameraOrientation => #30
    #29, #30 -> CombineLatest
    -> Add
    -> BehaviorSubject CameraTarget

GroupWorkflow Logger
    SubscribeSubject Pan => #0
    SubscribeSubject Tilt => #1
    #0, #1 -> WithLatestFrom => #2
    SubscribeSubject Laser => #3
    #2, #3 -> WithLatestFrom
    -> Timestamp => #5
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
      Expression: Convert.ToInt32(it)
    SubscribeSubject StartTime => #8
    #7, #8 -> WithLatestFrom
    -> Subtract
    -> MulticastSubject ExperimentTime => #11
    #5 -> MemberSelector(Selector=Value.Item1.Item1) => #12
    #5 -> MemberSelector(Selector=Value.Item1.Item2) => #13
    #5 -> MemberSelector(Selector=Value.Item2) => #14
    #11, #12, #13, #14 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
      Expression:
        new(
          Item1 as Timestamp,
          Item2 as dX,
          Item3 as dY,
          Item4 as Laser
        )
    SubscribeSubject LoggingPath
    -> Add(Operand=StringProperty(Value=BehaviorLog.csv))
    -> PropertyMapping(FileName) => #19
    #16, #19 -> Bonsai.IO.CsvWriter(FileName=data\BehaviorLog.csv, ListSeparator=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> WorkflowOutput

    SubscribeSubject Frames => #22
    SubscribeSubject LoggingPath
    -> Add(Operand=StringProperty(Value=BehaviorFrames.avi))
    -> PropertyMapping(FileName) => #25
    #22, #25 -> Bonsai.Vision.VideoWriter
      FileName=data\BehaviorFrames.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=120
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

Disable GroupWorkflow Harp
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands
    -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
    -> BehaviorSubject BehaviorEvents

    SubscribeSubject Laser => #3
    -> Condition ON?
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0)) => #5
    #3 -> Condition OFF?
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0)) => #7
    #5, #7 -> Merge => #8
    SubscribeSubject BehaviorEvents => #9
    #8, #9 -> SubscribeWhen
    -> MulticastSubject BehaviorCommands

SubscribeSubject ExperimentTime
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: TimeSpan.FromMilliseconds(Convert.ToDouble(it))

Timer(DueTime=PT0S, Period=PT20S)
-> ElementIndex
-> MemberSelector(Selector=Index)
-> Mod(Operand=IntProperty(Value=2))
-> MulticastSubject Laser

IntProperty(Value=0)
-> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: Convert.ToInt32(it)
-> BehaviorSubject StartTime

Timer(DueTime=PT20M)
-> WorkflowOutput

Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames)
-> MemberSelector(Selector=Image)
-> BehaviorSubject Frames

SubscribeSubject Frames
-> Bonsai.Vision.Crop(RegionOfInterest(X=156, Y=181, Width=128, Height=90))
-> BehaviorSubject CroppedFrames

SubscribeSubject CroppedFrames => #26
-> InputMapping(Selector=it, Size(Selector="Width,Height"))
-> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=128, Height=90), Depth=U8, Channels=1, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #28
#26 -> PropertyMapping(Image) => #29
#28, #29 -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=0, Height=0), Interpolation=Linear)
-> Bonsai.Vision.Drawing.Circle(Center(X=50, Y=80), Radius=6, Color(Val0=0, Val1=0, Val2=0, Val3=255), Thickness=11, LineType=Connected8, Shift=0)
-> Bonsai.Vision.Drawing.Circle(Center(X=60, Y=10), Radius=8, Color(Val0=0, Val1=0, Val2=0, Val3=255), Thickness=15, LineType=Connected8, Shift=0)
-> Bonsai.Vision.Drawing.DrawCanvas
-> BehaviorSubject BallFrames
-> TimeInterval
-> MemberSelector(Selector=Interval.TotalMilliseconds)

SubscribeSubject BallFrames
-> Bonsai.Vision.OpticalFlow(PyramidScale=0.5, Levels=3, WindowSize=12, Iterations=3, PolyN=5, PolySigma=1.1, Flags=None)
-> Bonsai.Dsp.Split => #39
-> MemberSelector(Selector=Item1)
-> Bonsai.Dsp.Average
-> MemberSelector(Selector=Val0)
-> BehaviorSubject Pan
#39 -> MemberSelector(Selector=Item2)
-> Bonsai.Dsp.Average
-> MemberSelector(Selector=Val0)
-> BehaviorSubject Tilt
