WorkflowBuilder(Version=2.9.0)
Timer(DueTime=PT0S, Period=PT1M)
-> Delay(DueTime=PT2S)
-> BehaviorSubject MinutesInSession

SubscribeSubject DurationSession
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT2H40M)
-> Delay(DueTime=PT2S)
-> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0))
-> MulticastSubject BehaviorCommands
-> Delay(DueTime=PT10S)
-> Take(Count=1)
-> WorkflowOutput

Annotation Shortcuts
  Text:
    Right Arrow: Move water servo away from RC
    Left Arrow: Move water servo towards the RC
    F: Filling up syringe
    R: Single reward
    A/S: Lock control
    L/K: Open and close slider door

GroupWorkflow Init
    GroupWorkflow SetFilenames
        SubscribeSubject PATH
        -> Add(Operand=StringProperty(Value=Behavior\behavior_data.bin))
        -> BehaviorSubject BehaviorDataFile

        SubscribeSubject PATH
        -> Add(Operand=StringProperty(Value=ROI_Water.csv))
        -> BehaviorSubject ROIWaterFile

        SubscribeSubject PATH
        -> Add(Operand=StringProperty(Value=ROI_Reach.csv))
        -> BehaviorSubject ROIReachFile

        SubscribeSubject PATH
        -> Add(Operand=StringProperty(Value=AllFramesIDList.csv))
        -> BehaviorSubject AllFramesFile

        SubscribeSubject PATH
        -> Add(Operand=StringProperty(Value=pump.csv))
        -> BehaviorSubject PumpFile

        SubscribeSubject PATH
        -> Add(Operand=StringProperty(Value=Performance.csv))
        -> BehaviorSubject PerformanceFile

        SubscribeSubject PATH
        -> Add(Operand=StringProperty(Value=Behavior\device.yml))
        -> BehaviorSubject BehaviorConfigFile

        SubscribeSubject PATH
        -> Add(Operand=StringProperty(Value=FrameClip_.csv))
        -> BehaviorSubject FrameClipFile

        SubscribeSubject PATH
        -> Add(Operand=StringProperty(Value=Clip_.avi))
        -> BehaviorSubject ClipFile

    IntProperty(Value=0)
    -> BehaviorSubject Counter

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject PumpActivation

    BooleanProperty(Value=false)
    -> PublishSubject Start_Clip
    -> BehaviorSubject UseFillProtocol

    ExternalizedMapping(Value(DisplayName=Path))
    -> StringProperty(Value=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\)
    -> BehaviorSubject PATH

    IntProperty(Value=0)
    -> BehaviorSubject CountActivations

    BooleanProperty(Value=false)
    -> Skip(Count=1)
    -> BehaviorSubject ActivateServos
    -> BehaviorSubject ActivateServosSlider

    BooleanProperty(Value=false)
    -> PublishSubject Attempt

    ExternalizedMapping(Value(DisplayName=pos_init))
    -> IntProperty(Value=1900)
    -> BehaviorSubject Pos

    ExternalizedMapping(Value(DisplayName=BoxNb))
    -> IntProperty(Value=1)
    -> BehaviorSubject BoxNb

    SubscribeSubject Pos
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #27
      Expression: Convert.ToString(it)
    SubscribeSubject BoxNb => #28
    #27, #28 -> Zip => #29
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        dico1 = {'1950':286,
                '1900':299,
                '1850':311,
                '1800':322,
                '1750':334,
                '1700':348,
                '1650':362,
                '1600':376,
                '1550':386,
                '1500':400,
                '1450':414}

        dico2 = {'1950':272,
                '1900':286,
                '1850':300,
                '1800':314,
                '1750':328,
                '1700':342,
                '1650':356,
                '1600':368,
                '1550':383,
                '1500':396,
                '1450':410}


        def process(value):
          if value.Item1 == 1:
            return dico1[value.Item2]-20
          elif value.Item1 == 2:
            return dico2[value.Item2]-20
    -> BehaviorSubject ReahROIPosX
    #29 -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        def process(value):
          dico1 = {'1950':71,
                  '1900':70,
                  '1850':69,
                  '1800':68,
                  '1750':67,
                  '1700':57,
                  '1650':57,
                  '1600':55,
                  '1550':55,
                  '1500':62,
                  '1450':61}

          dico2 = {'1950':75,
                  '1900':74,
                  '1850':74,
                  '1800':73,
                  '1750':61,
                  '1700':61,
                  '1650':62,
                  '1600':60,
                  '1550':65,
                  '1500':68,
                  '1450':67}

          if value.Item2 == 1:
            return dico1[value.Item1]+2
          elif value.Item2 == 2:

            return dico2[value.Item1]+2
    -> PropertyMapping(Value(Selector=it))
    -> IntProperty(Value=72)
    -> BehaviorSubject WaterROIThresh

    SubscribeSubject Pos
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #37
      Expression: Convert.ToString(it)
    SubscribeSubject BoxNb => #38
    #37, #38 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        dico1 = {'1950':286,
                '1900':310,
                '1850':311,
                '1800':322,
                '1750':334,
                '1700':348,
                '1650':362,
                '1600':376,
                '1550':386,
                '1500':400,
                '1450':414}


        dico2 = {'1950':272,
                '1900':286,
                '1850':300,
                '1800':314,
                '1750':328,
                '1700':342,
                '1650':356,
                '1600':368,
                '1550':383,
                '1500':396,
                '1450':410}

        def process(value):
          if value.Item2 == 1:
            return dico1[value.Item1]
          elif value.Item2 == 2:
            return dico2[value.Item1]
    -> BehaviorSubject WaterROIPosX

    SubscribeSubject BoxNb
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        def process(value) :
          if value== 1:
            return 62
          elif value == 2:
            return 80
    -> PropertyMapping(Value(Selector=it))
    -> IntProperty(Value=62)
    -> BehaviorSubject ReachROIThresh

    IntProperty(Value=0)
    -> BehaviorSubject ongoing_pump

    IntProperty(Value=0)
    -> BehaviorSubject ongoing_attempt

    BooleanProperty(Value=false)
    -> IntProperty(Value=0)
    -> BehaviorSubject CountTrials

    BooleanProperty(Value=false)
    -> IntProperty(Value=0)
    -> BehaviorSubject attempt_nb

    ExternalizedMapping(Value(DisplayName=Session))
    -> StringProperty(Value=20)
    -> BehaviorSubject Session

    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=T)
    -> BehaviorSubject MouseID

    ExternalizedMapping(Value(DisplayName=DCI))
    -> IntProperty(Value=250)
    -> BehaviorSubject Drop_interval

    ExternalizedMapping(Value(DisplayName=FR))
    -> IntProperty(Value=250)
    -> BehaviorSubject Frame_Rate

    ExternalizedMapping(Value(DisplayName=SessionDur))
    -> IntProperty(Value=160)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMinutes(it)
    -> BehaviorSubject DurationSession

    IntProperty(Value=0)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime)
    -> BehaviorSubject LastClipTime

GroupWorkflow RFID
    Timer(DueTime=PT0.2S, Period=PT0.2S)
    -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=43, PayloadType=U8, Value=1)) => #1
    Harp.RfidReader.CreateMessage(MessageType=Write, Payload=Harp.RfidReader.CreateHardwareNotificationsStatePayload(HardwareNotificationsState=BottomLed)) => #2
    Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=43, PayloadType=U8, Value=1)) => #3
    #1, #2, #3 -> Merge
    -> Harp.RfidReader.Device(OperationMode=Active, OperationLed=Off, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
    -> PublishSubject Read_Center_RFID
    -> WorkflowOutput

GroupWorkflow Behavior
    GroupWorkflow ValveSwitching
        SubscribeSubject UseFillProtocol => #0
        -> Condition IfFalse
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort0)) => #2
        #0 -> Condition IfTrue
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0)) => #4
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=None)) => #5
        Disable SubscribeSubject FillStepCount => #6
        Disable SubscribeSubject FillPeriod => #7
        #6, #7 -> Disable CombineLatest
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 * Item2 + 1000
        -> Disable PropertyMapping(PulseSupplyPort0)
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort0Payload(PulseSupplyPort0=2000)) => #11
        #2, #4, #5, #11 -> Merge
        -> MulticastSubject BehaviorCommands
        -> Disable MulticastSubject ValveSwitch => #14
        SubscribeSubject BehaviorMessages => #15
        #14, #15 -> SubscribeWhen
        -> WorkflowOutput

    Disable GroupWorkflow DaylightCycle
        Timer(DueTime=PT5S, Period=PT15S)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO3))
        -> MulticastSubject BehaviorCommands
        -> MulticastSubject DaylightSwitch => #3
        SubscribeSubject BehaviorMessages => #4
        #3, #4 -> SubscribeWhen

    GroupWorkflow BevelServo
        Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true)
        -> BooleanProperty(Value=true) => #1
        SubscribeSubject ActivateServos
        -> Disable Condition IsOddActivationNumber
            SubscribeSubject CountActivations
            -> Mod(Operand=IntProperty(Value=2))
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition IsEvenActivationNumber
            SubscribeSubject CountActivations
            -> Mod(Operand=IntProperty(Value=2))
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Delay(DueTime=PT3S) => #6
        #1, #6 -> Merge => #7
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PeriodPayload(ServoMotor2Period=20000)) => #8
        #7 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PulsePayload(ServoMotor2Pulse=2150)) => #9
        #7 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableServosPayload(EnableServos=ServoOutput2)) => #10
        #8, #9, #10 -> Merge
        -> MulticastSubject BehaviorCommands

        Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=true)
        -> BooleanProperty(Value=true) => #14
        SubscribeSubject ActivateServos
        -> Condition IsEvenActivationNumber
            SubscribeSubject CountActivations
            -> Mod(Operand=IntProperty(Value=2))
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Disable Condition IsOddActivationNumber
            SubscribeSubject CountActivations
            -> Mod(Operand=IntProperty(Value=2))
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition => #18
            WorkflowInput Source1
            -> WorkflowOutput
        #14, #18 -> Merge => #19
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PeriodPayload(ServoMotor2Period=20000)) => #20
        #19 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PulsePayload(ServoMotor2Pulse=200)) => #21
        #19 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableServosPayload(EnableServos=ServoOutput2)) => #22
        #20, #21, #22 -> Merge
        -> MulticastSubject BehaviorCommands

        Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=true)
        -> BooleanProperty(Value=true) => #26
        SubscribeSubject ActivateServos
        -> Condition IsEvenActivationNumber
            SubscribeSubject CountActivations
            -> Mod(Operand=IntProperty(Value=2))
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition => #29
            WorkflowInput Source1
            -> WorkflowOutput
        #26, #29 -> Merge => #30
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmFrequencyDO1Payload(PwmFrequencyDO1=50)) => #31
        #30 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=7)) => #32
        #30 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO1)) => #33
        #31, #32, #33 -> Merge
        -> MulticastSubject BehaviorCommands

        Bonsai.Windows.Input.KeyDown(Filter=K, SuppressRepetitions=true)
        -> BooleanProperty(Value=true) => #37
        SubscribeSubject ActivateServos
        -> Condition IsOddActivationNumber
            SubscribeSubject CountActivations
            -> Mod(Operand=IntProperty(Value=2))
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Delay(DueTime=PT1S) => #41
        #37, #41 -> Merge => #42
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmFrequencyDO1Payload(PwmFrequencyDO1=50)) => #43
        #42 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=8)) => #44
        #42 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO1)) => #45
        #43, #44, #45 -> Merge
        -> MulticastSubject BehaviorCommands

    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #3
    ExternalizedMapping(PortName(DisplayName=PortName)) => #4
    #3, #4 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM5)
    -> PublishSubject BehaviorMessages

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor3PeriodPayload(ServoMotor3Period=20000)) => #7
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableServosPayload(EnableServos=ServoOutput3)) => #8
    SubscribeSubject MoveWaterServo
    -> InputMapping(Selector=it, ServoMotor3Pulse(Selector=it))
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor3PulsePayload(ServoMotor3Pulse=1900)) => #11
    BooleanProperty(Value=false)
    -> Delay(DueTime=PT5S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #14
    BooleanProperty(Value=false)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #16
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=250)) => #17
    #7, #8, #11, #14, #16, #17 -> Merge => #18
    SubscribeSubject BehaviorMessages => #19
    #18, #19 -> SubscribeWhen
    -> MulticastSubject BehaviorCommands
    -> WorkflowOutput

GroupWorkflow Servo
    IntProperty(Value=0) => #0
    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=true)
    -> IntProperty(Value=50) => #2
    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=true)
    -> IntProperty(Value=-50) => #4
    #0, #2, #4 -> Merge => #5
    SubscribeSubject Pos => #6
    #5, #6 -> WithLatestFrom
    -> MemberSelector(Selector="Item1,Item2")
    -> Add
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it > 1950 ? 1950 : it
    -> BehaviorSubject MoveWaterServo

    SubscribeSubject MoveWaterServo => #12
    -> MulticastSubject Pos
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
      Expression: Convert.ToString(it)
    SubscribeSubject BoxNb => #15
    #14, #15 -> WithLatestFrom
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        dico1 = {'1950':284,
                '1900':300,
                '1850':311,
                '1800':324,
                '1750':337,
                '1700':350,
                '1650':364,
                '1600':378,
                '1550':390,
                '1500':407,
                '1450':417}

        dico2 = {'1950':272,
                '1900':286,
                '1850':300,
                '1800':314,
                '1750':328,
                '1700':342,
                '1650':356,
                '1600':368,
                '1550':383,
                '1500':396,
                '1450':410}


        def process(value):
          if value.Item2 == 1:
            return dico1[value.Item1]
          elif value.Item2 == 2:
            return dico2[value.Item1]
    -> MulticastSubject WaterROIPosX
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #19
      Expression: Convert.ToString(it)
    #15, #19 -> CombineLatest => #20
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        @returns(int)


        def process(value):

          dico1 = {'1950':286,
                  '1900':299,
                  '1850':311,
                  '1800':322,
                  '1750':334,
                  '1700':348,
                  '1650':362,
                  '1600':376,
                  '1550':386,
                  '1500':400,
                  '1450':414}

          dico2 = {'1950':272,
                  '1900':286,
                  '1850':300,
                  '1800':314,
                  '1750':328,
                  '1700':342,
                  '1650':356,
                  '1600':368,
                  '1550':383,
                  '1500':396,
                  '1450':410}

          if value.Item1 == 1:
            return dico1[value.Item2]-20
          elif value.Item1 == 2:
            return dico2[value.Item2]-20
    -> MulticastSubject ReahROIPosX
    #20 -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        def process(value):
          dico1 = {'1950':62,
                  '1900':62,
                  '1850':62,
                  '1800':62,
                  '1750':62,
                  '1700':62,
                  '1650':62,
                  '1600':62,
                  '1550':62,
                  '1500':62,
                  '1450':61}



          dico2 = {'1950':62,
                  '1900':62,
                  '1850':62,
                  '1800':62,
                  '1750':62,
                  '1700':62,
                  '1650':62,
                  '1600':62,
                  '1550':62,
                  '1500':62,
                  '1450':62}

          if value.Item1 == 1:
            return dico1[value.Item2]-18
          elif value.Item1 == 2:

            return dico2[value.Item2]-18
    -> MulticastSubject WaterROIThresh

GroupWorkflow SyringePump
    GroupWorkflow FillPumpProtocol
        SubscribeSubject UseFillProtocol
        -> Condition IfTrue => #1
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Reverse)) => #2
        #1 -> IntProperty(Value=40000)
        -> BehaviorSubject FillStepCount
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=40000)) => #6
        #1 -> IntProperty(Value=1)
        -> BehaviorSubject FillPeriod
        -> InputMapping(Selector=it, ProtocolPeriod(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=1)) => #10
        #1 -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #11
        #2, #6, #10, #11 -> Merge
        -> MulticastSubject PumpCommands => #13
        SubscribeSubject PumpMessages => #14
        #13, #14 -> SubscribeWhen

    GroupWorkflow DefaultProtocol
        SubscribeSubject UseFillProtocol
        -> Condition IfFalse => #1
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false)) => #1
            SubscribeSubject Counter
            -> GreaterThan(Operand=IntProperty(Value=0)) => #3
            #1, #3 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #2
        #1 -> IntProperty(Value=45)
        -> BehaviorSubject DefaultStepCount
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=45)) => #6
        #1 -> IntProperty(Value=10)
        -> BehaviorSubject DefaultPeriod
        -> InputMapping(Selector=it, ProtocolPeriod(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=10)) => #10
        #1 -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Quarter)) => #11
        #2, #6, #10, #11 -> Merge
        -> MulticastSubject PumpCommands => #13
        SubscribeSubject PumpMessages => #14
        #13, #14 -> SubscribeWhen

    GroupWorkflow AfterFillPumpProtocol
        SubscribeSubject UseFillProtocol
        -> Condition IfFalse => #1
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false)) => #1
            SubscribeSubject Counter
            -> Equal(Operand=IntProperty(Value=0)) => #3
            #1, #3 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #2
        #1 -> IntProperty(Value=1800)
        -> BehaviorSubject AfterFillStepCount
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=1800)) => #6
        #1 -> IntProperty(Value=1)
        -> BehaviorSubject AfterFillPeriod
        -> InputMapping(Selector=it, ProtocolPeriod(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=1)) => #10
        #1 -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #11
        #2, #6, #10, #11 -> Merge
        -> MulticastSubject PumpCommands => #13
        SubscribeSubject PumpMessages => #14
        #13, #14 -> SubscribeWhen

    GroupWorkflow SetPumpActivity
        SubscribeSubject PumpActivation => #0
        -> StringProperty(Value=Activation_) => #1
        #0 -> IntProperty(Value=1)
        -> BehaviorSubject ActivatePump
        -> Accumulate => #4
        #1, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: Item1 + Convert.ToString(Item2)
        SubscribeSubject FrameID => #7
        SubscribeSubject Pos => #8
        #7, #8 -> WithLatestFrom => #9
        #6, #9 -> WithLatestFrom
        -> BehaviorSubject PumpActivity

        SubscribeSubject CountTrials => #12
        -> StringProperty(Value=NewClip_) => #13
        #12 -> IntProperty(Value=1)
        -> Accumulate => #15
        #13, #15 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
          Expression: Item1 + Convert.ToString(Item2)
        SubscribeSubject FrameID => #18
        SubscribeSubject Pos => #19
        #18, #19 -> WithLatestFrom => #20
        #17, #20 -> WithLatestFrom
        -> MulticastSubject PumpActivity

        SubscribeSubject PumpManual => #23
        -> StringProperty(Value=Manual_) => #24
        #23 -> IntProperty(Value=1)
        -> Accumulate => #26
        #24, #26 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #28
          Expression: Item1 + Convert.ToString(Item2)
        SubscribeSubject FrameID => #29
        SubscribeSubject Pos => #30
        #29, #30 -> WithLatestFrom => #31
        #28, #31 -> WithLatestFrom
        -> MulticastSubject PumpActivity

    BehaviorSubject<Bonsai.Harp.HarpMessage> PumpCommands => #4
    ExternalizedMapping(PortName) => #5
    #4, #5 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM6)
    -> PublishSubject PumpMessages

    Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
    -> BehaviorSubject PumpManual

    SubscribeSubject PumpManual => #10
    -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled)) => #11
    #10 -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled)) => #12
    #11, #12 -> Merge
    -> MulticastSubject PumpCommands => #14
    SubscribeSubject PumpMessages => #15
    #14, #15 -> SubscribeWhen

    Disable SubscribeSubject DefaultStepCount => #17
    Disable SubscribeSubject DefaultPeriod => #18
    #17, #18 -> Disable CombineLatest
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(Item1 * Item2 + 100)
    -> Disable PropertyMapping(DueTime)

    Disable BehaviorSubject<Bonsai.Harp.HarpMessage> PumpRefill => #22
    -> Disable StringProperty(Value=Refill_) => #23
    #22 -> Disable IntProperty(Value=1)
    -> Disable Accumulate => #25
    #23, #25 -> Disable Zip
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #27
      Expression: Item1 + Convert.ToString(Item2)
    Disable SubscribeSubject Timestamp => #28
    #27, #28 -> Disable WithLatestFrom

GroupWorkflow CalculatePerformance
    SubscribeSubject ActivatePump
    -> WindowTime(TimeSpan=PT5M, TimeShift=PT5S)
    -> SelectMany
        WorkflowInput Source1
        -> Sum
        -> WorkflowOutput
    -> MulticastSubject ongoing_pump => #3
    SubscribeSubject Attempt
    -> IntProperty(Value=1)
    -> WindowTime(TimeSpan=PT5M, TimeShift=PT5S)
    -> SelectMany
        WorkflowInput Source1
        -> Sum
        -> WorkflowOutput
    -> MulticastSubject ongoing_attempt => #8
    #3, #8 -> CombineLatest
    -> Bonsai.Scripting.IronPython.PythonTransform => #10
      Script:
        @returns(float)
        def process(value):
          if value.Item1 == 0 and value.Item2 ==0:
            return 1.0
          elif value.Item2 ==0:
            return 1.0
          else:
            return float(value.Item1)/float(value.Item2)
    SubscribeSubject FrameID => #11
    SubscribeSubject Pos => #12
    #11, #12 -> WithLatestFrom => #13
    #10, #13 -> WithLatestFrom
    -> BehaviorSubject Performance
    -> WorkflowOutput

    SubscribeSubject ROI_Reach => #17
    SubscribeSubject ReachROIThresh => #18
    -> PropertyMapping(Value) => #19
    #17, #19 -> LessThan(Operand=DoubleProperty(Value=62))
    -> WindowCount(Count=5, Skip=1)
    -> Take(Count=1)
    -> SelectMany
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Accumulate
        -> WorkflowOutput
    -> GreaterThanOrEqual(Operand=IntProperty(Value=5))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #26
    #18 -> PropertyMapping(Value(Selector=it)) => #27
    #17, #27 -> GreaterThan(Operand=DoubleProperty(Value=62))
    -> WindowCount(Count=5, Skip=1)
    -> Take(Count=1)
    -> SelectMany
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Accumulate
        -> WorkflowOutput
    -> GreaterThanOrEqual(Operand=IntProperty(Value=5))
    -> Condition => #33
        WorkflowInput Source1
        -> WorkflowOutput
    #26, #33 -> Merge
    -> Repeat
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> MulticastSubject Attempt

GroupWorkflow Camera
    Disable GroupWorkflow Clips
        SubscribeSubject Video_delayed => #0
        SubscribeSubject Start_Clip
        -> Take(Count=1) => #2
        #0, #2 -> SubscribeWhen
        -> Take(Count=750) => #4
        -> SelectMany WriteRow => #5
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1) => #1
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
            SubscribeSubject LastTagRead => #4
            #1, #3, #4 -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject PATH => #6
        StringProperty(Value=FrameClip_) => #7
        SubscribeSubject CountTrials
        -> Add(Operand=IntProperty(Value=1)) => #9
        #6, #7, #9 -> Zip => #10
        Annotation "HGM Filenames"(Text="All filenames should be set on a node before") => #11
        #10, #11 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2 + Convert.ToString(Item3) + ".csv"
        -> PropertyMapping(FileName) => #13
        Annotation "HGM AutoSuffix?"(Text="") => #14
        #5, #13, #14 -> Bonsai.IO.CsvWriter(FileName=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\FrameClip_1.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #15
        #4 -> MemberSelector(Selector=Item2) => #16
        SubscribeSubject PATH => #17
        StringProperty(Value=Clip_) => #18
        SubscribeSubject CountTrials
        -> Add(Operand=IntProperty(Value=1)) => #20
        #17, #18, #20 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2 + Convert.ToString(Item3)+".avi"
        -> PropertyMapping(FileName) => #23
        SubscribeSubject Frame_Rate
        -> PropertyMapping(FrameRate) => #25
        Annotation "HGM AutoSuffix?"(Text="") => #26
        #16, #23, #25, #26 -> Bonsai.Vision.VideoWriter => #27
          FileName=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\Clip_1.avi
          Suffix=None
          Buffered=true
          Overwrite=true
          FourCC=FMP4
          FrameRate=250
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        SubscribeSubject CountTrials => #28
        #2, #28 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> InputMapping(Selector=it, Value(Selector=it)) => #32
        Annotation "Update Counter" => #33
          Text:
            This serve as a counter to feed the file names

            Could not just use CountTrials as you want the value that is updated
        #32, #33 -> IntProperty(Value=1)
        -> MulticastSubject CountTrials => #35
        #15, #27, #35 -> Zip
        -> Repeat
        -> WorkflowOutput

    ExternalizedMapping(Index)
    -> Bonsai.Spinnaker.SpinnakerCapture(Index=0, ColorProcessing=Default) => #2
    -> MemberSelector(Selector=ChunkData.FrameID)
    -> BehaviorSubject FrameID => #4
    #2 -> MemberSelector(Selector=Image)
    -> Bonsai.Vision.Grayscale
    -> BehaviorSubject video => #7
    #4, #7 -> Zip
    -> Delay(DueTime=PT1.5S)
    -> BehaviorSubject Video_delayed

    SubscribeSubject video => #11
    Annotation "X - To change"(Text="")
    -> SubscribeSubject ReahROIPosX => #13
    Annotation "Y "(Text="")
    -> IntProperty(Value=170) => #15
    Annotation Width(Text="")
    -> IntProperty(Value=15) => #17
    Annotation Height(Text="")
    -> IntProperty(Value=140) => #19
    #13, #15, #17, #19 -> CombineLatest => #20
    #11, #20 -> WithLatestFrom
    -> InputMapping(Selector=Item1, RegionOfInterest(Selector="Item2.Item1,Item2.Item2,Item2.Item3,Item2.Item4"))
    -> Bonsai.Vision.Crop(RegionOfInterest(X=279, Y=170, Width=15, Height=140))
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> BehaviorSubject ROI_Reach

    SubscribeSubject video => #27
    Annotation "X - To change"(Text="")
    -> SubscribeSubject WaterROIPosX => #29
    Annotation "Y "(Text="")
    -> IntProperty(Value=162) => #31
    Annotation Width(Text="")
    -> IntProperty(Value=13) => #33
    Annotation Height(Text="")
    -> IntProperty(Value=10) => #35
    #29, #31, #33, #35 -> CombineLatest => #36
    Annotation "HGM WithLatestFrom?"(Text="") => #37
    #27, #36, #37 -> WithLatestFrom
    -> InputMapping(Selector=Item1, RegionOfInterest(Selector="Item2.Item1,Item2.Item2,Item2.Item3,Item2.Item4"))
    -> Bonsai.Vision.Crop(RegionOfInterest(X=300, Y=162, Width=13, Height=10))
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> BehaviorSubject ROI_Water

GroupWorkflow ProcessClips
    SubscribeSubject Start_Clip
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject LastClipTime => #1
        #0, #1 -> WithLatestFrom => #2
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime) => #4
        #2 -> MemberSelector(Selector=Item2) => #5
        #4, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan(Item1 - Item2)
        -> MemberSelector(Selector=TotalSeconds) => #8
        ExternalizedMapping(Value(DisplayName="MinInterval (s)")) => #9
        #8, #9 -> GreaterThan(Operand=DoubleProperty(Value=3))
        -> WorkflowOutput
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime)
    -> MulticastSubject LastClipTime
    -> SelectMany SaveClips
        SubscribeSubject Video_delayed
        -> MemberSelector(Selector=Item1)
        -> GroupWorkflow WriteRow => #2
            WorkflowInput Source1 => #0
            SubscribeSubject LastTagRead => #1
            #0, #1 -> WithLatestFrom => #2
            -> MemberSelector(Selector=Item1) => #3
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
            #2 -> MemberSelector(Selector=Item2) => #6
            #3, #5, #6 -> Zip
            -> WorkflowOutput
        SubscribeSubject FrameClipFile
        -> PropertyMapping(FileName) => #4
        #2, #4 -> Bonsai.IO.CsvWriter(FileName=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\FrameClip_.csv, Append=false, Overwrite=true, Suffix=FileCount, IncludeHeader=false)
        -> ElementIndex => #6
        SubscribeSubject Video_delayed
        -> MemberSelector(Selector=Item2) => #8
        SubscribeSubject ClipFile
        -> PropertyMapping(FileName) => #10
        SubscribeSubject Frame_Rate
        -> PropertyMapping(FrameRate) => #12
        #8, #10, #12 -> Bonsai.Vision.VideoWriter
          FileName=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\Clip_.avi
          Suffix=FileCount
          Buffered=true
          Overwrite=true
          FourCC=FMP4
          FrameRate=250
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> ElementIndex => #14
        #6, #14 -> Zip
        -> Take(Count=750)
        -> TakeLast(Count=1)
        -> WorkflowOutput

        IntProperty(Value=0) => #19
        SubscribeSubject CountTrials => #20
        #19, #20 -> WithLatestFrom
        -> Add
        -> MulticastSubject CountTrials
    -> WorkflowOutput

    SubscribeSubject ROI_Reach => #7
    SubscribeSubject ReachROIThresh
    -> PropertyMapping(Value(Selector=it)) => #9
    #7, #9 -> GreaterThan(Operand=DoubleProperty(Value=62))
    -> WindowCount(Count=5, Skip=1)
    -> Take(Count=1)
    -> SelectMany
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Accumulate
        -> WorkflowOutput
    -> GreaterThanOrEqual(Operand=IntProperty(Value=5))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Repeat
    -> MulticastSubject Start_Clip

GroupWorkflow Bevel
    SubscribeSubject Read_Center_RFID
    -> Harp.RfidReader.Parse(Register=Harp.RfidReader.InboundDetectionId)
    -> Timestamp => #2
    -> MemberSelector(Selector=Value)
    -> PublishSubject ID_Center
    -> BehaviorSubject LastTagRead
    #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> PublishSubject TS_Centre

    SubscribeSubject ID_Center
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it != 0
    -> SelectMany => #10
        WorkflowInput Source1
        -> Delay(DueTime=PT1.5S) => #1
        SubscribeSubject CountActivations => #2
        #1, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject CountActivations
        -> BooleanProperty(Value=true) => #7
        SubscribeSubject Read_Center_RFID
        -> Harp.RfidReader.Parse(Register=Harp.RfidReader.OutboundDetectionId)
        -> BooleanProperty(Value=false) => #10
        #7, #10 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it
    -> MulticastSubject ActivateServosSlider
    -> MulticastSubject ActivateServos => #13
    -> Condition IsOddActivationNumber
        SubscribeSubject CountActivations
        -> Mod(Operand=IntProperty(Value=2))
        -> NotEqual(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Delay(DueTime=PT3S) => #15
    #13 -> Condition IsEvenActivationNumber => #16
        SubscribeSubject CountActivations
        -> Mod(Operand=IntProperty(Value=2))
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    #10 -> Bonsai.Scripting.Expressions.ExpressionCondition => #17
      Expression: !it
    #15, #16, #17 -> Merge
    -> WorkflowOutput

GroupWorkflow Logging
    GroupWorkflow BehaviorLogging
        Annotation BehaviorLogging(Text="")
        -> SubscribeSubject BehaviorMessages
        -> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.Camera0Frame)
        -> MemberSelector(Selector=MessageBytes) => #3
        SubscribeSubject BehaviorDataFile
        -> PropertyMapping(Path) => #5
        #3, #5 -> Bonsai.Dsp.MatrixWriter(Path=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\Behavior\behavior_data.bin, Suffix=None, Overwrite=true, Layout=ColumnMajor) => #6
        SubscribeSubject BehaviorDataFile => #7
        #6, #7 -> SubscribeWhen

        Annotation BehaviorMetadata(Text="")
        -> Harp.Behavior.GetDeviceMetadata => #10
        SubscribeSubject BehaviorConfigFile
        -> PropertyMapping(Path) => #12
        #10, #12 -> Bonsai.IO.WriteAllText(Path=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\Behavior\device.yml, Overwrite=true, Append=false) => #13
        SubscribeSubject BehaviorConfigFile => #14
        #13, #14 -> SubscribeWhen

    GroupWorkflow PumpLogging
        Annotation PumpActivityLogging(Text="")
        -> SubscribeSubject PumpActivity => #1
        SubscribeSubject PumpFile
        -> PropertyMapping(FileName) => #3
        #1, #3 -> Bonsai.IO.CsvWriter(FileName=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\pump.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #4
        SubscribeSubject PumpFile => #5
        #4, #5 -> SubscribeWhen
        -> WorkflowOutput

    GroupWorkflow CameraLogging
        Annotation ROIWaterLogging(Text="")
        -> SubscribeSubject ROI_Water => #1
        SubscribeSubject FrameID => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject ROIWaterFile
        -> PropertyMapping(FileName) => #5
        #3, #5 -> Bonsai.IO.CsvWriter(FileName=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\ROI_Water.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #6
        SubscribeSubject ROIWaterFile => #7
        #6, #7 -> SubscribeWhen

        Annotation ROIReachLogging(Text="")
        -> SubscribeSubject ROI_Reach => #10
        SubscribeSubject FrameID => #11
        #10, #11 -> WithLatestFrom => #12
        SubscribeSubject ROIReachFile
        -> PropertyMapping(FileName) => #14
        #12, #14 -> Bonsai.IO.CsvWriter(FileName=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\ROI_Reach.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #15
        SubscribeSubject ROIWaterFile => #16
        #15, #16 -> SubscribeWhen

        Annotation FrameIDLogging(Text="")
        -> SubscribeSubject FrameID
        -> Timestamp
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
          Expression:
            new (
              Timestamp.DateTime as Timestamp,
              Value as FrameNr
            )
        SubscribeSubject AllFramesFile
        -> PropertyMapping(FileName) => #23
        #21, #23 -> Bonsai.IO.CsvWriter(FileName=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\AllFramesIDList.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true) => #24
        SubscribeSubject AllFramesFile => #25
        #24, #25 -> SubscribeWhen

    GroupWorkflow PerformanceLogging
        Annotation PerformanceLogging(Text="")
        -> SubscribeSubject Performance => #1
        SubscribeSubject PerformanceFile
        -> PropertyMapping(FileName) => #3
        #1, #3 -> Bonsai.IO.CsvWriter(FileName=C:\Users\hgmar\Desktop\Joaquim\ReachToGrasp247\data\Performance.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #4
        SubscribeSubject PerformanceFile => #5
        #4, #5 -> SubscribeWhen
        -> WorkflowOutput

GroupWorkflow GUI
    SubscribeSubject video
    -> VisualizerMapping => #1
    SubscribeSubject ROI_Reach
    -> VisualizerMapping => #3
    SubscribeSubject ROI_Water
    -> VisualizerMapping => #5
    #1, #3, #5 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

SubscribeSubject ROI_Water
-> GroupWorkflow CreateNewDrop
    WorkflowInput Source1 => #0
    SubscribeSubject WaterROIThresh
    -> PropertyMapping(Value(Selector=it)) => #2
    #0, #2 -> LessThan(Operand=DoubleProperty(Value=44))
    -> Delay(DueTime=PT0.01S) => #4
    SubscribeSubject Drop_interval
    -> PropertyMapping(Count) => #6
    #4, #6 -> WindowCount(Count=250, Skip=1)
    -> SelectMany ActivateCondition => #8
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Count
        -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject Drop_interval
            -> PropertyMapping(Value) => #2
            #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=250))
            -> WorkflowOutput
        -> WorkflowOutput
    -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled)) => #9
    #8 -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled)) => #10
    #9, #10 -> Merge
    -> MulticastSubject PumpCommands
    -> Take(Count=2)
    -> WorkflowOutput
-> Sink PumpActivation => #26
    WorkflowInput Source1
    -> IntProperty(Value=0)
    -> MulticastSubject PumpActivation
    -> WorkflowOutput
Annotation IsNecessary?(Text="") => #27
#26, #27 -> GroupWorkflow Wait
    WorkflowInput Source1 => #0
    SubscribeSubject DefaultStepCount => #1
    SubscribeSubject DefaultPeriod => #2
    #1, #2 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(Item1 * Item2 + 100)
    -> PropertyMapping(DueTime) => #5
    #0, #5 -> Delay(DueTime=PT0.55S)
    -> WorkflowOutput
-> GroupWorkflow UpdateRewardCounter => #29
    WorkflowInput Source1 => #0
    SubscribeSubject Counter
    -> Add(Operand=IntProperty(Value=1)) => #2
    #0, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject Counter
    -> WorkflowOutput
Annotation "Dont Change, only4refill"(Text="") => #30
#29, #30 -> Condition Refill?
    WorkflowInput Source1 => #0
    ExternalizedMapping(Value) => #1
    #0, #1 -> GreaterThanOrEqual(Operand=IntProperty(Value=300))
    -> WorkflowOutput
-> GroupWorkflow Refill
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject UseFillProtocol
    -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
    -> MulticastSubject PumpCommands
    -> Disable MulticastSubject PumpRefill => #5
    SubscribeSubject FillStepCount => #6
    SubscribeSubject FillPeriod => #7
    #6, #7 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(Item1 * Item2 + 100)
    -> PropertyMapping(DueTime) => #10
    #5, #10 -> Delay(DueTime=PT40.1S)
    -> IntProperty(Value=0)
    -> WorkflowOutput
-> Sink ResetRewardCounter => #33
    WorkflowInput Source1
    -> IntProperty(Value=0)
    -> MulticastSubject Counter
    -> WorkflowOutput
#29 -> Condition NoRefill?
    WorkflowInput Source1 => #0
    ExternalizedMapping(Value) => #1
    #0, #1 -> LessThan(Operand=IntProperty(Value=300))
    -> WorkflowOutput
-> IntProperty(Value=1) => #35
#33, #35 -> Merge
-> Take(Count=1)
-> GroupWorkflow StopRefill
    WorkflowInput Source1
    -> BooleanProperty(Value=false)
    -> MulticastSubject UseFillProtocol
    -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
    -> MulticastSubject PumpCommands
    -> WorkflowOutput
-> Repeat

Disable GroupWorkflow motor
    GroupWorkflow "Harp Init"
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmFrequencyDO2Payload(PwmFrequencyDO2=100)) => #0
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2)) => #1
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO2Payload(PwmDutyCycleDO2=48)) => #2
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputStatePayload(OutputState=DO0)) => #3
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2)) => #4
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2))
        -> Delay(DueTime=PT0.2S) => #6
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #7
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop="PwmDO0 PwmDO1")) => #8
        #0, #1, #2, #3, #4, #6, #7, #8 -> Merge
        -> MulticastSubject BehaviorCommands

    Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputStatePayload(OutputState=DOPort1)) => #2
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2)) => #3
    Bonsai.Windows.Input.KeyDown(Filter=E, SuppressRepetitions=false)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputStatePayload(OutputState=DO1)) => #5
    #3 -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2)) => #7
    #5 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2)) => #8
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2)) => #10
    #2, #3, #5, #7, #8, #10 -> Merge
    -> MulticastSubject BehaviorCommands
    -> WorkflowOutput

    SubscribeSubject BehaviorMessages
    -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
    -> MemberSelector(Selector=Encoder)

Disable GroupWorkflow Solenoide
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve) => #1
    Bonsai.Windows.Input.KeyDown(Filter=B, SuppressRepetitions=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke0Valve) => #3
    Bonsai.Windows.Input.KeyDown(Filter=C, SuppressRepetitions=false)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0)) => #5
    IntProperty(Value=0)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=None)) => #8
    #1, #3, #5, #8 -> Merge
    -> MulticastSubject BehaviorCommands => #10
    SubscribeSubject BehaviorMessages => #11
    #10, #11 -> SubscribeWhen
    -> WorkflowOutput
