WorkflowBuilder(Version=2.9.0)
GroupWorkflow Behavior
    GroupWorkflow ValveSwitching
        SubscribeSubject UseFillProtocol => #0
        -> Condition IfFalse
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort0)) => #3
        #0 -> Condition IfTrue
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort0))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0)) => #6
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=None)) => #7
        Disable SubscribeSubject FillStepCount => #8
        Disable SubscribeSubject FillPeriod => #9
        #8, #9 -> Disable CombineLatest
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 * Item2 + 1000
        -> Disable PropertyMapping(PulseSupplyPort0)
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort0Payload(PulseSupplyPort0=2000)) => #13
        #3, #6, #7, #13 -> Merge
        -> MulticastSubject BehaviorCommands
        -> Disable MulticastSubject ValveSwitch => #16
        SubscribeSubject BehaviorMessages => #17
        #16, #17 -> SubscribeWhen
        -> WorkflowOutput

    Disable GroupWorkflow DaylightCycle
        Timer(DueTime=PT5S, Period=PT15S)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO3))
        -> MulticastSubject BehaviorCommands
        -> MulticastSubject DaylightSwitch => #3
        SubscribeSubject BehaviorMessages => #4
        #3, #4 -> SubscribeWhen

    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #2
    ExternalizedMapping(PortName(DisplayName=PortName)) => #3
    #2, #3 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM10) => #4
    -> PublishSubject BehaviorMessages
    -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> Disable MemberSelector(Selector=Seconds)
    -> Disable PublishSubject Timestamp
    #4 -> MemberSelector(Selector=MessageBytes) => #9
    SubscribeSubject PATH => #10
    StringProperty(Value=Behavior_data.bin) => #11
    #10, #11 -> Zip
    -> Add
    -> PropertyMapping(Path) => #14
    #9, #14 -> Bonsai.Dsp.MatrixWriter(Path=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_23_2025-11-28-130642\Behavior_data.bin, Suffix=None, Overwrite=true, Layout=ColumnMajor)
    #4 -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> Disable Timestamp
    #4 -> Disable Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Digital3)

    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands2
    -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM18) => #20
    -> PublishSubject BehaviorMessages2
    -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> Disable MemberSelector(Selector=Seconds)
    -> Disable PublishSubject Timestamp
    #20 -> MemberSelector(Selector=MessageBytes) => #25
    SubscribeSubject PATH => #26
    StringProperty(Value=Behavior_data.bin) => #27
    #26, #27 -> Zip
    -> Add
    -> PropertyMapping(Path) => #30
    #25, #30 -> Disable Bonsai.Dsp.MatrixWriter(Path=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_23_2025-11-28-130642\Behavior_data.bin, Suffix=None, Overwrite=true, Layout=ColumnMajor)
    #20 -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> Disable Timestamp

    Disable BehaviorSubject<Bonsai.Harp.HarpMessage> ValveSwitch
    -> Disable StringProperty(Value=ValveSwitch) => #35
    Disable SubscribeSubject Timestamp => #36
    #35, #36 -> Disable WithLatestFrom => #37
    Disable BehaviorSubject<Bonsai.Harp.HarpMessage> DaylightSwitch
    -> Disable StringProperty(Value=DaylightSwitch) => #39
    Disable SubscribeSubject Timestamp => #40
    #39, #40 -> Disable WithLatestFrom => #41
    #37, #41 -> Disable Merge => #42
    Disable SubscribeSubject PATH => #43
    Disable StringProperty(Value=behavior.csv) => #44
    #43, #44 -> Disable Zip
    -> Disable Add
    -> Disable PropertyMapping(FileName) => #47
    #42, #47 -> Disable Bonsai.IO.CsvWriter
      FileName=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_13_2025-06-16-161404\behavior.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

GroupWorkflow Servo
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor3PeriodPayload(ServoMotor3Period=20000)) => #0
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableServosPayload(EnableServos=ServoOutput3)) => #1
    SubscribeSubject BoxNb => #2
    Annotation "Key are specify here in script"(Text="") => #3
    #2, #3 -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        import clr  # For pythonnet

        # Add a reference to the System.Windows.Forms assembly
        clr.AddReference('System.Windows.Forms')

        import System
        def process(value):
          if value == 1:
            return System.Windows.Forms.Keys.Up
          elif value == 2:
            return System.Windows.Forms.Keys.Left
    -> PropertyMapping(Filter) => #5
    Annotation Approach(Text="") => #6
    #5, #6 -> Bonsai.Windows.Input.KeyDown(Filter=Up, SuppressRepetitions=true)
    -> IntProperty(Value=50) => #8
    SubscribeSubject BoxNb => #9
    #9, #3 -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        import clr  # For pythonnet

        # Add a reference to the System.Windows.Forms assembly
        clr.AddReference('System.Windows.Forms')

        import System
        def process(value):
          if value == 1:
            return System.Windows.Forms.Keys.Down
          elif value ==2:
            return System.Windows.Forms.Keys.Right
    -> PropertyMapping(Filter(Selector=it)) => #11
    Annotation Away(Text="") => #12
    #11, #12 -> Bonsai.Windows.Input.KeyDown(Filter=Down, SuppressRepetitions=true)
    -> IntProperty(Value=-50) => #14
    BooleanProperty(Value=false)
    -> Delay(DueTime=PT0.05S)
    -> IntProperty(Value=0) => #17
    #8, #14, #17 -> Merge => #18
    SubscribeSubject Pos => #19
    #18, #19 -> WithLatestFrom
    -> MemberSelector(Selector="Item1,Item2")
    -> Add
    -> Bonsai.Scripting.IronPython.PythonTransform => #23
      Script:
        @returns(int)
        def process(value):
          if value > 1950:
            return 1950
          else:
            return value
    -> InputMapping(Selector=it, ServoMotor3Pulse(Selector=it))
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor3PulsePayload(ServoMotor3Pulse=1900)) => #25
    BooleanProperty(Value=false)
    -> Delay(DueTime=PT5S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0) => #28
    BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0) => #30
    #0, #1, #25, #28, #30 -> Merge
    -> MulticastSubject BehaviorCommands => #32
    Disable SubscribeSubject BehaviorMessages => #33
    #32, #33 -> Disable SubscribeWhen
    -> WorkflowOutput
    #23 -> InputMapping(Value(Selector=it))
    -> IntProperty(Value=1900) => #37
    -> MulticastSubject Pos
    #37 -> Bonsai.Scripting.Expressions.ExpressionTransform => #39
      Expression: Convert.ToString(it)
    SubscribeSubject BoxNb => #40
    #39, #40 -> WithLatestFrom
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        dico1 = {'1950':284,
                '1900':300,
                '1850':311,
                '1800':324,
                '1750':337,
                '1700':350,
                '1650':364,
                '1600':378,
                '1550':390,
                '1500':407,
                '1450':417}

        dico2 = {'1950':272,
                '1900':286,
                '1850':300,
                '1800':314,
                '1750':328,
                '1700':342,
                '1650':356,
                '1600':368,
                '1550':383,
                '1500':396,
                '1450':410}


        def process(value):
          if value.Item2 == 1:
            return dico1[value.Item1]
          elif value.Item2 == 2:
            return dico2[value.Item1]
    -> MulticastSubject WaterROIPosX
    #37 -> Bonsai.Scripting.Expressions.ExpressionTransform => #44
      Expression: Convert.ToString(it)
    #40, #44 -> CombineLatest => #45
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        @returns(int)


        def process(value):

          dico1 = {'1950':286,
                  '1900':299,
                  '1850':311,
                  '1800':322,
                  '1750':334,
                  '1700':348,
                  '1650':362,
                  '1600':376,
                  '1550':386,
                  '1500':400,
                  '1450':414}

          dico2 = {'1950':272,
                  '1900':286,
                  '1850':300,
                  '1800':314,
                  '1750':328,
                  '1700':342,
                  '1650':356,
                  '1600':368,
                  '1550':383,
                  '1500':396,
                  '1450':410}

          if value.Item1 == 1:
            return dico1[value.Item2]-20
          elif value.Item1 == 2:
            return dico2[value.Item2]-20
    -> MulticastSubject ReahROIPosX
    #45 -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        def process(value):
          dico1 = {'1950':62,
                  '1900':62,
                  '1850':62,
                  '1800':62,
                  '1750':62,
                  '1700':62,
                  '1650':62,
                  '1600':62,
                  '1550':62,
                  '1500':62,
                  '1450':61}



          dico2 = {'1950':62,
                  '1900':62,
                  '1850':62,
                  '1800':62,
                  '1750':62,
                  '1700':62,
                  '1650':62,
                  '1600':62,
                  '1550':62,
                  '1500':62,
                  '1450':62}

          if value.Item1 == 1:
            return dico1[value.Item2]-18
          elif value.Item1 == 2:

            return dico2[value.Item2]-18
    -> MulticastSubject WaterROIThresh

GroupWorkflow SyringePump
    GroupWorkflow FillPumpProtocol
        SubscribeSubject UseFillProtocol
        -> Condition IfTrue => #1
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Reverse)) => #2
        #1 -> IntProperty(Value=40000)
        -> BehaviorSubject FillStepCount
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=40000)) => #6
        #1 -> IntProperty(Value=1)
        -> BehaviorSubject FillPeriod
        -> InputMapping(Selector=it, ProtocolPeriod(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=1)) => #10
        #1 -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #11
        #2, #6, #10, #11 -> Merge
        -> MulticastSubject PumpCommands => #13
        SubscribeSubject PumpMessages => #14
        #13, #14 -> SubscribeWhen

    GroupWorkflow DefaultProtocol
        SubscribeSubject UseFillProtocol
        -> Condition IfFalse => #1
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false)) => #1
            SubscribeSubject Counter
            -> GreaterThan(Operand=IntProperty(Value=0)) => #3
            #1, #3 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #2
        #1 -> IntProperty(Value=45)
        -> BehaviorSubject DefaultStepCount
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=45)) => #6
        #1 -> IntProperty(Value=10)
        -> BehaviorSubject DefaultPeriod
        -> InputMapping(Selector=it, ProtocolPeriod(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=10)) => #10
        #1 -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Quarter)) => #11
        #2, #6, #10, #11 -> Merge
        -> MulticastSubject PumpCommands => #13
        SubscribeSubject PumpMessages => #14
        #13, #14 -> SubscribeWhen

    GroupWorkflow AfterFillPumpProtocol
        SubscribeSubject UseFillProtocol
        -> Condition IfFalse => #1
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false)) => #1
            SubscribeSubject Counter
            -> Equal(Operand=IntProperty(Value=0)) => #3
            #1, #3 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #2
        #1 -> IntProperty(Value=1800)
        -> BehaviorSubject AfterFillStepCount
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=1800)) => #6
        #1 -> IntProperty(Value=1)
        -> BehaviorSubject AfterFillPeriod
        -> InputMapping(Selector=it, ProtocolPeriod(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=1)) => #10
        #1 -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #11
        #2, #6, #10, #11 -> Merge
        -> MulticastSubject PumpCommands => #13
        SubscribeSubject PumpMessages => #14
        #13, #14 -> SubscribeWhen

    BehaviorSubject<Bonsai.Harp.HarpMessage> PumpCommands => #3
    ExternalizedMapping(PortName) => #4
    #3, #4 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM12)
    -> PublishSubject PumpMessages

    SubscribeSubject BoxNb => #7
    Annotation "Key are specify here in script"(Text="") => #8
    #7, #8 -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        import clr  # For pythonnet

        # Add a reference to the System.Windows.Forms assembly
        clr.AddReference('System.Windows.Forms')

        import System
        def process(value):
          if value == 1:
            return System.Windows.Forms.Keys.Q
          elif value == 2:
            return System.Windows.Forms.Keys.W
    -> PropertyMapping(Filter)
    -> Bonsai.Windows.Input.KeyDown(Filter=Q, SuppressRepetitions=false)
    -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
    -> MulticastSubject PumpCommands
    -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
    -> MulticastSubject PumpCommands
    -> MulticastSubject PumpManual

    SubscribeSubject DefaultStepCount => #17
    SubscribeSubject DefaultPeriod => #18
    #17, #18 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(Item1 * Item2 + 100)
    -> PropertyMapping(DueTime)

    Disable BehaviorSubject<Bonsai.Harp.HarpMessage> PumpRefill => #22
    -> Disable StringProperty(Value=Refill_) => #23
    #22 -> Disable IntProperty(Value=1)
    -> Disable Accumulate => #25
    #23, #25 -> Disable Zip
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #27
      Expression: Item1 + Convert.ToString(Item2)
    Disable SubscribeSubject Timestamp => #28
    #27, #28 -> Disable WithLatestFrom

    GroupWorkflow Saving_PumpCsv(Description=Saving)
        SubscribeSubject PATH => #0
        StringProperty(Value=pump.csv) => #1
        #0, #1 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #4
        BehaviorSubject<Bonsai.Harp.HarpMessage> PumpActivation => #5
        -> StringProperty(Value=Activation_) => #6
        #5 -> IntProperty(Value=1) => #7
        -> Accumulate => #8
        #6, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression: Item1 + Convert.ToString(Item2)
        SubscribeSubject FrameID => #11
        SubscribeSubject Pos => #12
        #11, #12 -> WithLatestFrom => #13
        #10, #13 -> WithLatestFrom => #14
        BehaviorSubject<Bonsai.Harp.HarpMessage> PumpManual => #15
        -> StringProperty(Value=Manual_) => #16
        #15 -> IntProperty(Value=1)
        -> Accumulate => #18
        #16, #18 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #20
          Expression: Item1 + Convert.ToString(Item2)
        SubscribeSubject FrameID => #21
        SubscribeSubject Pos => #22
        #21, #22 -> WithLatestFrom => #23
        #20, #23 -> WithLatestFrom => #24
        SubscribeSubject CountTrials => #25
        -> StringProperty(Value=NewClip_) => #26
        #25 -> IntProperty(Value=1)
        -> Accumulate => #28
        #26, #28 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
          Expression: Item1 + Convert.ToString(Item2)
        SubscribeSubject FrameID => #31
        SubscribeSubject Pos => #32
        #31, #32 -> WithLatestFrom => #33
        #30, #33 -> WithLatestFrom => #34
        #14, #24, #34 -> Merge => #35
        #4, #35 -> Bonsai.IO.CsvWriter
          FileName=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_23_2025-11-28-130642\pump.csv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false
        SubscribeSubject PATH => #37
        StringProperty(Value=Performance.csv) => #38
        #37, #38 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #41
        #7 -> WindowTime(TimeSpan=PT5M, TimeShift=PT5S)
        -> SelectMany
            WorkflowInput Source1
            -> Sum
            -> WorkflowOutput
        -> MulticastSubject ongoing_pump => #44
        SubscribeSubject Attempt => #45
        -> IntProperty(Value=1)
        -> WindowTime(TimeSpan=PT5M, TimeShift=PT5S)
        -> SelectMany
            WorkflowInput Source1
            -> Sum
            -> WorkflowOutput
        -> MulticastSubject ongoing_attempt => #49
        #44, #49 -> CombineLatest
        -> Bonsai.Scripting.IronPython.PythonTransform => #51
          Script:
            @returns(float)
            def process(value):
              if value.Item1 == 0 and value.Item2 ==0:
                return 1.0
              elif value.Item2 ==0:
                return 1.0
              else:
                return float(value.Item1)/float(value.Item2)
        SubscribeSubject FrameID => #52
        SubscribeSubject Pos => #53
        #52, #53 -> WithLatestFrom => #54
        #51, #54 -> WithLatestFrom => #55
        #41, #55 -> Bonsai.IO.CsvWriter
          FileName=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_23_2025-11-28-130642\Performance.csv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false
        #45 -> IntProperty(Value=1)
        -> Accumulate

        Disable SubscribeSubject FrameID => #59
        Disable SubscribeSubject Timestamp => #60
        Source2=#59, Source3=#60 -> Disable Zip => #61
        Disable SubscribeSubject Video_delayed => #62
        #61, #62 -> Disable SubscribeWhen
        -> Disable Take(Count=750) => #64
        Disable SubscribeSubject PATH => #65
        Disable StringProperty(Value=Frame_clip.csv) => #66
        #65, #66 -> Disable Zip
        -> Disable Add
        -> Disable PropertyMapping(FileName) => #69
        #64, #69 -> Disable Bonsai.IO.CsvWriter
          FileName=C:\Users\Admin\Desktop\TestFreelyMovingBox1/M04939_e3/Session_1/0/Frame_clip.csv
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=false
        -> Disable Delay(DueTime=PT1.5S)
        -> Disable Repeat

GroupWorkflow Camera
    GroupWorkflow Clips
        SubscribeSubject Video_delayed => #0
        SubscribeSubject Start_Clip
        -> Take(Count=1) => #2
        #0, #2 -> SubscribeWhen
        -> Take(Count=750) => #4
        -> SelectMany WriteRow => #5
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1) => #1
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
            SubscribeSubject LastTagRead => #4
            #1, #3, #4 -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject PATH => #6
        StringProperty(Value=FrameClip_) => #7
        SubscribeSubject CountTrials
        -> Add(Operand=IntProperty(Value=1)) => #9
        #6, #7, #9 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2 + Convert.ToString(Item3) + ".csv"
        -> PropertyMapping(FileName) => #12
        #5, #12 -> Bonsai.IO.CsvWriter => #13
          FileName=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_23_2025-11-28-130642\FrameClip_1.csv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false
        #4 -> MemberSelector(Selector=Item2) => #14
        SubscribeSubject PATH => #15
        StringProperty(Value=Clip_) => #16
        SubscribeSubject CountTrials
        -> Add(Operand=IntProperty(Value=1)) => #18
        #15, #16, #18 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2 + Convert.ToString(Item3)+".avi"
        -> PropertyMapping(FileName) => #21
        SubscribeSubject Frame_Rate
        -> PropertyMapping(FrameRate) => #23
        #14, #21, #23 -> Bonsai.Vision.VideoWriter => #24
          FileName=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_23_2025-11-28-130642\Clip_1.avi
          Suffix=None
          Buffered=true
          Overwrite=true
          FourCC=FMP4
          FrameRate=250
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        SubscribeSubject CountTrials => #25
        #2, #25 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> InputMapping(Selector=it, Value(Selector=it)) => #29
        Annotation "Update Counter" => #30
          Text:
            This serve as a counter to feed the file names

            Could not just use CountTrials as you want the value that is updated
        #29, #30 -> IntProperty(Value=1)
        -> MulticastSubject CountTrials => #32
        #13, #24, #32 -> Zip
        -> Repeat
        -> WorkflowOutput

    ExternalizedMapping(Index)
    -> Bonsai.Spinnaker.SpinnakerCapture(Index=0, ColorProcessing=Default) => #2
    -> MemberSelector(Selector=ChunkData.FrameID)
    -> BehaviorSubject FrameID => #4
    -> Bonsai.Dsp.Difference(Order=1)
    #2 -> MemberSelector(Selector=Image)
    -> Bonsai.Vision.Grayscale
    -> BehaviorSubject video => #8
    #4, #8 -> Zip
    -> Delay(DueTime=PT1.5S)
    -> BehaviorSubject Video_delayed
    SubscribeSubject PATH => #12
    StringProperty(Value=AllFramesIDList.csv) => #13
    #12, #13 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #16
    #4 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #18
    #4, #18 -> Zip => #19
    #16, #19 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_23_2025-11-28-130642\AllFramesIDList.csv
      Append=false
      Overwrite=true
      Suffix=None
      IncludeHeader=false

    SubscribeSubject video => #21
    Annotation "X - To change"(Text="")
    -> SubscribeSubject ReahROIPosX => #23
    Annotation "Y "(Text="")
    -> IntProperty(Value=170) => #25
    Annotation Width(Text="")
    -> IntProperty(Value=15) => #27
    Annotation Height(Text="")
    -> IntProperty(Value=140) => #29
    #23, #25, #27, #29 -> CombineLatest => #30
    #21, #30 -> CombineLatest
    -> InputMapping(Selector=Item1, RegionOfInterest(Selector="Item2.Item1,Item2.Item2,Item2.Item3,Item2.Item4"))
    -> Bonsai.Vision.Crop(RegionOfInterest(X=279, Y=170, Width=15, Height=140)) => #33
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0) => #35
    #33 -> MemberSelector(Selector=Height) => #36
    #33 -> MemberSelector(Selector=Width) => #37
    #36, #37 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1 * it.Item2
    -> PropertyMapping(Value) => #40
    #35, #40 -> Divide(Operand=DoubleProperty(Value=2100))
    -> BehaviorSubject ROI_Reach

    SubscribeSubject video => #43
    Annotation "X - To change"(Text="")
    -> SubscribeSubject WaterROIPosX => #45
    Annotation "Y "(Text="")
    -> IntProperty(Value=162) => #47
    Annotation Width(Text="")
    -> IntProperty(Value=13) => #49
    Annotation Height(Text="")
    -> IntProperty(Value=10) => #51
    #45, #47, #49, #51 -> CombineLatest => #52
    #43, #52 -> CombineLatest
    -> InputMapping(Selector=Item1, RegionOfInterest(Selector="Item2.Item1,Item2.Item2,Item2.Item3,Item2.Item4"))
    -> Bonsai.Vision.Crop(RegionOfInterest(X=300, Y=162, Width=13, Height=10)) => #55
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0) => #57
    #55 -> MemberSelector(Selector=Height) => #58
    #55 -> MemberSelector(Selector=Width) => #59
    #58, #59 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1 * it.Item2
    -> PropertyMapping(Value) => #62
    #57, #62 -> Divide(Operand=DoubleProperty(Value=130))
    -> BehaviorSubject ROI_Water

    SubscribeSubject ROI_Water => #65
    SubscribeSubject FrameID => #66
    #65, #66 -> WithLatestFrom => #67
    SubscribeSubject PATH => #68
    StringProperty(Value=ROI_Water.csv) => #69
    #68, #69 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #72
    #67, #72 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_23_2025-11-28-130642\ROI_Water.csv
      Append=false
      Overwrite=true
      Suffix=None
      IncludeHeader=false

    SubscribeSubject ROI_Reach => #74
    SubscribeSubject FrameID => #75
    #74, #75 -> WithLatestFrom => #76
    SubscribeSubject PATH => #77
    StringProperty(Value=ROI_Reach.csv) => #78
    #77, #78 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #81
    #76, #81 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_23_2025-11-28-130642\ROI_Reach.csv
      Append=false
      Overwrite=true
      Suffix=None
      IncludeHeader=false

    Disable SubscribeSubject video
    -> Disable Bonsai.Vision.Crop(RegionOfInterest(X=339, Y=242, Width=7, Height=33))
    -> Disable Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=23, ThresholdType=Binary, SubtractionMethod=Absolute)
    -> Disable BehaviorSubject water_video

    Disable SubscribeSubject Start_Clip
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Disable Take(Count=1)
    -> Disable IntProperty(Value=1)
    -> Disable Accumulate

    Disable SubscribeSubject FrameID => #92
    Disable SubscribeSubject Video_delayed => #93
    #92, #93 -> Disable SubscribeWhen
    -> Disable Take(Count=750) => #95
    Disable SubscribeSubject PATH => #96
    Disable StringProperty(Value=Frame_clip.csv) => #97
    #96, #97 -> Disable Zip
    -> Disable Add
    -> Disable PropertyMapping(FileName) => #100
    #95, #100 -> Disable Bonsai.IO.CsvWriter
      FileName=C:\Users\Admin\Desktop\TestFreelyMovingBox1/M04939_e3/Session_1/0/Frame_clip.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
    -> Disable Delay(DueTime=PT1.5S)
    -> Disable Repeat

    Disable SubscribeSubject PATH => #104
    Disable StringProperty(Value=ListOfClips.csv) => #105
    #104, #105 -> Disable Zip
    -> Disable Add
    -> Disable PropertyMapping(FileName) => #108
    Disable SubscribeSubject Start_Clip
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Disable Take(Count=1) => #111
    -> Disable StringProperty(Value=NewClip_) => #112
    #111 -> Disable IntProperty(Value=1)
    -> Disable Accumulate => #114
    #112, #114 -> Disable Zip
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #116
      Expression: Item1 + Convert.ToString(Item2)
    Disable SubscribeSubject FrameID => #117
    Disable SubscribeSubject Pos => #118
    #117, #118 -> Disable WithLatestFrom => #119
    #116, #119 -> Disable WithLatestFrom => #120
    #108, #120 -> Disable Bonsai.IO.CsvWriter
      FileName=C:\Users\Admin\Desktop\TestFreelyMovingBox1/M04939_e3/Session_1/0/ListOfClips.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
    -> Disable Delay(DueTime=PT1.5S)
    -> Disable Repeat

GroupWorkflow SubjectInitialization
    IntProperty(Value=0)
    -> BehaviorSubject Counter

    BooleanProperty(Value=false)
    -> PublishSubject Start_Clip
    -> BehaviorSubject UseFillProtocol

    Disable ExternalizedMapping(Value(DisplayName=Path))
    -> Disable StringProperty(Value=C:\Users\Admin\Desktop\ReachToGrasp\Output\all\Session_37_2025-07-24-114611\) => #6
    Disable SubscribeSubject ID_Center
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #8
      Expression: Convert.ToString(it)
    Disable ExternalizedMapping(Value(DisplayName=Session))
    -> Disable StringProperty(Value=36)
    -> Disable BehaviorSubject Session => #11
    #6, #8, #11 -> Disable CombineLatest
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Item1 + "\\" + Item2 + "\\" + Item3
    -> Disable BehaviorSubject PATH

    ExternalizedMapping(Value(DisplayName=Path))
    -> StringProperty(Value=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_23_2025-11-28-130642\)
    -> BehaviorSubject PATH

    BooleanProperty(Value=false)
    -> PublishSubject Attempt

    ExternalizedMapping(Value(DisplayName=pos_init))
    -> IntProperty(Value=1900) => #21
    -> BehaviorSubject Pos
    #21 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: Convert.ToString(it)
    ExternalizedMapping(Value(DisplayName=BoxNb))
    -> IntProperty(Value=1) => #25
    #23, #25 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        dico1 = {'1950':286,
                '1900':310,
                '1850':311,
                '1800':322,
                '1750':334,
                '1700':348,
                '1650':362,
                '1600':376,
                '1550':386,
                '1500':400,
                '1450':414}


        dico2 = {'1950':272,
                '1900':286,
                '1850':300,
                '1800':314,
                '1750':328,
                '1700':342,
                '1650':356,
                '1600':368,
                '1550':383,
                '1500':396,
                '1450':410}

        def process(value):
          if value.Item2 == 1:
            return dico1[value.Item1]
          elif value.Item2 == 2:
            return dico2[value.Item1]
    -> BehaviorSubject WaterROIPosX
    #25 -> BehaviorSubject BoxNb
    #21 -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
      Expression: Convert.ToString(it)
    #30, #25 -> Zip => #31
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        dico1 = {'1950':286,
                '1900':299,
                '1850':311,
                '1800':322,
                '1750':334,
                '1700':348,
                '1650':362,
                '1600':376,
                '1550':386,
                '1500':400,
                '1450':414}

        dico2 = {'1950':272,
                '1900':286,
                '1850':300,
                '1800':314,
                '1750':328,
                '1700':342,
                '1650':356,
                '1600':368,
                '1550':383,
                '1500':396,
                '1450':410}


        def process(value):
          if value.Item1 == 1:
            return dico1[value.Item2]-20
          elif value.Item1 == 2:
            return dico2[value.Item2]-20
    -> BehaviorSubject ReahROIPosX
    #25 -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        def process(value):
          if value== 1:
            return 62
          elif value == 2:
            return 80
    -> PropertyMapping(Value(Selector=it))
    -> IntProperty(Value=62)
    -> BehaviorSubject ReachROIThresh
    #31 -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        def process(value):
          dico1 = {'1950':71,
                  '1900':70,
                  '1850':69,
                  '1800':68,
                  '1750':67,
                  '1700':57,
                  '1650':57,
                  '1600':55,
                  '1550':55,
                  '1500':62,
                  '1450':61}

          dico2 = {'1950':75,
                  '1900':74,
                  '1850':74,
                  '1800':73,
                  '1750':61,
                  '1700':61,
                  '1650':62,
                  '1600':60,
                  '1550':65,
                  '1500':68,
                  '1450':67}

          if value.Item2 == 1:
            return dico1[value.Item1]+2
          elif value.Item2 == 2:

            return dico2[value.Item1]+2
    -> PropertyMapping(Value(Selector=it))
    -> IntProperty(Value=72)
    -> BehaviorSubject WaterROIThresh

    IntProperty(Value=0)
    -> BehaviorSubject ongoing_pump

    IntProperty(Value=0)
    -> BehaviorSubject ongoing_attempt

    BooleanProperty(Value=false)
    -> IntProperty(Value=0)
    -> BehaviorSubject CountTrials

    BooleanProperty(Value=false)
    -> IntProperty(Value=0)
    -> BehaviorSubject attempt_nb

    ExternalizedMapping(Value(DisplayName=Session))
    -> StringProperty(Value=20)
    -> BehaviorSubject Session

    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=T)
    -> BehaviorSubject MouseID

    ExternalizedMapping(Value(DisplayName=DCI))
    -> IntProperty(Value=250)
    -> BehaviorSubject Drop_interval

    ExternalizedMapping(Value(DisplayName=FR))
    -> IntProperty(Value=250)
    -> BehaviorSubject Frame_Rate

    ExternalizedMapping(Value(DisplayName=SessionDur))
    -> IntProperty(Value=160)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMinutes(it)
    -> BehaviorSubject DurationSession

Disable GroupWorkflow Solenoide
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve) => #1
    Bonsai.Windows.Input.KeyDown(Filter=B, SuppressRepetitions=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke0Valve) => #3
    Bonsai.Windows.Input.KeyDown(Filter=C, SuppressRepetitions=false)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0)) => #5
    IntProperty(Value=0)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=None)) => #8
    #1, #3, #5, #8 -> Merge
    -> MulticastSubject BehaviorCommands => #10
    SubscribeSubject BehaviorMessages => #11
    #10, #11 -> SubscribeWhen
    -> WorkflowOutput

Disable GroupWorkflow motor
    GroupWorkflow "Harp Init"
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmFrequencyDO2Payload(PwmFrequencyDO2=100)) => #0
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2)) => #1
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO2Payload(PwmDutyCycleDO2=48)) => #2
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputStatePayload(OutputState=DO0)) => #3
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2)) => #4
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2))
        -> Delay(DueTime=PT0.2S) => #6
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #7
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop="PwmDO0 PwmDO1")) => #8
        #0, #1, #2, #3, #4, #6, #7, #8 -> Merge
        -> MulticastSubject BehaviorCommands

    Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputStatePayload(OutputState=DOPort1)) => #2
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2)) => #3
    Bonsai.Windows.Input.KeyDown(Filter=E, SuppressRepetitions=false)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputStatePayload(OutputState=DO1)) => #5
    #3 -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2)) => #7
    #5 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2)) => #8
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2)) => #10
    #2, #3, #5, #7, #8, #10 -> Merge
    -> MulticastSubject BehaviorCommands
    -> WorkflowOutput

    SubscribeSubject BehaviorMessages
    -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
    -> MemberSelector(Selector=Encoder)

GroupWorkflow Bevel
    GroupWorkflow BevelServo
        Disable Annotation 1(Text="")
        -> Disable BehaviorSubject<Bonsai.Harp.HarpMessage> "Harp Behavior Commands"
        -> Disable Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM10)

        Annotation 2(Text="") => #3
        Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true)
        -> BooleanProperty(Value=true) => #5
        SubscribeSubject ActivateServos
        -> Condition IsOddActivationNumber
            SubscribeSubject CountActivations
            -> Mod(Operand=IntProperty(Value=2))
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition => #8
            WorkflowInput Source1
            -> WorkflowOutput
        #5, #8 -> Merge => #9
        #3, #9 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PeriodPayload(ServoMotor2Period=20000)) => #10
        #9 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PulsePayload(ServoMotor2Pulse=2450)) => #11
        #9 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableServosPayload(EnableServos=ServoOutput2)) => #12
        #10, #11, #12 -> Merge
        -> MulticastSubject BehaviorCommands

        Annotation 2(Text="") => #15
        Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=true)
        -> BooleanProperty(Value=true) => #17
        SubscribeSubject ActivateServos
        -> Condition IsEvenActivationNumber
            SubscribeSubject CountActivations
            -> Mod(Operand=IntProperty(Value=2))
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition => #20
            WorkflowInput Source1
            -> WorkflowOutput
        #17, #20 -> Merge => #21
        #15, #21 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PeriodPayload(ServoMotor2Period=20000)) => #22
        #21 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PulsePayload(ServoMotor2Pulse=500)) => #23
        #21 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableServosPayload(EnableServos=ServoOutput2)) => #24
        #22, #23, #24 -> Merge
        -> MulticastSubject BehaviorCommands

        Annotation 2(Text="") => #27
        Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=true)
        -> BooleanProperty(Value=true) => #29
        SubscribeSubject ActivateServosSlider
        -> Condition IsOddActivationNumber
            SubscribeSubject CountActivations
            -> Mod(Operand=IntProperty(Value=2))
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Delay(DueTime=PT1S) => #33
        #29, #33 -> Merge => #34
        #27, #34 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PeriodPayload(ServoMotor2Period=20000)) => #35
        #34 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PulsePayload(ServoMotor2Pulse=1450)) => #36
        #34 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableServosPayload(EnableServos=ServoOutput2)) => #37
        #35, #36, #37 -> Merge
        -> MulticastSubject BehaviorCommands2

        Annotation 2(Text="") => #40
        Bonsai.Windows.Input.KeyDown(Filter=K, SuppressRepetitions=true)
        -> BooleanProperty(Value=true) => #42
        SubscribeSubject ActivateServosSlider
        -> Condition IsEvenActivationNumber
            SubscribeSubject CountActivations
            -> Mod(Operand=IntProperty(Value=2))
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition => #45
            WorkflowInput Source1
            -> WorkflowOutput
        #42, #45 -> Merge => #46
        #40, #46 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PeriodPayload(ServoMotor2Period=20000)) => #47
        #46 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateServoMotor2PulsePayload(ServoMotor2Pulse=2500)) => #48
        #46 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableServosPayload(EnableServos=ServoOutput2)) => #49
        #47, #48, #49 -> Merge
        -> MulticastSubject BehaviorCommands2

    IntProperty(Value=0)
    -> BehaviorSubject CountActivations

    Timer(DueTime=PT0.2S, Period=PT0.2S)
    -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=43, PayloadType=U8, Value=1)) => #4
    Harp.RfidReader.CreateMessage(MessageType=Write, Payload=Harp.RfidReader.CreateHardwareNotificationsStatePayload(HardwareNotificationsState=BottomLed)) => #5
    Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=43, PayloadType=U8, Value=1)) => #6
    #4, #5, #6 -> Merge
    -> Harp.RfidReader.Device(OperationMode=Active, OperationLed=Off, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM11)
    -> PublishSubject Read_Center_RFID

    BooleanProperty(Value=false)
    -> Skip(Count=1)
    -> BehaviorSubject ActivateServos
    -> BehaviorSubject ActivateServosSlider

    SubscribeSubject Read_Center_RFID
    -> Harp.RfidReader.Parse(Register=Harp.RfidReader.InboundDetectionId)
    -> Timestamp => #16
    -> MemberSelector(Selector=Value)
    -> PublishSubject ID_Center
    -> BehaviorSubject LastTagRead
    #16 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> PublishSubject TS_Centre

    SubscribeSubject ID_Center
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it != 0
    -> Take(Count=1)
    -> SelectMany => #25
        WorkflowInput Source1
        -> Delay(DueTime=PT1.5S) => #1
        SubscribeSubject CountActivations => #2
        #1, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject CountActivations
        -> BooleanProperty(Value=true) => #7
        SubscribeSubject Read_Center_RFID
        -> Harp.RfidReader.Parse(Register=Harp.RfidReader.OutboundDetectionId)
        -> BooleanProperty(Value=false) => #10
        #7, #10 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it
    -> MulticastSubject ActivateServosSlider
    -> MulticastSubject ActivateServos => #28
    -> Condition IsOddActivationNumber
        SubscribeSubject CountActivations
        -> Mod(Operand=IntProperty(Value=2))
        -> NotEqual(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Delay(DueTime=PT3S) => #30
    #28 -> Condition IsEvenActivationNumber => #31
        SubscribeSubject CountActivations
        -> Mod(Operand=IntProperty(Value=2))
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    #30, #31 -> Merge => #32
    #25 -> Bonsai.Scripting.Expressions.ExpressionCondition => #33
      Expression: !it
    #32, #33 -> Merge
    -> Take(Count=1)
    -> Repeat
    -> WorkflowOutput

Disable Bonsai.Ephys.Rhd2000EvalBoard => #8
  BitFileName=C:\Users\Admin\Downloads\open-ephys-v0.6.7-windows\open-ephys\shared\rhd2000_usb3.bit
  SampleRate=SampleRate30000Hz
  ExternalFastSettleEnabled=false
  LowerBandwidth=0.1
  UpperBandwidth=7500
  DspCutoffFrequency=1
  DspEnabled=true
  CableDelayA=nil
  CableDelayB=nil
  CableDelayC=nil
  CableDelayD=nil
-> Disable MemberSelector(Selector=TtlIn) => #9
Disable SubscribeSubject PATH => #10
Disable StringProperty(Value=Ephys_TTL.bin) => #11
#10, #11 -> Disable Zip
-> Disable Add
-> Disable PropertyMapping(Path) => #14
#9, #14 -> Disable Bonsai.Dsp.MatrixWriter(Path=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_16_2025-03-17-100738\Ephys_TTL.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
#9 -> Disable Bonsai.Ephys.TtlState
Disable SubscribeSubject PATH => #17
Disable StringProperty(Value=Ephys_Data.bin) => #18
#17, #18 -> Disable Zip
-> Disable Add
-> Disable PropertyMapping(Path) => #21
#8 -> Disable MemberSelector(Selector=AmplifierData) => #22
#21, #22 -> Disable Bonsai.Dsp.MatrixWriter(Path=C:\Users\Admin\Desktop\ReachToGrasp\Output\T\Session_16_2025-03-17-100738\Ephys_Data.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
-> Disable Bonsai.Dsp.SelectChannels(Channels(int=0, int=5, int=6, int=7))
-> Disable Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
-> Disable Bonsai.Dsp.FrequencyFilter(SampleRate=2000, Cutoff1=750, Cutoff2=3000, KernelLength=60, FilterType=BandPass)
-> Disable BehaviorSubject channels

SubscribeSubject DurationSession
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT2H40M)
-> Delay(DueTime=PT2S)
-> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0)
-> MulticastSubject BehaviorCommands
-> Delay(DueTime=PT10S)
-> Take(Count=1)
-> WorkflowOutput

SubscribeSubject ROI_Water
-> Disable Bonsai.Dsp.Sum
-> Disable MemberSelector(Selector=Val0) => #39
SubscribeSubject WaterROIThresh
-> PropertyMapping(Value(Selector=it)) => #41
#39, #41 -> LessThan(Operand=DoubleProperty(Value=44))
-> Delay(DueTime=PT0.01S) => #43
SubscribeSubject Drop_interval
-> PropertyMapping(Count) => #45
#43, #45 -> WindowCount(Count=250, Skip=1)
-> SelectMany ActivateCondition
    WorkflowInput Source1
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Count
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject Drop_interval
        -> PropertyMapping(Value) => #2
        #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=250))
        -> WorkflowOutput
    -> WorkflowOutput
-> Take(Count=1)
-> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
-> MulticastSubject PumpCommands
-> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
-> MulticastSubject PumpCommands
-> MulticastSubject PumpActivation => #53
SubscribeSubject DefaultStepCount => #54
SubscribeSubject DefaultPeriod => #55
#54, #55 -> CombineLatest
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: TimeSpan.FromMilliseconds(Item1 * Item2 + 100)
-> PropertyMapping(DueTime) => #58
#53, #58 -> Delay(DueTime=PT0.55S)
-> GroupWorkflow UpdateCounter => #60
    WorkflowInput Source1 => #0
    SubscribeSubject Counter
    -> Add(Operand=IntProperty(Value=1)) => #2
    #0, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject Counter
    -> WorkflowOutput
Annotation "Dont Change, only4refill"(Text="") => #61
#60, #61 -> Condition IfGreaterThanOrEqual
    WorkflowInput Source1 => #0
    ExternalizedMapping(Value) => #1
    #0, #1 -> GreaterThanOrEqual(Operand=IntProperty(Value=300))
    -> WorkflowOutput
-> BooleanProperty(Value=true)
-> MulticastSubject UseFillProtocol
-> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
-> MulticastSubject PumpCommands
-> Disable MulticastSubject PumpRefill => #67
SubscribeSubject FillStepCount => #68
SubscribeSubject FillPeriod => #69
#68, #69 -> CombineLatest
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: TimeSpan.FromMilliseconds(Item1 * Item2 + 100)
-> PropertyMapping(DueTime) => #72
#67, #72 -> Delay(DueTime=PT40.1S)
-> IntProperty(Value=0)
-> MulticastSubject Counter => #75
#60 -> Condition IfLessThan
    WorkflowInput Source1 => #0
    ExternalizedMapping(Value) => #1
    #0, #1 -> LessThan(Operand=IntProperty(Value=300))
    -> WorkflowOutput
-> IntProperty(Value=0) => #77
#75, #77 -> Merge
-> Take(Count=1)
-> BooleanProperty(Value=false)
-> MulticastSubject UseFillProtocol
-> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
-> MulticastSubject PumpCommands
-> Repeat

SubscribeSubject ROI_Reach
-> Disable Bonsai.Dsp.Sum
-> Disable MemberSelector(Selector=Val0) => #87
SubscribeSubject ReachROIThresh
-> PropertyMapping(Value(Selector=it)) => #89
#87, #89 -> GreaterThan(Operand=DoubleProperty(Value=62))
-> WindowCount(Count=5, Skip=1)
-> Take(Count=1)
-> SelectMany
    WorkflowInput Source1
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> WorkflowOutput
-> GreaterThanOrEqual(Operand=IntProperty(Value=5))
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> Repeat
-> MulticastSubject Start_Clip

SubscribeSubject ROI_Reach => #98
SubscribeSubject ReachROIThresh => #99
-> PropertyMapping(Value) => #100
#98, #100 -> LessThan(Operand=DoubleProperty(Value=62))
-> WindowCount(Count=5, Skip=1)
-> Take(Count=1)
-> SelectMany
    WorkflowInput Source1
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> WorkflowOutput
-> GreaterThanOrEqual(Operand=IntProperty(Value=5))
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> BooleanProperty(Value=false) => #107
#99 -> PropertyMapping(Value(Selector=it)) => #108
#98, #108 -> GreaterThan(Operand=DoubleProperty(Value=62))
-> WindowCount(Count=5, Skip=1)
-> Take(Count=1)
-> SelectMany
    WorkflowInput Source1
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> WorkflowOutput
-> GreaterThanOrEqual(Operand=IntProperty(Value=5))
-> Condition => #114
    WorkflowInput Source1
    -> WorkflowOutput
#107, #114 -> Merge
-> Repeat
-> DistinctUntilChanged
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> MulticastSubject Attempt

Timer(DueTime=PT0S, Period=PT1M)
-> Delay(DueTime=PT2S)
-> BehaviorSubject MinutesInSession
