WorkflowBuilder(Version=2.9.0)
GroupWorkflow Init
    BooleanProperty(Value=false)
    -> BehaviorSubject StimulationON?

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject GoReward

    ExternalizedMapping(Value(DisplayName=Filepath))
    -> StringProperty(Value=.\data)
    -> BehaviorSubject LogPath

    ExternalizedMapping(Value(DisplayName="RewardQty (ul)"))
    -> IntProperty(Value=8)
    -> BehaviorSubject RewardQty

    IntProperty(Value=0)
    -> BehaviorSubject TotalReward

    StringProperty(Value="")
    -> IgnoreElements
    -> BehaviorSubject Status

    ExternalizedMapping(Value(DisplayName=MouseName))
    -> StringProperty(Value=PD004)
    -> BehaviorSubject MouseName

    ExternalizedMapping(Value(DisplayName=Protocol_ID))
    -> StringProperty(Value=passive_training)
    -> BehaviorSubject Protocol

    BooleanProperty(Value=false)
    -> BehaviorSubject GradientON?

    BooleanProperty(Value=false)
    -> BehaviorSubject LaserStimulation

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject InitTrial
    -> PublishSubject EndTrial

    GroupWorkflow
        IntProperty(Value=0) => #0
        DoubleProperty(Value=0) => #1
        DoubleProperty(Value=0) => #2
        DoubleProperty(Value=0) => #3
        IntProperty(Value=0) => #4
        IntProperty(Value=0) => #5
        IntProperty(Value=0) => #6
        #0, #1, #2, #3, #4, #5, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (
              Item1 as TrialNumber,
              Item2 as Orientation,
              Item3 as SpatialFrequency,
              Item4 as TemporalFrequency,
              Item5 as Laser,
              Item6 as Reward,
              Item7 as ITI
            )
        -> WorkflowOutput
    -> IgnoreElements
    -> BehaviorSubject TrialAttributes

    IntProperty(Value=0)
    -> BehaviorSubject TrialNr

    IntProperty(Value=0)
    -> BehaviorSubject TrialStartTime

    ExternalizedMapping(Value(DisplayName=TrialFile))
    -> StringProperty(Value=protocols\FFFB_BehaviorTask.csv)
    -> BehaviorSubject TrialFile

    ExternalizedMapping(Value(DisplayName="RewardWindow (ms)", Description="The length of the reward window in milliseconds."))
    -> IntProperty(Value=1500)
    -> BehaviorSubject RewardWindow

    ExternalizedMapping
      Value(DisplayName="RewardWindowStart (ms)", Description="The time interval between stimulus initiation and the start of the reward window in milliseconds.")
    -> IntProperty(Value=1500)
    -> BehaviorSubject RewardWindowStart

    ExternalizedMapping(Value(DisplayName="RewardDuration (ms)"))
    -> IntProperty(Value=500)
    -> BehaviorSubject RewardDuration

    ExternalizedMapping(Value(DisplayName="MaxRewardSpeed (m/s)"))
    -> FloatProperty(Value=1)
    -> BehaviorSubject MaxRewardSpeed

    FloatProperty(Value=1)
    -> BehaviorSubject RunningSpeed

    FloatProperty(Value=0)
    -> BehaviorSubject TotalDistance

    IntProperty(Value=500)
    -> BehaviorSubject LickCapacitance

    DoubleProperty(Value=0)
    -> BehaviorSubject WheelEncoder

    ExternalizedMapping(Value(DisplayName="StimulationDuration (ms)"))
    -> IntProperty(Value=5000)
    -> BehaviorSubject StimulationDuration

    ExternalizedMapping(Value(DisplayName="StimulationStart (ms)", Description="The stimulus time interval after the trial start."))
    -> IntProperty(Value=1000)
    -> BehaviorSubject StimulationStart

    BooleanProperty(Value=false)
    -> PublishSubject StimulationStarted?

    DoubleProperty(Value=0)
    -> BehaviorSubject HarpTimestamp

    FloatProperty(Value=0)
    -> BehaviorSubject TeleportToPosition

    Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> BehaviorSubject CameraPosition

    FloatProperty(Value=0)
    -> BehaviorSubject CameraOrientation

    SubscribeSubject TrialFile
    -> PropertyMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=protocols\FFFB_BehaviorTask.csv, ScanPattern="", SkipRows=1) => #78
    SubscribeSubject TrialFile => #79
    #78, #79 -> SubscribeWhen
    -> Count
    -> BehaviorSubject NumberOfTrials

GroupWorkflow DrawGratings
    ExternalizedMapping(Width, Height, Location, WindowState, DisplayDevice)
    -> Bonsai.Shaders.CreateWindow
      Width=320
      Height=240
      VSync=On
      SwapSync=false
      ClearColor=#202020
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Hidden
      WindowState=Fullscreen
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources(Textures="")
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes="")
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
    -> BehaviorSubject Draw
    -> Sink SetGradientState
        WorkflowInput Source1 => #0
        SubscribeSubject StimulationON? => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject GradientON?
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject StimulationON? => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> GroupWorkflow DrawGratings
        WorkflowInput Source1 => #0
        SubscribeSubject TrialAttributes => #1
        -> MemberSelector(Selector=SpatialFrequency)
        -> PropertyMapping(SpatialFrequency) => #3
        #1 -> MemberSelector(Selector=TemporalFrequency)
        -> PropertyMapping(TemporalFrequency) => #5
        #1 -> MemberSelector(Selector=Orientation)
        -> Add(Operand=DoubleProperty(Value=90))
        -> Bonsai.Numerics.DegreeToRadian
        -> PropertyMapping(Angle) => #9
        #0, #3, #5, #9 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=0
          LocationY=0
          Layer=0
          ExtentX=4
          ExtentY=4
          SpatialFrequency=2
          TemporalFrequency=2
          Phase=0
          Angle=180
          SquareWave=true
          Contrast=1
          DutyCycle=0.5
          Radius=1
          Aperture=2
          Opacity=1
        -> WorkflowOutput

GroupWorkflow HarpDevices
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
    ExternalizedMapping(PortName) => #1
    #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM15)
    -> BehaviorSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData) => #4
    -> MemberSelector(Selector=Value.AnalogInput0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform ToVolt
      Expression: it * 5.0 / 4096.0
    -> MulticastSubject WheelEncoder
    #4 -> MemberSelector(Selector=Seconds)
    -> MulticastSubject HarpTimestamp

    Int64Property(Value=99) => #10
    SubscribeSubject HarpTimestamp => #11
    #10, #11 -> WithLatestFrom
    -> BehaviorSubject TriggerData

    Annotation StartMicroscope(Text="")
    -> SubscribeSubject StartSession
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
    -> MulticastSubject BehaviorCommands2
    -> Delay(DueTime=PT0.1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO1))
    -> MulticastSubject BehaviorCommands2

    Annotation "StartEye Camera"(Text="")
    -> SubscribeSubject StartSession
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=30))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
    -> MulticastSubject BehaviorCommands

    Annotation SplitMicroscopeData(Text="")
    -> SubscribeSubject InitTrial
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.5S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO1))
    -> MulticastSubject BehaviorCommands

    Annotation RewardDelivery(Text="")
    -> SubscribeSubject GoReward => #35
    Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
    -> IntProperty(Value=0) => #37
    #35, #37 -> Merge
    -> SelectMany GiveReward
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO3)) => #2
        SubscribeSubject RewardDuration => #3
        #1, #3 -> WithLatestFrom
        -> InputMapping(Selector=it, PulseDO3(Selector=Item2))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO3Payload(PulseDO3=500)) => #6
        #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3)) => #7
        #2, #6, #7 -> Merge
        -> Take(Count=3)
        -> WorkflowOutput
    -> MulticastSubject BehaviorCommands

    Annotation StimulationPulse(Text="")
    -> SubscribeSubject LaserStimulation => #42
    Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
    -> BooleanProperty(Value=false) => #44
    #42, #44 -> Merge
    -> SelectMany GiveStimulation
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO3)) => #2
        SubscribeSubject StimulationDuration => #3
        #1, #3 -> WithLatestFrom
        -> InputMapping(Selector=it, PulseDO3(Selector=Item2))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO3Payload(PulseDO3=5000)) => #6
        #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3)) => #7
        #2, #6, #7 -> Merge
        -> Take(Count=3)
        -> WorkflowOutput
    -> MulticastSubject BehaviorCommands2

    Annotation LickingData(Text="")
    -> BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands2 => #49
    ExternalizedMapping(PortName(DisplayName=PortName2)) => #50
    #49, #50 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM16)
    -> BehaviorSubject BehaviorEvents2
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> MemberSelector(Selector=Value.AnalogInput0)
    -> MulticastSubject LickCapacitance

GroupWorkflow HarpWheelNavigation
    GroupWorkflow ProcessWheelData
        ExternalizedMapping("WheelEncoderMin (V)", "WheelEncoderMax (V)")
        -> GroupWorkflow InitWheelData
            ExternalizedMapping(Value(DisplayName="WheelEncoderMin (V)"))
            -> FloatProperty(Value=0.1)
            -> BehaviorSubject RotEncMin

            ExternalizedMapping(Value(DisplayName="WheelEncoderMax (V)"))
            -> FloatProperty(Value=4.7)
            -> BehaviorSubject RotEncMax

            IntProperty(Value=0)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                0.0 as Position,
                0.0 as Diference,
                0 as Turns)
            -> BehaviorSubject WheelData

            FloatProperty(Value=0)
            -> BehaviorSubject Encoder

            BooleanProperty(Value=false)
            -> BehaviorSubject TimeOut

        SubscribeSubject WheelEncoder
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it as Position,
            0.0 as Diference,
            0 as Turns)
        -> Scan
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Position)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
              Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
            #3, #0 -> Zip => #4
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2.Value.Position as Position,
                Item1 as Diference,
                Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Accumulation.Diference)
            #0 -> MemberSelector(Selector=Value.Diference)
            #4 -> MemberSelector(Selector=Item1)
            #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))
        -> MulticastSubject WheelData

        SubscribeSubject WheelData => #6
        -> MemberSelector(Selector=Position) => #7
        SubscribeSubject RotEncMin
        -> PropertyMapping(Value) => #9
        #7, #9 -> Subtract(Operand=FloatProperty(Value=0.1)) => #10
        SubscribeSubject RotEncMax
        -> PropertyMapping(Value) => #12
        #10, #12 -> Divide(Operand=FloatProperty(Value=4.7)) => #13
        #6 -> MemberSelector(Selector=Turns)
        -> PropertyMapping(Value) => #15
        #13, #15 -> Add(Operand=FloatProperty(Value=0))
        -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
        -> Bonsai.Dsp.Difference(Order=1) => #18
        ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #19
        #18, #19 -> Multiply(Operand=DoubleProperty(Value=0.62832)) => #20
        SubscribeSubject TimeOut
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 1 : 0
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 1-it
        -> PropertyMapping(Value) => #24
        #20, #24 -> Multiply(Operand=DoubleProperty(Value=1))
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> MulticastSubject TotalDistance
        #20 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> MulticastSubject RunningSpeed

        Annotation UpdateEncoderLimits(Text="")
        -> SubscribeSubject WheelData
        -> MemberSelector(Selector=Position)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #34
          Expression: Convert.ToSingle(it)
        SubscribeSubject RotEncMin => #35
        #34, #35 -> WithLatestFrom
        -> Bonsai.Numerics.Min
        -> MulticastSubject RotEncMin
        SubscribeSubject RotEncMax => #39
        #34, #39 -> WithLatestFrom
        -> Bonsai.Numerics.Max
        -> MulticastSubject RotEncMax

    SubscribeSubject TotalDistance
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        0 as X,
        0 as Y,
        -it as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-0.304324031)
    -> MulticastSubject CameraPosition

    Disable SubscribeSubject TotalDistance => #6
    Disable SubscribeSubject TeleportToPosition => #7
    Disable SubscribeSubject TotalDistance => #8
    #7, #8 -> Disable WithLatestFrom
    -> Disable Subtract => #10
    #6, #10 -> Disable WithLatestFrom
    -> Disable Add
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        0 as X,
        0 as Y,
        -it%1.88496 as Z
        )
    -> Disable InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Disable Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1.55102813)
    -> Disable MulticastSubject CameraPosition

GroupWorkflow RewardProcessing
    SubscribeSubject GoReward => #0
    SubscribeSubject RewardQty => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #3
    SubscribeSubject TotalReward => #4
    #3, #4 -> WithLatestFrom
    -> Add
    -> MulticastSubject TotalReward
    -> WorkflowOutput

Disable GroupWorkflow MouseWheelNavigation
    Bonsai.Windows.Input.MouseWheel => #0
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> FloatProperty(Value=0.01) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> LessThan(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> FloatProperty(Value=-0.01) => #4
    FloatProperty(Value=0) => #5
    SubscribeSubject TeleportToPosition => #6
    SubscribeSubject CameraPosition
    -> MemberSelector(Selector=Z) => #8
    #6, #8 -> WithLatestFrom
    -> Subtract => #10
    #2, #4, #5, #10 -> Merge
    -> BehaviorSubject DistanceAdded => #12
    SubscribeSubject CameraOrientation => #13
    #12, #13 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=-0, Y=0, Z=-0.01)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        it.X as X,
        it.Y as Y,
        it.Z % 10.0 as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1.61999881)
    -> MulticastSubject CameraPosition

    SubscribeSubject Draw => #23
    SubscribeSubject TotalDistance => #24
    #23, #24 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #26
    -> Skip(Count=1) => #27
    #27, #26 -> Zip
    -> Subtract
    -> MulticastSubject RunningSpeed

    SubscribeSubject DistanceAdded
    -> Multiply(Operand=FloatProperty(Value=-1))
    -> Accumulate
    -> MulticastSubject TotalDistance

Annotation Logging(Text="")
-> SubscribeSubject InitTrial
-> SelectMany LogTrial
    GroupWorkflow Filenames
        SubscribeSubject LogPath => #0
        -> Add(Operand=StringProperty(Value=\)) => #1
        SubscribeSubject MouseName => #2
        #0 -> Timestamp
        -> MemberSelector(Selector="Timestamp.Year,Timestamp.Month,Timestamp.Day")
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Item1.ToString() + "_" + Item2.ToString("D2") + "_" + Item3.ToString("D2") + "\"
        SubscribeSubject Protocol => #6
        StringProperty(Value=Behavior) => #7
        SubscribeSubject MouseName => #8
        #1, #2, #5, #6, #7, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression: Item1.ToString() + Item2.ToString() + "\" + Item3.ToString() + "\" + Item4.ToString() + "\" + Item5.ToString() + "\"
        -> Add(Operand=StringProperty(Value=RunningSpeed\RunningSpeed_.csv))
        -> BehaviorSubject RunningSpeedFilename
        #10 -> Add(Operand=StringProperty(Value=Reward\Reward_.csv))
        -> BehaviorSubject RewardFilename
        #10 -> Add(Operand=StringProperty(Value=CameraData\CameraData_.csv))
        -> BehaviorSubject CameraDataFilename
        #10 -> Add(Operand=StringProperty(Value=EyeVideo\EyeVideo_.avi))
        -> BehaviorSubject VideoFilename

    SubscribeSubject EndTrial
    -> WorkflowOutput

    SubscribeSubject GradientON? => #3
    SubscribeSubject HarpTimestamp => #4
    #3, #4 -> WithLatestFrom => #5
    -> GroupWorkflow CalculateWheelSpeed => #6
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item2) => #1
        #0 -> Skip(Count=1)
        -> MemberSelector(Selector=Item2) => #3
        #1, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    #5, #6 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
      Expression:
        new (
          Item1.Item2 as Timestamp,
          Item1.Item1 as StimulationON,
          Item2 as WheelSpeed
        )
    SubscribeSubject RunningSpeedFilename
    -> PropertyMapping(FileName) => #10
    #8, #10 -> Bonsai.IO.CsvWriter => #11
      FileName=.\data\PD004\2026_09_28\\passive_training\Behavior\RunningSpeed\RunningSpeed_.csv
      Append=false
      Overwrite=false
      Suffix=FileCount
      IncludeHeader=true
    SubscribeSubject RunningSpeedFilename => #12
    #11, #12 -> SubscribeWhen

    SubscribeSubject GoReward
    -> Skip(Count=1) => #15
    SubscribeSubject HarpTimestamp => #16
    #15, #16 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #19
      Expression:
        new(
        it as RewardTime
        )
    SubscribeSubject RewardFilename
    -> PropertyMapping(FileName) => #21
    #19, #21 -> Bonsai.IO.CsvWriter(FileName=.\data\PD004\2026_09_28\\passive_training\Behavior\Reward\Reward_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true) => #22
    SubscribeSubject RewardFilename => #23
    #22, #23 -> SubscribeWhen

    SubscribeSubject FrameData
    -> MemberSelector(Selector=Metadata.embeddedFrameCounter) => #26
    SubscribeSubject HarpTimestamp => #27
    #26, #27 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #29
      Expression:
        new(
          Item2 as Timestamp,
          Item1 as FrameNumber
          )
    SubscribeSubject CameraDataFilename
    -> PropertyMapping(FileName) => #31
    #29, #31 -> Bonsai.IO.CsvWriter => #32
      FileName=.\data\PD004\2026_09_28\\passive_training\Behavior\CameraData\CameraData_.csv
      Append=false
      Overwrite=false
      Suffix=FileCount
      IncludeHeader=true
    SubscribeSubject CameraDataFilename => #33
    #32, #33 -> SubscribeWhen

    SubscribeSubject FrameData
    -> MemberSelector(Selector=Image) => #36
    SubscribeSubject VideoFilename
    -> PropertyMapping(FileName) => #38
    #36, #38 -> Bonsai.Vision.VideoWriter => #39
      FileName=.\data\PD004\2026_09_28\\passive_training\Behavior\EyeVideo\EyeVideo_.avi
      Suffix=FileCount
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    SubscribeSubject VideoFilename => #40
    #39, #40 -> SubscribeWhen

Annotation Trial(Text="")
-> GroupWorkflow GetTrialAttributes
    SubscribeSubject TrialFile
    -> PropertyMapping(FileName) => #1
    SubscribeSubject TrialNr
    -> Add(Operand=IntProperty(Value=1))
    -> PropertyMapping(SkipRows) => #4
    #1, #4 -> Bonsai.IO.CsvReader(FileName=protocols\FFFB_BehaviorTask.csv, ScanPattern="%i,%d,%d,%d,%i,%i,%i", SkipRows=2)
    -> Take(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
          Item1 as TrialNumber,
          Item2 as Orientation,
          Item3 as SpatialFrequency,
          Item4 as TemporalFrequency,
          Item5 as Laser,
          Item6 as Reward,
          Item7 as ITI
        )
    -> MulticastSubject TrialAttributes
    -> WorkflowOutput
-> GroupWorkflow InitTrial
    WorkflowInput Source1
    -> IntProperty(Value=1)
    -> MulticastSubject InitTrial
    -> WorkflowOutput

    StringProperty(Value="Init Trial")
    -> MulticastSubject Status
-> SelectMany RunTrial
    BooleanProperty(Value=false)
    -> MulticastSubject StimulationON?

    BooleanProperty(Value=false)
    -> BehaviorSubject RewardWindowON?

    SubscribeSubject StimulationStart
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject StimulationON?
    -> Sink SetLaserStimulation => #10
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject TrialAttributes
            -> MemberSelector(Selector=Laser) => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> MulticastSubject LaserStimulation
        -> WorkflowOutput
    SubscribeSubject StimulationDuration
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> PropertyMapping(DueTime) => #13
    #10, #13 -> Delay(DueTime=PT5S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject StimulationON?

    WorkflowInput Source1 => #17
    SubscribeSubject TrialAttributes
    -> MemberSelector(Selector=ITI)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #20
      Expression: TimeSpan.FromMilliseconds(it)
    #17, #20 -> WithLatestFrom
    -> InputMapping(Selector=it, DueTime(Selector=Item2))
    -> SelectMany
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Delay(DueTime=PT10S)
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> MulticastSubject EndTrial
    -> WorkflowOutput

    SubscribeSubject RewardWindowStart
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1.5S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject RewardWindowON? => #32
    SubscribeSubject RewardWindow
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> PropertyMapping(DueTime) => #35
    #32, #35 -> Delay(DueTime=PT1.5S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject RewardWindowON?

    SubscribeSubject LickCapacitance
    -> Condition RewardedTrial? => #40
        WorkflowInput Source1 => #0
        SubscribeSubject TrialAttributes
        -> MemberSelector(Selector=Reward) => #2
        #0, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    ExternalizedMapping(Value(DisplayName=LickingThreshold)) => #41
    #40, #41 -> Condition Licking?
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> GreaterThan(Operand=IntProperty(Value=20))
        -> WorkflowOutput
    -> Condition LickInsideWindow?
        WorkflowInput Source1 => #0
        SubscribeSubject RewardWindowON? => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> Take(Count=1)
    -> MulticastSubject GoReward

    StringProperty(Value="Run Trial")
    -> MulticastSubject Status
-> SelectMany EndTrial
    WorkflowInput Source1 => #0
    SubscribeSubject TrialNr => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialNr
    -> Take(Count=1)
    -> WorkflowOutput

    StringProperty(Value="End Trial")
    -> MulticastSubject Status
-> Take(Count=1) => #14
SubscribeSubject NumberOfTrials
-> PropertyMapping(Count) => #16
#14, #16 -> RepeatCount(Count=10) => #17
Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
-> BehaviorSubject StartSession => #19
#17, #19 -> SubscribeWhen

SubscribeSubject LickCapacitance
SubscribeSubject GoReward
SubscribeSubject Status
SubscribeSubject TotalReward

Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames)
-> PublishSubject FrameData

SubscribeSubject GoReward
-> Bonsai.Dsp.FunctionGenerator(BufferLength=4410, Frequency=1000, Waveform=Sine, SampleRate=44100, Amplitude=10000, Offset=0, Phase=0)
-> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers / Headphones (Realtek Audio)", SampleRate=44100, State=Playing)
