<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:pgr="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimulationON?</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>NeedsRunning?</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PunishTrial?</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IgnoreElements" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>GoReward</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LickCountsInWindow</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>LogPath</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RewardQty (ul)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>8</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RewardQty</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>PenaltyTime</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TotalReward</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IgnoreElements" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Status</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>MouseName</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>Protocol</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>GradientON?</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>LaserStimulation</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IgnoreElements" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>InitTrial</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>EndTrial</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new (
  Item1 as TrialNumber,
  Item2 as Orientation,
  Item3 as SpatialFrequency,
  Item4 as TemporalFrequency,
  Item5 as Laser,
  Item6 as Reward,
  Item7 as ITI
)
</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="7" Label="Source2" />
                  <Edge From="2" To="7" Label="Source3" />
                  <Edge From="3" To="7" Label="Source4" />
                  <Edge From="4" To="7" Label="Source5" />
                  <Edge From="5" To="7" Label="Source6" />
                  <Edge From="6" To="7" Label="Source7" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IgnoreElements" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialAttributes</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNr</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialStartTime</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>TrialFile</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>RewardWindow</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>RewardWindowStart</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RewardDuration (ms)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RewardDuration</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>MaxRewardSpeed</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RunningSpeed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TotalDistance</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RewardDistance" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RewardDistance</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>MinRunningDistance</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelEncoder</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>StimulationDuration</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>StimulationStart</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>StimulationDuration</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Add" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>TrialDuration</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>StimulationStart</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>StimulationStarted?</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TeleportToPosition</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>CameraPosition</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>CameraOrientation</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>TrialFile</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvReader">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>TrialFile</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>NumberOfTrials</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="66" To="67" Label="Source1" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="70" To="71" Label="Source1" />
            <Edge From="72" To="73" Label="Source1" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="76" Label="Source1" />
            <Edge From="77" To="79" Label="Source1" />
            <Edge From="78" To="79" Label="Source2" />
            <Edge From="79" To="80" Label="Source1" />
            <Edge From="80" To="81" Label="Source1" />
            <Edge From="82" To="83" Label="Source1" />
            <Edge From="83" To="84" Label="Source1" />
            <Edge From="85" To="86" Label="Source1" />
            <Edge From="87" To="88" Label="Source1" />
            <Edge From="89" To="90" Label="Source1" />
            <Edge From="91" To="92" Label="Source1" />
            <Edge From="93" To="94" Label="Source1" />
            <Edge From="95" To="96" Label="Source1" />
            <Edge From="96" To="97" Label="Source1" />
            <Edge From="97" To="99" Label="Source1" />
            <Edge From="98" To="99" Label="Source2" />
            <Edge From="99" To="100" Label="Source1" />
            <Edge From="100" To="101" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>DrawGratings</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpDevices</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>BehaviorCommands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>Off</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM15</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedAnalogData" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.AnalogInput0</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>ToVolt</scr:Name>
              <scr:Expression>it * 5.0 / 4096.0</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>WheelEncoder</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>99</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TriggerData</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Annotation">
                <Name>StartMicroscope</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>StartSession</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="beh:CreateMessage">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>BehaviorCommands2</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="beh:CreateMessage">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>BehaviorCommands2</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>StartEye Camera</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartSession</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateCamera0FrequencyPayload">
                <beh:Camera0Frequency>30</beh:Camera0Frequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                <beh:StartCameras>CameraOutput0</beh:StartCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>SplitMicroscopeData</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>InitTrial</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>DO1</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                <beh:OutputClear>DO1</beh:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>RewardDelivery</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoReward</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>R</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GiveReward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                      <beh:OutputPulseEnable>DO3</beh:OutputPulseEnable>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RewardDuration</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="PulseDO3" Selector="Item2" />
                    </PropertyMappings>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreatePulseDO3Payload">
                      <beh:PulseDO3>20</beh:PulseDO3>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>DO3</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>3</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="8" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source2" />
                  <Edge From="7" To="8" Label="Source3" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Annotation">
                <Name>StimulationPulse</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>LaserStimulation</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>GiveStimulation</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>BehaviorCommands2</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Annotation">
                <Name>LickingData</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                <rx:Name>BehaviorCommands2</rx:Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>BehaviorEvents2</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="beh:Parse">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>LickCapacitance</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="38" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="45" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source2" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="51" Label="Source1" />
            <Edge From="50" To="51" Label="Source2" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpWheelNavigation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>ProcessWheelData</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="WheelEncoderMin (V)" />
                    <Property Name="WheelEncoderMax (V)" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>InitWheelData</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="WheelEncoderMin (V)" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0.1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>RotEncMin</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="WheelEncoderMax (V)" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>4.7</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>RotEncMax</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
0.0 as Position,
0.0 as Diference,
0 as Turns)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>WheelData</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>Encoder</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>TimeOut</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WheelEncoder</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
it as Position,
0.0 as Diference,
0 as Turns)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:Scan">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.Position</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:Difference">
                            <dsp:Order>1</dsp:Order>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it &gt; 1 ? 1.0 : it &lt; -1 ? -1.0 : 0.0</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
Item2.Value.Position as Position,
Item1 as Diference,
Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 &gt; 0 ? -1 : (Item1 &lt; 0 ? 1 : 0)))) as Turns)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Accumulation.Diference</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.Diference</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 &gt; 0 ? -1 : (Item1 &lt; 0 ? 1 : 0)))</scr:Expression>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="4" Label="Source2" />
                        <Edge From="0" To="7" Label="Source1" />
                        <Edge From="0" To="8" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="4" To="9" Label="Source1" />
                        <Edge From="4" To="10" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WheelData</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WheelData</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Position</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RotEncMin</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Subtract">
                    <Operand xsi:type="FloatProperty">
                      <Value>0.0219726563</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RotEncMax</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Divide">
                    <Operand xsi:type="FloatProperty">
                      <Value>4.7</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Turns</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="FloatProperty">
                      <Value>-2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Butterworth">
                      <dsp:SampleRate>1000</dsp:SampleRate>
                      <dsp:Cutoff1>6</dsp:Cutoff1>
                      <dsp:Cutoff2>0</dsp:Cutoff2>
                      <dsp:FilterOrder>3</dsp:FilterOrder>
                      <dsp:FilterType>LowPass</dsp:FilterType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Difference">
                      <dsp:Order>1</dsp:Order>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="WheelPerimeter(cm)" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0.62832</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TimeOut</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it ? 1 : 0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>1-it</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>single(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TotalDistance</Name>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>RunningSpeed</Name>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>UpdateEncoderLimits</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WheelData</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Position</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Convert.ToSingle(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RotEncMin</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Min" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>RotEncMin</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RotEncMax</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Max" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>RotEncMax</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="14" Label="Source1" />
                  <Edge From="7" To="10" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="16" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="20" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="25" Label="Source1" />
                  <Edge From="20" To="29" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="36" Label="Source1" />
                  <Edge From="34" To="40" Label="Source1" />
                  <Edge From="35" To="36" Label="Source2" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="39" To="40" Label="Source2" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>TotalDistance</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>CameraPosition</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>TotalDistance</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>TeleportToPosition</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>TotalDistance</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Subtract" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Add" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>CameraPosition</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RewardProcessing</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoReward</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardQty</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalReward</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MulticastSubject">
              <Name>TotalReward</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>MouseWheelNavigation</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Annotation">
          <Name>Logging</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>InitTrial</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>LogTrial</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>InitTrial</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>RewardRunning</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalDistance</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StartingDistance</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalDistance</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartingDistance</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item2 - Item1</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>RunDistance?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RewardDistance</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>0.2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>InitTrial</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GoReward</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Annotation">
          <Name>Trial</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>GetTrialAttributes</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>InitTrial</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>RunTrial</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>EndTrial</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>NumberOfTrials</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>StartSession</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>InitTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StartSession</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>GoReward</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Status</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialNr</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TotalReward</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WheelEncoder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pgr:FlyCapture">
          <pgr:Index>0</pgr:Index>
          <pgr:ColorProcessing>Default</pgr:ColorProcessing>
          <pgr:NumBuffers>10</pgr:NumBuffers>
          <pgr:GrabMode>BufferFrames</pgr:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>FrameData</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>GoReward</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="24" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="29" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>