WorkflowBuilder(Version=2.9.0)
GroupWorkflow Init
    GroupWorkflow
        IntProperty(Value=0) => #0
        StringProperty => #1
        DoubleProperty(Value=0) => #2
        DoubleProperty(Value=0) => #3
        DoubleProperty(Value=0) => #4
        DoubleProperty(Value=0) => #5
        IntProperty(Value=0) => #6
        #0, #1, #2, #3, #4, #5, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (
              Item1 as TrialNumber,
              Item2 as TrialJsonFile,
              Item3 as MinReappearance,
              Item4 as MaxReappearance,
              Item5 as OcclusionStart,
              Item6 as CorridorSize,
              Item7 as IsPassiveReward
            )
        -> WorkflowOutput
    -> IgnoreElements
    -> BehaviorSubject TrialAttributes

    BooleanProperty(Value=false)
    -> IgnoreElements
    -> BehaviorSubject Licking?
    -> BehaviorSubject ROIActivated?

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject InitTrial
    -> BehaviorSubject EndTrial

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject LickCount

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject GoReward

    DoubleProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject ROIValue

    ExternalizedMapping(Value(DisplayName=MinLickThreshold))
    -> DoubleProperty(Value=56)
    -> BehaviorSubject ROILickThreshold

    SubscribeSubject TrialFile
    -> PropertyMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=Trials\trials.csv, ScanPattern="", SkipRows=1) => #25
    SubscribeSubject TrialFile => #26
    #25, #26 -> SubscribeWhen
    -> Count
    -> BehaviorSubject NumberOfTrials

    ExternalizedMapping("WheelEncoderMin (V)", "WheelEncoderMax (V)")
    -> GroupWorkflow InitWheelData
        ExternalizedMapping(Value(DisplayName="WheelEncoderMin (V)"))
        -> FloatProperty(Value=0.1)
        -> BehaviorSubject RotEncMin

        ExternalizedMapping(Value(DisplayName="WheelEncoderMax (V)"))
        -> FloatProperty(Value=4.7)
        -> BehaviorSubject RotEncMax

        IntProperty(Value=0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            0.0 as Position,
            0.0 as Diference,
            0 as Turns)
        -> BehaviorSubject WheelData

        FloatProperty(Value=0)
        -> BehaviorSubject Encoder

        BooleanProperty(Value=false)
        -> BehaviorSubject TimeOut

    Disable IntProperty(Value=0) => #32
    Disable Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
    -> Disable PublishSubject ReloadVRFile
    -> Disable IntProperty(Value=0) => #35
    #32, #35 -> Disable Merge => #36
    Disable StringProperty(Value=Protocols\paralax_settings.yaml) => #37
    #36, #37 -> Disable WithLatestFrom
    -> Disable InputMapping(Selector=it, Path(Selector=Item2))

    IntProperty(Value=0)
    -> BehaviorSubject TrialNr

    ExternalizedMapping(Value(DisplayName=TrialFile))
    -> StringProperty(Value=Trials\trials.csv)
    -> BehaviorSubject TrialFile

    ExternalizedMapping(Value(DisplayName="RewardDuration (ms)"))
    -> IntProperty(Value=500)
    -> BehaviorSubject RewardDuration

    ExternalizedMapping(Value(DisplayName="RewardDistance (m)"))
    -> FloatProperty(Value=0.9)
    -> BehaviorSubject RewardDistance

    ExternalizedMapping(Value(DisplayName="MaxRewardSpeed (m/s)"))
    -> FloatProperty(Value=1)
    -> BehaviorSubject MaxRewardSpeed

    FloatProperty(Value=1)
    -> BehaviorSubject RunningSpeed

    FloatProperty(Value=0)
    -> BehaviorSubject TotalDistance

    DoubleProperty(Value=0)
    -> BehaviorSubject WheelEncoder

    DoubleProperty(Value=0)
    -> BehaviorSubject HarpTimestamp

    SubscribeSubject RewardDistance
    -> Take(Count=1)
    -> BehaviorSubject NextRewardPosition

    FloatProperty(Value=0)
    -> BehaviorSubject TeleportToPosition

    Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> BehaviorSubject CameraPosition

    FloatProperty(Value=0)
    -> BehaviorSubject CameraOrientation

    IntProperty(Value=0)
    -> BehaviorSubject NumberOfRewards

    ExternalizedMapping(Value(DisplayName="DropSize (ul)"))
    -> FloatProperty(Value=20)
    -> BehaviorSubject "DropSize (ul)"

    FloatProperty(Value=0)
    -> BehaviorSubject WaterDelivered

GroupWorkflow InitShaders
    Disable ExternalizedMapping(Width, Height, Location, WindowState)
    -> Disable Bonsai.Shaders.CreateWindow => #1
      Width=420
      Height=270
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=0, Y=0)
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    ExternalizedMapping(Width, Height, Location, WindowState)
    -> Bonsai.Shaders.CreateWindow => #3
      Width=4096
      Height=1536
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=0, Y=0)
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    #1, #3 -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.MeshResources
      Meshes
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=PanoramicQuad, QuadEffects=None)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=Cylinder, FileName=Models\cylinder.obj)
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PanoramicShader
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\panoramic.vert
          FragmentShader=Shaders\panoramic.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PlainColorShader
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\plain_color.vert
          FragmentShader=Shaders\plain_color.frag
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=BackWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_back.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Floor
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\floor\checkerboard2.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=FrontWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_front.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=LeftWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_left.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=RightWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_right.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=BG_0.04_0.32_100
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\background\BG_0.04_0.32_100.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Rocks
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\floor\rocks.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=checker
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\floor\checkerboard.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grating_45_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Objects\grating_40x35cm_diag_45_1cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grating_135_far
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Objects\grating_15x35cm_diag_135_1cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=circles_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\shapes_low_sf\pattern_40x35cm_circles_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=circles_far
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Shapes_high_sf\pattern_15x35cm_circles_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=triangles_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Shapes_high_sf\pattern_40x35cm_triangles_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=diamonds_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Shapes_high_sf\pattern_40x35cm_diamonds_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=squares_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Shapes_high_sf\pattern_40x35cm_squares_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=polka_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Dots\pattern_40x35cm_polka_dots_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=zigzag_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Patterns\pattern_40x35cm_zigzag_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=brick_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Patterns\pattern_40x35cm_brick_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=spiral_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Waves\pattern_40x35cm_spiral_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=checkerboard_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Waves\pattern_40x35cm_checkerboard_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=concentric_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Waves\pattern_40x35cm_concentric_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grating_45_far_blue
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\gratings_blue\pattern_40x35cm_diag_45_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertical_far_blue
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\gratings_blue\pattern_15x35cm_vertical_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
    -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
    -> Bonsai.Resources.LoadResources

Disable GroupWorkflow MouseWheelNavigation
    Bonsai.Windows.Input.MouseWheel => #0
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> FloatProperty(Value=0.01) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> LessThan(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> FloatProperty(Value=-0.01) => #4
    FloatProperty(Value=0) => #5
    SubscribeSubject TeleportToPosition => #6
    SubscribeSubject CameraPosition
    -> MemberSelector(Selector=Z) => #8
    #6, #8 -> WithLatestFrom
    -> Subtract => #10
    #2, #4, #5, #10 -> Merge
    -> BehaviorSubject DistanceAdded

    SubscribeSubject Draw => #13
    SubscribeSubject TotalDistance => #14
    #13, #14 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #16
    -> Skip(Count=1) => #17
    #17, #16 -> Zip
    -> Subtract
    -> MulticastSubject RunningSpeed

    SubscribeSubject DistanceAdded
    -> Multiply(Operand=FloatProperty(Value=-1))
    -> Accumulate
    -> MulticastSubject TotalDistance

Disable GroupWorkflow KeyboardNavigation
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> FloatProperty(Value=0.1) => #1
    Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> FloatProperty(Value=-0.1) => #3
    FloatProperty(Value=0) => #4
    #1, #3, #4 -> Merge
    -> Accumulate
    -> MulticastSubject CameraOrientation

    Bonsai.Shaders.RenderFrame => #8
    SubscribeSubject RunningSpeed => #9
    #8, #9 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #11
    SubscribeSubject CameraOrientation => #12
    #11, #12 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> Accumulate
    -> MulticastSubject CameraPosition

    Bonsai.Windows.Input.KeyDown(Filter=W, SuppressRepetitions=false)
    -> FloatProperty(Value=-1) => #20
    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> FloatProperty(Value=1) => #22
    Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false)
    -> FloatProperty(Value=0) => #24
    FloatProperty(Value=0) => #25
    #20, #22, #24, #25 -> Merge => #26
    ExternalizedMapping(Value(DisplayName="SpeedGain (m/s)"))
    -> FloatProperty(Value=0.2) => #28
    ExternalizedMapping(Value(DisplayName="GraphicsRefreshRate (Hz)")) => #29
    Annotation GraphicsRateNormalization(Text="It divides by 60 which is the typical refresh rate of the graphics card.") => #30
    #28, #29, #30 -> Divide(Operand=FloatProperty(Value=60)) => #31
    #26, #31 -> WithLatestFrom
    -> Multiply
    -> MulticastSubject RunningSpeed

    Disable Bonsai.Windows.Input.KeyDown(Filter=W, SuppressRepetitions=false)
    -> Disable FloatProperty(Value=-1) => #36
    Disable Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> Disable FloatProperty(Value=1) => #38
    Disable Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false)
    -> Disable FloatProperty(Value=0) => #40
    Disable FloatProperty(Value=0) => #41
    #36, #38, #40, #41 -> Disable Merge => #42
    Disable FloatProperty(Value=0) => #43
    #42, #43 -> Disable WithLatestFrom => #44
    Disable SubscribeSubject CameraOrientation => #45
    #44, #45 -> Disable WithLatestFrom
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> Disable InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Disable Bonsai.Shaders.CreateVector3(X=0.198669344, Y=0, Z=-0.9800666)
    -> Disable Accumulate
    -> Disable BehaviorSubject CameraPosition

Disable GroupWorkflow FakeWheelEncoder
    Bonsai.Windows.Input.MouseWheel => #0
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> DoubleProperty(Value=0.1) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> LessThan(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> DoubleProperty(Value=-0.1) => #4
    DoubleProperty(Value=0.1) => #5
    #2, #4, #5 -> Merge
    -> Accumulate
    -> MulticastSubject WheelEncoder => #8
    SubscribeSubject WheelEncoder
    -> Condition => #10
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=4.7))
        -> WorkflowOutput
    #8, #10 -> TakeUntil
    -> Repeat
    -> WorkflowOutput

GroupWorkflow HarpWheelNavigation
    GroupWorkflow InitWheelData
        IntProperty(Value=0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            0.0 as Position,
            0.0 as Diference,
            0 as Turns)
        -> MulticastSubject WheelData

        FloatProperty(Value=0)
        -> MulticastSubject Encoder

        BooleanProperty(Value=false)
        -> MulticastSubject TimeOut

    SubscribeSubject InitTrial
    -> CreateObservable
        SubscribeSubject WheelEncoder
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it as Position,
            0.0 as Diference,
            0 as Turns)
        -> Scan
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Position)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
              Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
            #3, #0 -> Zip => #4
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2.Value.Position as Position,
                Item1 as Diference,
                Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Accumulation.Diference)
            #0 -> MemberSelector(Selector=Value.Diference)
            #4 -> MemberSelector(Selector=Item1)
            #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))
        -> MulticastSubject WheelData
    -> Switch

    SubscribeSubject InitTrial
    -> CreateObservable
        SubscribeSubject WheelData => #0
        -> MemberSelector(Selector=Position) => #1
        SubscribeSubject RotEncMin
        -> PropertyMapping(Value) => #3
        #1, #3 -> Subtract(Operand=FloatProperty(Value=0)) => #4
        SubscribeSubject RotEncMax
        -> PropertyMapping(Value) => #6
        #4, #6 -> Divide(Operand=FloatProperty(Value=4.7)) => #7
        #0 -> MemberSelector(Selector=Turns)
        -> PropertyMapping(Value) => #9
        #7, #9 -> Add(Operand=FloatProperty(Value=1))
        -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
        -> Bonsai.Dsp.Difference(Order=1) => #12
        ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #13
        #12, #13 -> Multiply(Operand=DoubleProperty(Value=0.62832)) => #14
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> MulticastSubject TotalDistance
        #14 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> MulticastSubject RunningSpeed
    -> Switch

    Annotation UpdateEncoderLimits(Text="")
    -> SubscribeSubject WheelData
    -> MemberSelector(Selector=Position)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
      Expression: Convert.ToSingle(it)
    SubscribeSubject RotEncMin => #11
    #10, #11 -> WithLatestFrom
    -> Bonsai.Numerics.Min
    -> MulticastSubject RotEncMin
    SubscribeSubject RotEncMax => #15
    #10, #15 -> WithLatestFrom
    -> Bonsai.Numerics.Max
    -> MulticastSubject RotEncMax

GroupWorkflow Dynamic3DScene
    Disable SelectMany DrawLandmarks
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Landmarks) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> InputMapping(Selector=it, Repetitions(Selector=Item2.Repetitions))
        -> SelectMany DrawAll => #7
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=2) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2.Item1) => #1
                #0 -> MemberSelector(Selector=Item2.Item2) => #2
                #0 -> MemberSelector(Selector=Item1) => #3
                #0 -> MemberSelector(Selector=Item2) => #4
                -> MemberSelector(Selector=Item2.RepeatInterval) => #5
                #3, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                #4 -> MemberSelector(Selector=Item2.Translation)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
                  Expression: it[2]
                SubscribeSubject CameraPosition
                -> MemberSelector(Selector=Z) => #12
                #5, #12 -> WithLatestFrom => #13
                Annotation #RepeatIntervals(Text="This gives the number of RepeatInterval distances that fit in the current distance travelled.") => #14
                #13, #14 -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
                  Expression: Math.Floor(Item2/Item1)
                #15, #5 -> Zip
                -> Multiply => #17
                #8, #10, #17 -> Zip
                -> Add => #19
                #1, #2, #19 -> Zip
                -> WorkflowOutput
            -> Condition "Not Textured?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping
              Selector=Item1
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
            -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=0.045
              TranslationY=0
              TranslationZ=-1.25664
              RotationZ=0
              RotationY=89.95438
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=0, Z=0)
              Diffuse(X=1, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> Condition Textured? => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> NotEqual(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #10
            #8 -> PropertyMapping => #11
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
            #10, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-6.59735966
              RotationZ=0
              RotationY=-89.95438
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #7, #12 -> Merge => #13
            #2 -> MemberSelector(Selector=Item2.Repetitions)
            -> Subtract(Operand=FloatProperty(Value=1))
            -> PropertyMapping(Count) => #16
            #13, #16 -> Skip(Count=1)
            -> Take(Count=1)
            -> WorkflowOutput
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #9
        #7, #9 -> Take(Count=2)
        -> WorkflowOutput

    Disable SelectMany DrawRewards
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Reward) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> InputMapping(Selector=it, Repetitions(Selector=Item2.Repetitions))
        -> SelectMany => #7
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=3) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2.Item1) => #1
                #0 -> MemberSelector(Selector=Item2.Item2) => #2
                #0 -> MemberSelector(Selector=Item1) => #3
                SubscribeSubject RewardDistance => #4
                #3, #4 -> WithLatestFrom
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject NextRewardPosition => #8
                #0, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #10
                #7, #10 -> Zip
                -> Add => #12
                #1, #2, #12 -> Zip
                -> WorkflowOutput
            -> Condition "Not Textured?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping
              Selector=Item1
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
            -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-0.045
              TranslationY=0
              TranslationZ=-1.5
              RotationZ=0
              RotationY=89.95438
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=0)
              Diffuse(X=1, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> Condition Textured? => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> NotEqual(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #10
            #8 -> PropertyMapping => #11
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
            #10, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-6.59735966
              RotationZ=0
              RotationY=-89.95438
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #7, #12 -> Merge => #13
            #2 -> MemberSelector(Selector=Item2.Repetitions)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #16
            #13, #16 -> Skip(Count=2)
            -> Take(Count=1)
            -> WorkflowOutput
            #4 -> MemberSelector(Selector=Item3)
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #9
        #7, #9 -> Take(Count=2)
        -> WorkflowOutput

    SubscribeSubject TotalDistance
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        0 as X,
        0 as Y,
        -it as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-0)
    -> MulticastSubject CameraPosition

    SubscribeSubject TrialAttributes
    -> InputMapping(Selector=it, Path(Selector=TrialJsonFile))
    -> SelectMany
        ExternalizedMapping(Path)
        -> Bonsai.IO.ReadAllText(Path=Trials\trial_003.json)
        -> VRCorridorSchema.DeserializeFromYaml(Type=TypeMapping<VRCorridorSchema.VRCorridorSchema>)
        -> Take(Count=1)
        -> WorkflowOutput
    -> PublishSubject ReloadVRFile
    -> PublishSubject TaskProperties => #11
    Annotation "Wait for all parameters to be set."(Text="")
    -> Timer(DueTime=PT0.5S) => #13
    #11, #13 -> SubscribeWhen

    IntProperty(Value=0) => #15
    -> GroupWorkflow DrawArena => #16
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Arena)
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
        -> SelectMany DrawRepetitions => #8
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=4) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany DrawObjects => #4
                SubscribeSubject CameraPosition => #0
                WorkflowInput Source1 => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                      Item1.Z as CameraPosition,
                      Item2.Item1 as Repetition,
                      Item2.Item2 as Landmark
                    )
                -> BehaviorSubject LandmarkData

                SubscribeSubject Draw => #5
                SubscribeSubject LandmarkData => #6
                #5, #6 -> WithLatestFrom => #7
                -> Condition TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> NotEqual(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawTexturedObject => #9
                    WorkflowInput Source1
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=checker, TextureTarget=Texture2D) => #2
                    SubscribeSubject LandmarkData => #3
                    #2, #3 -> WithLatestFrom => #4
                    -> InputMapping => #5
                      Selector=Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #4 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #8
                    #5, #8 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-0.08
                      TranslationZ=-2.19911981
                      RotationZ=0
                      RotationY=0
                      RotationX=-89.95438
                      ScaleX=0.63
                      ScaleY=0.63
                      ScaleZ=0.1
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #7 -> Condition Non-TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> Equal(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawPlainObject => #11
                    WorkflowInput Source1 => #0
                    SubscribeSubject LandmarkData => #1
                    #0, #1 -> WithLatestFrom => #2
                    -> InputMapping => #3
                      Selector=Item1.Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #2 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #6
                    #3, #6 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0.045
                      TranslationY=0
                      TranslationZ=-3.1416
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=0, Z=0)
                      Diffuse(X=1, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #9, #11 -> Merge
                -> IntProperty(Value=0) => #13
                SubscribeSubject ReloadVRFile => #14
                #13, #14 -> TakeUntil
                -> WorkflowOutput
            SubscribeSubject ReloadVRFile => #5
            #4, #5 -> TakeUntil
            -> WorkflowOutput
        SubscribeSubject ReloadVRFile => #9
        #8, #9 -> TakeUntil
        -> WorkflowOutput
    #15 -> GroupWorkflow DrawLandmarks => #17
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Landmarks) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
        -> SelectMany DrawRepetitions => #8
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=1) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany DrawObjects => #4
                SubscribeSubject CameraPosition => #0
                WorkflowInput Source1 => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                      Item1.Z as CameraPosition,
                      Item2.Item1 as Repetition,
                      Item2.Item2 as Landmark
                    )
                -> BehaviorSubject LandmarkData

                SubscribeSubject Draw => #5
                SubscribeSubject LandmarkData => #6
                #5, #6 -> WithLatestFrom => #7
                -> Condition TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> NotEqual(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawTexturedObject => #9
                    WorkflowInput Source1
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=zigzag_near, TextureTarget=Texture2D) => #2
                    SubscribeSubject LandmarkData => #3
                    #2, #3 -> WithLatestFrom => #4
                    -> InputMapping => #5
                      Selector=Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #4 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #8
                    #4 -> MemberSelector(Selector=Item2.Landmark) => #9
                    -> Condition "ChangeLocation == 0?"
                        WorkflowInput Source1
                        -> MemberSelector(Selector=ChangeLocation)
                        -> Equal(Operand=FloatProperty(Value=0))
                        -> WorkflowOutput
                    -> MemberSelector(Selector=AmbientColor) => #11
                    #9 -> Condition "ChangeLocation != 0?" => #12
                        WorkflowInput Source1
                        -> MemberSelector(Selector=ChangeLocation)
                        -> NotEqual(Operand=FloatProperty(Value=0))
                        -> WorkflowOutput
                    -> Condition "Distance < ChangeLocation?"
                        WorkflowInput Source1
                        -> MemberSelector(Selector=ChangeLocation) => #1
                        SubscribeSubject TotalDistance => #2
                        #1, #2 -> WithLatestFrom
                        -> GreaterThan
                        -> WorkflowOutput
                    -> MemberSelector(Selector=AmbientColor) => #14
                    #12 -> Condition "Distance >= ChangeLocation?"
                        WorkflowInput Source1
                        -> MemberSelector(Selector=ChangeLocation) => #1
                        SubscribeSubject TotalDistance => #2
                        #1, #2 -> WithLatestFrom
                        -> LessThanOrEqual
                        -> WorkflowOutput
                    -> MemberSelector(Selector=ChangeColor) => #16
                    #11, #14, #16 -> Merge
                    -> PropertyMapping(Ambient(Selector="it[0], it[1], it[2]")) => #18
                    #5, #8, #18 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=1.4
                      TranslationY=0
                      TranslationZ=-2.58829
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.56
                      ScaleY=0.56
                      ScaleZ=0
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #7 -> Condition Non-TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> Equal(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawPlainObject => #11
                    WorkflowInput Source1 => #0
                    SubscribeSubject LandmarkData => #1
                    #0, #1 -> WithLatestFrom => #2
                    -> InputMapping => #3
                      Selector=Item1.Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #2 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #6
                    #2 -> MemberSelector(Selector=Item2.Landmark) => #7
                    -> Condition "ChangeLocation == 0?"
                        WorkflowInput Source1
                        -> MemberSelector(Selector=ChangeLocation)
                        -> Equal(Operand=FloatProperty(Value=0))
                        -> WorkflowOutput
                    -> MemberSelector(Selector=AmbientColor) => #9
                    #7 -> Condition "ChangeLocation != 0?" => #10
                        WorkflowInput Source1
                        -> MemberSelector(Selector=ChangeLocation)
                        -> NotEqual(Operand=FloatProperty(Value=0))
                        -> WorkflowOutput
                    -> Condition "Distance < ChangeLocation?"
                        WorkflowInput Source1
                        -> MemberSelector(Selector=ChangeLocation) => #1
                        SubscribeSubject TotalDistance => #2
                        #1, #2 -> WithLatestFrom
                        -> GreaterThan
                        -> WorkflowOutput
                    -> MemberSelector(Selector=AmbientColor) => #12
                    #10 -> Condition "Distance >= ChangeLocation?"
                        WorkflowInput Source1
                        -> MemberSelector(Selector=ChangeLocation) => #1
                        SubscribeSubject TotalDistance => #2
                        #1, #2 -> WithLatestFrom
                        -> LessThanOrEqual
                        -> WorkflowOutput
                    -> MemberSelector(Selector=ChangeColor) => #14
                    #9, #12, #14 -> Merge
                    -> PropertyMapping(Ambient(Selector="it[0], it[1], it[2]")) => #16
                    #3, #6, #16 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=2.7
                      TranslationY=0
                      TranslationZ=-3.16592
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.2025
                      ScaleY=0.4995
                      ScaleZ=0.2025
                      Ambient(X=0, Y=0, Z=1)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Cylinder
                    -> WorkflowOutput
                #9, #11 -> Merge
                -> IntProperty(Value=0) => #13
                SubscribeSubject ReloadVRFile => #14
                #13, #14 -> TakeUntil
                -> WorkflowOutput
            SubscribeSubject ReloadVRFile => #5
            #4, #5 -> TakeUntil
            -> WorkflowOutput
        SubscribeSubject ReloadVRFile => #9
        #8, #9 -> TakeUntil
        -> WorkflowOutput
        #3 -> MemberSelector(Selector=Count)
    #15 -> GroupWorkflow DrawRewards => #18
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Reward)
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
        -> SelectMany DrawRepetitions => #8
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=4) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany DrawObjects => #4
                SubscribeSubject CameraPosition => #0
                WorkflowInput Source1 => #1
                #0, #1 -> WithLatestFrom => #2
                SubscribeSubject NextRewardPosition => #3
                #2, #3 -> WithLatestFrom => #4
                SubscribeSubject RewardDistance => #5
                #4, #5 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                      Item1.Item1.Item1.Z as CameraPosition,
                      Item1.Item1.Item2.Item1 as Repetition,
                      Item1.Item1.Item2.Item2 as Landmark,
                      Item1.Item2 as RewardPosition,
                      Item2 as RewardInterval
                    )
                -> BehaviorSubject LandmarkData

                SubscribeSubject Draw => #9
                SubscribeSubject LandmarkData => #10
                #9, #10 -> WithLatestFrom => #11
                -> Condition TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> NotEqual(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawTexturedObject => #13
                    WorkflowInput Source1
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
                    SubscribeSubject LandmarkData => #3
                    #2, #3 -> WithLatestFrom => #4
                    -> InputMapping => #5
                      Selector=Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #4 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -RewardInterval * Landmark.RepeatInterval + RewardPosition
                    -> PropertyMapping(TranslationZ) => #8
                    #5, #8 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-0.049
                      TranslationY=0
                      TranslationZ=-1.5708
                      RotationZ=0
                      RotationY=-89.95438
                      RotationX=0
                      ScaleX=0.63
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #11 -> Condition Non-TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> Equal(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawPlainObject => #15
                    WorkflowInput Source1 => #0
                    SubscribeSubject LandmarkData => #1
                    #0, #1 -> WithLatestFrom => #2
                    -> InputMapping => #3
                      Selector=Item1.Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #2 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -RewardInterval * Landmark.RepeatInterval + RewardPosition
                    -> PropertyMapping(TranslationZ) => #6
                    #3, #6 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=-0.045
                      TranslationY=0
                      TranslationZ=-0.9
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=1, Z=0)
                      Diffuse(X=1, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #13, #15 -> Merge
                -> IntProperty(Value=0) => #17
                SubscribeSubject ReloadVRFile => #18
                #17, #18 -> TakeUntil
                -> WorkflowOutput
            SubscribeSubject ReloadVRFile => #5
            #4, #5 -> TakeUntil
            -> WorkflowOutput
        SubscribeSubject ReloadVRFile => #9
        #8, #9 -> TakeUntil
        -> WorkflowOutput
    #16, #17, #18 -> Merge => #19
    SubscribeSubject ReloadVRFile => #20
    #19, #20 -> TakeUntil
    -> Repeat

GroupWorkflow CameraData
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames)
    -> BehaviorSubject FrameData
    -> MemberSelector(Selector=Image)
    -> Bonsai.Vision.Crop(RegionOfInterest(X=167, Y=281, Width=83, Height=65))
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> MulticastSubject ROIValue
    -> WorkflowOutput

GroupWorkflow HarpDevice
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
    ExternalizedMapping(PortName) => #1
    #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> BehaviorSubject BehaviorEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=44, PayloadType=TimestampedS16, IsArray=false)) => #4
    -> MemberSelector(Selector=Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform ToVolt
      Expression: it * 5.0 / 4096.0
    -> MulticastSubject WheelEncoder
    #4 -> MemberSelector(Selector=Seconds)
    -> MulticastSubject HarpTimestamp

    SubscribeSubject WheelEncoder
    -> Skip(Count=2)
    -> Take(Count=1)
    -> BehaviorSubject EncoderInit

    Int64Property(Value=99) => #14
    SubscribeSubject HarpTimestamp => #15
    #14, #15 -> WithLatestFrom
    -> BehaviorSubject TriggerData

    Timer(DueTime=PT1S) => #18
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO1))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
    -> MulticastSubject BehaviorCommands
    SubscribeSubject HarpTimestamp => #26
    #18, #26 -> WithLatestFrom
    -> MulticastSubject TriggerData

    Timer(DueTime=PT5S, Period=PT2S) => #29
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO3))
    -> MulticastSubject BehaviorCommands
    SubscribeSubject HarpTimestamp => #35
    #29, #35 -> WithLatestFrom
    -> MulticastSubject TriggerData

    SubscribeSubject GoReward => #38
    Bonsai.Windows.Input.KeyDown(Filter=M, SuppressRepetitions=false)
    -> IntProperty(Value=0) => #40
    #38, #40 -> Merge
    -> SelectMany GiveReward
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO2)) => #2
        SubscribeSubject RewardDuration => #3
        #1, #3 -> WithLatestFrom
        -> InputMapping(Selector=it, PulseDO2(Selector=Item2))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=500)) => #6
        #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2)) => #7
        #2, #6, #7 -> Merge
        -> Take(Count=3)
        -> WorkflowOutput
    -> MulticastSubject BehaviorCommands

Annotation Logging(Text="")
-> SubscribeSubject InitTrial
-> CreateObservable LogTrial
    GroupWorkflow Filenames
        ExternalizedMapping(Value(DisplayName=Filepath))
        -> StringProperty(Value=.\data)
        -> BehaviorSubject LogPath

        SubscribeSubject LogPath => #3
        -> Add(Operand=StringProperty(Value=\)) => #4
        ExternalizedMapping(Value(DisplayName=MouseName)) => #5
        -> StringProperty(Value=LPE12385) => #6
        #3 -> Timestamp
        -> MemberSelector(Selector="Timestamp.Year,Timestamp.Month,Timestamp.Day")
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: Item1.ToString() + "_" + Item2.ToString("D2") + "_" + Item3.ToString("D2") + "\"
        ExternalizedMapping(Value(DisplayName=Protocol_ID))
        -> StringProperty(Value=DN) => #11
        StringProperty(Value=Behavior) => #12
        #5 -> StringProperty(Value=LPE12385) => #13
        #4, #6, #9, #11, #12, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
          Expression: Item1.ToString() + Item2.ToString() + "\" + Item3.ToString() + "\" + Item4.ToString() + "\" + Item5.ToString() + "\" + Item4.ToString() + "_" + Item6.ToString() + "_"
        -> Add(Operand=StringProperty(Value=.csv))
        -> BehaviorSubject SaveFilename
        #15 -> Add(Operand=StringProperty(Value=Rw_.csv))
        -> BehaviorSubject RewardFilename
        #15 -> Add(Operand=StringProperty(Value=CameraData_.csv))
        -> BehaviorSubject CameraDataFilename
        #15 -> Add(Operand=StringProperty(Value=Video_.avi))
        -> BehaviorSubject VideoFilename

    SubscribeSubject Draw => #1
    SubscribeSubject HarpTimestamp => #2
    #1, #2 -> WithLatestFrom => #3
    GroupWorkflow CameraPositionZ => #4
        SubscribeSubject CameraPosition
        -> MemberSelector(Selector=Z)
        -> WorkflowOutput
    #3, #4 -> WithLatestFrom => #5
    SubscribeSubject RewardDistance => #6
    #5, #6 -> WithLatestFrom => #7
    SubscribeSubject TotalDistance => #8
    #7, #8 -> WithLatestFrom => #9
    GroupWorkflow Speed => #10
        SubscribeSubject TotalDistance => #0
        -> Skip(Count=1) => #1
        #0, #1 -> Zip
        -> Subtract
        -> WorkflowOutput
    #9, #10 -> WithLatestFrom => #11
    GroupWorkflow DistanceToOcclusion => #12
        SubscribeSubject TotalDistance => #0
        SubscribeSubject TrialAttributes
        -> MemberSelector(Selector=OcclusionStart) => #2
        #0, #2 -> WithLatestFrom
        -> Subtract
        -> WorkflowOutput
    #11, #12 -> WithLatestFrom => #13
    GroupWorkflow DistanceToMinReappearance => #14
        SubscribeSubject TotalDistance => #0
        SubscribeSubject TrialAttributes
        -> MemberSelector(Selector=MinReappearance) => #2
        #0, #2 -> WithLatestFrom
        -> Subtract
        -> WorkflowOutput
    #13, #14 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
      Expression:
        new (
          Item1.Item1.Item1.Item1.Item1.Item2 as Timestamp,
          Item1.Item1.Item1.Item1.Item2 as Position,
          Item1.Item1.Item1.Item2 as WheelDistance,
          Item1.Item1.Item2 as WheelSpeed,
          Item1.Item2 as DistanceToOclusion,
          Item2 as DistanceToReapearance

        )
    SubscribeSubject SaveFilename
    -> PropertyMapping(FileName) => #18
    #16, #18 -> Bonsai.IO.CsvWriter(FileName=.\data\LPE12385\2025_10_10\\DN\Behavior\DN_LPE12385_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true) => #19
    SubscribeSubject SaveFilename => #20
    #19, #20 -> SubscribeWhen

    SubscribeSubject GoReward => #22
    SubscribeSubject HarpTimestamp => #23
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #26
      Expression:
        new(
        it as RewardTime
        )
    SubscribeSubject RewardFilename
    -> PropertyMapping(FileName) => #28
    #26, #28 -> Bonsai.IO.CsvWriter(FileName=.\data\LPE12385\2025_10_10\\DN\Behavior\DN_LPE12385_Rw_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true) => #29
    SubscribeSubject RewardFilename => #30
    #29, #30 -> SubscribeWhen

    SubscribeSubject FrameData => #32
    SubscribeSubject HarpTimestamp => #33
    #32, #33 -> WithLatestFrom => #34
    -> MemberSelector(Selector=Item2) => #35
    #34 -> MemberSelector(Selector=Item1.Metadata.embeddedFrameCounter) => #36
    #35, #36 -> Zip => #37
    SubscribeSubject ROIValue => #38
    #37, #38 -> WithLatestFrom => #39
    SubscribeSubject ROIActivated? => #40
    #39, #40 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #42
      Expression:
        new(
          Item1.Item1.Item1 as Timestamp,
          Item1.Item1.Item2 as FrameNumber,
          Item1.Item2 as ROIValue,
          Item1.Item2 as IsLicking
        )
    SubscribeSubject CameraDataFilename
    -> PropertyMapping(FileName) => #44
    #42, #44 -> Bonsai.IO.CsvWriter(FileName=.\data\LPE12385\2025_10_10\\DN\Behavior\DN_LPE12385_CameraData_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true) => #45
    SubscribeSubject CameraDataFilename => #46
    #45, #46 -> SubscribeWhen

    SubscribeSubject FrameData
    -> MemberSelector(Selector=Image) => #49
    SubscribeSubject VideoFilename
    -> PropertyMapping(FileName) => #51
    #49, #51 -> Bonsai.Vision.VideoWriter => #52
      FileName=.\data\LPE12385\2025_10_10\\DN\Behavior\DN_LPE12385_Video_.avi
      Suffix=FileCount
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    SubscribeSubject VideoFilename => #53
    #52, #53 -> SubscribeWhen
-> Switch

GroupWorkflow LickResponse
    SubscribeSubject ROIValue => #0
    SubscribeSubject ROILickThreshold => #1
    #0, #1 -> WithLatestFrom
    -> GreaterThanOrEqual
    -> MulticastSubject ROIActivated?
    -> DistinctUntilChanged
    -> MulticastSubject Licking?

    SubscribeSubject InitTrial
    -> CreateObservable
        SubscribeSubject Licking?
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 1 : 0
        -> Accumulate
        -> WorkflowOutput
    -> Switch
    -> MulticastSubject LickCount

    Annotation "Licking count"(Text="Do you want to measure licks outside of hte reward region?")

GroupWorkflow RewardDetection
    SubscribeSubject GoReward
    -> IntProperty(Value=1)
    -> Accumulate => #2
    -> MulticastSubject NumberOfRewards => #3
    SubscribeSubject "DropSize (ul)" => #4
    #2, #4 -> WithLatestFrom
    -> Multiply
    -> MulticastSubject WaterDelivered => #7
    #3, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          Item1 as NumberOfRewards,
          Item2 as TotalWaterDelivered
        )
    -> WorkflowOutput

    Disable SubscribeSubject TotalDistance
    -> Disable Multiply(Operand=FloatProperty(Value=-1)) => #12
    Disable SubscribeSubject NextRewardPosition => #13
    #12, #13 -> Disable WithLatestFrom
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression: Item2-Item1
    -> Disable Skip(Count=1) => #16
    #16, #15 -> Disable Zip
    -> Disable Condition
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> GreaterThanOrEqual(Operand=FloatProperty(Value=0)) => #2
        #0 -> MemberSelector(Selector=Item2)
        -> LessThan(Operand=FloatProperty(Value=0)) => #4
        #2, #4 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> Disable BehaviorSubject RewardPositionReached
    -> Disable Condition
        WorkflowInput Source1 => #0
        SubscribeSubject RunningSpeed => #1
        SubscribeSubject MaxRewardSpeed => #2
        #1, #2 -> WithLatestFrom
        -> LessThan => #4
        #0, #4 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> Disable IntProperty(Value=0)
    -> Disable BehaviorSubject GoReward

    Disable SubscribeSubject RewardDistance => #23
    Disable SubscribeSubject TotalDistance => #24
    #23, #24 -> Disable WithLatestFrom
    -> Disable Add
    -> Disable Multiply(Operand=FloatProperty(Value=-1))
    -> Disable MulticastSubject NextRewardPosition

    Disable SubscribeSubject RewardPositionReached => #29
    Disable SubscribeSubject TotalDistance => #30
    Disable SubscribeSubject RewardDistance => #31
    #30, #31 -> Disable WithLatestFrom
    -> Disable Add
    -> Disable Multiply(Operand=FloatProperty(Value=-1)) => #34
    #29, #34 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2)
    -> Disable MulticastSubject NextRewardPosition

Bonsai.Shaders.RenderFrame
-> GroupWorkflow MyCubemapView
    WorkflowInput Source1 => #0
    SubscribeSubject CameraPosition
    -> PropertyMapping(Eye) => #2
    #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=-0), NearClip=0.01, FarClip=20, Light(X=0, Y=0, Z=0)) => #3
    -> MemberSelector(Selector=ViewMatrix) => #4
    SubscribeSubject CameraOrientation
    -> PropertyMapping(Angle) => #6
    #4, #6 -> Bonsai.Shaders.RotateY(Order=Append, Angle=0) => #7
    #3, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item2 as ViewMatrix,
        Item1.ProjectionMatrix as ProjectionMatrix,
        Item1.Light as Light
        )
    -> WorkflowOutput
-> PublishSubject Draw
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #18
-> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicShader, TextureName="", TextureTarget=Texture2D)
-> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicShader, MeshName=PanoramicQuad)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))
#18 -> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.2, Height=0.15, Rotation(X=0, Y=45, Z=0), Translation(X=-0.08, Y=0, Z=-0.048))
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.5, Height=1)
#18 -> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.2, Height=0.15, Rotation(X=0, Y=-45, Z=0), Translation(X=0.08, Y=0, Z=-0.048))
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.5, Height=1)
-> Disable Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)

SubscribeSubject GoReward
-> Bonsai.Dsp.FunctionGenerator(BufferLength=4410, Frequency=1000, Waveform=Sine, SampleRate=44100, Amplitude=10000, Offset=0, Phase=0)
-> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers / Headphones (Realtek Audio)", SampleRate=44100, State=Playing)

Disable GroupWorkflow MainRoom
    ExternalizedMapping(Value(DisplayName=TunnelWidth))
    -> FloatProperty(Value=15) => #1
    -> Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #3
    ExternalizedMapping(Value(DisplayName=TunnelHeight))
    -> FloatProperty(Value=8) => #5
    -> PropertyMapping(ScaleY) => #6
    ExternalizedMapping(Value(DisplayName=MouseHeight))
    -> FloatProperty(Value=3) => #8
    -> PropertyMapping(TranslationY) => #9
    ExternalizedMapping(ScaleX) => #10
    SubscribeSubject TotDistance
    -> Mod(Operand=FloatProperty(Value=200)) => #12
    #3, #6, #9, #10, #12 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        -> Subtract(Operand=FloatProperty(Value=100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #4
        ExternalizedMapping(TranslationX) => #5
        ExternalizedMapping(ScaleY) => #6
        ExternalizedMapping(TranslationY) => #7
        ExternalizedMapping(ScaleX) => #8
        #2, #4, #5, #6, #7, #8 -> GroupWorkflow Left_BG_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=-10.4245911
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=300))
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #4, #5, #6, #7, #8 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=-210.424591
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=10400))
        -> PropertyMapping(TranslationZ(Selector=it)) => #14
        #14, #5, #4, #6, #7 -> GroupWorkflow Left_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=-10310.4248
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=20000
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=-100))
        -> PropertyMapping(TranslationZ) => #17
        #4, #5, #6, #17, #8 -> GroupWorkflow Left_BG_-1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=189.575409
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
    #1 -> Bonsai.Scripting.ExpressionTransform
      Expression: (-it/2)+0.01
    -> PropertyMapping(TranslationXstim) => #15
    SubscribeSubject "z pos" => #16
    #6, #9, #15, #16 -> GroupWorkflow LeftStimuli
        SubscribeSubject StimStart
        -> PropertyMapping(Value) => #1
        WorkflowInput Source1 => #2
        #1, #2 -> Subtract(Operand=FloatProperty(Value=100)) => #3
        SubscribeSubject StimSize => #4
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it/2
        -> PropertyMapping(Value) => #6
        #3, #6 -> Subtract(Operand=FloatProperty(Value=10))
        -> Subtract(Operand=FloatProperty(Value=15))
        -> PropertyMapping(TranslationZ(Selector=it)) => #9
        #4 -> PropertyMapping(ScaleX) => #10
        ExternalizedMapping(TranslationY, ScaleY, TranslationX(DisplayName=TranslationXstim)) => #11
        #9, #10, #11 -> GroupWorkflow Left_Stim
            SubscribeSubject Draw3DStim => #0
            SubscribeSubject tex_Stim_Left
            -> PropertyMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim, TextureTarget=Texture2D) => #3
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #4
            #3, #4 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.49
              TranslationY=3
              TranslationZ=-125
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=20
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
    #1 -> Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #19
    #6, #9, #10, #19, #12 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        -> Subtract(Operand=FloatProperty(Value=100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #4
        ExternalizedMapping(TranslationX) => #5
        ExternalizedMapping(ScaleY) => #6
        ExternalizedMapping(TranslationY) => #7
        ExternalizedMapping(ScaleX) => #8
        #2, #4, #5, #6, #7, #8 -> GroupWorkflow Left_BG_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=-10.4245911
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=300))
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #4, #5, #6, #7, #8 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=-210.424591
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=10400))
        -> PropertyMapping(TranslationZ(Selector=it)) => #14
        #14, #5, #4, #6, #7 -> GroupWorkflow Left_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=-10310.4248
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=20000
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=-100))
        -> PropertyMapping(TranslationZ) => #17
        #4, #5, #6, #17, #8 -> GroupWorkflow Left_BG_-1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=189.575409
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
    #1 -> Bonsai.Scripting.ExpressionTransform
      Expression: (it/2)-0.01
    -> PropertyMapping(TranslationXstim) => #22
    SubscribeSubject "z pos" => #23
    #6, #9, #22, #23 -> GroupWorkflow RightStimuli
        SubscribeSubject StimStart
        -> PropertyMapping(Value) => #1
        WorkflowInput Source1 => #2
        #1, #2 -> Subtract(Operand=FloatProperty(Value=100)) => #3
        SubscribeSubject StimSize => #4
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it/2
        -> PropertyMapping(Value) => #6
        #3, #6 -> Subtract(Operand=FloatProperty(Value=10))
        -> Subtract(Operand=FloatProperty(Value=15))
        -> PropertyMapping(TranslationZ(Selector=it)) => #9
        #4 -> PropertyMapping(ScaleX) => #10
        ExternalizedMapping(TranslationX(DisplayName=TranslationXstim), ScaleY, TranslationY) => #11
        #9, #10, #11 -> GroupWorkflow Right_Stim
            SubscribeSubject Draw3DStim => #0
            SubscribeSubject tex_Stim_Right
            -> PropertyMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim, TextureTarget=Texture2D) => #3
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #4
            #3, #4 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.49
              TranslationY=3
              TranslationZ=-125
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=20
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
    #5 -> Bonsai.Scripting.ExpressionTransform => #25
      Expression: -it/2
    #8 -> PropertyMapping(Value) => #26
    #25, #26 -> Add(Operand=FloatProperty(Value=3))
    -> PropertyMapping(TranslationY) => #28
    #1 -> PropertyMapping(ScaleY) => #29
    #28, #29, #12 -> GroupWorkflow Floor
        WorkflowInput Source1 => #0
        -> Subtract(Operand=FloatProperty(Value=-100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        SubscribeSubject tex_Floor
        -> PropertyMapping(TextureName(Selector=it)) => #4
        ExternalizedMapping(TranslationX) => #5
        ExternalizedMapping(TranslationY) => #6
        ExternalizedMapping(ScaleY) => #7
        ExternalizedMapping(ScaleX) => #8
        #2, #4, #5, #6, #7, #8 -> GroupWorkflow Floor_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=189.575409
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=200
              ScaleY=15
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #4, #5, #6, #7, #8 -> GroupWorkflow Floor_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=-10.4245911
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=200
              ScaleY=15
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=300))
        -> PropertyMapping(TranslationZ(Selector=it)) => #14
        #14, #5, #4, #6, #7, #8 -> GroupWorkflow Floor_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=-210.424591
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=200
              ScaleY=15
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=10400))
        -> PropertyMapping(TranslationZ) => #17
        #17, #4, #5, #6, #7 -> GroupWorkflow Floor_3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=-10310.4248
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=20000
              ScaleY=15
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

    SubscribeSubject TotDistance
    -> Mod(Operand=FloatProperty(Value=3000))
    -> GroupWorkflow Ceiling
        WorkflowInput Source1 => #0
        -> Subtract(Operand=FloatProperty(Value=1500))
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        SubscribeSubject tex_Ceiling
        -> PropertyMapping(TextureName(Selector=it)) => #4
        #2, #4 -> GroupWorkflow Ceiling_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=clouds, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=150
              TranslationZ=-1410.42456
              RotationZ=0
              RotationY=0
              RotationX=90
              ScaleX=3000
              ScaleY=3000
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=4500))
        -> PropertyMapping(TranslationZ(Selector=it)) => #7
        #7, #4 -> GroupWorkflow Ceiling_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=clouds, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=250
              TranslationZ=-4410.425
              RotationZ=0
              RotationY=0
              RotationX=90
              ScaleX=3000
              ScaleY=3000
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

        Disable SubscribeSubject Draw3DStim => #9
        Disable ExternalizedMapping(TextureName) => #10
        #9, #10 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=clouds, TextureTarget=Texture2D) => #11
        Disable ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #12
        #11, #12 -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=200
          TranslationZ=218.854263
          ScaleX=5000
          ScaleY=5000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> Disable WorkflowOutput

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fog, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=-7.48
      TranslationY=3
      TranslationZ=-21
      RotationZ=0
      RotationY=90
      RotationX=0
      ScaleX=40
      ScaleY=8
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fog, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=7.48
      TranslationY=3
      TranslationZ=-21
      RotationZ=0
      RotationY=90
      RotationX=0
      ScaleX=40
      ScaleY=8
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fog, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=0
      TranslationY=-0.9
      TranslationZ=-20
      RotationZ=0
      RotationY=90
      RotationX=90
      ScaleX=40
      ScaleY=20
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray128, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=-7.47
      TranslationY=3
      TranslationZ=-140
      RotationZ=0
      RotationY=90
      RotationX=0
      ScaleX=200
      ScaleY=8
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray128, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=7.48
      TranslationY=3
      TranslationZ=-140
      RotationZ=0
      RotationY=90
      RotationX=0
      ScaleX=200
      ScaleY=8
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray128, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=0
      TranslationY=-0.9
      TranslationZ=-140
      RotationZ=0
      RotationY=90
      RotationX=90
      ScaleX=200
      ScaleY=20
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

Disable GroupWorkflow CountLicks
    SubscribeSubject LickActivity => #0
    SubscribeSubject InRewardZone => #1
    #0, #1 -> WithLatestFrom
    -> BitwiseAnd
    -> DistinctUntilChanged
    -> Condition => #5
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject nLicks => #6
    #5, #6 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> Disable Divide(Operand=IntProperty(Value=1))
    -> MulticastSubject nLicks
    -> WorkflowOutput

Disable GroupWorkflow Static3DScene
    GroupWorkflow Floor
        ExternalizedMapping => #0
          TextureName
          RepeatInterval
          TranslationX
          TranslationY
          RotationZ
          RotationY
          RotationX
          ScaleX
          ScaleY
          ScaleZ
          Ambient
          Diffuse
          Specular
          MeshName
          TranslateZ
        -> GroupWorkflow DrawTexture
            SubscribeSubject Draw => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ)
            -> GroupWorkflow AddTranslation
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=-0.04
              TranslationZ=0.94248
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.63
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
        #0 -> GroupWorkflow DrawTexture
            SubscribeSubject Draw => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ)
            -> GroupWorkflow AddTranslation
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=-0.04
              TranslationZ=0.314160049
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.63
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
        #0 -> GroupWorkflow DrawTexture
            SubscribeSubject Draw => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ)
            -> GroupWorkflow AddTranslation
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=-0.04
              TranslationZ=-0.31415993
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.63
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
        #0 -> GroupWorkflow DrawTexture
            SubscribeSubject Draw => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ)
            -> GroupWorkflow AddTranslation
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=-0.04
              TranslationZ=-0.9424799
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.63
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane

    GroupWorkflow RewardFloor
        ExternalizedMapping(TextureName, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #0
        -> GroupWorkflow DrawTexture
            SubscribeSubject Draw => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            IntProperty(Value=0) => #3
            ExternalizedMapping(Repeat#) => #4
            #3, #4 -> GroupWorkflow AddTranslation
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #6
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #7
            #2, #6, #7 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.039
              TranslationZ=0.5
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.1
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
        #0 -> GroupWorkflow DrawTexture
            SubscribeSubject Draw => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            IntProperty(Value=0) => #3
            ExternalizedMapping(Repeat#) => #4
            #3, #4 -> GroupWorkflow AddTranslation
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #6
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #7
            #2, #6, #7 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.039
              TranslationZ=0
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.1
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
        #0 -> GroupWorkflow DrawTexture
            SubscribeSubject Draw => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            IntProperty(Value=0) => #3
            ExternalizedMapping(Repeat#) => #4
            #3, #4 -> GroupWorkflow AddTranslation
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #6
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #7
            #2, #6, #7 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.039
              TranslationZ=-0.5
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.1
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
        #0 -> GroupWorkflow DrawTexture
            SubscribeSubject Draw => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            IntProperty(Value=0) => #3
            ExternalizedMapping(Repeat#) => #4
            #3, #4 -> GroupWorkflow AddTranslation
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #6
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #7
            #2, #6, #7 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.039
              TranslationZ=-1
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.1
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane

    Disable SubscribeSubject Draw
    -> Disable GroupWorkflow RewardLeft
        WorkflowInput Source1 => #0
        ExternalizedMapping(TextureName, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #1
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.0489
              TranslationY=0
              TranslationZ=-1.99999893
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.0489
              TranslationY=0
              TranslationZ=-2.499999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.0489
              TranslationY=0
              TranslationZ=-2.999999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.0489
              TranslationY=0
              TranslationZ=-3.499999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))

    Disable SubscribeSubject Draw
    -> Disable GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        ExternalizedMapping => #1
          TextureName
          RepeatInterval
          TranslationX
          TranslationY
          RotationZ
          RotationY
          RotationX
          ScaleX
          ScaleY
          ScaleZ
          Ambient
          Diffuse
          Specular
          MeshName
          TranslateZ
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-0.9424799
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #1, #0 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-1.57079983
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-2.19911981
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-2.82743979
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))

    Disable SubscribeSubject Draw
    -> Disable GroupWorkflow RewardLeft
        WorkflowInput Source1 => #0
        ExternalizedMapping(TextureName, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #1
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.0489
              TranslationY=0
              TranslationZ=-1.99999893
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.0489
              TranslationY=0
              TranslationZ=-2.499999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.0489
              TranslationY=0
              TranslationZ=-2.999999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.0489
              TranslationY=0
              TranslationZ=-3.499999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))

    Disable SubscribeSubject Draw
    -> Disable GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        ExternalizedMapping => #1
          TextureName
          RepeatInterval
          TranslationX
          TranslationY
          RotationZ
          RotationY
          RotationX
          ScaleX
          ScaleY
          ScaleZ
          Ambient
          Diffuse
          Specular
          MeshName
          TranslateZ
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=0
              TranslationZ=-0.9424799
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #1, #0 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=0
              TranslationZ=-1.57079983
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=0
              TranslationZ=-2.19911981
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=0
              TranslationZ=-2.82743979
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))

    Disable SubscribeSubject Draw
    -> Disable SelectMany DrawRewards
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Reward) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> InputMapping(Selector=it, Repetitions(Selector=Item2.Repetitions))
        -> SelectMany => #7
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=4) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2.Item1) => #1
                #0 -> MemberSelector(Selector=Item2.Item2) => #2
                #0 -> MemberSelector(Selector=Item1) => #3
                SubscribeSubject RewardDistance => #4
                #3, #4 -> WithLatestFrom
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject NextRewardPosition => #8
                #0, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #10
                #7, #10 -> Zip
                -> Add => #12
                #1, #2, #12 -> Zip
                -> WorkflowOutput
            -> Condition "Not Textured?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping
              Selector=Item1
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
            -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-0.045
              TranslationY=0
              TranslationZ=-4.999999
              RotationZ=0
              RotationY=89.95438
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=0)
              Diffuse(X=1, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> Condition Textured? => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> NotEqual(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #10
            #8 -> PropertyMapping => #11
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
            #10, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-6.59735966
              RotationZ=0
              RotationY=-89.95438
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #7, #12 -> Merge => #13
            #2 -> MemberSelector(Selector=Item2.Repetitions)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #16
            #13, #16 -> Skip(Count=3)
            -> Take(Count=1)
            -> WorkflowOutput
            #4 -> MemberSelector(Selector=Item3)
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #9
        #7, #9 -> Take(Count=2)
        -> WorkflowOutput

SubscribeSubject TrialFile
-> PropertyMapping(FileName) => #34
SubscribeSubject TrialNr
-> Add(Operand=IntProperty(Value=1))
-> PropertyMapping(SkipRows) => #37
Disable Bonsai.Windows.Input.KeyDown(Filter=T, SuppressRepetitions=false) => #38
#34, #37, #38 -> Bonsai.IO.CsvReader(FileName=Trials\trials.csv, ScanPattern="%i,%s,%d,%d,%d,%d,%i,%i", SkipRows=3)
-> Take(Count=1)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new (
      Item1 as TrialNumber,
      Item2 as TrialJsonFile,
      Item3 as MinReappearance,
      Item4 as MaxReappearance,
      Item5 as OcclusionStart,
      Item6 as CorridorSize,
      Item7 as IsPassiveReward
    )
-> MulticastSubject TrialAttributes
-> SelectMany InitTrial => #43
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=MinReappearance)
    -> MulticastSubject RewardDistance => #2
    #0 -> IntProperty(Value=0)
    -> MulticastSubject InitTrial => #4
    #0, #2, #4 -> Zip
    -> MemberSelector(Selector=Item1)
    -> Take(Count=1)
    -> WorkflowOutput
-> Condition IsPassiveTrial?
    WorkflowInput Source1
    -> MemberSelector(Selector=IsPassiveReward)
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> SelectMany RunPassiveTrial => #45
    SubscribeSubject TotalDistance => #0
    SubscribeSubject TrialAttributes
    -> MemberSelector(Selector=MinReappearance) => #2
    #0, #2 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> Take(Count=1)
    -> IntProperty(Value=1)
    -> MulticastSubject GoReward

    SubscribeSubject TotalDistance => #8
    SubscribeSubject TrialAttributes
    -> MemberSelector(Selector=CorridorSize) => #10
    #8, #10 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
#43 -> Condition IsActiveTrial?
    WorkflowInput Source1
    -> MemberSelector(Selector=IsPassiveReward)
    -> Equal(Operand=IntProperty(Value=0))
    -> WorkflowOutput
-> SelectMany RunActiveTrial => #47
    SubscribeSubject TotalDistance => #0
    SubscribeSubject TrialAttributes
    -> MemberSelector(Selector=MinReappearance) => #2
    #0, #2 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject Licking? => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> Take(Count=1)
    -> IntProperty(Value=1)
    -> MulticastSubject GoReward

    SubscribeSubject TotalDistance => #9
    SubscribeSubject TrialAttributes
    -> MemberSelector(Selector=MaxReappearance) => #11
    #9, #11 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
#45, #47 -> Merge
-> SelectMany EndTrial
    WorkflowInput Source1
    -> IntProperty(Value=1)
    -> MulticastSubject EndTrial => #2
    SubscribeSubject TrialNr => #3
    #2, #3 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialNr
    -> Take(Count=1)
    -> WorkflowOutput
-> Take(Count=1) => #50
SubscribeSubject NumberOfTrials
-> PropertyMapping(Count) => #52
#50, #52 -> RepeatCount(Count=5) => #53
Bonsai.Windows.Input.KeyDown(Filter=T, SuppressRepetitions=false) => #54
#53, #54 -> SubscribeWhen

SubscribeSubject Licking?
SubscribeSubject RewardDuration
SubscribeSubject TotalDistance
SubscribeSubject GoReward
SubscribeSubject InitTrial
SubscribeSubject ROIValue
SubscribeSubject TrialAttributes
