WorkflowBuilder(Version=2.9.0)
Annotation IMPORTANT
  Text: If for some reason, the shaders window hangs, just comment the Dynamic3DScene node and run the code without it. Then uncomment it back again, and it should be working. It is likely some weird undesired left over from a previous run.
-> GroupWorkflow Init
    ExternalizedMapping(Value(DisplayName=ProtocolFile))
    -> StringProperty(Value=Protocols\luminance_trials.csv)
    -> BehaviorSubject ProtocolFile

    SubscribeSubject ProtocolFile
    -> PropertyMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=Protocols\luminance_trials.csv, ScanPattern="%i,%f,%i", SkipRows=1)
    -> Count => #6
    SubscribeSubject ProtocolFile => #7
    #6, #7 -> SubscribeWhen
    -> BehaviorSubject NumberOfTrials

    FloatProperty(Value=0.5)
    -> BehaviorSubject LuminanceLevel

    IntProperty(Value=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject TrialDuration

    IntProperty(Value=1)
    -> BehaviorSubject TrialNumber

    ExternalizedMapping(Value(DisplayName="RewardDuration (ms)"))
    -> IntProperty(Value=77)
    -> BehaviorSubject RewardDuration

    ExternalizedMapping(Value(DisplayName="RewardDistance (m)"))
    -> FloatProperty(Value=2)
    -> BehaviorSubject RewardDistance

    ExternalizedMapping(Value(DisplayName="MaxRewardSpeed (m/s)"))
    -> FloatProperty(Value=1)
    -> BehaviorSubject MaxRewardSpeed

    FloatProperty(Value=1)
    -> BehaviorSubject RunningSpeed

    FloatProperty(Value=0)
    -> BehaviorSubject TotalDistance

    DoubleProperty(Value=0)
    -> BehaviorSubject WheelEncoder

    DoubleProperty(Value=0)
    -> BehaviorSubject HarpTimestamp

    DoubleProperty(Value=0)
    -> BehaviorSubject ScreenONTimestamp

    DoubleProperty(Value=0)
    -> BehaviorSubject ScreenTriggerTimestamp

    DoubleProperty(Value=0)
    -> BehaviorSubject ScreenOFFTimestamp

    FloatProperty(Value=0)
    -> Take(Count=1)
    -> Multiply(Operand=FloatProperty(Value=-1))
    -> BehaviorSubject NextRewardPosition

    FloatProperty(Value=0)
    -> BehaviorSubject TeleportToPosition

    Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> BehaviorSubject CameraPosition

    FloatProperty(Value=0)
    -> BehaviorSubject CameraOrientation

    IntProperty(Value=0)
    -> BehaviorSubject NumberOfRewards

    ExternalizedMapping(Value(DisplayName="DropSize (ul)"))
    -> FloatProperty(Value=10)
    -> BehaviorSubject "DropSize (ul)"

    ExternalizedMapping(Value(DisplayName="HalfRewardArea (m)"))
    -> FloatProperty(Value=0.05)
    -> BehaviorSubject HalfRewardArea

    FloatProperty(Value=0)
    -> BehaviorSubject WaterDelivered

    BooleanProperty(Value=false)
    -> BehaviorSubject RewardDelivered?

    BooleanProperty(Value=false)
    -> BehaviorSubject Licking?

    ExternalizedMapping(Value(DisplayName=LickActivityThreshold, Description="The average pixel threshold above which the tongue is present."))
    -> FloatProperty(Value=60)
    -> BehaviorSubject LickActivityThreshold

    ExternalizedMapping(Value(DisplayName=LightModulationFile, Description="Leave empty for no modulation."))
    -> StringProperty(Value=Protocols\light_modulation_full_half_none.csv)
    -> BehaviorSubject LightModulationFile => #69
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it != "" && it != " "
        -> WorkflowOutput
    -> InputMapping(Selector=it, FileName(Selector=it))
    -> SelectMany
        ExternalizedMapping(FileName)
        -> Bonsai.IO.CsvReader(FileName=Protocols\light_modulation_full_half_none.csv, ScanPattern=%f, SkipRows=0)
        -> ToArray
        -> WorkflowOutput
    -> BehaviorSubject LightModulation
    -> BooleanProperty(Value=false) => #74
    #69 -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Length)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #76
    #74, #76 -> Merge
    -> BehaviorSubject UseDefaultLighting?

GroupWorkflow InitShaders
    ExternalizedMapping(Width, Height, Location, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=6138
      Height=1536
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.MeshResources
      Meshes
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=PanoramicQuad, QuadEffects=None)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=Cylinder, FileName=Models\cylinder.obj)
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PanoramicShader
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\panoramic.vert
          FragmentShader=Shaders\panoramic.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PlainColorShader
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\plain_color.vert
          FragmentShader=Shaders\plain_color.frag
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Rocks_adjusted
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\floor\rocks_adjusted.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=blobs
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\blobs.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=checker
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\checker.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=chevron
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\chevron.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=pinstripe
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\pinstripe.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=BG_0.04_0.32_100_adjusted
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\background\BG_0.04_0.32_100_adjusted.png
          ColorType=Unchanged
          FlipMode=Vertical
    -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
    -> Bonsai.Resources.LoadResources

Disable GroupWorkflow MouseWheelNavigation
    Bonsai.Windows.Input.MouseWheel => #0
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> FloatProperty(Value=0.01) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> LessThan(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> FloatProperty(Value=-0.01) => #4
    FloatProperty(Value=0) => #5
    SubscribeSubject TeleportToPosition => #6
    SubscribeSubject CameraPosition
    -> MemberSelector(Selector=Z) => #8
    #6, #8 -> WithLatestFrom
    -> Subtract => #10
    #2, #4, #5, #10 -> Merge
    -> BehaviorSubject DistanceAdded => #12
    SubscribeSubject CameraOrientation => #13
    #12, #13 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        it.X as X,
        it.Y as Y,
        it.Z % 10.0 as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> MulticastSubject CameraPosition

    SubscribeSubject Draw => #23
    SubscribeSubject TotalDistance => #24
    #23, #24 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #26
    -> Skip(Count=1) => #27
    #27, #26 -> Zip
    -> Subtract
    -> MulticastSubject RunningSpeed

    SubscribeSubject DistanceAdded
    -> Multiply(Operand=FloatProperty(Value=-1))
    -> Accumulate
    -> MulticastSubject TotalDistance

Disable GroupWorkflow KeyboardNavigation
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> FloatProperty(Value=0.1) => #1
    Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> FloatProperty(Value=-0.1) => #3
    FloatProperty(Value=0) => #4
    #1, #3, #4 -> Merge
    -> Accumulate
    -> MulticastSubject CameraOrientation

    Bonsai.Shaders.RenderFrame => #8
    SubscribeSubject RunningSpeed => #9
    #8, #9 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #11
    SubscribeSubject CameraOrientation => #12
    #11, #12 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=NaN, Y=0, Z=NaN)
    -> Accumulate
    -> MulticastSubject CameraPosition

    Bonsai.Windows.Input.KeyDown(Filter=W, SuppressRepetitions=false)
    -> FloatProperty(Value=-1) => #20
    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> FloatProperty(Value=1) => #22
    Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false)
    -> FloatProperty(Value=0) => #24
    FloatProperty(Value=0) => #25
    #20, #22, #24, #25 -> Merge => #26
    ExternalizedMapping(Value(DisplayName="SpeedGain (m/s)"))
    -> FloatProperty(Value=0.1) => #28
    ExternalizedMapping(Value(DisplayName="GraphicsRefreshRate (Hz)")) => #29
    Annotation GraphicsRateNormalization(Text="It divides by 60 which is the typical refresh rate of the graphics card.") => #30
    #28, #29, #30 -> Divide(Operand=FloatProperty(Value=60)) => #31
    #26, #31 -> WithLatestFrom
    -> Multiply
    -> MulticastSubject RunningSpeed

    Disable Bonsai.Windows.Input.KeyDown(Filter=W, SuppressRepetitions=false)
    -> Disable FloatProperty(Value=-1) => #36
    Disable Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> Disable FloatProperty(Value=1) => #38
    Disable Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false)
    -> Disable FloatProperty(Value=0) => #40
    Disable FloatProperty(Value=0) => #41
    #36, #38, #40, #41 -> Disable Merge => #42
    Disable FloatProperty(Value=0) => #43
    #42, #43 -> Disable WithLatestFrom => #44
    Disable SubscribeSubject CameraOrientation => #45
    #44, #45 -> Disable WithLatestFrom
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> Disable InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Disable Bonsai.Shaders.CreateVector3(X=0.198669344, Y=0, Z=-0.9800666)
    -> Disable Accumulate
    -> Disable BehaviorSubject CameraPosition

GroupWorkflow HarpWheelNavigation
    GroupWorkflow ProcessWheelData
        ExternalizedMapping("WheelEncoderMin (V)", "WheelEncoderMax (V)")
        -> GroupWorkflow InitWheelData
            ExternalizedMapping(Value(DisplayName="WheelEncoderMin (V)"))
            -> FloatProperty(Value=0.1)
            -> BehaviorSubject RotEncMin

            ExternalizedMapping(Value(DisplayName="WheelEncoderMax (V)"))
            -> FloatProperty(Value=4.7)
            -> BehaviorSubject RotEncMax

            IntProperty(Value=0)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                0.0 as Position,
                0.0 as Difference,
                0 as Turns)
            -> BehaviorSubject WheelData

            FloatProperty(Value=0)
            -> BehaviorSubject Encoder

            BooleanProperty(Value=false)
            -> BehaviorSubject TimeOut

        SubscribeSubject WheelEncoder
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it as Position,
            0.0 as Difference,
            0 as Turns)
        -> Scan
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Position)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
              Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
            #3, #0 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2.Value.Position as Position,
                Item1 as Difference,
                Item2.Accumulation.Turns + (Item2.Accumulation.Difference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
            -> WorkflowOutput
        -> MulticastSubject WheelData

        SubscribeSubject WheelData => #6
        -> MemberSelector(Selector=Position) => #7
        SubscribeSubject RotEncMin
        -> PropertyMapping(Value) => #9
        #7, #9 -> Subtract(Operand=FloatProperty(Value=0)) => #10
        SubscribeSubject RotEncMax
        -> PropertyMapping(Value) => #12
        #10, #12 -> Divide(Operand=FloatProperty(Value=4.7)) => #13
        #6 -> MemberSelector(Selector=Turns)
        -> PropertyMapping(Value) => #15
        #13, #15 -> Add(Operand=FloatProperty(Value=0))
        -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
        -> Bonsai.Dsp.Difference(Order=1) => #18
        ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #19
        #18, #19 -> Multiply(Operand=DoubleProperty(Value=0.62832)) => #20
        SubscribeSubject TimeOut
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 1 : 0
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 1-it
        -> PropertyMapping(Value) => #24
        #20, #24 -> Multiply(Operand=DoubleProperty(Value=1))
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> MulticastSubject TotalDistance
        #20 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> MulticastSubject RunningSpeed

        Annotation UpdateEncoderLimits(Text="")
        -> SubscribeSubject WheelData
        -> MemberSelector(Selector=Position)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #34
          Expression: Convert.ToSingle(it)
        SubscribeSubject RotEncMin => #35
        #34, #35 -> WithLatestFrom
        -> Bonsai.Numerics.Min
        -> MulticastSubject RotEncMin
        SubscribeSubject RotEncMax => #39
        #34, #39 -> WithLatestFrom
        -> Bonsai.Numerics.Max
        -> MulticastSubject RotEncMax

    SubscribeSubject TotalDistance
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        0 as X,
        0 as Y,
        -it as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-0.000238792141)
    -> MulticastSubject CameraPosition

    Disable SubscribeSubject TotalDistance => #6
    Disable SubscribeSubject TeleportToPosition => #7
    Disable SubscribeSubject TotalDistance => #8
    #7, #8 -> Disable WithLatestFrom
    -> Disable Subtract => #10
    #6, #10 -> Disable WithLatestFrom
    -> Disable Add
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        0 as X,
        0 as Y,
        -it%1.88496 as Z
        )
    -> Disable InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Disable Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1.55102813)
    -> Disable MulticastSubject CameraPosition

Disable GroupWorkflow Dynamic3DScene
    IntProperty(Value=0) => #0
    -> GroupWorkflow DrawArena => #1
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Arena)
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
        -> SelectMany DrawRepetitions => #8
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=3) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany DrawObjects => #4
                SubscribeSubject CameraPosition => #0
                WorkflowInput Source1 => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                      Item1.Z as CameraPosition,
                      Item2.Item1 as Repetition,
                      Item2.Item2 as Landmark
                    )
                -> BehaviorSubject LandmarkData

                SubscribeSubject Draw => #5
                SubscribeSubject LandmarkData => #6
                #5, #6 -> WithLatestFrom => #7
                -> Condition TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> NotEqual(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> Disable GroupWorkflow DrawTexturedObject
                    WorkflowInput Source1 => #0
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Checkerboard, TextureTarget=Texture2D) => #2
                    SubscribeSubject LandmarkData => #3
                    #2, #3 -> WithLatestFrom => #4
                    -> InputMapping => #5
                      Selector=Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #4 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #8
                    SubscribeSubject LandmarkData => #9
                    #0, #9 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #11
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #11 -> Condition => #14
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #15
                    #14, #15 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #13, #17 -> Merge => #18
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #19
                    #5, #8, #19 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-0.049
                      TranslationY=0
                      TranslationZ=-1.57080007
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=0, Y=0.1, Z=0)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                    #0 -> Disable MemberSelector(Selector=Item2.Landmark.Name) => #22
                    #0 -> Disable MemberSelector(Selector=Item2.Landmark.Texture) => #23
                    #22, #23 -> Disable Zip => #24
                    #24, #18 -> Disable WithLatestFrom
                -> GroupWorkflow DrawTexturedObject => #10
                    Annotation Workaround(Text='This way of setting properties of the DrawModel, prevents it crosstalk between parallel "instances" running under SelectMany')
                    -> SubscribeSubject Source => #1
                    SubscribeSubject LandmarkData => #2
                    #1, #2 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> BehaviorSubject Landmark

                    WorkflowInput Source1
                    -> BehaviorSubject Source
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100_adjusted, TextureTarget=Texture2D) => #9
                    SubscribeSubject Landmark
                    -> PropertyMapping => #11
                      TranslationX(Selector=Landmark.Translation[0])
                      TranslationY(Selector=Landmark.Translation[1])
                      RotationX(Selector=Landmark.Rotation[0])
                      RotationY(Selector=Landmark.Rotation[1])
                      RotationZ(Selector=Landmark.Rotation[2])
                      ScaleX(Selector=Landmark.Scale[0])
                      ScaleY(Selector=Landmark.Scale[1])
                      ScaleZ(Selector=Landmark.Scale[2])
                      Diffuse(Selector="Landmark.DiffuseColor[0], Landmark.DiffuseColor[1], Landmark.DiffuseColor[2]")
                      Specular(Selector="Landmark.SpecularColor[0], Landmark.SpecularColor[1], Landmark.SpecularColor[2]")
                      MeshName(Selector=Landmark.MeshType)
                    SubscribeSubject Landmark
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #14
                    SubscribeSubject Landmark => #15
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #15 -> Condition => #18
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #19
                    #18, #19 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #17, #21 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #23
                    #9, #11, #14, #23 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-0.05
                      TranslationY=0
                      TranslationZ=-3
                      RotationZ=0
                      RotationY=-89.95438
                      RotationX=0
                      ScaleX=2.05
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #7 -> Condition Non-TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> Equal(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> Disable GroupWorkflow DrawPlainObject
                    WorkflowInput Source1 => #0
                    SubscribeSubject LandmarkData => #1
                    #0, #1 -> WithLatestFrom => #2
                    -> InputMapping => #3
                      Selector=Item1.Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #2 -> MemberSelector(Selector=Item2) => #4
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #6
                    #4 -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #4 -> Condition => #9
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #10
                    #9, #10 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #8, #12 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #14
                    #3, #6, #14 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0.045
                      TranslationY=0
                      TranslationZ=-3.1416
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=0, Z=0)
                      Diffuse(X=1, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                -> GroupWorkflow DrawPlainObject => #13
                    Annotation Workaround(Text='This way of setting properties of the DrawModel, prevents it crosstalk between parallel "instances" running under SelectMany')
                    -> SubscribeSubject PlainSource => #1
                    SubscribeSubject LandmarkData => #2
                    #1, #2 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> BehaviorSubject PlainLandmark

                    WorkflowInput Source1
                    -> BehaviorSubject PlainSource
                    -> MemberSelector(Selector=Item1) => #8
                    SubscribeSubject PlainLandmark
                    -> PropertyMapping => #10
                      TranslationX(Selector=Landmark.Translation[0])
                      TranslationY(Selector=Landmark.Translation[1])
                      RotationX(Selector=Landmark.Rotation[0])
                      RotationY(Selector=Landmark.Rotation[1])
                      RotationZ(Selector=Landmark.Rotation[2])
                      ScaleX(Selector=Landmark.Scale[0])
                      ScaleY(Selector=Landmark.Scale[1])
                      ScaleZ(Selector=Landmark.Scale[2])
                      Diffuse(Selector="Landmark.DiffuseColor[0], Landmark.DiffuseColor[1], Landmark.DiffuseColor[2]")
                      Specular(Selector="Landmark.SpecularColor[0], Landmark.SpecularColor[1], Landmark.SpecularColor[2]")
                      MeshName(Selector=Landmark.MeshType)
                    SubscribeSubject PlainLandmark
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #13
                    SubscribeSubject PlainLandmark => #14
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #14 -> Condition => #17
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #18
                    #17, #18 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #20
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #16, #20 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #22
                    #8, #10, #13, #22 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0
                      TranslationY=0
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=0
                      ScaleX=1
                      ScaleY=1
                      ScaleZ=1
                      Ambient(X=0.2, Y=0.2, Z=0.2)
                      Diffuse(X=0.8, Y=0.8, Z=0.8)
                      Specular(X=0.8, Y=0.8, Z=0.8)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #10, #13 -> Merge
                -> IntProperty(Value=0) => #15
                SubscribeSubject ReloadVRFile => #16
                #15, #16 -> TakeUntil
                -> WorkflowOutput
            SubscribeSubject ReloadVRFile => #5
            #4, #5 -> TakeUntil
            -> WorkflowOutput
        SubscribeSubject ReloadVRFile => #9
        #8, #9 -> TakeUntil
        -> WorkflowOutput
    #0 -> GroupWorkflow DrawLandmarks => #2
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Landmarks)
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
        -> SelectMany DrawRepetitions => #8
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=3) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany DrawObjects => #4
                SubscribeSubject CameraPosition => #0
                WorkflowInput Source1 => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                      Item1.Z as CameraPosition,
                      Item2.Item1 as Repetition,
                      Item2.Item2 as Landmark
                    )
                -> BehaviorSubject LandmarkData

                SubscribeSubject Draw => #5
                SubscribeSubject LandmarkData => #6
                #5, #6 -> WithLatestFrom => #7
                -> Condition TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> NotEqual(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> Disable GroupWorkflow DrawTexturedObject
                    WorkflowInput Source1 => #0
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Checkerboard, TextureTarget=Texture2D) => #2
                    SubscribeSubject LandmarkData => #3
                    #2, #3 -> WithLatestFrom => #4
                    -> InputMapping => #5
                      Selector=Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #4 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #8
                    SubscribeSubject LandmarkData => #9
                    #0, #9 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #11
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #11 -> Condition => #14
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #15
                    #14, #15 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #13, #17 -> Merge => #18
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #19
                    #5, #8, #19 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-0.049
                      TranslationY=0
                      TranslationZ=-1.57080007
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=0, Y=0.1, Z=0)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                    #0 -> Disable MemberSelector(Selector=Item2.Landmark.Name) => #22
                    #0 -> Disable MemberSelector(Selector=Item2.Landmark.Texture) => #23
                    #22, #23 -> Disable Zip => #24
                    #24, #18 -> Disable WithLatestFrom
                -> GroupWorkflow DrawTexturedObject => #10
                    Annotation Workaround(Text='This way of setting properties of the DrawModel, prevents it crosstalk between parallel "instances" running under SelectMany')
                    -> SubscribeSubject Source => #1
                    SubscribeSubject LandmarkData => #2
                    #1, #2 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> BehaviorSubject Landmark

                    WorkflowInput Source1
                    -> BehaviorSubject Source
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=blobs, TextureTarget=Texture2D) => #9
                    SubscribeSubject Landmark
                    -> PropertyMapping => #11
                      TranslationX(Selector=Landmark.Translation[0])
                      TranslationY(Selector=Landmark.Translation[1])
                      RotationX(Selector=Landmark.Rotation[0])
                      RotationY(Selector=Landmark.Rotation[1])
                      RotationZ(Selector=Landmark.Rotation[2])
                      ScaleX(Selector=Landmark.Scale[0])
                      ScaleY(Selector=Landmark.Scale[1])
                      ScaleZ(Selector=Landmark.Scale[2])
                      Diffuse(Selector="Landmark.DiffuseColor[0], Landmark.DiffuseColor[1], Landmark.DiffuseColor[2]")
                      Specular(Selector="Landmark.SpecularColor[0], Landmark.SpecularColor[1], Landmark.SpecularColor[2]")
                      MeshName(Selector=Landmark.MeshType)
                    SubscribeSubject Landmark
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #14
                    SubscribeSubject Landmark => #15
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #15 -> Condition => #18
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #19
                    #18, #19 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #17, #21 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #23
                    #9, #11, #14, #23 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-0.049
                      TranslationY=0
                      TranslationZ=-3.6
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #7 -> Condition Non-TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> Equal(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> Disable GroupWorkflow DrawPlainObject
                    WorkflowInput Source1 => #0
                    SubscribeSubject LandmarkData => #1
                    #0, #1 -> WithLatestFrom => #2
                    -> InputMapping => #3
                      Selector=Item1.Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #2 -> MemberSelector(Selector=Item2) => #4
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #6
                    #4 -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #4 -> Condition => #9
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #10
                    #9, #10 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #8, #12 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #14
                    #3, #6, #14 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0.045
                      TranslationY=0
                      TranslationZ=-3.1416
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=0, Z=0)
                      Diffuse(X=1, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                -> GroupWorkflow DrawPlainObject => #13
                    Annotation Workaround(Text='This way of setting properties of the DrawModel, prevents it crosstalk between parallel "instances" running under SelectMany')
                    -> SubscribeSubject PlainSource => #1
                    SubscribeSubject LandmarkData => #2
                    #1, #2 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> BehaviorSubject PlainLandmark

                    WorkflowInput Source1
                    -> BehaviorSubject PlainSource
                    -> MemberSelector(Selector=Item1) => #8
                    SubscribeSubject PlainLandmark
                    -> PropertyMapping => #10
                      TranslationX(Selector=Landmark.Translation[0])
                      TranslationY(Selector=Landmark.Translation[1])
                      RotationX(Selector=Landmark.Rotation[0])
                      RotationY(Selector=Landmark.Rotation[1])
                      RotationZ(Selector=Landmark.Rotation[2])
                      ScaleX(Selector=Landmark.Scale[0])
                      ScaleY(Selector=Landmark.Scale[1])
                      ScaleZ(Selector=Landmark.Scale[2])
                      Diffuse(Selector="Landmark.DiffuseColor[0], Landmark.DiffuseColor[1], Landmark.DiffuseColor[2]")
                      Specular(Selector="Landmark.SpecularColor[0], Landmark.SpecularColor[1], Landmark.SpecularColor[2]")
                      MeshName(Selector=Landmark.MeshType)
                    SubscribeSubject PlainLandmark
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #13
                    SubscribeSubject PlainLandmark => #14
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #14 -> Condition => #17
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #18
                    #17, #18 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #20
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #16, #20 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #22
                    #8, #10, #13, #22 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0
                      TranslationY=0
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=0
                      ScaleX=1
                      ScaleY=1
                      ScaleZ=1
                      Ambient(X=0.2, Y=0.2, Z=0.2)
                      Diffuse(X=0.8, Y=0.8, Z=0.8)
                      Specular(X=0.8, Y=0.8, Z=0.8)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #10, #13 -> Merge
                -> IntProperty(Value=0) => #15
                SubscribeSubject ReloadVRFile => #16
                #15, #16 -> TakeUntil
                -> WorkflowOutput
            SubscribeSubject ReloadVRFile => #5
            #4, #5 -> TakeUntil
            -> WorkflowOutput
        SubscribeSubject ReloadVRFile => #9
        #8, #9 -> TakeUntil
        -> WorkflowOutput
    #0 -> GroupWorkflow DrawRewards => #3
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Reward)
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
        -> SelectMany DrawRepetitions => #8
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=3) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany DrawObjects => #4
                SubscribeSubject CameraPosition => #0
                WorkflowInput Source1 => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                      Item1.Z as CameraPosition,
                      Item2.Item1 as Repetition,
                      Item2.Item2 as Landmark
                    )
                -> BehaviorSubject LandmarkData

                SubscribeSubject Draw => #5
                SubscribeSubject LandmarkData => #6
                #5, #6 -> WithLatestFrom => #7
                -> Condition TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> NotEqual(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> Disable GroupWorkflow DrawTexturedObject
                    WorkflowInput Source1 => #0
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Checkerboard, TextureTarget=Texture2D) => #2
                    SubscribeSubject LandmarkData => #3
                    #2, #3 -> WithLatestFrom => #4
                    -> InputMapping => #5
                      Selector=Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #4 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #8
                    SubscribeSubject LandmarkData => #9
                    #0, #9 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #11
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #11 -> Condition => #14
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #15
                    #14, #15 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #13, #17 -> Merge => #18
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #19
                    #5, #8, #19 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-0.049
                      TranslationY=0
                      TranslationZ=-1.57080007
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=0, Y=0.1, Z=0)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                    #0 -> Disable MemberSelector(Selector=Item2.Landmark.Name) => #22
                    #0 -> Disable MemberSelector(Selector=Item2.Landmark.Texture) => #23
                    #22, #23 -> Disable Zip => #24
                    #24, #18 -> Disable WithLatestFrom
                -> GroupWorkflow DrawTexturedObject => #10
                    Annotation Workaround(Text='This way of setting properties of the DrawModel, prevents it crosstalk between parallel "instances" running under SelectMany')
                    -> SubscribeSubject Source => #1
                    SubscribeSubject LandmarkData => #2
                    #1, #2 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> BehaviorSubject Landmark

                    WorkflowInput Source1
                    -> BehaviorSubject Source
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stimD, TextureTarget=Texture2D) => #9
                    SubscribeSubject Landmark
                    -> PropertyMapping => #11
                      TranslationX(Selector=Landmark.Translation[0])
                      TranslationY(Selector=Landmark.Translation[1])
                      RotationX(Selector=Landmark.Rotation[0])
                      RotationY(Selector=Landmark.Rotation[1])
                      RotationZ(Selector=Landmark.Rotation[2])
                      ScaleX(Selector=Landmark.Scale[0])
                      ScaleY(Selector=Landmark.Scale[1])
                      ScaleZ(Selector=Landmark.Scale[2])
                      Diffuse(Selector="Landmark.DiffuseColor[0], Landmark.DiffuseColor[1], Landmark.DiffuseColor[2]")
                      Specular(Selector="Landmark.SpecularColor[0], Landmark.SpecularColor[1], Landmark.SpecularColor[2]")
                      MeshName(Selector=Landmark.MeshType)
                    SubscribeSubject Landmark
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #14
                    SubscribeSubject Landmark => #15
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #15 -> Condition => #18
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #19
                    #18, #19 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #17, #21 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #23
                    #9, #11, #14, #23 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-0.039
                      TranslationZ=-5.65488
                      RotationZ=0
                      RotationY=0
                      RotationX=-89.95438
                      ScaleX=0.1
                      ScaleY=0.1
                      ScaleZ=0.1
                      Ambient(X=0.8, Y=0.8, Z=0.8)
                      Diffuse(X=1, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #7 -> Condition Non-TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> Equal(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> Disable GroupWorkflow DrawPlainObject
                    WorkflowInput Source1 => #0
                    SubscribeSubject LandmarkData => #1
                    #0, #1 -> WithLatestFrom => #2
                    -> InputMapping => #3
                      Selector=Item1.Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #2 -> MemberSelector(Selector=Item2) => #4
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #6
                    #4 -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #4 -> Condition => #9
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #10
                    #9, #10 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #8, #12 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #14
                    #3, #6, #14 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0.045
                      TranslationY=0
                      TranslationZ=-3.1416
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=0, Z=0)
                      Diffuse(X=1, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                -> GroupWorkflow DrawPlainObject => #13
                    Annotation Workaround(Text='This way of setting properties of the DrawModel, prevents it crosstalk between parallel "instances" running under SelectMany')
                    -> SubscribeSubject PlainSource => #1
                    SubscribeSubject LandmarkData => #2
                    #1, #2 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> BehaviorSubject PlainLandmark

                    WorkflowInput Source1
                    -> BehaviorSubject PlainSource
                    -> MemberSelector(Selector=Item1) => #8
                    SubscribeSubject PlainLandmark
                    -> PropertyMapping => #10
                      TranslationX(Selector=Landmark.Translation[0])
                      TranslationY(Selector=Landmark.Translation[1])
                      RotationX(Selector=Landmark.Rotation[0])
                      RotationY(Selector=Landmark.Rotation[1])
                      RotationZ(Selector=Landmark.Rotation[2])
                      ScaleX(Selector=Landmark.Scale[0])
                      ScaleY(Selector=Landmark.Scale[1])
                      ScaleZ(Selector=Landmark.Scale[2])
                      Diffuse(Selector="Landmark.DiffuseColor[0], Landmark.DiffuseColor[1], Landmark.DiffuseColor[2]")
                      Specular(Selector="Landmark.SpecularColor[0], Landmark.SpecularColor[1], Landmark.SpecularColor[2]")
                      MeshName(Selector=Landmark.MeshType)
                    SubscribeSubject PlainLandmark
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #13
                    SubscribeSubject PlainLandmark => #14
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #14 -> Condition => #17
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #18
                    #17, #18 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #20
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #16, #20 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #22
                    #8, #10, #13, #22 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0
                      TranslationY=-0.039
                      TranslationZ=-4
                      RotationZ=0
                      RotationY=0
                      RotationX=-89.95438
                      ScaleX=0.1
                      ScaleY=0.1
                      ScaleZ=0.1
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #10, #13 -> Merge
                -> IntProperty(Value=0) => #15
                SubscribeSubject ReloadVRFile => #16
                #15, #16 -> TakeUntil
                -> WorkflowOutput
            SubscribeSubject ReloadVRFile => #5
            #4, #5 -> TakeUntil
            -> WorkflowOutput
        SubscribeSubject ReloadVRFile => #9
        #8, #9 -> TakeUntil
        -> WorkflowOutput
    #1, #2, #3 -> Merge => #4
    SubscribeSubject ReloadVRFile => #5
    #4, #5 -> TakeUntil
    -> Repeat

    Disable GroupWorkflow DrawRewardsOLD
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Reward)
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
        -> SelectMany DrawRepetitions => #8
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=4) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany DrawObjects => #4
                SubscribeSubject CameraPosition => #0
                WorkflowInput Source1 => #1
                #0, #1 -> WithLatestFrom => #2
                SubscribeSubject NextRewardPosition => #3
                #2, #3 -> WithLatestFrom => #4
                SubscribeSubject RewardDistance => #5
                #4, #5 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                      Item1.Item1.Item1.Z as CameraPosition,
                      Item1.Item1.Item2.Item1 as Repetition,
                      Item1.Item1.Item2.Item2 as Landmark,
                      Item1.Item2 as RewardPosition,
                      Item2 as RewardInterval
                    )
                -> BehaviorSubject LandmarkData

                SubscribeSubject Draw => #9
                SubscribeSubject LandmarkData => #10
                #9, #10 -> WithLatestFrom => #11
                -> Condition TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> NotEqual(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawTexturedObject => #13
                    WorkflowInput Source1
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
                    SubscribeSubject LandmarkData => #3
                    #2, #3 -> WithLatestFrom => #4
                    -> InputMapping => #5
                      Selector=Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #4 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -RewardInterval * Repetition + RewardPosition
                    -> PropertyMapping(TranslationZ) => #8
                    #5, #8 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-0.049
                      TranslationY=0
                      TranslationZ=-1.5708
                      RotationZ=0
                      RotationY=-89.95438
                      RotationX=0
                      ScaleX=0.63
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #11 -> Condition Non-TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> Equal(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawPlainObject => #15
                    WorkflowInput Source1 => #0
                    SubscribeSubject LandmarkData => #1
                    #0, #1 -> WithLatestFrom => #2
                    -> InputMapping => #3
                      Selector=Item1.Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #2 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -RewardInterval * (Repetition-1) + RewardPosition
                    -> PropertyMapping(TranslationZ) => #6
                    #3, #6 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0
                      TranslationY=-0.039
                      TranslationZ=-1.5
                      RotationZ=0
                      RotationY=0
                      RotationX=-89.95438
                      ScaleX=0.1
                      ScaleY=0.1
                      ScaleZ=0.1
                      Ambient(X=0.8, Y=0.8, Z=0.8)
                      Diffuse(X=1, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #13, #15 -> Merge
                -> IntProperty(Value=0) => #17
                SubscribeSubject ReloadVRFile => #18
                #17, #18 -> TakeUntil
                -> WorkflowOutput
            SubscribeSubject ReloadVRFile => #5
            #4, #5 -> TakeUntil
            -> WorkflowOutput
        SubscribeSubject ReloadVRFile => #9
        #8, #9 -> TakeUntil
        -> WorkflowOutput

    Disable GroupWorkflow DrawLandmarksOLD
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Landmarks)
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
        -> SelectMany DrawRepetitions => #8
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=1) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany DrawObjects => #4
                SubscribeSubject CameraPosition => #0
                WorkflowInput Source1 => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                      Item1.Z as CameraPosition,
                      Item2.Item1 as Repetition,
                      Item2.Item2 as Landmark
                    )
                -> BehaviorSubject LandmarkData

                SubscribeSubject Draw => #5
                SubscribeSubject LandmarkData => #6
                #5, #6 -> WithLatestFrom => #7
                -> Condition TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> NotEqual(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawTexturedObject => #9
                    WorkflowInput Source1
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stimB, TextureTarget=Texture2D) => #2
                    SubscribeSubject LandmarkData => #3
                    #2, #3 -> WithLatestFrom => #4
                    -> InputMapping => #5
                      Selector=Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #4 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #8
                    #5, #8 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0.049
                      TranslationY=0
                      TranslationZ=-0.628320038
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #7 -> Condition Non-TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> Equal(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawPlainObject => #11
                    WorkflowInput Source1 => #0
                    SubscribeSubject LandmarkData => #1
                    #0, #1 -> WithLatestFrom => #2
                    -> InputMapping => #3
                      Selector=Item1.Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #2 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #6
                    #3, #6 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0.045
                      TranslationY=0
                      TranslationZ=-1.88495994
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=0, Z=0)
                      Diffuse(X=1, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #9, #11 -> Merge
                -> IntProperty(Value=0) => #13
                SubscribeSubject ReloadVRFile => #14
                #13, #14 -> TakeUntil
                -> WorkflowOutput
            SubscribeSubject ReloadVRFile => #5
            #4, #5 -> TakeUntil
            -> WorkflowOutput
        SubscribeSubject ReloadVRFile => #9
        #8, #9 -> TakeUntil
        -> WorkflowOutput

    Disable GroupWorkflow DrawLandmarks
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Landmarks)
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
        -> SelectMany DrawRepetitions => #8
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=1) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany DrawObjects => #4
                SubscribeSubject CameraPosition => #0
                WorkflowInput Source1 => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                      Item1.Z as CameraPosition,
                      Item2.Item1 as Repetition,
                      Item2.Item2 as Landmark
                    )
                -> BehaviorSubject LandmarkData

                SubscribeSubject Draw => #5
                SubscribeSubject LandmarkData => #6
                #5, #6 -> WithLatestFrom => #7
                -> Condition TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> NotEqual(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawTexturedObject => #9
                    WorkflowInput Source1
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stimB, TextureTarget=Texture2D) => #2
                    SubscribeSubject LandmarkData
                    -> PropertyMapping => #4
                      TranslationX(Selector=Landmark.Translation[0])
                      TranslationY(Selector=Landmark.Translation[1])
                      RotationX(Selector=Landmark.Rotation[0])
                      RotationY(Selector=Landmark.Rotation[1])
                      RotationZ(Selector=Landmark.Rotation[2])
                      ScaleX(Selector=Landmark.Scale[0])
                      ScaleY(Selector=Landmark.Scale[1])
                      ScaleZ(Selector=Landmark.Scale[2])
                      Diffuse(Selector="Landmark.DiffuseColor[0],Landmark.DiffuseColor[1],Landmark.DiffuseColor[2]")
                      Specular(Selector="Landmark.SpecularColor[0],Landmark.SpecularColor[1],Landmark.SpecularColor[2]")
                      MeshName(Selector=Landmark.MeshType)
                    SubscribeSubject LandmarkData
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #7
                    SubscribeSubject LandmarkData => #8
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #8 -> Condition => #11
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #12
                    #11, #12 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #10, #14 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #16
                    #2, #4, #7, #16 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-0.049
                      TranslationY=0
                      TranslationZ=-0.628320038
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

                    Disable InputMapping
                      Selector=Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                #7 -> Condition Non-TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> Equal(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawPlainObject => #11
                    WorkflowInput Source1 => #0
                    SubscribeSubject LandmarkData => #1
                    #0, #1 -> WithLatestFrom => #2
                    -> InputMapping => #3
                      Selector=Item1.Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #2 -> MemberSelector(Selector=Item2) => #4
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #6
                    #4 -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #4 -> Condition => #9
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #10
                    #9, #10 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #8, #12 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #14
                    #3, #6, #14 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0.045
                      TranslationY=0
                      TranslationZ=-3.1416
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=0, Z=0)
                      Diffuse(X=1, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #9, #11 -> Merge
                -> IntProperty(Value=0) => #13
                SubscribeSubject ReloadVRFile => #14
                #13, #14 -> TakeUntil
                -> WorkflowOutput
            SubscribeSubject ReloadVRFile => #5
            #4, #5 -> TakeUntil
            -> WorkflowOutput
        SubscribeSubject ReloadVRFile => #9
        #8, #9 -> TakeUntil
        -> WorkflowOutput

    Disable GroupWorkflow DrawRewards
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Reward)
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
        -> SelectMany DrawRepetitions => #8
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=2) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany DrawObjects => #4
                SubscribeSubject CameraPosition => #0
                WorkflowInput Source1 => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                      Item1.Z as CameraPosition,
                      Item2.Item1 as Repetition,
                      Item2.Item2 as Landmark
                    )
                -> BehaviorSubject LandmarkData

                SubscribeSubject Draw => #5
                SubscribeSubject LandmarkData => #6
                #5, #6 -> WithLatestFrom => #7
                -> Condition TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> NotEqual(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawTexturedObject => #9
                    WorkflowInput Source1
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
                    SubscribeSubject LandmarkData => #3
                    #2, #3 -> WithLatestFrom => #4
                    -> InputMapping => #5
                      Selector=Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #4 -> MemberSelector(Selector=Item2) => #6
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #8
                    #6 -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #6 -> Condition => #11
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #12
                    #11, #12 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #10, #14 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #16
                    #5, #8, #16 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-0.05
                      TranslationY=0
                      TranslationZ=-4.7124
                      RotationZ=0
                      RotationY=-89.95438
                      RotationX=0
                      ScaleX=1.88496
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #7 -> Condition Non-TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> Equal(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawPlainObject => #11
                    WorkflowInput Source1 => #0
                    SubscribeSubject LandmarkData => #1
                    #0, #1 -> WithLatestFrom => #2
                    -> InputMapping => #3
                      Selector=Item1.Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #2 -> MemberSelector(Selector=Item2) => #4
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #6
                    #4 -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #4 -> Condition => #9
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #10
                    #9, #10 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #8, #12 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #14
                    #3, #6, #14 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0
                      TranslationY=-0.039
                      TranslationZ=-1.88496
                      RotationZ=0
                      RotationY=0
                      RotationX=-89.95438
                      ScaleX=0.1
                      ScaleY=0.1
                      ScaleZ=0.1
                      Ambient(X=0.8, Y=0.8, Z=0.8)
                      Diffuse(X=1, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #9, #11 -> Merge
                -> IntProperty(Value=0) => #13
                SubscribeSubject ReloadVRFile => #14
                #13, #14 -> TakeUntil
                -> WorkflowOutput
            SubscribeSubject ReloadVRFile => #5
            #4, #5 -> TakeUntil
            -> WorkflowOutput
        SubscribeSubject ReloadVRFile => #9
        #8, #9 -> TakeUntil
        -> WorkflowOutput

    Disable GroupWorkflow DrawArena
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Arena)
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
        -> SelectMany DrawRepetitions => #8
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=2) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany DrawObjects => #4
                SubscribeSubject CameraPosition => #0
                WorkflowInput Source1 => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                      Item1.Z as CameraPosition,
                      Item2.Item1 as Repetition,
                      Item2.Item2 as Landmark
                    )
                -> BehaviorSubject LandmarkData

                SubscribeSubject Draw => #5
                SubscribeSubject LandmarkData => #6
                #5, #6 -> WithLatestFrom => #7
                -> Condition TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> NotEqual(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawTexturedObject => #9
                    WorkflowInput Source1
                    -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100_adjusted, TextureTarget=Texture2D) => #2
                    SubscribeSubject LandmarkData => #3
                    #2, #3 -> WithLatestFrom => #4
                    -> InputMapping => #5
                      Selector=Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #4 -> MemberSelector(Selector=Item2) => #6
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #8
                    #6 -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #6 -> Condition => #11
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #12
                    #11, #12 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #10, #14 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #16
                    #5, #8, #16 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-0.05
                      TranslationY=0
                      TranslationZ=-2.82744
                      RotationZ=0
                      RotationY=-89.95438
                      RotationX=0
                      ScaleX=1.9
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #7 -> Condition Non-TexturedObject?
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2.Landmark.Texture)
                    -> Equal(Operand=StringProperty(Value=None))
                    -> WorkflowOutput
                -> GroupWorkflow DrawPlainObject => #11
                    WorkflowInput Source1 => #0
                    SubscribeSubject LandmarkData => #1
                    #0, #1 -> WithLatestFrom => #2
                    -> InputMapping => #3
                      Selector=Item1.Item1
                      TranslationX(Selector=Item2.Landmark.Translation[0])
                      TranslationY(Selector=Item2.Landmark.Translation[1])
                      RotationZ(Selector=Item2.Landmark.Rotation[2])
                      RotationY(Selector=Item2.Landmark.Rotation[1])
                      RotationX(Selector=Item2.Landmark.Rotation[0])
                      ScaleX(Selector=Item2.Landmark.Scale[0])
                      ScaleY(Selector=Item2.Landmark.Scale[1])
                      ScaleZ(Selector=Item2.Landmark.Scale[2])
                      Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                      Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                      MeshName(Selector=Item2.Landmark.MeshType)
                    #2 -> MemberSelector(Selector=Item2) => #4
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                    -> PropertyMapping(TranslationZ) => #6
                    #4 -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
                      Expression:
                        new(
                          Landmark.AmbientColor[0] as X,
                          Landmark.AmbientColor[1] as Y,
                          Landmark.AmbientColor[2] as Z
                        )
                    #4 -> Condition => #9
                        WorkflowInput Source1 => #0
                        SubscribeSubject UseDefaultLighting? => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject LightModulation => #10
                    #9, #10 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
                      Expression:
                        new(
                          Item1.Landmark.AmbientColor[0] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as X,
                          Item1.Landmark.AmbientColor[1] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Y,
                          Item1.Landmark.AmbientColor[2] * Item2[Convert.ToInt32(Math.Abs(Math.Floor(Item1.CameraPosition/Item1.Landmark.RepeatInterval)) + Item1.Repetition)] as Z
                        )
                    #8, #12 -> Merge
                    -> PropertyMapping(Ambient(Selector="X,Y,Z")) => #14
                    #3, #6, #14 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawModel.bonsai
                      TranslationX=0.045
                      TranslationY=0
                      TranslationZ=-3.1416
                      RotationZ=0
                      RotationY=89.95438
                      RotationX=0
                      ScaleX=0.1
                      ScaleY=0.08
                      ScaleZ=0.1
                      Ambient(X=1, Y=0, Z=0)
                      Diffuse(X=1, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #9, #11 -> Merge
                -> IntProperty(Value=0) => #13
                SubscribeSubject ReloadVRFile => #14
                #13, #14 -> TakeUntil
                -> WorkflowOutput
            SubscribeSubject ReloadVRFile => #5
            #4, #5 -> TakeUntil
            -> WorkflowOutput
        SubscribeSubject ReloadVRFile => #9
        #8, #9 -> TakeUntil
        -> WorkflowOutput

GroupWorkflow CameraData
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames)
    -> BehaviorSubject FrameData
    -> MemberSelector(Selector=Image)
    -> BehaviorSubject Frames
    -> WorkflowOutput

    SubscribeSubject Frames => #5
    -> Disable Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0))
    -> Disable Bonsai.Dsp.Average
    -> Disable MemberSelector(Selector=Val0)
    -> Disable BehaviorSubject ROIValue
    #5 -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=633, Y=716), Point(X=709, Y=716), Point(X=709, Y=814), Point(X=633, Y=814))), Operation=Avg) => #10
    SubscribeSubject LickActivityThreshold
    -> PropertyMapping(Threshold) => #12
    #10, #12 -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=60)
    -> MulticastSubject Licking?
    #10 -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> BehaviorSubject ROIActivity

GroupWorkflow HarpDevice
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
    ExternalizedMapping(PortName) => #1
    #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> BehaviorSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData) => #4
    -> MemberSelector(Selector=Value.AnalogInput0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform ToVolt
      Expression: it * 5.0 / 4096.0
    -> MulticastSubject WheelEncoder
    #4 -> MemberSelector(Selector=Seconds)
    -> MulticastSubject HarpTimestamp

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputSet)
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=Port)) => #2
        #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO1)) => #3
        ExternalizedMapping(Value) => #4
        #3, #4 -> Equal(Operand=WorkflowProperty<System.UInt16>(Value=2048))
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> BehaviorSubject StartTrigger

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputSet)
    -> Condition DO3?
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=Port)) => #2
        #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO3)) => #3
        ExternalizedMapping(Value) => #4
        #3, #4 -> Equal(Operand=WorkflowProperty<System.UInt16>(Value=8192))
        -> WorkflowOutput
    -> Skip(Count=1)
    -> MemberSelector(Selector=Seconds)
    -> BehaviorSubject NextFileTrigger

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame)
    -> MemberSelector(Selector=Seconds)
    -> BehaviorSubject CameraTrigger

    Int64Property(Value=99) => #25
    SubscribeSubject HarpTimestamp => #26
    #25, #26 -> WithLatestFrom
    -> BehaviorSubject TriggerData

    Timer(DueTime=PT1S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO1))
    -> MulticastSubject BehaviorCommands

    Timer(DueTime=PT5S, Period=PT2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO3))
    -> MulticastSubject BehaviorCommands

    Disable Bonsai.Windows.Input.KeyDown(Filter=M, SuppressRepetitions=false)
    -> Disable IntProperty(Value=1)
    -> Disable MulticastSubject GoReward

    Disable SubscribeSubject GoReward
    -> Disable SelectMany GiveReward
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO2)) => #2
        SubscribeSubject RewardDuration => #3
        #1, #3 -> WithLatestFrom
        -> InputMapping(Selector=it, PulseDO2(Selector=Item2))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=77)) => #6
        #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2)) => #7
        #2, #6, #7 -> Merge
        -> Take(Count=3)
        -> WorkflowOutput
    -> Disable MulticastSubject BehaviorCommands

GroupWorkflow HarpLightModulation
    SubscribeSubject LuminanceLevel => #0
    -> Condition "Intensity == 0 ?"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0)) => #2
    #0 -> Condition "Intensity != 0 ?"
        WorkflowInput Source1
        -> NotEqual(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0)) => #4
    #2, #4 -> Merge
    -> MulticastSubject Behavior2Commands

    BehaviorSubject<Bonsai.Harp.HarpMessage> Behavior2Commands
    -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
    -> BehaviorSubject Behavior2Events
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> MemberSelector(Selector=Value.AnalogInput0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform ToVolt
      Expression: it * 5.0 / 3500.0
    -> Bonsai.Dsp.Difference(Order=1) => #13
    -> Condition "Screen off"
        WorkflowInput Source1
        -> LessThan(Operand=DoubleProperty(Value=-2.5))
        -> WorkflowOutput
    -> SelectMany => #15
        SubscribeSubject HarpTimestamp => #0
        DoubleProperty(Value=0) => #1
        #0, #1 -> Zip
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject ScreenOFFTimestamp
    #13 -> Condition "Screen on"
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=2.5))
        -> WorkflowOutput
    -> SelectMany => #19
        DoubleProperty(Value=0) => #0
        SubscribeSubject HarpTimestamp => #1
        #0, #1 -> Zip
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject ScreenOFFTimestamp
    #19 -> MemberSelector(Selector=Item1)
    -> MulticastSubject ScreenONTimestamp
    #15 -> MemberSelector(Selector=Item1)
    -> MulticastSubject ScreenONTimestamp

GroupWorkflow Logging
    GroupWorkflow Filenames
        SubscribeSubject LogPath => #0
        -> Add(Operand=StringProperty(Value=\)) => #1
        ExternalizedMapping(Value(DisplayName=MouseName)) => #2
        -> StringProperty(Value=Training) => #3
        #0 -> Timestamp
        -> MemberSelector(Selector="Timestamp.Year,Timestamp.Month,Timestamp.Day")
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: Item1.ToString() + "_" + Item2.ToString("D2") + "_" + Item3.ToString("D2")
        ExternalizedMapping(Value(DisplayName=Protocol_ID))
        -> StringProperty(Value=LM) => #8
        #1, #3, #6, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1.ToString() + Item2.ToString() + "\" + Item3.ToString() + "\" + Item4.ToString() + "\"
        -> BehaviorSubject SessionPath => #11
        StringProperty(Value=Behavior) => #12
        #2 -> StringProperty(Value=Training) => #13
        #11, #12, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
          Expression: Item1.ToString() + "\" + Item2.ToString() + "\" + Item3.ToString()  + "_"
        -> Add(Operand=StringProperty(Value=Projection_.csv))
        -> BehaviorSubject ProjectionFilename
        #15 -> Add(Operand=StringProperty(Value=Reward_.csv))
        -> BehaviorSubject RewardFilename
        #15 -> Add(Operand=StringProperty(Value=CameraData_.csv))
        -> BehaviorSubject CameraDataFilename
        #15 -> Add(Operand=StringProperty(Value=Video_.avi))
        -> BehaviorSubject VideoFilename
        #15 -> Add(Operand=StringProperty(Value=RotaryEncoder_.csv))
        -> BehaviorSubject EncoderFilename
        #15 -> Add(Operand=StringProperty(Value=StartTrigger_.csv))
        -> BehaviorSubject StartTriggerFilename
        #15 -> Add(Operand=StringProperty(Value=CameraTrigger_.csv))
        -> BehaviorSubject CameraTriggerFilename
        #15 -> Add(Operand=StringProperty(Value=NextFileTrigger_.csv))
        -> BehaviorSubject NextFileTriggerFilename
        #15 -> Add(Operand=StringProperty(Value=ScreenTransition_.csv))
        -> BehaviorSubject ScreenTransitionFilename

    GroupWorkflow CopyProtocolFiles
        StringProperty(Value='/c copy "') => #0
        SubscribeSubject ProtocolFile => #1
        StringProperty(Value='" "') => #2
        SubscribeSubject SessionPath => #3
        StringProperty(Value='Protocols\Corridor.yaml"') => #4
        #0, #1, #2, #3, #4 -> Zip
        -> Add
        -> PropertyMapping(Arguments)
        -> Bonsai.IO.StartProcess(FileName=cmd.exe, Arguments='/c copy "Protocols\luminance_trials.csv" ".\data\Training\2026_10_20\LM\Protocols\Corridor.yaml"')
        -> DelaySubscription(DueTime=PT0.3S)

        StringProperty(Value='/c copy "') => #10
        SubscribeSubject LightModulationFile => #11
        StringProperty(Value='" "') => #12
        SubscribeSubject SessionPath => #13
        StringProperty(Value='Protocols\LightModulation.csv"') => #14
        #10, #11, #12, #13, #14 -> Zip
        -> Add
        -> PropertyMapping(Arguments)
        -> Bonsai.IO.StartProcess(FileName=cmd.exe, Arguments='/c copy "Protocols\light_modulation_full_half_none.csv" ".\data\Training\2026_10_20\LM\Protocols\LightModulation.csv"')
        -> DelaySubscription(DueTime=PT0.3S)

        StringProperty(Value='/c mkdir "') => #20
        SubscribeSubject SessionPath => #21
        StringProperty(Value='Protocols\"') => #22
        #20, #21, #22 -> Zip
        -> Add
        -> InputMapping(Selector=it, Arguments(Selector=it))
        -> Bonsai.IO.StartProcess(FileName=cmd.exe, Arguments='/c mkdir ".\data\Training\2026_10_20\LM\Protocols\"')

    ExternalizedMapping(Value(DisplayName=Filepath))
    -> StringProperty(Value=.\data)
    -> BehaviorSubject LogPath

    Disable GroupWorkflow ProjectionLog
        SubscribeSubject Draw => #0
        SubscribeSubject HarpTimestamp => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject TotalDistance => #3
        #2, #3 -> WithLatestFrom => #4
        SubscribeSubject NextRewardPosition => #5
        #4, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression:
            new (
              Item1.Item1.Item2 as Timestamp,
              Item1.Item2 as TotalDistance,
              Item2 as NextRewardPosition
            )
        SubscribeSubject ProjectionFilename
        -> PropertyMapping(FileName) => #9
        #7, #9 -> Bonsai.IO.CsvWriter(FileName=.\data\Training\2026_08_25\LC\\Behavior\Training_Projection_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #10
        SubscribeSubject ProjectionFilename => #11
        #10, #11 -> SubscribeWhen
        -> WorkflowOutput

    GroupWorkflow WheelEncoderLog
        SubscribeSubject HarpTimestamp => #0
        SubscribeSubject WheelEncoder => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject TotalDistance => #3
        #2, #3 -> WithLatestFrom => #4
        SubscribeSubject TrialNumber => #5
        #4, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression:
            new (
              Item1.Item1.Item1 as Timestamp,
              Item1.Item1.Item2 as EncoderVoltage,
              Item1.Item2 as TotalDistance,
              Item2 as TrialNumber
            )
        SubscribeSubject EncoderFilename
        -> PropertyMapping(FileName) => #9
        #7, #9 -> Bonsai.IO.CsvWriter(FileName=.\data\Training\2026_10_20\LM\\Behavior\Training_RotaryEncoder_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #10
        SubscribeSubject RewardFilename => #11
        #10, #11 -> SubscribeWhen
        -> WorkflowOutput

    Disable GroupWorkflow RewardLog
        SubscribeSubject GoReward => #0
        SubscribeSubject HarpTimestamp => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject GoReward => #4
        #3, #4 -> WithLatestFrom => #5
        SubscribeSubject WaterDelivered => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
          Expression:
            new(
              Item1.Item1 as Timestamp,
              Item1.Item2 as ManualReward,
              Item2 as WaterDelivered
            )
        SubscribeSubject RewardFilename
        -> PropertyMapping(FileName) => #10
        #8, #10 -> Bonsai.IO.CsvWriter(FileName=.\data\Training\2026_08_25\LC\\Behavior\Training_Reward_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #11
        SubscribeSubject RewardFilename => #12
        #11, #12 -> SubscribeWhen
        -> WorkflowOutput

    Disable GroupWorkflow LickingLog
        SubscribeSubject FrameData => #0
        SubscribeSubject HarpTimestamp => #1
        #0, #1 -> WithLatestFrom => #2
        -> MemberSelector(Selector=Item2) => #3
        #2 -> MemberSelector(Selector=Item1.Metadata.embeddedFrameCounter) => #4
        #3, #4 -> Zip => #5
        SubscribeSubject ROIActivity => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject Licking?
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: it ? 1 : 0
        #7, #9 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #11
          Expression:
            new(
              Item1.Item1.Item1 as Timestamp,
              Item1.Item1.Item2 as FrameNumber,
              Item1.Item2 as ROIValue
            , Item2 as Licking)
        SubscribeSubject CameraDataFilename
        -> PropertyMapping(FileName) => #13
        #11, #13 -> Bonsai.IO.CsvWriter(FileName=.\data\Training\2026_08_25\LC\\Behavior\Training_CameraData_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #14
        SubscribeSubject CameraDataFilename => #15
        #14, #15 -> SubscribeWhen
        -> WorkflowOutput

        SubscribeSubject FrameData
        -> MemberSelector(Selector=Image) => #19
        SubscribeSubject VideoFilename
        -> PropertyMapping(FileName) => #21
        #19, #21 -> Bonsai.Vision.VideoWriter => #22
          FileName=.\data\Training\2026_08_25\LC\\Behavior\Training_Video_.avi
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        SubscribeSubject VideoFilename => #23
        #22, #23 -> SubscribeWhen

    GroupWorkflow TriggerLog
        SubscribeSubject StartTrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression:
            new (
              it as Timestamp
            )
        SubscribeSubject StartTriggerFilename
        -> PropertyMapping(FileName) => #3
        #1, #3 -> Bonsai.IO.CsvWriter(FileName=.\data\Training\2026_10_20\LM\\Behavior\Training_StartTrigger_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #4
        SubscribeSubject StartTriggerFilename => #5
        #4, #5 -> SubscribeWhen

        SubscribeSubject CameraTrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
          Expression:
            new (
              it as Timestamp
            )
        SubscribeSubject CameraTriggerFilename
        -> PropertyMapping(FileName) => #10
        #8, #10 -> Bonsai.IO.CsvWriter(FileName=.\data\Training\2026_10_20\LM\\Behavior\Training_CameraTrigger_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #11
        SubscribeSubject CameraTriggerFilename => #12
        #11, #12 -> SubscribeWhen

        SubscribeSubject NextFileTrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
          Expression:
            new (
              it as Timestamp
            )
        SubscribeSubject NextFileTriggerFilename
        -> PropertyMapping(FileName) => #17
        #15, #17 -> Bonsai.IO.CsvWriter(FileName=.\data\Training\2026_10_20\LM\\Behavior\Training_NextFileTrigger_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #18
        SubscribeSubject NextFileTriggerFilename => #19
        #18, #19 -> SubscribeWhen

        SubscribeSubject ScreenONTimestamp
        -> IntProperty(Value=0)
        -> Delay(DueTime=PT0.01S) => #23
        SubscribeSubject ScreenONTimestamp => #24
        #23, #24 -> WithLatestFrom => #25
        SubscribeSubject ScreenOFFTimestamp => #26
        #25, #26 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #28
          Expression:
            new(
              Item1.Item1 as Ignore,
              Item1.Item2 as TimestampON,
              Item2 as TimestampOFF
            )
        SubscribeSubject ScreenTransitionFilename
        -> PropertyMapping(FileName) => #30
        #28, #30 -> Bonsai.IO.CsvWriter(FileName=.\data\Training\2026_10_20\LM\\Behavior\Training_ScreenTransition_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #31
        SubscribeSubject ScreenTransitionFilename => #32
        #31, #32 -> SubscribeWhen

Disable GroupWorkflow RewardDetection
    SubscribeSubject TotalDistance
    -> Multiply(Operand=FloatProperty(Value=-1)) => #1
    SubscribeSubject NextRewardPosition => #2
    #1, #2 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform DistanceToReward => #4
      Expression: Item2-Item1
    SubscribeSubject HalfRewardArea => #5
    #4, #5 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Reward Area?"
      Expression: Math.Abs(Item1) < Item2
    -> BehaviorSubject InsideRewardArea

    SubscribeSubject InsideRewardArea
    -> DistinctUntilChanged
    -> Condition "Exit Reward Region?"
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BehaviorSubject ExitRewardRegion

    SubscribeSubject TotalDistance

    SubscribeSubject Licking? => #14
    SubscribeSubject InsideRewardArea => #15
    #14, #15 -> WithLatestFrom
    -> Condition "Reward Not Delivered?"
        WorkflowInput Source1 => #0
        SubscribeSubject RewardDelivered? => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> BitwiseNot
        -> WorkflowOutput
    -> Condition "Speed Reduced?"
        WorkflowInput Source1 => #0
        SubscribeSubject RunningSpeed => #1
        SubscribeSubject MaxRewardSpeed => #2
        #1, #2 -> WithLatestFrom
        -> LessThan => #4
        #0, #4 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> Condition Licked?
        WorkflowInput Source1
        -> BitwiseAnd
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> BehaviorSubject GoReward
    -> BooleanProperty(Value=true)
    -> MulticastSubject RewardDelivered?

    SubscribeSubject RewardDelivered?

    SubscribeSubject ExitRewardRegion => #25
    SubscribeSubject NextRewardPosition => #26
    SubscribeSubject RewardDistance
    -> Multiply(Operand=FloatProperty(Value=-1)) => #28
    #26, #28 -> WithLatestFrom
    -> Add => #30
    #25, #30 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject NextRewardPosition
    -> BooleanProperty(Value=false)
    -> MulticastSubject RewardDelivered?

    SubscribeSubject GoReward
    -> IntProperty(Value=1)
    -> Accumulate => #38
    -> MulticastSubject NumberOfRewards => #39
    SubscribeSubject "DropSize (ul)" => #40
    #38, #40 -> WithLatestFrom
    -> Multiply
    -> MulticastSubject WaterDelivered => #43
    #39, #43 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          Item1 as NumberOfRewards,
          Item2 as TotalWaterDelivered
        )
    -> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #13
SubscribeSubject LuminanceLevel
-> PropertyMapping(ColorR, ColorG, ColorB) => #15
#13, #15 -> IncludeWorkflow
  Path=BonVision:Primitives.DrawQuad.bonsai
  ExtentX=200
  ExtentY=200
  LocationX=0
  LocationY=0
  Layer=0
  Angle=0
  ColorR=0.5
  ColorG=0.5
  ColorB=0.5
  ColorA=1
-> Disable GroupWorkflow MyCubemapView
    WorkflowInput Source1 => #0
    SubscribeSubject CameraPosition
    -> PropertyMapping(Eye) => #2
    #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=-0.201834589), NearClip=0.01, FarClip=20, Light(X=0, Y=0, Z=0)) => #3
    -> MemberSelector(Selector=ViewMatrix) => #4
    SubscribeSubject CameraOrientation
    -> PropertyMapping(Angle) => #6
    #4, #6 -> Bonsai.Shaders.RotateY(Order=Append, Angle=0) => #7
    #3, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item2 as ViewMatrix,
        Item1.ProjectionMatrix as ProjectionMatrix,
        Item1.Light as Light
        )
    -> WorkflowOutput
-> Disable PublishSubject Draw
-> Disable Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicShader, TextureName="", TextureTarget=Texture2D)
-> Disable Bonsai.Shaders.DrawMesh(ShaderName=PanoramicShader, MeshName=PanoramicQuad)
-> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))
-> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
-> Disable Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)

Disable SubscribeSubject GoReward
-> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=4410, Frequency=1000, Waveform=Sine, SampleRate=44100, Amplitude=50000, Offset=0, Phase=0)
-> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers / Headphones (Realtek Audio)", SampleRate=44100, State=Playing)

Disable GroupWorkflow AlternativeCameraData
    Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="")
    -> Bonsai.Vision.Grayscale
    -> BehaviorSubject Frames
    -> WorkflowOutput

    SubscribeSubject Frames => #4
    -> Disable Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=0, Height=0))
    -> Disable Bonsai.Dsp.Average
    -> Disable MemberSelector(Selector=Val0)
    -> Disable BehaviorSubject ROIValue
    -> Disable WithLatestFrom
    #4 -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=70, Y=247), Point(X=101, Y=247), Point(X=101, Y=281), Point(X=70, Y=281))), Operation=Avg) => #10
    SubscribeSubject LickActivityThreshold
    -> PropertyMapping(Threshold) => #12
    #10, #12 -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=100)
    -> MulticastSubject Licking?

Disable SubscribeSubject Frames
Disable SubscribeSubject ROIValue

Disable GroupWorkflow CountLicks
    SubscribeSubject LickActivity => #0
    SubscribeSubject InRewardZone => #1
    #0, #1 -> WithLatestFrom
    -> BitwiseAnd
    -> DistinctUntilChanged
    -> Condition => #5
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject nLicks => #6
    #5, #6 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> Disable Divide(Operand=IntProperty(Value=1))
    -> MulticastSubject nLicks
    -> WorkflowOutput

Disable GroupWorkflow LickResponse
    SubscribeSubject nLicks => #0
    SubscribeSubject minLicks
    -> PropertyMapping(Value) => #2
    #0, #2 -> GreaterThanOrEqual(Operand=FloatProperty(Value=3))
    -> DistinctUntilChanged
    -> MulticastSubject lickResponse

SubscribeSubject TotalDistance

IntProperty(Value=0)
-> SelectMany ReadTrialFile
    WorkflowInput Source1 => #0
    SubscribeSubject TrialNumber
    -> PropertyMapping(SkipRows) => #2
    SubscribeSubject ProtocolFile
    -> PropertyMapping(FileName) => #4
    #0, #2, #4 -> Bonsai.IO.CsvReader(FileName=Protocols\luminance_trials.csv, ScanPattern="%i,%f,%i", SkipRows=8)
    -> Take(Count=1) => #6
    -> MemberSelector(Selector=Item1) => #7
    #6 -> MemberSelector(Selector=Item2)
    -> MulticastSubject LuminanceLevel => #9
    #6 -> MemberSelector(Selector=Item3)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> MulticastSubject TrialDuration => #12
    #7, #9, #12 -> Zip
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany RunTrial
    WorkflowInput Source1 => #0
    SubscribeSubject TrialDuration
    -> PropertyMapping(DueTime) => #2
    #0, #2 -> Delay(DueTime=PT2S)
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany EndTrial
    WorkflowInput Source1 => #0
    SubscribeSubject TrialNumber => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialNumber
    -> Take(Count=1)
    -> WorkflowOutput
-> Take(Count=1) => #39
SubscribeSubject NumberOfTrials
-> PropertyMapping(Count) => #41
#39, #41 -> RepeatCount(Count=21) => #42
Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Control", SuppressRepetitions=false) => #43
#42, #43 -> SubscribeWhen
-> Last
-> WorkflowOutput

SubscribeSubject NumberOfTrials
