WorkflowBuilder(Version=2.9.0)
GroupWorkflow EssaySetup
    ExternalizedMapping(Value(DisplayName=RewardSize))
    -> IntProperty(Value=5)
    -> BehaviorSubject RewardSize

    IncludeWorkflow BehaviorCommandBoard(Path=Bonsai.Harp:CommandSubject.bonsai)

    GroupWorkflow HarpDevice
        ExternalizedMapping(Name)
        -> SubscribeSubject BehaviorCommandBoard
        -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM11) => #2
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds) => #4
        -> MulticastSubject HarpTimestamp
        #2 -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData) => #6
        -> MemberSelector(Selector=AnalogInput0) => #7
        #7, #4 -> WithLatestFrom => #8
        SubscribeSubject "z pos" => #9
        #8, #9 -> WithLatestFrom => #10
        SubscribeSubject RunSpeed => #11
        #10, #11 -> WithLatestFrom => #12
        SubscribeSubject TrialNumber => #13
        #12, #13 -> WithLatestFrom => #14
        SubscribeSubject LickActivity => #15
        #14, #15 -> WithLatestFrom => #16
        SubscribeSubject RewTimestamp => #17
        #16, #17 -> WithLatestFrom
        -> BehaviorSubject HarpData
        #7 -> PublishSubject rawData
        #6 -> MemberSelector(Selector=AnalogInput1)
        #2 -> MemberSelector(Selector=MessageBytes)
        -> BehaviorSubject RawHarpData

        Disable WithLatestFrom => #24
        Disable SubscribeSubject TrialNumber => #25
        #24, #25 -> Disable WithLatestFrom => #26
        Disable SubscribeSubject "z pos" => #27
        #26, #27 -> Disable WithLatestFrom => #28
        Disable SubscribeSubject RunSpeed => #29
        #28, #29 -> Disable WithLatestFrom => #30
        Disable SubscribeSubject LickActivity => #31
        #30, #31 -> Disable WithLatestFrom => #32
        Disable SubscribeSubject RewTimestamp => #33
        #32, #33 -> Disable WithLatestFrom
        -> Disable BehaviorSubject HarpData

        Disable Bonsai.Harp.DeviceEvent(Event=Bonsai.Harp.MessageTimestamp) => #36
        -> Disable MulticastSubject HarpTimestamp
        Disable Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #38
        -> Disable PublishSubject rawData
        #38, #36 -> Disable WithLatestFrom => #40
        Disable SubscribeSubject TrialNumber => #41
        #40, #41 -> Disable WithLatestFrom => #42
        Disable SubscribeSubject "z pos" => #43
        #42, #43 -> Disable WithLatestFrom => #44
        Disable SubscribeSubject RunSpeed => #45
        #44, #45 -> Disable WithLatestFrom => #46
        Disable SubscribeSubject LickActivity => #47
        #46, #47 -> Disable WithLatestFrom => #48
        Disable SubscribeSubject RewTimestamp => #49
        #48, #49 -> Disable WithLatestFrom
        -> Disable BehaviorSubject HarpData

    FloatProperty(Value=0)
    -> BehaviorSubject "z pos"

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    FloatProperty(Value=100)
    -> BehaviorSubject StimStart

    FloatProperty(Value=100)
    -> BehaviorSubject StimEnd

    FloatProperty(Value=180)
    -> BehaviorSubject TunnelLength

    ExternalizedMapping(Value(DisplayName=tex_BG))
    -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=BG_0.04_0.32_100) => #16
    -> BehaviorSubject tex_BG_1
    #16 -> BehaviorSubject tex_BG_3
    #16 -> BehaviorSubject tex_BG_2

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=stim)
    -> BehaviorSubject tex_Stim_Left

    PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=stim)
    -> BehaviorSubject tex_Stim_Right

    FloatProperty(Value=200)
    -> BehaviorSubject RewardZoneStart

    FloatProperty(Value=250)
    -> BehaviorSubject RewardZoneEnd

    FloatProperty(Value=0.5)
    -> BehaviorSubject Signal

    IntProperty(Value=0)
    -> BehaviorSubject RewardTrial

    BooleanProperty(Value=false)
    -> BehaviorSubject InRewardZone

    BooleanProperty(Value=false)
    -> BehaviorSubject lickResponse

    StringProperty
    -> BehaviorSubject trialOutcome

    ExternalizedMapping(Value(DisplayName=RewardZoneLength))
    -> FloatProperty(Value=20)
    -> BehaviorSubject RewardZoneLength

    ExternalizedMapping(Value(DisplayName=RewardZoneOffset))
    -> FloatProperty(Value=25)
    -> BehaviorSubject RewardZoneOffset

    FloatProperty(Value=0)
    -> BehaviorSubject RunSpeed

    FloatProperty(Value=0)
    -> BehaviorSubject TotReward

    FloatProperty(Value=0)
    -> BehaviorSubject TotDistance

    FloatProperty(Value=0.1)
    -> BehaviorSubject RotEncMin

    FloatProperty(Value=4.7)
    -> BehaviorSubject RotEncMax

    IntProperty(Value=0)
    -> BehaviorSubject nLicks

    ExternalizedMapping(Value(DisplayName=minLicks))
    -> IntProperty(Value=3)
    -> BehaviorSubject minLicks

    DoubleProperty(Value=0)
    -> BehaviorSubject HarpTimestamp

    DoubleProperty(Value=0)
    -> BehaviorSubject RewTimestamp

    ExternalizedMapping(Value(DisplayName=StimSize))
    -> FloatProperty(Value=20)
    -> BehaviorSubject StimSize

    ExternalizedMapping(Value(DisplayName=StimIntervalStart))
    -> FloatProperty(Value=40)
    -> BehaviorSubject StimIntervalStart

    ExternalizedMapping(Value(DisplayName=StimIntervalEnd))
    -> FloatProperty(Value=120)
    -> BehaviorSubject StimIntervalEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveReward

    ExternalizedMapping(Value(DisplayName=PassiveRewOn))
    -> BooleanProperty(Value=false)
    -> BehaviorSubject PassiveRewOn

    BooleanProperty(Value=false)
    -> BehaviorSubject TimeOut

    ExternalizedMapping(Value(DisplayName=UseTimeOut))
    -> BooleanProperty(Value=false)
    -> BehaviorSubject UseTimeOut

    DoubleProperty(Value=0)
    -> BehaviorSubject TimeOutTimestamp

    ExternalizedMapping(Value(DisplayName=tex_Stim))
    -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=A)
    -> BehaviorSubject tex_Stim

    ExternalizedMapping(Value(DisplayName=tex_Floor))
    -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=rocks)
    -> BehaviorSubject tex_Floor

    ExternalizedMapping(Value(DisplayName=tex_Ceiling))
    -> PropertySource<Bonsai.Shaders.BindTexture,System.String>(MemberName=TextureName, Value=clouds)
    -> BehaviorSubject tex_Ceiling

ExternalizedMapping(MouseName, Protocol_ID)
-> GroupWorkflow Logger
    StringProperty(Value=C:\Data\MOL\) => #0
    ExternalizedMapping(Value(DisplayName=MouseName)) => #1
    -> StringProperty(Value=LPE12385) => #2
    #0 -> Timestamp
    -> MemberSelector(Selector="Timestamp.Year,Timestamp.Month,Timestamp.Day")
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: Item1.ToString() + "_" + Item2.ToString("D2") + "_" + Item3.ToString("D2") + "\"
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
      Expression: Item1.ToString() + "_" + Item2.ToString("D2") + "_" + Item3.ToString("D2") + "\"
    ExternalizedMapping(Value(DisplayName=Protocol_ID))
    -> StringProperty(Value=DN) => #8
    StringProperty(Value=Behavior) => #9
    #1 -> StringProperty(Value=LPE12385) => #10
    #0, #2, #6, #8, #9, #10 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Item1.ToString() + Item2.ToString() + "\" + Item3.ToString() + "\" + Item4.ToString() + "\" + Item5.ToString() + "\" + Item4.ToString() + "_" + Item6.ToString() + "_"
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: Item1.ToString() + Item2.ToString() + "\" + Item3.ToString() + "\" + Item4.ToString() + "\" + Item5.ToString() + "\" + Item4.ToString() + "_" + Item6.ToString() + "_"
    -> ReplaySubject SaveFilename(BufferSize=nil)

    SubscribeSubject HarpData
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(Item1.Item1.Item1.Item1.Item1.Item1 as rawvoltage,
            Item1.Item1.Item1.Item1.Item1.Item2 as ts,
            Item1.Item1.Item1.Item1.Item2 as zpos,
            Item1.Item1.Item1.Item2 as runspeed,
            Item1.Item1.Item2 as trialnumber,
            Item1.Item2 as lick,
            Item2 as reward)
    -> Disable Bonsai.Scripting.ExpressionTransform => #17
      Expression:
        new(Item1.Item1.Item1.Item1.Item1.Item1 as rawvoltage,
            Item1.Item1.Item1.Item1.Item1.Item2 as ts,
            Item1.Item1.Item1.Item1.Item2 as zpos,
            Item1.Item1.Item1.Item2 as runspeed,
            Item1.Item1.Item2 as trialnumber,
            Item1.Item2 as lick,
            Item2 as reward)
    SubscribeSubject SaveFilename
    -> Add(Operand=StringProperty(Value=harp_.csv))
    -> PropertyMapping(FileName) => #20
    #17, #20 -> Bonsai.IO.CsvWriter(FileName=C:\Data\MOL\LPE12385\2025_09_08\\DN\Behavior\DN_LPE12385_harp_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject RawHarpData => #22
    SubscribeSubject SaveFilename
    -> Add(Operand=StringProperty(Value=rawharp_.bin))
    -> PropertyMapping(Path) => #25
    #22, #25 -> Bonsai.Dsp.MatrixWriter(Path=C:\Data\MOL\LPE12385\2025_09_08\\DN\Behavior\DN_LPE12385_rawharp_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject SaveFilename
    -> Add(Operand=StringProperty(Value=trialdata_.csv))
    -> PropertyMapping(FileName) => #29
    SubscribeSubject trialOutcome
    -> Skip(Count=1) => #31
    SubscribeSubject TrialNumber => #32
    #31, #32 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #34
    SubscribeSubject HarpTimestamp => #35
    #34, #35 -> WithLatestFrom => #36
    SubscribeSubject Signal => #37
    #36, #37 -> WithLatestFrom => #38
    SubscribeSubject RewardTrial => #39
    #38, #39 -> WithLatestFrom => #40
    SubscribeSubject StimStart => #41
    #40, #41 -> WithLatestFrom => #42
    SubscribeSubject StimEnd => #43
    #42, #43 -> WithLatestFrom => #44
    SubscribeSubject RewardZoneStart => #45
    #44, #45 -> WithLatestFrom => #46
    SubscribeSubject RewardZoneEnd => #47
    #46, #47 -> WithLatestFrom => #48
    SubscribeSubject lickResponse => #49
    #48, #49 -> WithLatestFrom => #50
    SubscribeSubject nLicks => #51
    #50, #51 -> WithLatestFrom => #52
    SubscribeSubject trialOutcome => #53
    #52, #53 -> WithLatestFrom => #54
    SubscribeSubject tex_Stim
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.ToString()
    -> Disable Bonsai.Scripting.ExpressionTransform => #57
      Expression: it.ToString()
    #54, #57 -> WithLatestFrom => #58
    SubscribeSubject tex_Stim
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.ToString()
    -> Disable Bonsai.Scripting.ExpressionTransform => #61
      Expression: it.ToString()
    #58, #61 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1 as TrialNumber,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as tEnd,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Signal,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Reward,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as StimStart,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as StimEnd,
            Item1.Item1.Item1.Item1.Item1.Item1.Item2 as RewardZoneStart,
            Item1.Item1.Item1.Item1.Item1.Item2 as RewardZoneEnd,
            Item1.Item1.Item1.Item1.Item2 as lickResponse,
            Item1.Item1.Item1.Item2 as nLicks,
            Item1.Item1.Item2 as trialOutcome,
            Item1.Item2 as stimLeft,
            Item2 as stimRight)
    -> Disable Bonsai.Scripting.ExpressionTransform => #64
      Expression:
        new(Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1 as TrialNumber,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as tEnd,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Signal,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Reward,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as StimStart,
            Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as StimEnd,
            Item1.Item1.Item1.Item1.Item1.Item1.Item2 as RewardZoneStart,
            Item1.Item1.Item1.Item1.Item1.Item2 as RewardZoneEnd,
            Item1.Item1.Item1.Item1.Item2 as lickResponse,
            Item1.Item1.Item1.Item2 as nLicks,
            Item1.Item1.Item2 as trialOutcome,
            Item1.Item2 as stimLeft,
            Item2 as stimRight)
    #29, #64 -> Bonsai.IO.CsvWriter(FileName=C:\Data\MOL\LPE12385\2025_09_08\\DN\Behavior\DN_LPE12385_trialdata_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject CameraImage => #66
    SubscribeSubject SaveFilename
    -> Add(Operand=StringProperty(Value=camera_.avi))
    -> PropertyMapping(FileName) => #69
    #66, #69 -> Bonsai.Vision.VideoWriter
      FileName=C:\Data\MOL\LPE12385\2025_09_08\\DN\Behavior\DN_LPE12385_camera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    Disable SubscribeSubject CameraMetadata => #71
    Disable SubscribeSubject HarpTimestamp => #72
    #71, #72 -> Disable WithLatestFrom => #73
    Disable SubscribeSubject SaveFilename
    -> Disable Add(Operand=StringProperty(Value=cameracsv_.csv))
    -> Disable PropertyMapping(FileName) => #76
    #73, #76 -> Disable Bonsai.IO.CsvWriter(FileName=C:\Data\MOL\LPE12385\2025_08_14\\DN\Behavior\DN_LPE12385_cameracsv_.csv, Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject TriggerData
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(Item1 as trigger,
            Item2 as ts)
    -> Disable Bonsai.Scripting.ExpressionTransform => #80
      Expression:
        new(Item1 as trigger,
            Item2 as ts)
    SubscribeSubject SaveFilename
    -> Add(Operand=StringProperty(Value=triggerdata_.csv))
    -> PropertyMapping(FileName) => #83
    #80, #83 -> Bonsai.IO.CsvWriter
      FileName=C:\Data\MOL\LPE12385\2025_09_08\\DN\Behavior\DN_LPE12385_triggerdata_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

Bonsai.Shaders.CreateWindow
  Width=6144
  Height=1536
  VSync=On
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=First
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=SphereMapping, FileName=Models\SphereMapping.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=WarpQuad, QuadEffects=None)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=CircleModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\CircleShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorModel
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\ShaderModel.vert
      FragmentShader=Shaders\colorShader.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpOutput
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\Warp.vert
      FragmentShader=BonVision:Shaders.Image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=WarpQuad
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName="", TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\WarpQuad.vert
      FragmentShader=Shaders\WarpQuad.frag
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG_0
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\background\BG_0.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\background\BG_25.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\background\BG_50.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\background\BG_75.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG_100
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\background\BG_100.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fog
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fog.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=gray128
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\gray128.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=stim
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\white.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=A
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\white.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=B
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\white.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=C
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\white.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=D
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\white.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=E
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\white.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=F
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\white.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=G
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\white.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=H
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\white.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=Ori45
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\stim\stimA.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=Ori135
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\white.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=clouds
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\clouds.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=rocks
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\rocks.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG_0.04_0.32_100
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\background\BG_0.04_0.32_100.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG_0.04_0.32_75
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\background\BG_0.04_0.32_75.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG_0.04_0.32_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\background\BG_0.04_0.32_50.png
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=BG_0.04_0.32_25
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\detection_stim\background\BG_0.04_0.32_25.png
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
-> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DarkBlue, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=2048, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #14
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=-53.0000003364945, Z=0), Translation(X=-6.3, Y=2, Z=-15))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.5, Height=1)
#14 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=53.0000003364945, Z=0), Translation(X=6.3, Y=2, Z=-15))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.5, Height=1)
-> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)

Timer(DueTime=PT1S)
-> SelectMany Initialize
    WorkflowInput Source1 => #0
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital1)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
    -> MulticastSubject BehaviorCommandBoard
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO1))
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
    -> WorkflowOutput
    #0 -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
    -> MulticastSubject BehaviorCommandBoard
    #0 -> Disable Int64Property(Value=0) => #12
    Disable SubscribeSubject HarpTimestamp => #13
    #12, #13 -> Disable WithLatestFrom
    -> Disable MulticastSubject TriggerData
-> TakeLast(Count=1) => #22
ExternalizedMapping(FileName(DisplayName=ProtocolFile)) => #23
#22, #23 -> SelectMany NewTrial
    ExternalizedMapping(FileName)
    -> Bonsai.IO.CsvReader
      FileName: C:\Users\TeachingLab\Desktop\Kerem Bonsai workflows\lab-leopoldo-solene-vr\workflows\Protocols\VR_Detection\MOL_trialseq_detection_center15_noise15_frac7.csv
      ListSeparator=""
      ScanPattern="%f,%f,%f"
      SkipRows=1
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject TrialNumber
        #1 -> MemberSelector(Selector=Item2)
        -> MulticastSubject Signal
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: int32(it)
        -> Disable Bonsai.Scripting.ExpressionTransform => #7
          Expression: int32(it)
        StringProperty(Value=Textures\detection_stim\) => #8
        #7, #8 -> WithLatestFrom => #9
        SubscribeSubject tex_Stim => #10
        #9, #10 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: "C:\Users\TeachingLab\Desktop\Kerem Bonsai workflows\lab-leopoldo-solene-vr\workflows\"+Item1.Item2 + Item2 + "\" + Item2 + "_" + Item1.Item1.ToString("D3") + ".png"
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression: Item1.Item2 + Item2 + "\" + Item2 + "_" + Item1.Item1.ToString("D3") + ".png"
        -> InputMapping(FileName(Selector=it))
        -> Bonsai.Vision.LoadImage(FileName="C:\Users\TeachingLab\Desktop\Kerem Bonsai workflows\lab-leopoldo-solene-vr\workflows\Textures\detection_stim\A\A_000.png", Mode=Unchanged)
        -> Bonsai.Vision.Flip(Mode=Vertical)
        -> Bonsai.Shaders.UpdateTexture(TextureName=stim, TextureTarget=Texture2D, InternalFormat=Rgba)
        #1 -> MemberSelector(Selector=Item3)
        -> MulticastSubject RewardTrial
        #1 -> IntProperty(Value=0)
        -> MulticastSubject nLicks
        #1 -> BooleanProperty(Value=false)
        -> MulticastSubject TimeOut
        #1 -> Bonsai.Numerics.CreateRandom(Seed=nil) => #24
        SubscribeSubject StimIntervalStart
        -> PropertyMapping(Lower) => #26
        SubscribeSubject StimIntervalEnd
        -> PropertyMapping(Upper) => #28
        #24, #26, #28 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=40, Upper=120)
        -> Bonsai.Numerics.Distributions.Sample
        -> MulticastSubject StimStart => #31
        SubscribeSubject RewardZoneOffset => #32
        #31, #32 -> WithLatestFrom
        -> Add
        -> MulticastSubject RewardZoneStart => #35
        SubscribeSubject RewardZoneLength => #36
        #35, #36 -> WithLatestFrom
        -> Add
        -> MulticastSubject RewardZoneEnd
        -> Add(Operand=FloatProperty(Value=2))
        -> MulticastSubject TunnelLength
        SubscribeSubject StimSize => #42
        #31, #42 -> WithLatestFrom
        -> Add
        -> MulticastSubject StimEnd

        GroupWorkflow TunnelPos
            SubscribeSubject Encoder
            -> Accumulate
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: single(it)
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression: single(it)
            -> MulticastSubject "z pos" => #4
            SubscribeSubject TunnelLength
            -> PropertyMapping(Value) => #6
            #4, #6 -> TakeWhile
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> LessThan(Operand=FloatProperty(Value=107))
                -> WorkflowOutput
            -> WorkflowOutput
        -> Last => #47
        -> WorkflowOutput
        #47 -> Condition FA
            WorkflowInput Source1 => #0
            SubscribeSubject RewardTrial
            -> Equal(Operand=IntProperty(Value=0)) => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            SubscribeSubject lickResponse
            -> Equal(Operand=BooleanProperty(Value=true)) => #6
            #4, #6 -> WithLatestFrom
            -> LogicalAnd
            -> WorkflowOutput
        -> StringProperty(Value=FA)
        -> MulticastSubject trialOutcome
        #47 -> Condition HIT
            WorkflowInput Source1 => #0
            SubscribeSubject RewardTrial
            -> Equal(Operand=IntProperty(Value=1)) => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            SubscribeSubject lickResponse
            -> Equal(Operand=BooleanProperty(Value=true)) => #6
            #4, #6 -> WithLatestFrom
            -> LogicalAnd
            -> WorkflowOutput
        -> StringProperty(Value=HIT)
        -> MulticastSubject trialOutcome
        #47 -> Condition MISS
            WorkflowInput Source1 => #0
            SubscribeSubject RewardTrial
            -> Equal(Operand=IntProperty(Value=1)) => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            SubscribeSubject lickResponse
            -> Equal(Operand=BooleanProperty(Value=false)) => #6
            #4, #6 -> WithLatestFrom
            -> LogicalAnd
            -> WorkflowOutput
        -> StringProperty(Value=MISS)
        -> MulticastSubject trialOutcome
        #47 -> Condition CR
            WorkflowInput Source1 => #0
            SubscribeSubject RewardTrial
            -> Equal(Operand=IntProperty(Value=0)) => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            SubscribeSubject lickResponse
            -> Equal(Operand=BooleanProperty(Value=false)) => #6
            #4, #6 -> WithLatestFrom
            -> LogicalAnd
            -> WorkflowOutput
        -> StringProperty(Value=CR)
        -> MulticastSubject trialOutcome

        SubscribeSubject GiveReward
        -> Skip(Count=1)
        -> GroupWorkflow Reward
            WorkflowInput Source1 => #0
            -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2))
            -> MulticastSubject BehaviorCommandBoard => #3
            SubscribeSubject RewardSize => #4
            Bonsai.IO.CsvReader
              FileName="C:\Users\TeachingLab\Desktop\Kerem Bonsai workflows\lab-leopoldo-solene-vr\workflows\PCVars\RewardCalibration.csv"
              ListSeparator=""
              ScanPattern="%f,%f"
              SkipRows=1
            -> MemberSelector(Selector=Item1) => #6
            #4, #6 -> WithLatestFrom
            -> Subtract => #8
            Bonsai.IO.CsvReader
              FileName="C:\Users\TeachingLab\Desktop\Kerem Bonsai workflows\lab-leopoldo-solene-vr\workflows\PCVars\RewardCalibration.csv"
              ListSeparator=""
              ScanPattern="%f,%f"
              SkipRows=1
            -> MemberSelector(Selector=Item2) => #10
            #8, #10 -> WithLatestFrom
            -> Divide
            -> Multiply(Operand=FloatProperty(Value=10000))
            -> PropertyMapping(DueTime) => #14
            #3, #14 -> Delay(DueTime=PT0.0327619S)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO2))
            -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
            -> MulticastSubject BehaviorCommandBoard => #18
            -> WorkflowOutput
            SubscribeSubject TotReward => #20
            #18, #20 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #22
            SubscribeSubject RewardSize => #23
            #22, #23 -> WithLatestFrom
            -> Add
            -> MulticastSubject TotReward
            SubscribeSubject HarpTimestamp => #27
            #0, #27 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject RewTimestamp

        StringProperty(Value=C:\Users\2p_behavior\Desktop\lab-leopoldo-solene-vr\workflows\Textures\detection_stim\)
    -> Concat => #3
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Control", SuppressRepetitions=true) => #4
    #3, #4 -> TakeUntil
    -> WorkflowOutput
-> TakeLast(Count=1)
-> SelectMany Termination
    WorkflowInput Source1
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0))
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0)
    -> MulticastSubject BehaviorCommandBoard
    -> WorkflowOutput
-> WorkflowOutput

GroupWorkflow TurnPositionCalculation
    SubscribeSubject rawData
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        it as Position,
        0.0 as Diference,
        0 as Turns)
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        it as Position,
        0.0 as Diference,
        0 as Turns)
    -> Scan => #3
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value.Position)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
        -> Disable Bonsai.Scripting.ExpressionTransform => #4
          Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
        #4, #0 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2.Value.Position as Position,
            Item1 as Diference,
            Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item2.Value.Position as Position,
            Item1 as Diference,
            Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
        -> WorkflowOutput
    -> MemberSelector(Selector=Position)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
      Expression: Convert.ToSingle(it)
    SubscribeSubject RotEncMin => #6
    #5, #6 -> WithLatestFrom
    -> Bonsai.Numerics.Min
    -> MulticastSubject RotEncMin
    SubscribeSubject RotEncMax => #10
    #5, #10 -> WithLatestFrom
    -> Bonsai.Numerics.Max
    -> MulticastSubject RotEncMax
    #3 -> MemberSelector(Selector=Position) => #14
    SubscribeSubject RotEncMin
    -> PropertyMapping(Value) => #16
    #14, #16 -> Subtract(Operand=FloatProperty(Value=0.1)) => #17
    SubscribeSubject RotEncMax
    -> PropertyMapping(Value) => #19
    #17, #19 -> Divide(Operand=FloatProperty(Value=3811)) => #20
    #3 -> MemberSelector(Selector=Turns)
    -> PropertyMapping(Value) => #22
    #20, #22 -> Add(Operand=FloatProperty(Value=-1699))
    -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
    -> Bonsai.Dsp.Difference(Order=1) => #25
    ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #26
    #25, #26 -> Multiply(Operand=DoubleProperty(Value=62.832)) => #27
    SubscribeSubject TimeOut
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it ? 1 : 0
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: 1-it
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: it ? 1 : 0
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: 1-it
    -> PropertyMapping(Value) => #33
    #27, #33 -> Multiply(Operand=DoubleProperty(Value=1)) => #34
    -> BehaviorSubject Encoder
    #34 -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: single(it)
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: single(it)
    -> MulticastSubject TotDistance
    #27 -> Multiply(Operand=DoubleProperty(Value=1000))
    -> MulticastSubject RunSpeed

GroupWorkflow MainRoom
    ExternalizedMapping(Value(DisplayName=TunnelWidth))
    -> FloatProperty(Value=15) => #1
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: -it/2
    -> PropertyMapping(TranslationX) => #4
    ExternalizedMapping(Value(DisplayName=TunnelHeight))
    -> FloatProperty(Value=8) => #6
    -> PropertyMapping(ScaleY) => #7
    ExternalizedMapping(Value(DisplayName=MouseHeight))
    -> FloatProperty(Value=3) => #9
    -> PropertyMapping(TranslationY) => #10
    ExternalizedMapping(ScaleX) => #11
    SubscribeSubject TotDistance
    -> Mod(Operand=FloatProperty(Value=200))
    -> Disable FloatProperty(Value=0) => #14
    #4, #7, #10, #11, #14 -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        -> Subtract(Operand=FloatProperty(Value=100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #4
        ExternalizedMapping(TranslationX) => #5
        ExternalizedMapping(ScaleY) => #6
        ExternalizedMapping(TranslationY) => #7
        ExternalizedMapping(ScaleX) => #8
        #2, #4, #5, #6, #7, #8 -> GroupWorkflow Left_BG_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=-296.2422
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=300))
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #4, #5, #6, #7, #8 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=-496.2422
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=10400))
        -> PropertyMapping(TranslationZ(Selector=it)) => #14
        #14, #5, #4, #6, #7 -> GroupWorkflow Left_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=-10596.2422
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=20000
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=-100))
        -> PropertyMapping(TranslationZ) => #17
        #4, #5, #6, #17, #8 -> GroupWorkflow Left_BG_-1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.5
              TranslationY=3
              TranslationZ=-96.24219
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
    #1 -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: (-it/2)+0.01
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: (-it/2)+0.01
    -> PropertyMapping(TranslationXstim) => #18
    SubscribeSubject "z pos" => #19
    #7, #10, #18, #19 -> GroupWorkflow LeftStimuli
        SubscribeSubject StimStart
        -> PropertyMapping(Value) => #1
        WorkflowInput Source1 => #2
        #1, #2 -> Subtract(Operand=FloatProperty(Value=60)) => #3
        SubscribeSubject StimSize => #4
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression: it/2
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it/2
        -> PropertyMapping(Value) => #7
        #3, #7 -> Subtract(Operand=FloatProperty(Value=10))
        -> Subtract(Operand=FloatProperty(Value=15))
        -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #4 -> PropertyMapping(ScaleX) => #11
        ExternalizedMapping(TranslationY, ScaleY, TranslationX(DisplayName=TranslationXstim)) => #12
        #10, #11, #12 -> GroupWorkflow Left_Stim
            SubscribeSubject Draw3DStim => #0
            SubscribeSubject tex_Stim_Left
            -> PropertyMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim, TextureTarget=Texture2D) => #3
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #4
            #3, #4 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-7.49
              TranslationY=3
              TranslationZ=-106944.117
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=20
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
    #1 -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: it/2
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it/2
    -> PropertyMapping(TranslationX) => #23
    #7, #10, #11, #23, #14 -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        -> Subtract(Operand=FloatProperty(Value=100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        SubscribeSubject tex_BG_1
        -> PropertyMapping(TextureName(Selector=it)) => #4
        ExternalizedMapping(TranslationX) => #5
        ExternalizedMapping(ScaleY) => #6
        ExternalizedMapping(TranslationY) => #7
        ExternalizedMapping(ScaleX) => #8
        #2, #4, #5, #6, #7, #8 -> GroupWorkflow Left_BG_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=-296.2422
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=300))
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #4, #5, #6, #7, #8 -> GroupWorkflow Left_BG_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=-496.2422
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=10400))
        -> PropertyMapping(TranslationZ(Selector=it)) => #14
        #14, #5, #4, #6, #7 -> GroupWorkflow Left_BG_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=-10596.2422
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=20000
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=-100))
        -> PropertyMapping(TranslationZ) => #17
        #4, #5, #6, #17, #8 -> GroupWorkflow Left_BG_-1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.5
              TranslationY=3
              TranslationZ=-96.24219
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=200
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
    #1 -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: (it/2)-0.01
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: (it/2)-0.01
    -> PropertyMapping(TranslationXstim) => #27
    SubscribeSubject "z pos" => #28
    #7, #10, #27, #28 -> GroupWorkflow RightStimuli
        SubscribeSubject StimStart
        -> PropertyMapping(Value) => #1
        WorkflowInput Source1 => #2
        #1, #2 -> Subtract(Operand=FloatProperty(Value=60)) => #3
        SubscribeSubject StimSize => #4
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression: it/2
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it/2
        -> PropertyMapping(Value) => #7
        #3, #7 -> Subtract(Operand=FloatProperty(Value=10))
        -> Subtract(Operand=FloatProperty(Value=15))
        -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #4 -> PropertyMapping(ScaleX) => #11
        ExternalizedMapping(TranslationX(DisplayName=TranslationXstim), ScaleY, TranslationY) => #12
        #10, #11, #12 -> GroupWorkflow Right_Stim
            SubscribeSubject Draw3DStim => #0
            SubscribeSubject tex_Stim_Right
            -> PropertyMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=stim, TextureTarget=Texture2D) => #3
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #4
            #3, #4 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=7.49
              TranslationY=3
              TranslationZ=-106944.117
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=20
              ScaleY=8
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
    #6 -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: -it/2
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #31
      Expression: -it/2
    #9 -> PropertyMapping(Value) => #32
    #31, #32 -> Add(Operand=FloatProperty(Value=3))
    -> PropertyMapping(TranslationY) => #34
    #1 -> PropertyMapping(ScaleY) => #35
    #34, #35, #14 -> GroupWorkflow Floor
        WorkflowInput Source1 => #0
        -> Subtract(Operand=FloatProperty(Value=-100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        SubscribeSubject tex_Floor
        -> PropertyMapping(TextureName(Selector=it)) => #4
        ExternalizedMapping(TranslationX) => #5
        ExternalizedMapping(TranslationY) => #6
        ExternalizedMapping(ScaleY) => #7
        ExternalizedMapping(ScaleX) => #8
        #2, #4, #5, #6, #7, #8 -> GroupWorkflow Floor_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=-96.24219
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=200
              ScaleY=15
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=100))
        -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #4, #5, #6, #7, #8 -> GroupWorkflow Floor_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=-296.2422
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=200
              ScaleY=15
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=300))
        -> PropertyMapping(TranslationZ(Selector=it)) => #14
        #14, #5, #4, #6, #7, #8 -> GroupWorkflow Floor_2
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=-496.2422
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=200
              ScaleY=15
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=10400))
        -> PropertyMapping(TranslationZ) => #17
        #17, #4, #5, #6, #7 -> GroupWorkflow Floor_3
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1
              TranslationZ=-10596.2422
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=20000
              ScaleY=15
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

    SubscribeSubject TotDistance
    -> Mod(Operand=FloatProperty(Value=3000))
    -> GroupWorkflow Ceiling
        WorkflowInput Source1 => #0
        -> Subtract(Operand=FloatProperty(Value=1500))
        -> PropertyMapping(TranslationZ(Selector=it)) => #2
        SubscribeSubject tex_Ceiling
        -> PropertyMapping(TextureName(Selector=it)) => #4
        #2, #4 -> GroupWorkflow Ceiling_0
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=clouds, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=150
              TranslationZ=-3296.24219
              RotationZ=0
              RotationY=0
              RotationX=90
              ScaleX=3000
              ScaleY=3000
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #0 -> Subtract(Operand=FloatProperty(Value=4500))
        -> PropertyMapping(TranslationZ(Selector=it)) => #7
        #7, #4 -> GroupWorkflow Ceiling_1
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=clouds, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=250
              TranslationZ=-6296.242
              RotationZ=0
              RotationY=0
              RotationX=90
              ScaleX=3000
              ScaleY=3000
              ScaleZ=0
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

        Disable SubscribeSubject Draw3DStim => #9
        Disable ExternalizedMapping(TextureName) => #10
        #9, #10 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=clouds, TextureTarget=Texture2D) => #11
        Disable ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #12
        #11, #12 -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=200
          TranslationZ=218.854263
          ScaleX=5000
          ScaleY=5000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=90
        -> Disable WorkflowOutput

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fog, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=-7.48
      TranslationY=3
      TranslationZ=-21
      RotationZ=0
      RotationY=90
      RotationX=0
      ScaleX=40
      ScaleY=8
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fog, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=7.48
      TranslationY=3
      TranslationZ=-21
      RotationZ=0
      RotationY=90
      RotationX=0
      ScaleX=40
      ScaleY=8
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fog, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=0
      TranslationY=-0.9
      TranslationZ=-20
      RotationZ=0
      RotationY=90
      RotationX=90
      ScaleX=40
      ScaleY=20
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray128, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=-7.47
      TranslationY=3
      TranslationZ=-140
      RotationZ=0
      RotationY=90
      RotationX=0
      ScaleX=200
      ScaleY=8
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray128, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=7.48
      TranslationY=3
      TranslationZ=-140
      RotationZ=0
      RotationY=90
      RotationX=0
      ScaleX=200
      ScaleY=8
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject Draw3DStim
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=gray128, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=0
      TranslationY=-0.9
      TranslationZ=-140
      RotationZ=0
      RotationY=90
      RotationX=90
      ScaleX=200
      ScaleY=20
      ScaleZ=0
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=1, Y=1, Z=1)
      SpecularExponent=10
      MeshName=Plane

GroupWorkflow Camera
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, ColorProcessing=Default) => #0
    -> MemberSelector(Selector=Image) => #1
    -> BehaviorSubject CameraImage
    #1 -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Crop(RegionOfInterest(X=548, Y=725, Width=24, Height=22))
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #6
    -> GreaterThan(Operand=DoubleProperty(Value=70))
    -> BehaviorSubject LickActivity
    #6 -> Bonsai.Dsp.Buffer(Count=500, Skip=10)
    -> Disable Bonsai.Dsp.Average => #10
    -> GroupWorkflow Mean => #11
        WorkflowInput Source1 => #0
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #2
        #0 -> MemberSelector(Selector=Cols)
        -> PropertyMapping(Value) => #4
        #2, #4 -> Divide(Operand=DoubleProperty(Value=500))
        -> WorkflowOutput
    -> PropertyMapping(Value)
    #11, #10 -> Zip
    -> GroupWorkflow STD
        WorkflowInput Source1
        -> Subtract
        -> Bonsai.Dsp.Pow(Power=2) => #2
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0)
        -> Bonsai.Numerics.Sqrt => #5
        #2 -> MemberSelector(Selector=Cols)
        -> PropertyMapping(Value) => #7
        #5, #7 -> Divide(Operand=DoubleProperty(Value=500))
        -> WorkflowOutput
    -> PropertyMapping(Value)
    #0 -> MemberSelector(Selector=ChunkData)
    -> BehaviorSubject CameraMetadata

GroupWorkflow LickResponse
    SubscribeSubject nLicks => #0
    SubscribeSubject minLicks
    -> PropertyMapping(Value) => #2
    #0, #2 -> GreaterThanOrEqual(Operand=FloatProperty(Value=3))
    -> DistinctUntilChanged
    -> MulticastSubject lickResponse

GroupWorkflow RewAvailability
    SubscribeSubject "z pos" => #0
    SubscribeSubject RewardZoneStart
    -> PropertyMapping(Value) => #2
    #0, #2 -> GreaterThan(Operand=FloatProperty(Value=85)) => #3
    SubscribeSubject RewardZoneEnd
    -> PropertyMapping(Value) => #5
    #0, #5 -> LessThan(Operand=FloatProperty(Value=105)) => #6
    #3, #6 -> Zip
    -> BitwiseAnd
    -> MulticastSubject InRewardZone

GroupWorkflow PassiveRewControl
    SubscribeSubject "z pos" => #0
    SubscribeSubject StimEnd
    -> Disable Add(Operand=FloatProperty(Value=20)) => #2
    #0, #2 -> WithLatestFrom
    -> GreaterThanOrEqual
    -> DistinctUntilChanged
    -> Condition => #6
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject lickResponse => #7
    #6, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Condition => #10
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    SubscribeSubject RewardTrial
    -> Equal(Operand=IntProperty(Value=1)) => #12
    #10, #12 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Condition => #15
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject PassiveRewOn => #16
    #15, #16 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> MulticastSubject GiveReward

GroupWorkflow ActiveRewControl
    SubscribeSubject lickResponse => #0
    SubscribeSubject RewardTrial
    -> Equal(Operand=IntProperty(Value=1)) => #2
    #0, #2 -> WithLatestFrom
    -> LogicalAnd
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> MulticastSubject GiveReward
    -> WorkflowOutput

GroupWorkflow CountLicks
    SubscribeSubject LickActivity => #0
    SubscribeSubject InRewardZone => #1
    #0, #1 -> WithLatestFrom
    -> BitwiseAnd
    -> DistinctUntilChanged
    -> Condition => #5
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject nLicks => #6
    #5, #6 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> Disable Divide(Operand=IntProperty(Value=1))
    -> MulticastSubject nLicks
    -> WorkflowOutput

GroupWorkflow ManualReward
    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Control", SuppressRepetitions=true)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward
    -> Repeat
    -> WorkflowOutput

GroupWorkflow TimeOutControl
    SubscribeSubject "z pos" => #0
    SubscribeSubject StimStart
    -> Subtract(Operand=FloatProperty(Value=60)) => #2
    #0, #2 -> WithLatestFrom
    -> GreaterThan => #4
    SubscribeSubject "z pos" => #5
    SubscribeSubject StimStart
    -> Subtract(Operand=FloatProperty(Value=15)) => #7
    #5, #7 -> WithLatestFrom
    -> LessThan => #9
    #4, #9 -> Zip
    -> BitwiseAnd => #11
    SubscribeSubject UseTimeOut => #12
    #11, #12 -> WithLatestFrom
    -> LogicalAnd
    -> Condition => #15
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject LickActivity => #16
    #15, #16 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Condition => #19
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject StimStart => #20
    #19, #20 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #22
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=20, Upper=50)
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(Value) => #26
    #22, #26 -> Add(Operand=FloatProperty(Value=42))
    -> MulticastSubject StimStart => #28
    SubscribeSubject RewardZoneOffset => #29
    #28, #29 -> WithLatestFrom
    -> Add
    -> MulticastSubject RewardZoneStart => #32
    SubscribeSubject RewardZoneLength => #33
    #32, #33 -> WithLatestFrom
    -> Add
    -> MulticastSubject RewardZoneEnd
    -> Add(Operand=FloatProperty(Value=2))
    -> MulticastSubject TunnelLength
    SubscribeSubject StimSize => #39
    #22, #39 -> WithLatestFrom
    -> Add
    -> MulticastSubject StimEnd

GroupWorkflow FileTrigger
    Int64Property(Value=99) => #0
    SubscribeSubject HarpTimestamp => #1
    #0, #1 -> WithLatestFrom
    -> BehaviorSubject TriggerData

    Timer(DueTime=PT1S) => #4
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital1)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
    -> MulticastSubject BehaviorCommandBoard
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO1))
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommandBoard
    #4 -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
    -> MulticastSubject BehaviorCommandBoard
    SubscribeSubject HarpTimestamp => #15
    #4, #15 -> WithLatestFrom
    -> MulticastSubject TriggerData

    Timer(DueTime=PT5S, Period=PT2S) => #18
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital3)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
    -> MulticastSubject BehaviorCommandBoard
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO3))
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital3)
    -> MulticastSubject BehaviorCommandBoard
    SubscribeSubject HarpTimestamp => #26
    #18, #26 -> WithLatestFrom
    -> MulticastSubject TriggerData

Disable Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DarkBlue, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=2048, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #39
-> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=90.000002504478161, Z=0), Translation(X=-10.5, Y=2, Z=0))
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.3333, Height=1)
#39 -> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=10.51, Height=8, Rotation(X=0, Y=-15.000000417413029, Z=0), Translation(X=-5.1, Y=2, Z=-10.5))
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.33333, Y=0, Width=0.167, Height=1)
#39 -> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=10.51, Height=8, Rotation(X=0, Y=15.000000417413029, Z=0), Translation(X=5.1, Y=2, Z=-10.5))
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.1667, Height=1)
#39 -> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=21, Height=8, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=10.5, Y=2, Z=0))
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666, Y=0, Width=0.3333, Height=1)
-> Disable Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)
