WorkflowBuilder(Version=2.9.0)
GroupWorkflow Init
    DoubleProperty(Value=0)
    -> BehaviorSubject WheelEncoder

    DoubleProperty(Value=0)
    -> BehaviorSubject HarpTimestamp

    ExternalizedMapping(Value(DisplayName=RewardDistance))
    -> FloatProperty(Value=1)
    -> BehaviorSubject RewardDistance

    SubscribeSubject RewardDistance
    -> Take(Count=1)
    -> BehaviorSubject NextRewardPosition

    FloatProperty(Value=0)
    -> BehaviorSubject TeleportToPosition

    Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> BehaviorSubject CameraPosition

    FloatProperty(Value=0)
    -> BehaviorSubject CameraOrientation

GroupWorkflow InitShaders
    ExternalizedMapping(Width, Height)
    -> Bonsai.Shaders.CreateWindow
      Width=320
      Height=240
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=0, Y=0)
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=BackWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_back.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Floor
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\floor\checkerboard2.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=FrontWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_front.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=LeftWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_left.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=RightWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_right.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=BG_0.04_0.32_100
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\background\BG_0.04_0.32_100.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Rocks
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\floor\rocks.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PanoramicShader
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\panoramic.vert
          FragmentShader=Shaders\panoramic.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PlainColorShader
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\plain_color.vert
          FragmentShader=Shaders\plain_color.frag
    -> Bonsai.Shaders.MeshResources
      Meshes
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=PanoramicQuad, QuadEffects=None)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=Cylinder, FileName=Models\cylinder.obj)
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

GroupWorkflow RewardDetection
    SubscribeSubject CameraPosition
    -> MemberSelector(Selector=Z) => #1
    SubscribeSubject NextRewardPosition => #2
    #1, #2 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression: Item2-Item1
    -> Skip(Count=1) => #5
    #5, #4 -> Zip
    -> Condition
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> GreaterThanOrEqual(Operand=FloatProperty(Value=0)) => #2
        #0 -> MemberSelector(Selector=Item2)
        -> LessThan(Operand=FloatProperty(Value=0)) => #4
        #2, #4 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> BehaviorSubject GoReward

    SubscribeSubject RewardDistance
    -> Multiply(Operand=FloatProperty(Value=-1)) => #10
    SubscribeSubject CameraPosition
    -> MemberSelector(Selector=Z) => #12
    #10, #12 -> WithLatestFrom
    -> Add
    -> MulticastSubject NextRewardPosition

    SubscribeSubject GoReward => #16
    SubscribeSubject CameraPosition
    -> MemberSelector(Selector=Z) => #18
    SubscribeSubject RewardDistance
    -> Multiply(Operand=FloatProperty(Value=-1)) => #20
    #18, #20 -> WithLatestFrom
    -> Add => #22
    #16, #22 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject NextRewardPosition

Disable GroupWorkflow HarpDevice
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
    ExternalizedMapping(PortName) => #1
    #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM11)
    -> BehaviorSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData) => #4
    -> MemberSelector(Selector=Value.AnalogInput0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform ToVolt
      Expression: it * 5.0 / 4096.0
    -> MulticastSubject WheelEncoder
    #4 -> MemberSelector(Selector=Seconds)
    -> MulticastSubject HarpTimestamp

    Int64Property(Value=99) => #10
    SubscribeSubject HarpTimestamp => #11
    #10, #11 -> WithLatestFrom
    -> BehaviorSubject TriggerData

    Timer(DueTime=PT1S) => #14
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO1))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
    -> MulticastSubject BehaviorCommands
    SubscribeSubject HarpTimestamp => #22
    #14, #22 -> WithLatestFrom
    -> MulticastSubject TriggerData

    Timer(DueTime=PT5S, Period=PT2S) => #25
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO3))
    -> MulticastSubject BehaviorCommands
    SubscribeSubject HarpTimestamp => #31
    #25, #31 -> WithLatestFrom
    -> MulticastSubject TriggerData

Disable GroupWorkflow Logging
    ExternalizedMapping(Value(DisplayName=Filepath))
    -> StringProperty(Value=.\data)
    -> BehaviorSubject LogPath

    SubscribeSubject LogPath => #3
    ExternalizedMapping(Value(DisplayName=MouseName)) => #4
    -> StringProperty(Value=LPE12385) => #5
    #3 -> Timestamp
    -> MemberSelector(Selector="Timestamp.Year,Timestamp.Month,Timestamp.Day")
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
      Expression: Item1.ToString() + "_" + Item2.ToString("D2") + "_" + Item3.ToString("D2") + "\"
    ExternalizedMapping(Value(DisplayName=Protocol_ID))
    -> StringProperty(Value=DN) => #10
    StringProperty(Value=Behavior) => #11
    #4 -> StringProperty(Value=LPE12385) => #12
    #3, #5, #8, #10, #11, #12 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Item1.ToString() + Item2.ToString() + "\" + Item3.ToString() + "\" + Item4.ToString() + "\" + Item5.ToString() + "\" + Item4.ToString() + "_" + Item6.ToString() + "_"
    -> BehaviorSubject SaveFilename

    SubscribeSubject Draw => #16
    SubscribeSubject HarpTimestamp => #17
    #16, #17 -> WithLatestFrom => #18
    SubscribeSubject CameraPosition
    -> MemberSelector(Selector=Z) => #20
    #18, #20 -> WithLatestFrom => #21
    SubscribeSubject RewardDistance => #22
    #21, #22 -> WithLatestFrom => #23
    SubscribeSubject TotalDistance => #24
    #23, #24 -> WithLatestFrom => #25
    #24 -> Skip(Count=1) => #26
    #24, #26 -> Zip
    -> Subtract => #28
    #25, #28 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
          Item1.Item1.Item1.Item2 as Timestamp,
          Item1.Item1.Item2 as Position,
          Item1.Item2 as WheelDistance,
          Item2 as WheelSpeed
        )
    -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    -> WorkflowOutput

Disable GroupWorkflow HarpDeviceOLD
    ExternalizedMapping(Name)
    -> SubscribeSubject BehaviorCommandBoard
    -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM11) => #2
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> MemberSelector(Selector=Seconds) => #4
    -> MulticastSubject HarpTimestamp
    #2 -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
    -> MemberSelector(Selector=AnalogInput0) => #7
    #7, #4 -> WithLatestFrom => #8
    SubscribeSubject "z pos" => #9
    #8, #9 -> WithLatestFrom => #10
    SubscribeSubject RunSpeed => #11
    #10, #11 -> WithLatestFrom => #12
    SubscribeSubject TrialNumber => #13
    #12, #13 -> WithLatestFrom => #14
    SubscribeSubject LickActivity => #15
    #14, #15 -> WithLatestFrom => #16
    SubscribeSubject RewTimestamp => #17
    #16, #17 -> WithLatestFrom
    -> BehaviorSubject HarpData
    #7 -> Bonsai.Scripting.Expressions.ExpressionTransform ToVolt
      Expression: it * 5.0 / 4096.0
    -> PublishSubject rawData
    #2 -> MemberSelector(Selector=MessageBytes)
    -> BehaviorSubject RawHarpData

    Disable WithLatestFrom => #24
    Disable SubscribeSubject TrialNumber => #25
    #24, #25 -> Disable WithLatestFrom => #26
    Disable SubscribeSubject "z pos" => #27
    #26, #27 -> Disable WithLatestFrom => #28
    Disable SubscribeSubject RunSpeed => #29
    #28, #29 -> Disable WithLatestFrom => #30
    Disable SubscribeSubject LickActivity => #31
    #30, #31 -> Disable WithLatestFrom => #32
    Disable SubscribeSubject RewTimestamp => #33
    #32, #33 -> Disable WithLatestFrom
    -> Disable BehaviorSubject HarpData

    Disable Bonsai.Harp.DeviceEvent(Event=Bonsai.Harp.MessageTimestamp) => #36
    -> Disable MulticastSubject HarpTimestamp
    Disable Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #38
    -> Disable PublishSubject rawData
    #38, #36 -> Disable WithLatestFrom => #40
    Disable SubscribeSubject TrialNumber => #41
    #40, #41 -> Disable WithLatestFrom => #42
    Disable SubscribeSubject "z pos" => #43
    #42, #43 -> Disable WithLatestFrom => #44
    Disable SubscribeSubject RunSpeed => #45
    #44, #45 -> Disable WithLatestFrom => #46
    Disable SubscribeSubject LickActivity => #47
    #46, #47 -> Disable WithLatestFrom => #48
    Disable SubscribeSubject RewTimestamp => #49
    #48, #49 -> Disable WithLatestFrom
    -> Disable BehaviorSubject HarpData

Disable GroupWorkflow TurnPositionCalculationOLD
    SubscribeSubject rawData
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        it as Position,
        0.0 as Diference,
        0 as Turns)
    -> Scan => #2
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value.Position)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
        #3, #0 -> Zip => #4
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2.Value.Position as Position,
            Item1 as Diference,
            Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
        -> WorkflowOutput
        #0 -> MemberSelector(Selector=Accumulation.Diference)
        #0 -> MemberSelector(Selector=Value.Diference)
        #4 -> MemberSelector(Selector=Item1)
        #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))
    -> MemberSelector(Selector=Position)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression: Convert.ToSingle(it)
    SubscribeSubject RotEncMin => #5
    #4, #5 -> WithLatestFrom
    -> Bonsai.Numerics.Min
    -> MulticastSubject RotEncMin
    SubscribeSubject RotEncMax => #9
    #4, #9 -> WithLatestFrom
    -> Bonsai.Numerics.Max
    -> MulticastSubject RotEncMax
    #2 -> MemberSelector(Selector=Position) => #13
    SubscribeSubject RotEncMin
    -> PropertyMapping(Value) => #15
    #13, #15 -> Subtract(Operand=FloatProperty(Value=0.1)) => #16
    SubscribeSubject RotEncMax
    -> PropertyMapping(Value) => #18
    #16, #18 -> Divide(Operand=FloatProperty(Value=4.7)) => #19
    #2 -> MemberSelector(Selector=Turns)
    -> PropertyMapping(Value) => #21
    #19, #21 -> Add(Operand=FloatProperty(Value=0))
    -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
    -> Bonsai.Dsp.Difference(Order=1) => #24
    ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #25
    #24, #25 -> Multiply(Operand=DoubleProperty(Value=62.832)) => #26
    SubscribeSubject TimeOut
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it ? 1 : 0
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: 1-it
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: it ? 1 : 0
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: 1-it
    -> PropertyMapping(Value) => #32
    #26, #32 -> Multiply(Operand=DoubleProperty(Value=1)) => #33
    -> BehaviorSubject Encoder
    #33 -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: single(it)
    -> Disable Bonsai.Scripting.ExpressionTransform
      Expression: single(it)
    -> MulticastSubject TotDistance
    #26 -> Multiply(Operand=DoubleProperty(Value=1000))
    -> MulticastSubject RunSpeed

Bonsai.IO.ReadAllText(Path=Protocols\kerem_settings_repeating.yaml)
-> VRCorridorSchema.DeserializeFromYaml(Type=TypeMapping<VRCorridorSchema.VRCorridorSchema>)
-> BehaviorSubject TaskProperties

Disable GroupWorkflow ManualNavigation
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> FloatProperty(Value=0.1) => #1
    Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> FloatProperty(Value=-0.1) => #3
    FloatProperty(Value=0) => #4
    #1, #3, #4 -> Merge
    -> Accumulate
    -> BehaviorSubject CameraOrientation

    Bonsai.Windows.Input.KeyDown(Filter=W, SuppressRepetitions=false)
    -> FloatProperty(Value=-1) => #9
    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> FloatProperty(Value=1) => #11
    FloatProperty(Value=0) => #12
    #9, #11, #12 -> Merge => #13
    SubscribeSubject CameraOrientation => #14
    #13, #14 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0.198669344, Y=0, Z=-0.9800666)
    -> Accumulate
    -> BehaviorSubject CameraPosition

Disable GroupWorkflow HarpWheelNavigation
    GroupWorkflow ProcessWheelData
        ExternalizedMapping("WheelEncoderMin (V)", "WheelEncoderMax (V)")
        -> GroupWorkflow InitWheelData
            ExternalizedMapping(Value(DisplayName="WheelEncoderMin (V)"))
            -> FloatProperty(Value=0.1)
            -> BehaviorSubject RotEncMin

            ExternalizedMapping(Value(DisplayName="WheelEncoderMax (V)"))
            -> FloatProperty(Value=4.7)
            -> BehaviorSubject RotEncMax

            IntProperty(Value=0)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                0.0 as Position,
                0.0 as Diference,
                0 as Turns)
            -> BehaviorSubject WheelData

            FloatProperty(Value=0)
            -> BehaviorSubject Encoder

            FloatProperty(Value=0)
            -> BehaviorSubject TotalDistance

            FloatProperty(Value=0)
            -> BehaviorSubject RunSpeed

            BooleanProperty(Value=false)
            -> BehaviorSubject TimeOut

        SubscribeSubject WheelEncoder
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it as Position,
            0.0 as Diference,
            0 as Turns)
        -> Scan
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Position)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
              Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
            #3, #0 -> Zip => #4
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2.Value.Position as Position,
                Item1 as Diference,
                Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Accumulation.Diference)
            #0 -> MemberSelector(Selector=Value.Diference)
            #4 -> MemberSelector(Selector=Item1)
            #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))
        -> MulticastSubject WheelData

        SubscribeSubject WheelData => #6
        -> MemberSelector(Selector=Position) => #7
        SubscribeSubject RotEncMin
        -> PropertyMapping(Value) => #9
        #7, #9 -> Subtract(Operand=FloatProperty(Value=0.03540039)) => #10
        SubscribeSubject RotEncMax
        -> PropertyMapping(Value) => #12
        #10, #12 -> Divide(Operand=FloatProperty(Value=4.7)) => #13
        #6 -> MemberSelector(Selector=Turns)
        -> PropertyMapping(Value) => #15
        #13, #15 -> Add(Operand=FloatProperty(Value=5))
        -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
        -> Bonsai.Dsp.Difference(Order=1) => #18
        ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #19
        #18, #19 -> Multiply(Operand=DoubleProperty(Value=0.62832)) => #20
        SubscribeSubject TimeOut
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 1 : 0
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 1-it
        -> PropertyMapping(Value) => #24
        #20, #24 -> Multiply(Operand=DoubleProperty(Value=1))
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> MulticastSubject TotalDistance
        #20 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> MulticastSubject RunSpeed

        Annotation UpdateEncoderLimits(Text="")
        -> SubscribeSubject WheelData
        -> MemberSelector(Selector=Position)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #34
          Expression: Convert.ToSingle(it)
        SubscribeSubject RotEncMin => #35
        #34, #35 -> WithLatestFrom
        -> Bonsai.Numerics.Min
        -> MulticastSubject RotEncMin
        SubscribeSubject RotEncMax => #39
        #34, #39 -> WithLatestFrom
        -> Bonsai.Numerics.Max
        -> MulticastSubject RotEncMax

    SubscribeSubject TotalDistance => #1
    SubscribeSubject TeleportToPosition => #2
    SubscribeSubject TotalDistance => #3
    #2, #3 -> WithLatestFrom
    -> Subtract => #5
    #1, #5 -> WithLatestFrom
    -> Add
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        0 as X,
        0 as Y,
        -it%1.88496 as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-0.842642069)
    -> MulticastSubject CameraPosition

GroupWorkflow MouseWheelNavigation
    Bonsai.Windows.Input.MouseWheel => #0
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> FloatProperty(Value=0.01) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> LessThan(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> FloatProperty(Value=-0.01) => #4
    FloatProperty(Value=0) => #5
    SubscribeSubject TeleportToPosition => #6
    SubscribeSubject CameraPosition
    -> MemberSelector(Selector=Z) => #8
    #6, #8 -> WithLatestFrom
    -> Subtract => #10
    #2, #4, #5, #10 -> Merge => #11
    SubscribeSubject CameraOrientation => #12
    #11, #12 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=-0, Y=0, Z=-0.01)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        it.X as X,
        it.Y as Y,
        it.Z % 10.0 as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1.7399987)
    -> MulticastSubject CameraPosition

GroupWorkflow "3D Scene"
    Annotation 3(Text="")
    -> SubscribeSubject Draw => #1
    -> SelectMany DrawArena
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Arena) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> InputMapping(Selector=it, Repetitions(Selector=Item2.Repetitions))
        -> SelectMany => #7
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=5) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2.Item1) => #1
                #0 -> MemberSelector(Selector=Item2.Item2) => #2
                #0 -> MemberSelector(Selector=Item1) => #3
                #0 -> MemberSelector(Selector=Item2) => #4
                -> MemberSelector(Selector=Item2.RepeatInterval) => #5
                #3, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                #4 -> MemberSelector(Selector=Item2.Translation)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
                  Expression: it[2]
                SubscribeSubject CameraPosition
                -> MemberSelector(Selector=Z) => #12
                #5, #12 -> WithLatestFrom => #13
                Annotation #RepeatIntervals(Text="This gives the number of RepeatInterval distances that fit in the current distance travelled.") => #14
                #13, #14 -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
                  Expression: Math.Floor(Item2/Item1)
                #15, #5 -> Zip
                -> Multiply => #17
                #8, #10, #17 -> Zip
                -> Add => #19
                #1, #2, #19 -> Zip
                -> WorkflowOutput
            -> Condition "Not Textured?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping
              Selector=Item1
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
            -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-1.88496
              RotationZ=0
              RotationY=89.95438
              RotationX=0
              ScaleX=0.05
              ScaleY=0.4
              ScaleZ=0.5
              Ambient(X=0, Y=0, Z=1)
              Diffuse(X=1, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> Condition Textured? => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> NotEqual(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #10
            #8 -> PropertyMapping => #11
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
            #10, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-3.45575976
              RotationZ=0
              RotationY=-89.95438
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #7, #12 -> Merge => #13
            #2 -> MemberSelector(Selector=Item2.Repetitions)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #16
            #13, #16 -> Skip(Count=4)
            -> Take(Count=1)
            -> WorkflowOutput
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #9
        #7, #9 -> Take(Count=3)
        -> WorkflowOutput
    #1 -> SelectMany DrawLandmarks
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Landmarks) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> InputMapping(Selector=it, Repetitions(Selector=Item2.Repetitions))
        -> SelectMany => #7
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=2) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2.Item1) => #1
                #0 -> MemberSelector(Selector=Item2.Item2) => #2
                #0 -> MemberSelector(Selector=Item1) => #3
                #0 -> MemberSelector(Selector=Item2) => #4
                -> MemberSelector(Selector=Item2.RepeatInterval) => #5
                #3, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                #4 -> MemberSelector(Selector=Item2.Translation)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
                  Expression: it[2]
                SubscribeSubject CameraPosition
                -> MemberSelector(Selector=Z) => #12
                #5, #12 -> WithLatestFrom => #13
                Annotation #RepeatIntervals(Text="This gives the number of RepeatInterval distances that fit in the current distance travelled.") => #14
                #13, #14 -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
                  Expression: Math.Floor(Item2/Item1)
                #15, #5 -> Zip
                -> Multiply => #17
                #8, #10, #17 -> Zip
                -> Add => #19
                #1, #2, #19 -> Zip
                -> WorkflowOutput
            -> Condition "Not Textured?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping
              Selector=Item1
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
            -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=0.045
              TranslationY=0
              TranslationZ=-3.1416
              RotationZ=0
              RotationY=89.95438
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=0, Z=0)
              Diffuse(X=1, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> Condition Textured? => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> NotEqual(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #10
            #8 -> PropertyMapping => #11
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
            #10, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-6.59735966
              RotationZ=0
              RotationY=-89.95438
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #7, #12 -> Merge => #13
            #2 -> MemberSelector(Selector=Item2.Repetitions)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #16
            #13, #16 -> Skip(Count=1)
            -> Take(Count=1)
            -> WorkflowOutput
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #9
        #7, #9 -> Take(Count=2)
        -> WorkflowOutput
    #1 -> SelectMany DrawRewards
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Reward) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> InputMapping(Selector=it, Repetitions(Selector=Item2.Repetitions))
        -> SelectMany => #7
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=5) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2.Item1) => #1
                #0 -> MemberSelector(Selector=Item2.Item2) => #2
                #0 -> MemberSelector(Selector=Item1) => #3
                SubscribeSubject RewardDistance => #4
                #3, #4 -> WithLatestFrom
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject NextRewardPosition => #8
                #0, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #10
                #7, #10 -> Zip
                -> Add => #12
                #1, #2, #12 -> Zip
                -> WorkflowOutput
            -> Condition "Not Textured?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping
              Selector=Item1
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
            -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-0.045
              TranslationY=0
              TranslationZ=-6.209999
              RotationZ=0
              RotationY=89.95438
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=0)
              Diffuse(X=1, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> Condition Textured? => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> NotEqual(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #10
            #8 -> PropertyMapping => #11
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
            #10, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-6.59735966
              RotationZ=0
              RotationY=-89.95438
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #7, #12 -> Merge => #13
            #2 -> MemberSelector(Selector=Item2.Repetitions)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #16
            #13, #16 -> Skip(Count=4)
            -> Take(Count=1)
            -> WorkflowOutput
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #9
        #7, #9 -> Take(Count=2)
        -> WorkflowOutput
    #1 -> Disable SelectMany DrawReward
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Reward) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest => #5
        -> Condition "Not Textured?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Texture)
            -> Equal(Operand=StringProperty(Value=None))
            -> WorkflowOutput
        -> InputMapping => #7
          Selector=Item1
          MeshName(Selector=Item2.MeshType)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        SubscribeSubject RewardDistance
        -> Multiply(Operand=FloatProperty(Value=-1))
        -> PropertyMapping(TranslationZ) => #10
        #7, #10 -> IncludeWorkflow => #11
          Path=BonVision:Primitives.DrawModel.bonsai
          TranslationX=-0.045
          TranslationY=0
          TranslationZ=-0.9
          RotationZ=0
          RotationY=89.95438
          RotationX=0
          ScaleX=0.1
          ScaleY=0.08
          ScaleZ=0.1
          Ambient(X=1, Y=1, Z=0)
          Diffuse(X=1, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane
        #5 -> Condition Textured? => #12
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Texture)
            -> NotEqual(Operand=StringProperty(Value=None))
            -> WorkflowOutput
        -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #14
        #12 -> PropertyMapping => #15
          MeshName(Selector=Item2.MeshType)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
        SubscribeSubject RewardDistance
        -> Multiply(Operand=FloatProperty(Value=-1))
        -> PropertyMapping(TranslationZ) => #18
        #14, #15, #18 -> IncludeWorkflow => #19
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-0.049
          TranslationY=0
          TranslationZ=-0.9
          RotationZ=0
          RotationY=-89.95438
          RotationX=0
          ScaleX=0.62832
          ScaleY=0.08
          ScaleZ=0.1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane
        #11, #19 -> Merge => #20
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #22
        #20, #22 -> Take(Count=2)
        -> WorkflowOutput
    #1 -> Disable SelectMany DrawLandmarks
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Landmarks) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest => #5
        -> Condition "Not Textured?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Texture)
            -> Equal(Operand=StringProperty(Value=None))
            -> WorkflowOutput
        -> InputMapping
          Selector=Item1
          MeshName(Selector=Item2.MeshType)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          TranslationZ(Selector=Item2.Translation[2])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> IncludeWorkflow => #8
          Path=BonVision:Primitives.DrawModel.bonsai
          TranslationX=0.045
          TranslationY=0
          TranslationZ=-0.62832
          RotationZ=0
          RotationY=89.95438
          RotationX=0
          ScaleX=0.1
          ScaleY=0.08
          ScaleZ=0.1
          Ambient(X=1, Y=0, Z=0)
          Diffuse(X=1, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane
        #5 -> Condition Textured? => #9
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Texture)
            -> NotEqual(Operand=StringProperty(Value=None))
            -> WorkflowOutput
        -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #11
        #9 -> PropertyMapping => #12
          MeshName(Selector=Item2.MeshType)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          TranslationZ(Selector=Item2.Translation[2])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
        #11, #12 -> IncludeWorkflow => #13
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-0.049
          TranslationY=0
          TranslationZ=-1.5708
          RotationZ=0
          RotationY=-89.95438
          RotationX=0
          ScaleX=0.62832
          ScaleY=0.08
          ScaleZ=0.1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane
        #8, #13 -> Merge => #14
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #16
        #14, #16 -> Take(Count=2)
        -> WorkflowOutput
    #1 -> Disable SelectMany DrawLandmarks
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties
        -> MemberSelector(Selector=Landmarks) => #2
        -> Concat => #3
        #0, #3 -> CombineLatest => #4
        -> Condition "Not Textured?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Texture)
            -> Equal(Operand=StringProperty(Value=None))
            -> WorkflowOutput
        -> InputMapping
          Selector=Item1
          MeshName(Selector=Item2.MeshType)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          TranslationZ(Selector=Item2.Translation[2])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> IncludeWorkflow => #7
          Path=BonVision:Primitives.DrawModel.bonsai
          TranslationX=-0.045
          TranslationY=0
          TranslationZ=-1.25664
          RotationZ=0
          RotationY=89.95438
          RotationX=0
          ScaleX=0.1
          ScaleY=0.08
          ScaleZ=0.1
          Ambient(X=0, Y=0, Z=1)
          Diffuse(X=1, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane
        #4 -> Condition Textured? => #8
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Texture)
            -> NotEqual(Operand=StringProperty(Value=None))
            -> WorkflowOutput
        -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #10
        #8 -> PropertyMapping => #11
          MeshName(Selector=Item2.MeshType)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          TranslationZ(Selector=Item2.Translation[2])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
        #10, #11 -> IncludeWorkflow => #12
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0.049
          TranslationY=0
          TranslationZ=0
          RotationZ=0
          RotationY=89.95438
          RotationX=0
          ScaleX=0.1
          ScaleY=0.4
          ScaleZ=0.1
          Ambient(X=1, Y=0, Z=0)
          Diffuse(X=1, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane
        #7, #12 -> Merge => #13
        #2 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #15
        #13, #15 -> Take(Count=6)
        -> WorkflowOutput
    #1 -> Disable GroupWorkflow DrawFloor
        Annotation "Drawing 4 Parts"(Text="It tiles the floor in four parts by drawing four copies of the same texture 4 times along the Z axis.")

        WorkflowInput Source1 => #1
        SubscribeSubject TaskProperties => #2
        ExternalizedMapping(Selector) => #3
        #2, #3 -> MemberSelector(Selector=Floor) => #4
        #1, #4 -> WithLatestFrom => #5
        -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #7
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=-1) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.01
              TranslationZ=0.31416
              RotationZ=0
              RotationY=0
              RotationX=-90.000206
              ScaleX=0.62832
              ScaleY=0.62832
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #5 -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #9
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=0) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.01
              TranslationZ=-0.31416
              RotationZ=0
              RotationY=0
              RotationX=-90.000206
              ScaleX=0.62832
              ScaleY=0.62832
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #5 -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #11
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=1) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.01
              TranslationZ=-0.94248
              RotationZ=0
              RotationY=0
              RotationX=-90.000206
              ScaleX=0.62832
              ScaleY=0.62832
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #5 -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #13
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=2) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.01
              TranslationZ=-1.5708
              RotationZ=0
              RotationY=0
              RotationX=-90.000206
              ScaleX=0.62832
              ScaleY=0.62832
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #7, #9, #11, #13 -> Merge
        -> WorkflowOutput

        Disable InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          TranslationZ(Selector=Item2.Translation[2])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> Disable GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, TranslationZ, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.01
              TranslationZ=-0.5
              RotationZ=0
              RotationY=0
              RotationX=-90.000206
              ScaleX=1
              ScaleY=1
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
    #1 -> Disable GroupWorkflow DrawRightWall
        Annotation "Drawing 4 Parts"(Text="It tiles the floor in four parts by drawing four copies of the same texture 4 times along the Z axis.")

        WorkflowInput Source1 => #1
        SubscribeSubject TaskProperties => #2
        ExternalizedMapping(Selector) => #3
        #2, #3 -> MemberSelector(Selector=RightWall) => #4
        #1, #4 -> WithLatestFrom => #5
        -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #7
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=-1) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.05
              TranslationY=0
              TranslationZ=0.31416
              RotationZ=0
              RotationY=-90.000206
              RotationX=0
              ScaleX=0.62832
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #5 -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #9
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=0) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.05
              TranslationY=0
              TranslationZ=-0.31416
              RotationZ=0
              RotationY=-90.000206
              RotationX=0
              ScaleX=0.62832
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #5 -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #11
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=1) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.05
              TranslationY=0
              TranslationZ=-0.94248
              RotationZ=0
              RotationY=-90.000206
              RotationX=0
              ScaleX=0.62832
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #5 -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #13
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=2) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.05
              TranslationY=0
              TranslationZ=-1.5708
              RotationZ=0
              RotationY=-90.000206
              RotationX=0
              ScaleX=0.62832
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #7, #9, #11, #13 -> Merge
        -> WorkflowOutput

        Disable InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          TranslationZ(Selector=Item2.Translation[2])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> Disable GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, TranslationZ, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.01
              TranslationZ=-0.5
              RotationZ=0
              RotationY=0
              RotationX=-90.000206
              ScaleX=1
              ScaleY=1
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
    #1 -> Disable GroupWorkflow DrawLeftWall
        Annotation "Drawing 4 Parts"(Text="It tiles the floor in four parts by drawing four copies of the same texture 4 times along the Z axis.")

        WorkflowInput Source1 => #1
        SubscribeSubject TaskProperties => #2
        ExternalizedMapping(Selector) => #3
        #2, #3 -> MemberSelector(Selector=LeftWall) => #4
        #1, #4 -> WithLatestFrom => #5
        -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #7
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=-1) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.05
              TranslationY=0
              TranslationZ=0.31416
              RotationZ=0
              RotationY=-90.000206
              RotationX=0
              ScaleX=0.62832
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #5 -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #9
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=0) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.05
              TranslationY=0
              TranslationZ=-0.31416
              RotationZ=0
              RotationY=-90.000206
              RotationX=0
              ScaleX=0.62832
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #5 -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #11
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=1) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.05
              TranslationY=0
              TranslationZ=-0.94248
              RotationZ=0
              RotationY=-90.000206
              RotationX=0
              ScaleX=0.62832
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #5 -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture => #13
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            SubscribeSubject TaskProperties
            -> MemberSelector(Selector=Floor.Scale) => #5
            ExternalizedMapping(Value(DisplayName="Iteration(#)"))
            -> FloatProperty(Value=2) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: -Item1[0]*Item2-Item1[0]/2
            -> PropertyMapping(TranslationZ) => #10
            #2, #3, #10 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.05
              TranslationY=0
              TranslationZ=-1.5708
              RotationZ=0
              RotationY=-90.000206
              RotationX=0
              ScaleX=0.62832
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #7, #9, #11, #13 -> Merge
        -> WorkflowOutput

        Disable InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          TranslationZ(Selector=Item2.Translation[2])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> Disable GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, TranslationZ, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.01
              TranslationZ=-0.5
              RotationZ=0
              RotationY=0
              RotationX=-90.000206
              ScaleX=1
              ScaleY=1
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
    #1 -> Disable GroupWorkflow DrawRightWall
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=RightWall) => #3
        #0, #3 -> WithLatestFrom
        -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          TranslationZ(Selector=Item2.Translation[2])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, TranslationZ, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.05
              TranslationY=0
              TranslationZ=-1
              RotationZ=0
              RotationY=-90.000206
              RotationX=0
              ScaleX=2
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> Disable GroupWorkflow DrawLeftWall
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=LeftWall) => #3
        #0, #3 -> WithLatestFrom
        -> InputMapping
          Selector=Item1
          TextureName(Selector=Item2.Texture)
          TranslationX(Selector=Item2.Translation[0])
          TranslationY(Selector=Item2.Translation[1])
          TranslationZ(Selector=Item2.Translation[2])
          ScaleX(Selector=Item2.Scale[0])
          ScaleY(Selector=Item2.Scale[1])
          ScaleZ(Selector=Item2.Scale[2])
          RotationX(Selector=Item2.Rotation[0])
          RotationY(Selector=Item2.Rotation[1])
          RotationZ(Selector=Item2.Rotation[2])
          Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
          Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
          Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
        -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationX, TranslationY, TranslationZ, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.05
              TranslationY=0
              TranslationZ=0
              RotationZ=0
              RotationY=90.000206
              RotationX=0
              ScaleX=2
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> Disable GroupWorkflow StaticCorridor
        WorkflowInput Source1 => #0
        Annotation Floor(Text="") => #1
        #0, #1 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-0.1
          TranslationZ=0
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=1
          ScaleY=200
          ScaleZ=0
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        Annotation RightWall(Text="") => #4
        #0, #4 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0.5
          TranslationY=0
          TranslationZ=0
          RotationZ=0
          RotationY=90
          RotationX=0
          ScaleX=200
          ScaleY=0.4
          ScaleZ=1
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane
        Annotation LeftWall(Text="") => #7
        #0, #7 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D)
        -> Disable IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-0.5
          TranslationY=0
          TranslationZ=0
          RotationZ=0
          RotationY=90
          RotationX=0
          ScaleX=200
          ScaleY=0.4
          ScaleZ=1
          Ambient(X=0.8, Y=0.8, Z=0.8)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=Plane

    FloatProperty(Value=100)
    -> BehaviorSubject CorridorLength

Bonsai.Shaders.RenderFrame
-> GroupWorkflow MyCubemapView
    WorkflowInput Source1 => #0
    SubscribeSubject CameraPosition
    -> PropertyMapping(Eye) => #2
    #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=-1.7399987), NearClip=0.01, FarClip=1000, Light(X=0, Y=0, Z=0)) => #3
    -> MemberSelector(Selector=ViewMatrix) => #4
    SubscribeSubject CameraOrientation
    -> PropertyMapping(Angle) => #6
    #4, #6 -> Bonsai.Shaders.RotateY(Order=Append, Angle=0) => #7
    #3, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item2 as ViewMatrix,
        Item1.ProjectionMatrix as ProjectionMatrix,
        Item1.Light as Light
        )
    -> WorkflowOutput
-> PublishSubject Draw
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicShader, TextureName="", TextureTarget=Texture2D)
-> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicShader, MeshName=PanoramicQuad)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))

Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
-> SelectMany
    ExternalizedMapping(Path)
    -> Bonsai.IO.ReadAllText(Path=Protocols\kerem_settings_repeating.yaml)
    -> VRCorridorSchema.DeserializeFromYaml(Type=TypeMapping<VRCorridorSchema.VRCorridorSchema>)
    -> Take(Count=1)
    -> WorkflowOutput
-> MulticastSubject TaskProperties

Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames)
-> MemberSelector(Selector=Image)
-> Bonsai.Dsp.Average
-> MemberSelector(Selector=Val0)

SubscribeSubject GoReward
-> Bonsai.Dsp.FunctionGenerator(BufferLength=4410, Frequency=1000, Waveform=Sine, SampleRate=44100, Amplitude=10000, Offset=0, Phase=0)
-> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers / Headphones (Realtek Audio)", SampleRate=44100, State=Playing)

Disable GroupWorkflow CountLicks
    SubscribeSubject LickActivity => #0
    SubscribeSubject InRewardZone => #1
    #0, #1 -> WithLatestFrom
    -> BitwiseAnd
    -> DistinctUntilChanged
    -> Condition => #5
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject nLicks => #6
    #5, #6 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> Disable Divide(Operand=IntProperty(Value=1))
    -> MulticastSubject nLicks
    -> WorkflowOutput

Disable SubscribeSubject GiveReward
-> Disable Skip(Count=1)
-> Disable GroupWorkflow Reward
    WorkflowInput Source1 => #0
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2))
    -> MulticastSubject BehaviorCommandBoard => #3
    SubscribeSubject RewardSize => #4
    Bonsai.IO.CsvReader
      FileName="C:\Users\TeachingLab\Desktop\Kerem Bonsai workflows\lab-leopoldo-solene-vr\workflows\PCVars\RewardCalibration.csv"
      ListSeparator=""
      ScanPattern="%f,%f"
      SkipRows=1
    -> MemberSelector(Selector=Item1) => #6
    #4, #6 -> WithLatestFrom
    -> Subtract => #8
    Bonsai.IO.CsvReader
      FileName="C:\Users\TeachingLab\Desktop\Kerem Bonsai workflows\lab-leopoldo-solene-vr\workflows\PCVars\RewardCalibration.csv"
      ListSeparator=""
      ScanPattern="%f,%f"
      SkipRows=1
    -> MemberSelector(Selector=Item2) => #10
    #8, #10 -> WithLatestFrom
    -> Divide
    -> Multiply(Operand=FloatProperty(Value=10000))
    -> PropertyMapping(DueTime) => #14
    #3, #14 -> Delay(DueTime=PT0.0327619S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO2))
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital2)
    -> MulticastSubject BehaviorCommandBoard => #18
    -> WorkflowOutput
    SubscribeSubject TotReward => #20
    #18, #20 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #22
    SubscribeSubject RewardSize => #23
    #22, #23 -> WithLatestFrom
    -> Add
    -> MulticastSubject TotReward
    SubscribeSubject HarpTimestamp => #27
    #0, #27 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject RewTimestamp

Disable GroupWorkflow LickResponse
    SubscribeSubject nLicks => #0
    SubscribeSubject minLicks
    -> PropertyMapping(Value) => #2
    #0, #2 -> GreaterThanOrEqual(Operand=FloatProperty(Value=3))
    -> DistinctUntilChanged
    -> MulticastSubject lickResponse
