<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:VRCorridorSchema;assembly=Extensions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:p2="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:p3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>R</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Path" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:ReadAllText">
                      <io:Path>Protocols\kerem_settings_repeating.yaml</io:Path>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:DeserializeFromYaml">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:VRCorridorSchema" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TaskProperties</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RewardDuration (ms)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>500</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RewardDuration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RewardDistance (m)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RewardDistance</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MaxRewardSpeed (m/s)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MaxRewardSpeed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RunningSpeed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TotalDistance</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelEncoder</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardDistance</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>NextRewardPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TeleportToPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>0</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CameraPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CameraOrientation</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitShaders</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Location" />
              <Property Name="WindowState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>320</gl:Width>
                <gl:Height>240</gl:Height>
                <gl:VSync>Off</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location>
                  <gl:X>0</gl:X>
                  <gl:Y>0</gl:Y>
                </gl:Location>
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>First</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:MeshResources">
                <gl:Meshes>
                  <gl:MeshConfiguration xsi:type="gl:TexturedQuad">
                    <gl:Name>PanoramicQuad</gl:Name>
                    <gl:QuadEffects>None</gl:QuadEffects>
                  </gl:MeshConfiguration>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>Cylinder</gl:Name>
                    <gl:FileName>Models\cylinder.obj</gl:FileName>
                  </gl:MeshConfiguration>
                </gl:Meshes>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:ShaderResources">
                <gl:Shaders>
                  <gl:ShaderConfiguration xsi:type="gl:Material">
                    <gl:Name>PanoramicShader</gl:Name>
                    <gl:RenderState />
                    <gl:ShaderUniforms />
                    <gl:BufferBindings />
                    <gl:FramebufferAttachments />
                    <gl:VertexShader>Shaders\panoramic.vert</gl:VertexShader>
                    <gl:FragmentShader>Shaders\panoramic.frag</gl:FragmentShader>
                  </gl:ShaderConfiguration>
                  <gl:ShaderConfiguration xsi:type="gl:Material">
                    <gl:Name>PlainColorShader</gl:Name>
                    <gl:RenderState />
                    <gl:ShaderUniforms />
                    <gl:BufferBindings />
                    <gl:FramebufferAttachments />
                    <gl:VertexShader>Shaders\plain_color.vert</gl:VertexShader>
                    <gl:FragmentShader>Shaders\plain_color.frag</gl:FragmentShader>
                  </gl:ShaderConfiguration>
                </gl:Shaders>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>BackWall</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Textures\calibration_back.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>Floor</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Textures\floor\checkerboard2.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>FrontWall</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Textures\calibration_front.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>LeftWall</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Textures\calibration_left.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>RightWall</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Textures\calibration_right.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>BG_0.04_0.32_100</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Textures\background\BG_0.04_0.32_100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>Rocks</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Textures\floor\rocks.jpg</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MouseWheelNavigation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:MouseWheel" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.01</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-0.01</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TeleportToPosition</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraPosition</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Z</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DistanceAdded</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraOrientation</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (
Item1 * Math.Sin(Item2) as X,
0.0 as Y,
Item1 * Math.Cos(Item2) as Z
)</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="X" />
                <Property Name="Y" Selector="Y" />
                <Property Name="Z" Selector="Z" />
              </PropertyMappings>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>0.01</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it.X as X,
it.Y as Y,
it.Z % 10.0 as Z
)</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="X" />
                <Property Name="Y" Selector="Y" />
                <Property Name="Z" Selector="Z" />
              </PropertyMappings>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>0.06999998</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraPosition</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalDistance</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="MulticastSubject">
              <Name>RunningSpeed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DistanceAdded</Name>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="MulticastSubject">
              <Name>TotalDistance</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="11" Label="Source2" />
            <Edge From="5" To="11" Label="Source3" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source4" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="25" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="26" To="28" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>ManualNavigation</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>HarpWheelNavigation</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Dynamic 3D Scene</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Dynamic 3D Scene Modified</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DrawArena</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>TaskProperties</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="ExternalizedMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:SelectMany">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskProperties</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Selector" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Arena</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Repetitions" Selector="Item2.Repetitions" />
                    </PropertyMappings>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Count" DisplayName="Repetitions" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Range">
                            <rx:Start>0</rx:Start>
                            <rx:Count>2</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Draw</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="TextureName" Selector="Item2.Item2.Texture" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:BindTexture">
                                  <gl:TextureSlot>Texture0</gl:TextureSlot>
                                  <gl:ShaderName>TexturedModel</gl:ShaderName>
                                  <gl:TextureName>Rocks</gl:TextureName>
                                  <gl:TextureTarget>Texture2D</gl:TextureTarget>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="TranslationX" Selector="Item2.Item2.Translation[0]" />
                                  <Property Name="TranslationY" Selector="Item2.Item2.Translation[1]" />
                                  <Property Name="RotationZ" Selector="Item2.Item2.Rotation[2]" />
                                  <Property Name="RotationY" Selector="Item2.Item2.Rotation[1]" />
                                  <Property Name="RotationX" Selector="Item2.Item2.Rotation[0]" />
                                  <Property Name="ScaleX" Selector="Item2.Item2.Scale[0]" />
                                  <Property Name="ScaleY" Selector="Item2.Item2.Scale[1]" />
                                  <Property Name="ScaleZ" Selector="Item2.Item2.Scale[2]" />
                                  <Property Name="Ambient" Selector="Item2.Item2.AmbientColor[0], Item2.Item2.AmbientColor[1], Item2.Item2.AmbientColor[2]" />
                                  <Property Name="Diffuse" Selector="Item2.Item2.DiffuseColor[0], Item2.Item2.DiffuseColor[1], Item2.Item2.DiffuseColor[2]" />
                                  <Property Name="Specular" Selector="Item2.Item2.SpecularColor[0], Item2.Item2.SpecularColor[1], Item2.Item2.SpecularColor[2]" />
                                  <Property Name="MeshName" Selector="Item2.Item2.MeshType" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
                                <TranslationX>0.049</TranslationX>
                                <TranslationY>-0.04</TranslationY>
                                <TranslationZ>0</TranslationZ>
                                <RotationZ>0</RotationZ>
                                <RotationY>0</RotationY>
                                <RotationX>-89.95438</RotationX>
                                <ScaleX>0.63</ScaleX>
                                <ScaleY>0.63</ScaleY>
                                <ScaleZ>0.1</ScaleZ>
                                <Ambient>
                                  <X>1</X>
                                  <Y>1</Y>
                                  <Z>1</Z>
                                </Ambient>
                                <Diffuse>
                                  <X>1</X>
                                  <Y>1</Y>
                                  <Z>1</Z>
                                </Diffuse>
                                <Specular>
                                  <X>0</X>
                                  <Y>0</Y>
                                  <Z>0</Z>
                                </Specular>
                                <SpecularExponent>10</SpecularExponent>
                                <MeshName>Plane</MeshName>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="3" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="1" To="4" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="5" Label="Source1" />
                              <Edge From="4" To="5" Label="Source2" />
                            </Edges>
                          </Workflow>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>TaskProperties</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="ExternalizedMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:SelectMany">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>TaskProperties</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="ExternalizedMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:SelectMany">
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                    </Builder>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="9" To="14" Label="Source1" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="22" Label="Source1" />
                  <Edge From="18" To="20" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="26" To="28" Label="Source1" />
                  <Edge From="27" To="28" Label="Source2" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>DrawLandmarks</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>DrawRewards</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraPosition</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Z</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalDistance</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TimeInterval" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Interval.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Static 3D Scene</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Logging</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>HarpDevice</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RewardDetection</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalDistance</Name>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NextRewardPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item2-Item1</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="BitwiseAnd" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RewardPositionReached</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RunningSpeed</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MaxRewardSpeed</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="LessThan" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>GoReward</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardDistance</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalDistance</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>NextRewardPosition</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardPositionReached</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalDistance</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardDistance</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>NextRewardPosition</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="6" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="24" Label="Source1" />
            <Edge From="19" To="21" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MyCubemapView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraPosition</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Eye" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
              <Eye>
                <X>0</X>
                <Y>0</Y>
                <Z>0.06999998</Z>
              </Eye>
              <NearClip>0.01</NearClip>
              <FarClip>20</FarClip>
              <Light>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Light>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ViewMatrix</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraOrientation</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RotateY">
                <gl:Order>Append</gl:Order>
                <gl:Angle>0</gl:Angle>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (
Item2 as ViewMatrix,
Item1.ProjectionMatrix as ProjectionMatrix,
Item1.Light as Light
)
</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderCubemap">
          <gl:RenderState />
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:FaceSize xsi:nil="true" />
          <gl:InternalFormat>Rgb</gl:InternalFormat>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>PanoramicShader</gl:ShaderName>
          <gl:TextureName />
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawMesh">
          <gl:ShaderName>PanoramicShader</gl:ShaderName>
          <gl:MeshName>PanoramicQuad</gl:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>100</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>MainRoom</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>GoReward</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>4410</dsp:BufferLength>
          <dsp:Frequency>1000</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Amplitude>10000</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioPlayback">
          <al:DeviceName>Generic Software on Speakers / Headphones (Realtek Audio)</al:DeviceName>
          <al:SampleRate>44100</al:SampleRate>
          <al:State>Playing</al:State>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>CountLicks</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>LickResponse</Name>
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>