<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.SniffDetector;assembly=AllenNeuralDynamics.SniffDetector"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>cameras</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>1</p1:Index>
                <p1:ColorProcessing>Default</p1:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>videoTop.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>60</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedTimeStamp</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedFrameCounter</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (
  Item2 as HarpTimestamp,
  Item1.Item1 as CameraTimestamp,
  Item1.Item2 as FrameCounter
)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>cameraTop_framecount.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>0</p1:Index>
                <p1:ColorProcessing>Default</p1:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>videoFront.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>60</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedTimeStamp</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedFrameCounter</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (
  Item2 as HarpTimestamp,
  Item1.Item1 as CameraTimestamp,
  Item1.Item2 as FrameCounter
)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>cameraFront_framecount.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="12" To="16" Label="Source1" />
            <Edge From="12" To="22" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="17" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>harpbehavior</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>HarpCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HarpEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>cameraTimestamp.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedCamera1Frame" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>cameraFront.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedAnalogData" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateCamera0FrequencyPayload">
                <beh:Camera0Frequency>60</beh:Camera0Frequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateCamera1FrequencyPayload">
                <beh:Camera1Frequency>60</beh:Camera1Frequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>S</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                <beh:StartCameras>CameraOutput0</beh:StartCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                <beh:StartCameras>CameraOutput1</beh:StartCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Space</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
                <beh:StopCameras>CameraOutput0</beh:StopCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="18" Label="Source1" />
            <Edge From="12" To="18" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="18" Label="Source3" />
            <Edge From="15" To="18" Label="Source4" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source5" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>videos</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="p1:FlyCapture">
                    <p1:Index>0</p1:Index>
                    <p1:ColorProcessing>Default</p1:ColorProcessing>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="MemberSelector">
                  <Selector>Image</Selector>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="rx:BehaviorSubject">
                  <Name>FrontCam Frames</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:TimeInterval" />
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="MemberSelector">
                  <Selector>Interval.TotalMilliseconds</Selector>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="MemberSelector">
                  <Selector>Metadata</Selector>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="io:CsvWriter">
                  <io:FileName>frontcamerameta.csv</io:FileName>
                  <io:Append>false</io:Append>
                  <io:Overwrite>false</io:Overwrite>
                  <io:Suffix>None</io:Suffix>
                  <io:IncludeHeader>false</io:IncludeHeader>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="p1:FlyCapture">
                    <p1:Index>1</p1:Index>
                    <p1:ColorProcessing>Default</p1:ColorProcessing>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="MemberSelector">
                  <Selector>Image</Selector>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="rx:BehaviorSubject">
                  <Name>TopCam Frames</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:TimeInterval" />
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="MemberSelector">
                  <Selector>Interval.TotalMilliseconds</Selector>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="MemberSelector">
                  <Selector>Metadata</Selector>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="io:CsvWriter">
                  <io:FileName>topcamerameta.csv</io:FileName>
                  <io:Append>false</io:Append>
                  <io:Overwrite>false</io:Overwrite>
                  <io:Suffix>None</io:Suffix>
                  <io:IncludeHeader>false</io:IncludeHeader>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="SubscribeSubject">
                  <Name>FrontCam Frames</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="cv:ImageWriter">
                    <cv:Path>\\.\pipe\video_front</cv:Path>
                    <cv:Suffix>None</cv:Suffix>
                    <cv:Overwrite>true</cv:Overwrite>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:ElementIndex" />
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="MemberSelector">
                  <Selector>Index</Selector>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="SubscribeSubject">
                  <Name>StopSession</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:SkipUntil" />
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:Take">
                    <rx:Count>1</rx:Count>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="SubscribeSubject">
                  <Name>TopCam Frames</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="cv:ImageWriter">
                    <cv:Path>\\.\pipe\video_top</cv:Path>
                    <cv:Suffix>None</cv:Suffix>
                    <cv:Overwrite>true</cv:Overwrite>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:ElementIndex" />
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="MemberSelector">
                  <Selector>Index</Selector>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="SubscribeSubject">
                  <Name>StopSession</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:SkipUntil" />
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:Take">
                    <rx:Count>1</rx:Count>
                  </Combinator>
                </Builder>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="0" To="5" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="7" To="12" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="14" To="15" Label="Source1" />
              <Edge From="15" To="16" Label="Source1" />
              <Edge From="16" To="17" Label="Source1" />
              <Edge From="17" To="19" Label="Source1" />
              <Edge From="18" To="19" Label="Source2" />
              <Edge From="19" To="20" Label="Source1" />
              <Edge From="21" To="22" Label="Source1" />
              <Edge From="22" To="23" Label="Source1" />
              <Edge From="23" To="24" Label="Source1" />
              <Edge From="24" To="26" Label="Source1" />
              <Edge From="25" To="26" Label="Source2" />
              <Edge From="26" To="27" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>sniff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>SniffCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM4</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SniffEvents</Name>
            </Expression>
            <Expression xsi:type="p2:Parse">
              <harp:Register xsi:type="p2:TimestampedRawVoltage" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>thermistor.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="p2:Parse">
              <harp:Register xsi:type="p2:RawVoltage" />
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateRawVoltageDispatchRatePayload">
                <p2:RawVoltageDispatchRate>725</p2:RawVoltageDispatchRate>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SniffEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SniffCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>