WorkflowBuilder(Version=2.8.2)
GroupWorkflow Initialize
    IntProperty(Value=0)
    -> BehaviorSubject FileFinished
    -> WorkflowOutput

ExternalizedMapping(Value(DisplayName=InputPath))
-> PropertySource<Bonsai.IO.GetDirectories,System.String>(MemberName=Path, Value=C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data)
-> PropertyMapping(Path)
-> Bonsai.IO.GetFiles(Path=C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\BonFly3MPTracker\data, SearchPattern=*.avi, SearchOption=AllDirectories)
-> GroupWorkflow "Get Number of Files"
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Length)
    -> BehaviorSubject NumberOfFiles => #2
    #0, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> WorkflowOutput
-> Concat
-> SelectMany BonflyPaths
    WorkflowInput Source1 => #0
    -> Bonsai.Scripting.IronPython.PythonTransform GetDirectory
      Script:
        from System.IO import Path

        @returns(str)
        def process(value):
          output = Path.GetDirectoryName(value)
          return output
    -> Take(Count=1)
    -> AsyncSubject ThisPath
    #0 -> AsyncSubject VideoPath
    #0 -> Bonsai.Scripting.Expressions.ExpressionTransform Avi2Csv
      Expression: it.Replace(".avi", ".csv")
    -> AsyncSubject CsvPath

    SubscribeSubject ThisPath
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Replace("RawData", "PostProcessing")
    -> Bonsai.Scripting.IronPython.PythonTransform GetDirectory
      Script:
        from System.IO import Path

        @returns(str)
        def process(value):
          output = Path.GetDirectoryName(value)
          return output
    -> Take(Count=1)
    -> AsyncSubject PostProcessingPath

    SubscribeSubject ThisPath => #12
    SubscribeSubject PostProcessingPath => #13
    SubscribeSubject VideoPath => #14
    SubscribeSubject CsvPath => #15
    SubscribeSubject VideoPath
    -> Bonsai.IO.GetFileNameWithoutExtension => #17
    #12, #13, #14, #15, #17 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
      Expression:
        new(
        Item1 as RawDataPath,
        Item2 as PostProcessingPath,
        Item3 as VideoPath,
        Item4 as StimCsvPath,
        Item5 as FileName)
    -> Take(Count=1)
    -> WorkflowOutput
-> InputMapping => #8
ExternalizedMapping(EnableSleap, SaveVideo) => #9
#8, #9 -> CreateObservable OfflineAnalysis
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject ThisSessionPaths

    SubscribeSubject ThisSessionPaths
    -> MemberSelector(Selector=VideoPath)
    -> PropertyMapping(InputVideoPath) => #5
    SubscribeSubject ThisSessionPaths
    -> MemberSelector(Selector=StimCsvPath)
    -> PropertyMapping(InputStimCsvPath) => #8
    ExternalizedMapping(EnableSleap, SaveVideo) => #9
    #5, #8, #9 -> GroupWorkflow Settings
        ExternalizedMapping(Value(DisplayName=ScalingFactor))
        -> FloatProperty(Value=1)
        -> Take(Count=1)
        -> AsyncSubject ScalingFactor

        ExternalizedMapping(Value(DisplayName=CenteredCropSize))
        -> PropertySource<Bonsai.Vision.Resize,OpenCV.Net.Size>(MemberName=Size, Value(Width=128, Height=128))
        -> Take(Count=1)
        -> AsyncSubject FlyCenteredCropSize

        ExternalizedMapping(Value(DisplayName=InputVideoPath))
        -> PropertySource<Bonsai.Vision.FileCapture,System.String>
          MemberName=FileName
          Value: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\RawData\FH3\CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57.avi
        -> Take(Count=1)
        -> AsyncSubject InputVideoPath

        ExternalizedMapping(Value(DisplayName=InputStimCsvPath))
        -> PropertySource<Bonsai.Vision.FileCapture,System.String>
          MemberName=FileName
          Value: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\RawData\FH3\CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57.csv
        -> Take(Count=1)
        -> AsyncSubject InputStimCsvPath

        ExternalizedMapping(Value(DisplayName=SaveVideo))
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> AsyncSubject SaveVideo

        ExternalizedMapping(Value(DisplayName=ArenaThreshold))
        -> IntProperty(Value=70)
        -> Take(Count=1)
        -> AsyncSubject ArenaThreshold

        ExternalizedMapping(Value(DisplayName=ModelFileName))
        -> PropertySource<Bonsai.Sleap.PredictSinglePose,System.String>(MemberName=ModelFileName, Value=Extensions\wBackground.frozen_graph.pb) => #25
        ExternalizedMapping(Value(DisplayName=TrainingConfig))
        -> PropertySource<Bonsai.Sleap.PredictSinglePose,System.String>(MemberName=TrainingConfig, Value=Extensions\wBackground.training_config.json) => #27
        PropertySource<Bonsai.Sleap.PredictSinglePose,System.Nullable(OpenCV.Net.ColorConversion)>(MemberName=ColorConversion, Value=nil) => #28
        PropertySource<Bonsai.Sleap.PredictSinglePose,System.Nullable(System.Single)>(MemberName=ScaleFactor, Value=nil) => #29
        PropertySource<Bonsai.Sleap.PredictSinglePose,System.Nullable(System.Single)>(MemberName=PartMinConfidence, Value=nil) => #30
        ExternalizedMapping(Value(DisplayName=EnableSleap))
        -> BooleanProperty(Value=true) => #32
        #25, #27, #28, #29, #30, #32 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as ModelFileName,
            Item2 as TrainingConfig,
            Item3 as ColorConversion,
            Item4 as ScaleFactor,
            Item5 as PartMinConfience,
            Item6 as EnableSleap)
        -> Take(Count=1)
        -> AsyncSubject SleapModelConfiguration

    GroupWorkflow DataLoader
        SubscribeSubject InputStimCsvPath
        -> PropertyMapping(FileName) => #1
        SubscribeSubject InputVideoPath
        -> PropertyMapping(FileName)
        -> Bonsai.Vision.FileCapture => #4
          FileName: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\RawData\FH3\CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57.avi
          PlaybackRate=99999999
          StartPosition=0
          PositionUnits=Frames
          Loop=false
          Playing=true
        #1, #4 -> Bonsai.IO.CsvReader
          FileName: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\RawData\FH3\CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57.csv
          ScanPattern=%i
          SkipRows=1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from System import Tuple
            @returns(Tuple[int, int, int])
            def process(value):
              if value == 0:
                return Tuple.Create(1,0,0)
              if value == 4:
                return Tuple.Create(0,0,0)
              if value == 1:
                return Tuple.Create(1,1,0)
              if value == 8:
                return Tuple.Create(1,0,1)
              if value == 5:
                return Tuple.Create(0,1,0)
              if value == 9:
                return Tuple.Create(1,1,1)
              if value == 12:
                return Tuple.Create(0,0,1)
              if value == 13:
                return Tuple.Create(0,1,1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #7
          Expression:
            new(
            Item1 as Visual,
            Item2 as Stim0,
            Item3 as Stim1
            )
        #4 -> Bonsai.Vision.Grayscale => #8
        #4 -> ElementIndex
        -> MemberSelector(Selector=Index) => #10
        #7, #8, #10 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression:
            new(
            Item1 as Stimuli,
            Item2 as Video,
            Item3 as FrameCount_Video
            )
        -> PublishSubject Video&Stimuli
        -> DelaySubscription(DueTime=PT7S) => #14
        SubscribeSubject ArenaFeeds
        -> Take(Count=1) => #16
        #14, #16 -> SubscribeWhen
        #4 -> TimeInterval
        -> MemberSelector(Selector=Interval.TotalMilliseconds)
        -> Bonsai.Dsp.Buffer(Count=10, Skip=10)
        -> Bonsai.Dsp.Average
        #4 -> Last
        -> IntProperty(Value=0)
        -> MulticastSubject FileFinished

        Defer Background
            SubscribeSubject InputVideoPath
            -> PropertyMapping(FileName) => #1
            ExternalizedMapping(NumberBackgroundFrames, PixelSearch, NoiseThreshold) => #2
            #1, #2 -> Defer CalculateBackground
                ExternalizedMapping(Value(DisplayName=NumberBackgroundFrames))
                -> IntProperty(Value=5000)
                -> Take(Count=1)
                -> AsyncSubject NumberBackgroundFrames

                ExternalizedMapping(Value(DisplayName=FileName))
                -> StringProperty
                  Value: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\RawData\FH3\CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57.avi
                -> Take(Count=1)
                -> AsyncSubject FileName

                SubscribeSubject FileName
                -> PropertyMapping(FileName)
                -> Bonsai.Vision.FileCapture
                  FileName: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\RawData\FH3\CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57.avi
                  PlaybackRate=99999999
                  StartPosition=0
                  PositionUnits=Frames
                  Loop=false
                  Playing=true
                -> Bonsai.Vision.Grayscale => #11
                ExternalizedMapping(PixelSearch, NoiseThreshold) => #12
                #11, #12 -> BonZeb.CalculateBackground(PixelSearch=Brightest, NoiseThreshold=0) => #13
                SubscribeSubject NumberBackgroundFrames
                -> PropertyMapping(Count) => #15
                #13, #15 -> Take(Count=5000)
                -> TakeLast(Count=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject BackgroundImage
        -> SelectMany FindArenas
            WorkflowInput Source1
            -> Disable Bonsai.Vision.EqualizeHistogram => #1
            ExternalizedMapping(ThresholdValue, ThresholdType) => #2
            #1, #2 -> Bonsai.Vision.Threshold(ThresholdValue=93, MaxValue=255, ThresholdType=Binary)
            -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=290000, MaxArea=380000)
            -> Bonsai.Vision.BinaryRegionAnalysis
            -> OrderBy(KeySelector="Centroid.X,Centroid.Y")
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject ArenaROIs
        -> SelectMany CropBackgrounds
            SubscribeSubject ArenaROIs
            -> Take(Count=1)
            -> Merge
            -> CreateObservable CropBackgroundArenas
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ArenaDetection

                SubscribeSubject ArenaDetection
                -> MemberSelector(Selector=Contour)
                -> MemberSelector(Selector=Rect) => #5
                -> MemberSelector(Selector=X)
                -> Add(Operand=IntProperty(Value=-1)) => #7
                #5 -> MemberSelector(Selector=Y)
                -> Add(Operand=IntProperty(Value=-1)) => #9
                #5 -> MemberSelector(Selector=Width)
                -> Add(Operand=IntProperty(Value=2)) => #11
                #5 -> MemberSelector(Selector=Height)
                -> Add(Operand=IntProperty(Value=2)) => #13
                #7, #9, #11, #13 -> Zip
                -> AsyncSubject ROIEroded

                SubscribeSubject BackgroundImage => #16
                SubscribeSubject ROIEroded
                -> PropertyMapping(RegionOfInterest(Selector="Item1,Item2,Item3,Item4")) => #18
                #16, #18 -> Bonsai.Vision.Crop(RegionOfInterest(X=834, Y=26, Width=682, Height=688))
                -> WorkflowOutput
            -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject CroppedBackground
        -> SelectMany CreateArenaFeeds
            SubscribeSubject ArenaROIs
            -> Take(Count=1) => #1
            SubscribeSubject InputVideoPath
            -> PropertyMapping(FileName) => #3
            #1, #3 -> SelectMany TrackArenas
                ExternalizedMapping(Value(DisplayName=FileName))
                -> StringProperty
                  Value: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\RawData\FH3\CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57.avi
                -> Take(Count=1)
                -> AsyncSubject FileName

                SubscribeSubject CroppedBackground
                -> Merge => #5
                WorkflowInput Source1
                -> Merge => #7
                #5, #7 -> Zip
                -> CreateObservable CropCenter
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject This

                    SubscribeSubject This
                    -> MemberSelector(Selector=Item1)
                    -> Take(Count=1)
                    -> AsyncSubject ThisCropBackground

                    SubscribeSubject This
                    -> MemberSelector(Selector=Item2)
                    -> MemberSelector(Selector=Contour)
                    -> MemberSelector(Selector=Rect) => #10
                    -> MemberSelector(Selector=X)
                    -> Add(Operand=IntProperty(Value=-1)) => #12
                    #10 -> MemberSelector(Selector=Y)
                    -> Add(Operand=IntProperty(Value=-1)) => #14
                    #10 -> MemberSelector(Selector=Width)
                    -> Add(Operand=IntProperty(Value=2)) => #16
                    #10 -> MemberSelector(Selector=Height)
                    -> Add(Operand=IntProperty(Value=2)) => #18
                    #12, #14, #16, #18 -> Zip
                    -> AsyncSubject ROIEroded

                    SubscribeSubject Video&Stimuli => #21
                    -> MemberSelector(Selector=Video) => #22
                    SubscribeSubject ROIEroded => #23
                    #22, #23 -> WithLatestFrom
                    -> InputMapping(Selector=Item1, RegionOfInterest(Selector="Item2.Item1,Item2.Item2,Item2.Item3,Item2.Item4"))
                    -> Bonsai.Vision.Crop(RegionOfInterest(X=834, Y=26, Width=682, Height=688)) => #26
                    SubscribeSubject ThisCropBackground => #27
                    #26, #27 -> WithLatestFrom
                    -> Bonsai.Dsp.AbsoluteDifference => #29
                    SubscribeSubject ThisCropBackground => #30
                    #26, #30 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #32
                    #21 -> MemberSelector(Selector=Stimuli) => #33
                    GroupWorkflow ArenaMask => #34
                        SubscribeSubject BackgroundImage => #0
                        SubscribeSubject This => #1
                        #0, #1 -> WithLatestFrom
                        -> InputMapping(Selector=Item1, RegionOfInterest(Selector=Item2.Item2.Contour.Rect))
                        -> Bonsai.Vision.Crop(RegionOfInterest(X=835, Y=27, Width=680, Height=686)) => #4
                        SubscribeSubject This
                        -> MemberSelector(Selector=Item2)
                        -> MemberSelector(Selector=Contour)
                        -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1) => #8
                        #4, #8 -> WithLatestFrom
                        -> BitwiseAnd => #10
                        SubscribeSubject ROIEroded
                        -> PropertyMapping(Size(Selector="Item3,Item4")) => #12
                        #10, #12 -> Bonsai.Vision.ResizeCanvas(Size(Width=682, Height=688), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0), Offset(X=3, Y=3))
                        -> WorkflowOutput
                    #26, #34 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #36
                    #26, #29, #32, #33, #36 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1 as RawFrame,
                        Item2 as BackgroundSubtractedFrame,
                        Item3 as RawBackground,
                        Item4 as Stimuli,
                        Item5 as MaskedArena)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> ToList
            -> WorkflowOutput
        -> AsyncSubject ArenaFeeds

    GroupWorkflow AnalysisPipeline
        SubscribeSubject ArenaFeeds
        -> Take(Count=1)
        -> Merge
        -> ElementIndex
        -> CreateObservable ProcessSingleArenaFrames
            WorkflowInput Source1
            -> ReplaySubject Data(BufferSize=nil)

            SubscribeSubject Data
            -> MemberSelector(Selector=Index)
            -> Take(Count=1)
            -> AsyncSubject ArenaIndex

            SubscribeSubject Data
            -> MemberSelector(Selector=Value)
            -> Merge
            -> PublishSubject ArenaVideoStream

            GroupWorkflow CentroidTracking
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=BackgroundSubtractedFrame) => #1
                -> Bonsai.Vision.Threshold(ThresholdValue=76, MaxValue=255, ThresholdType=Binary)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> MemberSelector(Selector=Centroid) => #6
                #1 -> Bonsai.Vision.Threshold(ThresholdValue=21, MaxValue=255, ThresholdType=Binary)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> MemberSelector(Selector=Centroid) => #11
                #6, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                  Expression:
                    new(
                    Item1 as SoftCentroid,
                    Item2 as HardCentroid)
                -> Bonsai.Scripting.Expressions.ExpressionTransform PickBestCentroid
                  Expression: it.SoftCentroid.X > 0 ? it.SoftCentroid : it.HardCentroid
                -> PublishSubject BestCentroid => #15
                SubscribeSubject BestCentroid => #16
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=RawFrame.RegionOfInterest) => #18
                #16, #18 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1.X / Item2.Width as X,
                    Item1.Y / Item2.Height as Y
                    )
                -> InputMapping(Selector="X,Y", X(Selector=X), Y(Selector=Y))
                -> Bonsai.Vision.CreatePoint2f(X=0.6609695, Y=0.9361556)
                -> PublishSubject NormalizedBestCentroid => #23
                #15, #23 -> Zip
                -> WorkflowOutput

            GroupWorkflow PixelChange
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=BackgroundSubtractedFrame)
                -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=10, ThresholdType=Binary, SubtractionMethod=Dark)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1)
                -> Bonsai.Dsp.CountNonZero
                -> PublishSubject PixelChange
                -> WorkflowOutput

            GroupWorkflow Logging
                GroupWorkflow SaveArena
                    SubscribeSubject ArenaVideoStream
                    -> MemberSelector(Selector=MaskedArena) => #1
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\Arenas)) => #4
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=FileName) => #6
                    SubscribeSubject ArenaIndex => #7
                    #4, #6, #7 -> Zip
                    -> Format(Format={0}/{1}_fly{2}.png, Selector="Item1,Item2,Item3") => #9
                    #1, #9 -> WithLatestFrom
                    -> InputMapping(Selector=Item1, FileName(Selector=Item2))
                    -> Bonsai.Vision.SaveImage
                      FileName: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\PostProcessing\Arenas/CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57_fly3.png
                      Suffix=None
                    -> Take(Count=1)
                    -> WorkflowOutput

                GroupWorkflow Track
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\Tracked)) => #2
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=FileName) => #4
                    SubscribeSubject ArenaIndex => #5
                    #2, #4, #5 -> Zip
                    -> Format(Format={0}/{1}_fly{2}_tracked.csv, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #8
                    SubscribeSubject Video&Stimuli
                    -> MemberSelector(Selector=FrameCount_Video) => #10
                    SubscribeSubject ArenaVideoStream
                    -> MemberSelector(Selector="Stimuli.Visual,Stimuli.Stim0,Stimuli.Stim1") => #12
                    SubscribeSubject NormalizedBestCentroid => #13
                    SubscribeSubject PixelChange => #14
                    #10, #12, #13, #14 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #16
                      Expression:
                        new(
                        Item1 as FrameIndex,
                        Item2.Item1 as VisualStim,
                        Item2.Item2 as Stim0,
                        Item2.Item3 as Stim1,
                        Item3.X as NormalizedCentroidX,
                        Item3.Y as NormalizedCentroidY,
                        Item4 as PixelChange
                        )
                    #8, #16 -> Bonsai.IO.CsvWriter
                      FileName: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\PostProcessing\Tracked/CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57_fly3_tracked.csv
                      Append=false
                      Overwrite=false
                      Suffix=None
                      IncludeHeader=true
                    -> WorkflowOutput

                GroupWorkflow CropRaw
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\CropRaw)) => #2
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=FileName) => #4
                    SubscribeSubject ArenaIndex => #5
                    #2, #4, #5 -> Zip
                    -> Format(Format={0}/{1}_fly{2}_crop.avi, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #8
                    SubscribeSubject CenteredVideo => #9
                    #8, #9 -> Bonsai.Vision.VideoWriter
                      FileName: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\PostProcessing\CropRaw/CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57_fly3_crop.avi
                      Suffix=None
                      Buffered=true
                      Overwrite=false
                      FourCC=FMP4
                      FrameRate=60
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput

                GroupWorkflow CropSubtract
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\CropSubtract)) => #2
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=FileName) => #4
                    SubscribeSubject ArenaIndex => #5
                    #2, #4, #5 -> Zip
                    -> Format(Format={0}/{1}_fly{2}_cropsub.avi, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #8
                    SubscribeSubject CenteredVideoBackSub => #9
                    #8, #9 -> Bonsai.Vision.VideoWriter
                      FileName: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\PostProcessing\CropSubtract/CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57_fly3_cropsub.avi
                      Suffix=None
                      Buffered=true
                      Overwrite=false
                      FourCC=FMP4
                      FrameRate=60
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput

                GroupWorkflow Pose => #4
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\Pose)) => #2
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=FileName) => #4
                    SubscribeSubject ArenaIndex => #5
                    #2, #4, #5 -> Zip
                    -> Format(Format={0}/{1}_fly{2}_pose.csv, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #8
                    GroupWorkflow SleapOutput => #9
                        SubscribeSubject Video&Stimuli
                        -> MemberSelector(Selector=FrameCount_Video) => #1
                        SubscribeSubject NormalizedBodyParts => #2
                        #1, #2 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform Header
                          Expression:
                            new(
                            Item1 as FrameIndex,
                            Item2.ViewPoints.Left as Left,
                            Item2.ViewPoints.Right as Right,
                            Item2.ViewPoints.Top as Top,
                            Item2.BodyPoints.Head as Head,
                            Item2.BodyPoints.Thorax as Thorax,
                            Item2.BodyPoints.Abdomen as Abdomen,
                            Item2.BodyPoints.LeftWing as LeftWing,
                            Item2.BodyPoints.RightWing as RightWing
                            )
                        -> WorkflowOutput
                    #8, #9 -> Bonsai.IO.CsvWriter
                      FileName: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\PostProcessing\Pose/CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57_fly3_pose.csv
                      Append=false
                      Overwrite=false
                      Suffix=None
                      IncludeHeader=true
                    -> WorkflowOutput
                SubscribeSubject SleapModelConfiguration
                -> MemberSelector(Selector=EnableSleap)
                -> Condition => #7
                    WorkflowInput Source1
                    -> NotEqual(Operand=BooleanProperty(Value=false))
                    -> WorkflowOutput
                #4, #7 -> SubscribeWhen

                GroupWorkflow StimVideo => #9
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=PostProcessingPath)
                    -> Add(Operand=StringProperty(Value=\StimVideos)) => #2
                    SubscribeSubject ThisSessionPaths
                    -> MemberSelector(Selector=FileName) => #4
                    SubscribeSubject ArenaIndex => #5
                    #2, #4, #5 -> Zip
                    -> Format(Format={0}/{1}_fly{2}.avi, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #8
                    SubscribeSubject ArenaVideoStream => #9
                    -> MemberSelector(Selector=BackgroundSubtractedFrame) => #10
                    #9 -> MemberSelector(Selector=MaskedArena) => #11
                    #10, #11 -> Zip
                    -> Bonsai.Dsp.AbsoluteDifference => #13
                    SubscribeSubject ArenaVideoStream
                    -> MemberSelector(Selector="Stimuli.Visual,Stimuli.Stim0,Stimuli.Stim1") => #15
                    #13, #15 -> Zip
                    -> Bonsai.Scripting.IronPython.PythonTransform PaintEvent
                      Script:
                        import clr
                        clr.AddReference("OpenCV.Net")
                        from OpenCV.Net import *
                        from math import sin, cos, pi

                        font = None
                        def load():
                          global font
                          font = Font(1,1)

                        @returns(IplImage)
                        def process(value):
                          output =  value.Item1.Clone()
                          image = value.Item1.Clone()
                          output = IplImage(image.Size, image.Depth, 3)
                          CV.CvtColor(image,output,ColorConversion.Gray2Bgr)

                          visualState = value.Item2.Item1
                          stim0State = value.Item2.Item2
                          stim1State = value.Item2.Item3

                          if visualState == 1:
                            CV.Circle(output, Point(25, 25), 15, Scalar.Rgb(255, 255, 255), -1)
                          else:
                            CV.Circle(output, Point(25, 25), 15, Scalar.Rgb(32, 32, 32), -1)

                          CV.PutText(output,'0',Point(43,24),font,Scalar.All(255))
                          CV.PutText(output,'1',Point(43,38),font,Scalar.All(255))

                          if stim0State == 1:
                            CV.Circle(output, Point(60, 18), 5, Scalar.Rgb(255, 255, 255), -1)
                          else:
                            CV.Circle(output, Point(60, 18), 5, Scalar.Rgb(32, 32, 32), -1)

                          if stim1State == 1:
                            CV.Circle(output, Point(60, 33), 5, Scalar.Rgb(255, 255, 255), -1)
                          else:
                            CV.Circle(output, Point(60, 33), 5, Scalar.Rgb(32, 32, 32), -1)



                          return output
                    -> Bonsai.Vision.Grayscale
                    -> Bonsai.Vision.Resize(Size(Width=704, Height=704), Interpolation=Linear) => #19
                    #8, #19 -> Bonsai.Vision.VideoWriter
                      FileName: C:\Users\HugoMarques\Documents\Code\MyReps\cf.labs\Marta\3MPTracker\data\PostProcessing\StimVideos/CR-EmptyTNT-20Control_3BlackOut-Female-4-5days-FH3-CamA-2024-07-19T11_34_57_fly3.avi
                      Suffix=None
                      Buffered=true
                      Overwrite=false
                      FourCC=FMP4
                      FrameRate=60
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput
                SubscribeSubject SaveVideo
                -> Condition => #11
                    WorkflowInput Source1
                    -> Equal(Operand=BooleanProperty(Value=true))
                    -> WorkflowOutput
                #9, #11 -> SubscribeWhen

            GroupWorkflow SleapTracking => #13
                SubscribeSubject CenteredVideo => #0
                SubscribeSubject SleapModelConfiguration
                -> PropertyMapping => #2
                  ModelFileName(Selector=ModelFileName)
                  TrainingConfig(Selector=TrainingConfig)
                  PartMinConfidence(Selector=PartMinConfience)
                  ScaleFactor(Selector=ScaleFactor)
                  ColorConversion(Selector=ColorConversion)
                #0, #2 -> Bonsai.Sleap.PredictSinglePose
                  ModelFileName=Extensions\wBackground.frozen_graph.pb
                  TrainingConfig=Extensions\wBackground.training_config.json
                  PartMinConfidence=nil
                  ScaleFactor=nil
                  ColorConversion=nil
                -> PublishSubject PoseStream

                SubscribeSubject CenteredVideo
                -> MemberSelector(Selector=RegionOfInterest) => #6
                SubscribeSubject BestCentroid => #7
                #6, #7 -> Zip
                -> Bonsai.Scripting.IronPython.PythonTransform CropCorrection
                  Description:
                    Returns normalized XY
                    1.1 Centroid
                    1.2 pointA
                    1.3 pointB
                    2.1 Head
                    2.2 Thorax
                    2.3 Abdomen
                    2.4 Lwing
                    2.5 Rwing
                  Script:
                    import clr
                    clr.AddReference("OpenCV.Net")
                    from OpenCV.Net import *
                    from System import Tuple, Math, Single

                    @returns(Point2f)
                    def process(value):
                      cropMiddle = Point2f(value.Item1.Width / 2, value.Item1.Height / 2)

                      flyCentroid = value.Item2

                      correction = flyCentroid - cropMiddle

                      return correction
                -> PublishSubject CropCorrection

                SubscribeSubject PoseStream
                -> GroupWorkflow NormalizedBodyParts
                    WorkflowInput Source1 => #0
                    -> GroupWorkflow ViewPoints => #1
                        WorkflowInput Source1 => #0
                        -> Bonsai.Sleap.GetBodyPart(Name=Left)
                        -> GroupWorkflow Normalizer => #2
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawFrame.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=Right)
                        -> GroupWorkflow Normalizer => #4
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawFrame.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=Top)
                        -> GroupWorkflow Normalizer => #6
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawFrame.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #2, #4, #6 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                          Expression:
                            new(
                            Item1 as Left,
                            Item2 as Right,
                            Item3 as Top)
                        -> WorkflowOutput
                    #0 -> GroupWorkflow BodyPoints => #2
                        WorkflowInput Source1 => #0
                        -> Bonsai.Sleap.GetBodyPart(Name=Head)
                        -> GroupWorkflow Normalizer => #2
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawFrame.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=Thorax)
                        -> GroupWorkflow Normalizer => #4
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawFrame.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=Abdomen)
                        -> GroupWorkflow Normalizer => #6
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawFrame.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=LeftWing)
                        -> GroupWorkflow Normalizer => #8
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawFrame.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #0 -> Bonsai.Sleap.GetBodyPart(Name=RightWing)
                        -> GroupWorkflow Normalizer => #10
                            WorkflowInput Source1
                            -> MemberSelector(Selector="Position,Confidence") => #1
                            SubscribeSubject CropCorrection => #2
                            SubscribeSubject ArenaVideoStream
                            -> MemberSelector(Selector=RawFrame.RegionOfInterest) => #4
                            #1, #2, #4 -> Zip
                            -> Bonsai.Scripting.IronPython.PythonTransform NormalizeXY
                              Description:
                                Returns normalized XY
                                1.1 Centroid
                                1.2 pointA
                                1.3 pointB
                                2.1 Head
                                2.2 Thorax
                                2.3 Abdomen
                                2.4 Lwing
                                2.5 Rwing
                              Script:
                                import clr
                                clr.AddReference("OpenCV.Net")
                                from OpenCV.Net import *
                                from System import Tuple, Math, Single

                                @returns(Tuple[Point2f,float])
                                def process(value):
                                  position = value.Item1.Item1
                                  confidence = float(value.Item1.Item2)
                                  correction = value.Item2
                                  arenaWidth = value.Item3.Width
                                  arenaHeight = value.Item3.Height

                                  corrected = position + correction

                                  normalized = Point2f(corrected.X / arenaWidth, corrected.Y / arenaHeight)

                                  output = Tuple.Create(normalized, float(confidence))

                                  return output
                            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                              Expression:
                                new(
                                Item1 as Position,
                                Item2 as Confidence
                                )
                            -> WorkflowOutput
                        #2, #4, #6, #8, #10 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                          Expression:
                            new(
                            Item1 as Head,
                            Item2 as Thorax,
                            Item3 as Abdomen,
                            Item4 as LeftWing,
                            Item5 as RightWing
                            )
                        -> WorkflowOutput
                    #1, #2 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                      Expression:
                        new(
                        Item1 as ViewPoints,
                        Item2 as BodyPoints)
                    -> WorkflowOutput
                -> PublishSubject NormalizedBodyParts
                -> WorkflowOutput
            SubscribeSubject SleapModelConfiguration
            -> MemberSelector(Selector=EnableSleap)
            -> Condition => #16
                WorkflowInput Source1
                -> WorkflowOutput
            #13, #16 -> SubscribeWhen

            GroupWorkflow VisualizerOut
                GroupWorkflow CenteredVideo => #0
                    SubscribeSubject ArenaVideoStream
                    -> MemberSelector(Selector=RawFrame) => #1
                    SubscribeSubject BestCentroid => #2
                    #1, #2 -> Zip => #3
                    SubscribeSubject FlyCenteredCropSize
                    -> PropertyMapping(Size) => #5
                    #3, #5 -> Bonsai.Vision.CropCenter(Size(Width=128, Height=128), FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
                    -> PublishSubject CenteredVideo
                    -> WorkflowOutput

                    SubscribeSubject ArenaVideoStream
                    -> MemberSelector(Selector=BackgroundSubtractedFrame) => #10
                    SubscribeSubject BestCentroid => #11
                    #10, #11 -> Zip => #12
                    SubscribeSubject FlyCenteredCropSize
                    -> PropertyMapping(Size) => #14
                    #12, #14 -> Bonsai.Vision.CropCenter(Size(Width=128, Height=128), FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
                    -> PublishSubject CenteredVideoBackSub
                SubscribeSubject Video&Stimuli => #1
                -> MemberSelector(Selector=FrameCount_Video)
                -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #3
                  Expression: new(it as FrameCount_ArenaStream)
                #1 -> MemberSelector(Selector=Stimuli) => #4
                #0, #3, #4 -> Zip => #5
                SubscribeSubject ArenaIndex => #6
                #5, #6 -> WithLatestFrom => #7
                SubscribeSubject ThisSessionPaths
                -> MemberSelector(Selector=FileName) => #9
                #7, #9 -> WithLatestFrom => #10
                -> MemberSelector(Selector=Item1.Item2) => #11
                #10 -> MemberSelector(Selector=Item1.Item1.Item1) => #12
                #10 -> MemberSelector(Selector=Item1.Item1.Item2) => #13
                #10 -> MemberSelector(Selector=Item1.Item1.Item3) => #14
                #10 -> MemberSelector(Selector=Item2) => #15
                #11, #12, #13, #14, #15 -> Zip
                -> WorkflowOutput
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> WorkflowOutput
-> Concat
-> GroupWorkflow Visualizers
    WorkflowInput Source1 => #0
    -> Condition => #1
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #3
    #0 -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #6
    #1 -> MemberSelector(Selector="Item4.Visual,Item4.Stim0,Item4.Stim1") => #7
    Bonsai.Vision.Drawing.CreateCanvas(Size(Width=128, Height=128), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Drawing.DrawCanvas
    -> Bonsai.Vision.Grayscale => #10
    #7, #10 -> WithLatestFrom => #11
    -> Bonsai.Scripting.IronPython.PythonTransform PaintLED
      Script:
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        from math import sin, cos, pi

        font = None
        def load():
          global font
          font = Font(2,2)

        @returns(IplImage)
        def process(value):
          output =  value.Item2.Clone()
          image = value.Item2.Clone()
          output = IplImage(image.Size, image.Depth, 3)
          CV.CvtColor(image,output,ColorConversion.Gray2Bgr)

          LoomState = value.Item1.Item1
          RedState = value.Item1.Item2
          GreenState = value.Item1.Item3

          if RedState == 1:
            CV.Circle(output, Point(64, 64), 55, Scalar.Rgb(204, 0, 0), -1)

          if GreenState == 1:
            CV.Circle(output, Point(64, 64), 55, Scalar.Rgb(0, 204, 0), -1)

          if LoomState == 1:
            CV.Circle(output, Point(64, 64), 40, Scalar.Rgb(255, 255, 255), -1)
          else:
            CV.Circle(output, Point(64, 64), 40, Scalar.Rgb(32, 32, 32), -1)

          return output
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #13
    #0 -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #16
    #0 -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #19
    #11 -> MemberSelector(Selector=Item2) => #20
    #1 -> MemberSelector(Selector=Item5)
    -> DistinctUntilChanged
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> Add(Operand=IntProperty(Value=1)) => #25
    #20, #25 -> WithLatestFrom => #26
    -> MemberSelector(Selector=Item1) => #27
    #26 -> MemberSelector(Selector=Item2) => #28
    #1 -> MemberSelector(Selector=Item3.FrameCount_ArenaStream) => #29
    #27, #28, #29 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform TimeInfo
      Script:
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        from math import sin, cos, pi

        font = None
        def load():
          global font
          font = Font(1,1)

        @returns(IplImage)
        def process(value):
          output =  value.Item1.Clone()
          image = value.Item1.Clone()
          output = IplImage(image.Size, image.Depth, 3)
          CV.CvtColor(image,output,ColorConversion.Gray2Bgr)

          filenumber = 'File # ' + value.Item2.ToString()
          CV.PutText(output,filenumber,Point(5,45),font,Scalar.All(255))

          FrameNumber = '# ' + value.Item3.ToString()
          CV.PutText(output,'Frame',Point(5,80),font,Scalar.All(255))
          CV.PutText(output,FrameNumber,Point(5,100),font,Scalar.All(255))

          return output
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #32
    #3, #6, #13, #16, #19, #32 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

SubscribeSubject FileFinished
-> Skip(Count=1)
-> Condition
    WorkflowInput Source1
    -> ElementIndex
    -> MemberSelector(Selector=Index) => #2
    SubscribeSubject NumberOfFiles
    -> Subtract(Operand=IntProperty(Value=1)) => #4
    #2, #4 -> WithLatestFrom
    -> Equal
    -> WorkflowOutput
-> Take(Count=1)
-> WorkflowOutput
