<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ArenaDrawer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>ArenaDrawer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ThresholdValue" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>56</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>Binary</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>100</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="CreateObservable">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Add" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:FindContours">
                      <cv:Mode>External</cv:Mode>
                      <cv:Method>ChainApproxNone</cv:Method>
                      <cv:Offset>
                        <cv:X>0</cv:X>
                        <cv:Y>0</cv:Y>
                      </cv:Offset>
                      <cv:MinArea>500000</cv:MinArea>
                      <cv:MaxArea xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:DrawContours">
                      <cv:MaxLevel>1</cv:MaxLevel>
                      <cv:Thickness>-1</cv:Thickness>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:MorphologicalOperator">
                      <cv:Size>
                        <cv:Width>3</cv:Width>
                        <cv:Height>3</cv:Height>
                      </cv:Size>
                      <cv:Anchor>
                        <cv:X>-1</cv:X>
                        <cv:Y>-1</cv:Y>
                      </cv:Anchor>
                      <cv:Shape>Rectangle</cv:Shape>
                      <cv:Iterations>3</cv:Iterations>
                      <cv:Operation>Erode</cv:Operation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>100</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="10" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="10" To="12" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>