WorkflowBuilder(Version=2.8.5)
Bonsai.IO.GetFiles(Path="C:\Users\HugoMarques\Downloads\two video files for bonsai", SearchPattern=*.avi, SearchOption=TopDirectoryOnly)
-> Concat
-> CreateObservable ProcessNew
    GroupWorkflow Init
        IntProperty(Value=0)
        -> BehaviorSubject "Slider Value"
        -> WorkflowOutput

    GroupWorkflow "Get Number of Animals"
        SubscribeSubject "File Prefix"
        -> Add(Operand=StringProperty(Value=trajectories.csv))
        -> InputMapping(Selector=it, FileName(Selector=it))
        -> SelectMany
            ExternalizedMapping(FileName)
            -> Bonsai.IO.CsvReader
              FileName="C:\Users\HugoMarques\Downloads\two video files for bonsai\MC-EmptyTNT_2Trh2NorpA-20Looms-5F-4_7d-FH0-CamA-2024-06-10T14_51_42.trajectories.csv"
              ListSeparator=","
              ScanPattern=""
              SkipRows=1
            -> MemberSelector(Selector=Length)
            -> Divide(Operand=IntProperty(Value=2))
            -> Take(Count=1)
            -> WorkflowOutput
        -> BehaviorSubject "Number of Animals"
        -> WorkflowOutput

    WorkflowInput Source1
    -> GroupWorkflow "Get Filenames Prefix"
        WorkflowInput Source1
        -> BehaviorSubject Filename
        -> GroupWorkflow "Create File Prefix"
            WorkflowInput Source1 => #0
            -> Bonsai.IO.GetDirectoryName
            -> Add(Operand=StringProperty(Value=\)) => #2
            #0 -> Bonsai.IO.GetFileNameWithoutExtension => #3
            #2, #3 -> Zip
            -> Add
            -> Add(Operand=StringProperty(Value=.))
            -> WorkflowOutput
        -> BehaviorSubject "File Prefix"
        -> WorkflowOutput

    SubscribeSubject Filename
    -> PropertyMapping(FileName)
    -> Bonsai.Vision.FileCapture => #6
      FileName="C:\Users\HugoMarques\Downloads\two video files for bonsai\MC-EmptyTNT_2Trh2NorpA-20Looms-5F-4_7d-FH0-CamA-2024-06-10T14_51_42.avi"
      PlaybackRate=25
      StartPosition=0
      PositionUnits=Frames
      Loop=false
      Playing=true
    -> BehaviorSubject "Raw Frames"
    -> Last
    -> BehaviorSubject Terminate
    #6 -> GroupWorkflow GUI
        Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 12pt", Text="Current file:")
        -> VisualizerMapping => #1
        SubscribeSubject Filename
        -> PropertyMapping(Text)
        -> Bonsai.Gui.LabelBuilder
          Enabled=true
          Visible=true
          Font="Microsoft Sans Serif, 7.8pt"
          Text="C:\Users\HugoMarques\Downloads\two video files for bonsai\MC-EmptyTNT_2Trh2NorpA-20Looms-5F-4_7d-FH0-CamA-2024-06-10T14_51_42.avi"
        -> VisualizerMapping => #5
        Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 12pt", Text="")
        -> VisualizerMapping => #7
        Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 12pt", Text="Centroid Threshold")
        -> VisualizerMapping => #9
        Bonsai.Gui.SliderBuilder(Enabled=true, Visible=true, Minimum=1, Maximum=255, DecimalPlaces=0, Value=36)
        -> MulticastSubject "Slider Value"
        -> VisualizerMapping => #12
        #1, #5, #7, #9, #12 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=7, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #14
        WorkflowInput Source1
        -> VisualizerMapping => #16
        SubscribeSubject Frames
        -> VisualizerMapping => #18
        SubscribeSubject "Countours Found"
        -> VisualizerMapping => #20
        SubscribeSubject "Tracking Frames"
        -> VisualizerMapping => #22
        #14, #16, #18, #20, #22 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    SubscribeSubject "Raw Frames"
    -> DistinctUntilChanged
    -> Bonsai.Vision.Grayscale => #13
    Annotation Why??(Text="") => #14
    #13, #14 -> Take(Count=36560) => #15
    SubscribeSubject Filename
    -> PropertyMapping(FileName)
    -> Bonsai.Vision.FileCapture
      FileName="C:\Users\HugoMarques\Downloads\two video files for bonsai\MC-EmptyTNT_2Trh2NorpA-20Looms-5F-4_7d-FH0-CamA-2024-06-10T14_51_42.avi"
      PlaybackRate=0
      StartPosition=0
      PositionUnits=Frames
      Loop=false
      Playing=true
    -> Bonsai.Vision.Grayscale
    -> GroupWorkflow "Calculate Background"
        WorkflowInput Source1
        -> BonZeb.CalculateBackground(PixelSearch=Brightest, NoiseThreshold=0)
        -> Take(Count=100)
        -> TakeLast(Count=1)
        -> WorkflowOutput
    -> PublishSubject BackgroundImage => #21
    #15, #21 -> SubscribeWhen
    -> BehaviorSubject Frames
    -> GroupWorkflow "Subtract Background"
        SubscribeSubject BackgroundImage => #0
        WorkflowInput Source1 => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Dsp.AbsoluteDifference
        -> WorkflowOutput
    -> BehaviorSubject "Background Subtracted Frames"
    -> GroupWorkflow Centroids
        WorkflowInput Source1 => #0
        SubscribeSubject "Slider Value" => #1
        #0, #1 -> WithLatestFrom
        -> InputMapping(Selector=Item1, ThresholdValue(Selector=Item2))
        -> Bonsai.Vision.Threshold(ThresholdValue=36, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=1500)
        -> BehaviorSubject "Countours Found"
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> WorkflowOutput
    -> BehaviorSubject Centroids

    GroupWorkflow "Create Tracking Video" => #28
        SubscribeSubject Frames => #0
        SubscribeSubject "Background Subtracted Frames" => #1
        SubscribeSubject Centroids => #2
        SubscribeSubject "Number of Animals"
        -> PropertyMapping(ExpectedConnectedComponents) => #4
        #2, #4 -> BinaryRegionsTracking(ExpectedConnectedComponents=5) => #5
        #1, #5 -> Zip
        -> BehaviorSubject "Fly Sorting"
        -> SelectMany "Get Centroid Array" => #8
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Concat
            -> MemberSelector(Selector=Centroid) => #3
            SubscribeSubject "Number of Animals"
            -> PropertyMapping(Count) => #5
            #3, #5 -> Take(Count=5)
            -> ToArray
            -> Take(Count=1)
            -> WorkflowOutput
        #0, #8 -> Zip
        -> MultiVisualizer(RadiusSize=30)
        -> BehaviorSubject "Tracking Frames" => #11
        SubscribeSubject LEDs => #12
        SubscribeSubject "Frame Number" => #13
        #11, #12, #13 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform PaintLED => #15
          Script:
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import *
            from math import sin, cos, pi

            font = None
            def load():
              global font
              font = Font(2,2)

            @returns(IplImage)
            def process(value):
              output =  value.Item1.Clone()
              #image = value.Item1.Clone()
              #output = IplImage(image.Size, image.Depth, 3)
              #CV.CvtColor(image,output,ColorConversion.Gray2Bgr)

              LoomState = value.Item2.Item1
              RedState = value.Item2.Item2
              GreenState = value.Item2.Item3

              if RedState == 1:
                CV.Circle(output, Point(70, 90), 55, Scalar.Rgb(204, 0, 0), -1)

              if GreenState == 1:
                CV.Circle(output, Point(70, 90), 55, Scalar.Rgb(0, 204, 0), -1)

              if LoomState == 0:
                CV.Circle(output, Point(70, 90), 40, Scalar.Rgb(255, 255, 255), -1)
              else:
                CV.Circle(output, Point(70, 90), 40, Scalar.Rgb(32, 32, 32), -1)

              text = value.Item3.ToString()

              CV.PutText(output,text,Point(30,220),font,Scalar.All(0))

              return output
        SubscribeSubject Filename
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from System.IO import Path

            @returns(str)
            def process(value):
              return Path.ChangeExtension(value,"w_led.avi")
        -> PropertyMapping(FileName) => #18
        #15, #18 -> Bonsai.Vision.VideoWriter
          FileName="C:\Users\HugoMarques\Downloads\two video files for bonsai\MC-EmptyTNT_2Trh2NorpA-20Looms-5F-4_7d-FH0-CamA-2024-06-10T14_51_42.w_led.avi"
          Suffix=None
          Buffered=true
          Overwrite=true
          FourCC=FMP4
          FrameRate=60
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> WorkflowOutput
    GroupWorkflow "Save Individual Fly Data" => #29
        SubscribeSubject Frames
        -> Skip(Count=2) => #1
        SubscribeSubject "Fly Sort Data" => #2
        #1, #2 -> Zip => #3
        -> GroupWorkflow 5FlyGroup => #4
            WorkflowInput Source1 => #0
            -> Condition "Include Animal1?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Length) => #1
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #2
                #1, #2 -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Animal1 Data" => #2
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2) => #2
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=0) => #4
                #2, #4 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: Item1[Item2]
                #1, #6 -> Zip
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\FlyDataMH.bonsai)
            -> GroupWorkflow "Append Fly Index" => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Fly Index"))
                -> IntProperty(Value=0) => #2
                #0, #2 -> WithLatestFrom
                -> WorkflowOutput
            #0 -> Condition "Include Animal2?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Length) => #1
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #2
                #1, #2 -> GreaterThan(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> GroupWorkflow "Animal2 Data"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2) => #2
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=1) => #4
                #2, #4 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: Item1[Item2]
                #1, #6 -> Zip
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\FlyDataMH.bonsai)
            -> GroupWorkflow "Append Fly Index" => #8
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Fly Index"))
                -> IntProperty(Value=1) => #2
                #0, #2 -> WithLatestFrom
                -> WorkflowOutput
            #0 -> Condition "Include Animal3?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Length) => #1
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #2
                #1, #2 -> GreaterThan(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> GroupWorkflow "Animal3 Data"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2) => #2
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=2) => #4
                #2, #4 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: Item1[Item2]
                #1, #6 -> Zip
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\FlyDataMH.bonsai)
            -> GroupWorkflow "Append Fly Index" => #12
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Fly Index"))
                -> IntProperty(Value=2) => #2
                #0, #2 -> WithLatestFrom
                -> WorkflowOutput
            #0 -> Condition "Include Animal4?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Length) => #1
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #2
                #1, #2 -> GreaterThan(Operand=IntProperty(Value=3))
                -> WorkflowOutput
            -> GroupWorkflow "Animal4 Data"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2) => #2
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=3) => #4
                #2, #4 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: Item1[Item2]
                #1, #6 -> Zip
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\FlyDataMH.bonsai)
            -> GroupWorkflow "Append Fly Index" => #16
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Fly Index"))
                -> IntProperty(Value=3) => #2
                #0, #2 -> WithLatestFrom
                -> WorkflowOutput
            #0 -> Condition "Include Animal5?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Length) => #1
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #2
                #1, #2 -> GreaterThan(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            -> GroupWorkflow "Animal5 Data"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2) => #2
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=4) => #4
                #2, #4 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: Item1[Item2]
                #1, #6 -> Zip
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\FlyDataMH.bonsai) => #19
            Annotation => #20
              Text="Used to retrieve the order of the initial array. This is because the output of the Merge node is not maintain the same order as the Source input node."
            #19, #20 -> GroupWorkflow "Append Fly Index" => #21
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Fly Index"))
                -> IntProperty(Value=4) => #2
                #0, #2 -> WithLatestFrom
                -> WorkflowOutput
            #4, #8, #12, #16, #21 -> Merge => #22
            SubscribeSubject "Number of Animals"
            -> PropertyMapping(Count) => #24
            #22, #24 -> WindowCount(Count=5, Skip=nil)
            -> SelectMany => #26
                WorkflowInput Source1 => #0
                SubscribeSubject "Number of Animals"
                -> PropertyMapping(Count) => #2
                #0, #2 -> Take(Count=5) => #3
                Annotation(Text="This is a bit convoluted but it allows to sort the output of the FlyDataMH according to the original fly index") => #4
                #3, #4 -> ToArray
                -> OrderBy(KeySelector=Item2)
                -> Concat
                -> MemberSelector(Selector=Item1) => #8
                SubscribeSubject "Number of Animals"
                -> PropertyMapping(Count) => #10
                #8, #10 -> Take(Count=5)
                -> ToArray
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
            #26 -> Concat
            #2 -> MemberSelector(Selector=Item1)
            -> Bonsai.Dsp.Average
            #2 -> MemberSelector(Selector=Item2)

            Disable WorkflowInput Source1 => #32
            -> Disable MemberSelector(Selector=Item2)
            -> Disable Concat => #34
            #32 -> Disable MemberSelector(Selector=Item1) => #35
            #34, #35 -> Disable WithLatestFrom
            -> Disable GroupWorkflow "Revert Tupple"(Description="This is to be compatible with the input data of FlyDataMH") => #37
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2) => #1
                #0 -> MemberSelector(Selector=Item1) => #2
                #1, #2 -> Zip
                -> WorkflowOutput
            -> Disable IncludeWorkflow(Path=Extensions\FlyDataMH.bonsai) => #38
            #38, #32 -> Disable WithLatestFrom
            -> Disable WorkflowOutput
            #37 -> Disable MemberSelector(Selector=Item1)
            -> Disable Bonsai.Dsp.Average
        Annotation(Text="In the original code there is a third input to the zip with the info from the image and the array of all points. Seems unnecessary") => #5
        Source1=#4, Source1=#5 -> GroupWorkflow "Save Data"
            WorkflowInput Source1 => #0
            -> Condition "Include Fly1?" => #1
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                SubscribeSubject "Number of Animals" => #3
                #2, #3 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            -> GroupWorkflow "Save Fly1" => #2
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Animal Index2")) => #1
                #0, #1 -> Index(Operand=IntProperty(Value=0)) => #2
                SubscribeSubject LEDs => #3
                #2, #3 -> WithLatestFrom => #4
                Annotation(Text="Reverts the tupple to be consistent with previous way of saving the data") => #5
                #4, #5 -> GroupWorkflow Revert => #6
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> MemberSelector(Selector=Item1) => #2
                    #1, #2 -> Zip
                    -> WorkflowOutput
                SubscribeSubject "File Prefix" => #7
                ExternalizedMapping(Value(DisplayName="Fly Suffix")) => #8
                #7, #8 -> Add(Operand=StringProperty(Value=fly1_tracked.csv))
                -> PropertyMapping(FileName) => #10
                #6, #10 -> Bonsai.IO.CsvWriter => #11
                  FileName="C:\Users\HugoMarques\Downloads\two video files for bonsai\MC-EmptyTNT_2Trh2NorpA-20Looms-5F-4_7d-FH0-CamA-2024-06-10T14_51_42.fly1_tracked.csv"
                  Delimiter=","
                  Append=true
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=false
                  Selector=""
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=0)
                -> Condition => #14
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Number of Animals" => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                #11, #14 -> SubscribeWhen
                -> WorkflowOutput
            #0 -> Condition "Include Fly2?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                SubscribeSubject "Number of Animals" => #3
                #2, #3 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            -> GroupWorkflow "Save Fly2" => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Animal Index2")) => #1
                #0, #1 -> Index(Operand=IntProperty(Value=1)) => #2
                SubscribeSubject LEDs => #3
                #2, #3 -> WithLatestFrom => #4
                Annotation(Text="Reverts the tupple to be consistent with previous way of saving the data") => #5
                #4, #5 -> GroupWorkflow Revert => #6
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> MemberSelector(Selector=Item1) => #2
                    #1, #2 -> Zip
                    -> WorkflowOutput
                SubscribeSubject "File Prefix" => #7
                ExternalizedMapping(Value(DisplayName="Fly Suffix")) => #8
                #7, #8 -> Add(Operand=StringProperty(Value=fly2_tracked.csv))
                -> PropertyMapping(FileName) => #10
                #6, #10 -> Bonsai.IO.CsvWriter => #11
                  FileName="C:\Users\HugoMarques\Downloads\two video files for bonsai\MC-EmptyTNT_2Trh2NorpA-20Looms-5F-4_7d-FH0-CamA-2024-06-10T14_51_42.fly2_tracked.csv"
                  Delimiter=","
                  Append=true
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=false
                  Selector=""
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=1)
                -> Condition => #14
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Number of Animals" => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                #11, #14 -> SubscribeWhen
                -> WorkflowOutput
            #0 -> Condition "Include Fly3?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                SubscribeSubject "Number of Animals" => #3
                #2, #3 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            -> GroupWorkflow "Save Fly3" => #6
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Animal Index2")) => #1
                #0, #1 -> Index(Operand=IntProperty(Value=2)) => #2
                SubscribeSubject LEDs => #3
                #2, #3 -> WithLatestFrom => #4
                Annotation(Text="Reverts the tupple to be consistent with previous way of saving the data") => #5
                #4, #5 -> GroupWorkflow Revert => #6
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> MemberSelector(Selector=Item1) => #2
                    #1, #2 -> Zip
                    -> WorkflowOutput
                SubscribeSubject "File Prefix" => #7
                ExternalizedMapping(Value(DisplayName="Fly Suffix")) => #8
                #7, #8 -> Add(Operand=StringProperty(Value=fly3_tracked.csv))
                -> PropertyMapping(FileName) => #10
                #6, #10 -> Bonsai.IO.CsvWriter => #11
                  FileName="C:\Users\HugoMarques\Downloads\two video files for bonsai\MC-EmptyTNT_2Trh2NorpA-20Looms-5F-4_7d-FH0-CamA-2024-06-10T14_51_42.fly3_tracked.csv"
                  Delimiter=","
                  Append=true
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=false
                  Selector=""
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=2)
                -> Condition => #14
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Number of Animals" => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                #11, #14 -> SubscribeWhen
                -> WorkflowOutput
            #0 -> Condition "Include Fly4?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                SubscribeSubject "Number of Animals" => #3
                #2, #3 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            -> GroupWorkflow "Save Fly4" => #8
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Animal Index2")) => #1
                #0, #1 -> Index(Operand=IntProperty(Value=3)) => #2
                SubscribeSubject LEDs => #3
                #2, #3 -> WithLatestFrom => #4
                Annotation(Text="Reverts the tupple to be consistent with previous way of saving the data") => #5
                #4, #5 -> GroupWorkflow Revert => #6
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> MemberSelector(Selector=Item1) => #2
                    #1, #2 -> Zip
                    -> WorkflowOutput
                SubscribeSubject "File Prefix" => #7
                ExternalizedMapping(Value(DisplayName="Fly Suffix")) => #8
                #7, #8 -> Add(Operand=StringProperty(Value=fly4_tracked.csv))
                -> PropertyMapping(FileName) => #10
                #6, #10 -> Bonsai.IO.CsvWriter => #11
                  FileName="C:\Users\HugoMarques\Downloads\two video files for bonsai\MC-EmptyTNT_2Trh2NorpA-20Looms-5F-4_7d-FH0-CamA-2024-06-10T14_51_42.fly4_tracked.csv"
                  Delimiter=","
                  Append=true
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=false
                  Selector=""
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=3)
                -> Condition => #14
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Number of Animals" => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                #11, #14 -> SubscribeWhen
                -> WorkflowOutput
            #0 -> Condition "Include Fly5?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #1
                #0, #1 -> IntProperty(Value=4) => #2
                SubscribeSubject "Number of Animals" => #3
                #2, #3 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            -> GroupWorkflow "Save Fly5" => #10
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Animal Index2")) => #1
                #0, #1 -> Index(Operand=IntProperty(Value=4)) => #2
                SubscribeSubject LEDs => #3
                #2, #3 -> WithLatestFrom => #4
                Annotation(Text="Reverts the tupple to be consistent with previous way of saving the data") => #5
                #4, #5 -> GroupWorkflow Revert => #6
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> MemberSelector(Selector=Item1) => #2
                    #1, #2 -> Zip
                    -> WorkflowOutput
                SubscribeSubject "File Prefix" => #7
                ExternalizedMapping(Value(DisplayName="Fly Suffix")) => #8
                #7, #8 -> Add(Operand=StringProperty(Value=fly5_tracked.csv))
                -> PropertyMapping(FileName) => #10
                #6, #10 -> Bonsai.IO.CsvWriter => #11
                  FileName="C:\Users\HugoMarques\Downloads\two video files for bonsai\MC-EmptyTNT_2Trh2NorpA-20Looms-5F-4_7d-FH0-CamA-2024-06-10T14_51_42.fly5_tracked.csv"
                  Delimiter=","
                  Append=true
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=false
                  Selector=""
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=4)
                -> Condition => #14
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Number of Animals" => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                #11, #14 -> SubscribeWhen
                -> WorkflowOutput
            #2, #4, #6, #8, #10 -> Merge
            -> WorkflowOutput
            #2 -> ElementIndex
            -> MemberSelector(Selector=Index)
            #1 -> ElementIndex
            -> MemberSelector(Selector=Index)
            #0 -> ElementIndex
            -> MemberSelector(Selector=Index)
        -> WorkflowOutput
        #4 -> ElementIndex
        #3 -> ElementIndex
        #3 -> MemberSelector(Selector=Item2)
        -> Concat
    #28, #29 -> Zip => #30
    SubscribeSubject Terminate
    -> Delay(DueTime=PT0.5S) => #32
    #30, #32 -> TakeUntil
    -> WorkflowOutput

    SubscribeSubject Filename
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        from System.IO import Path

        @returns(str)
        def process(value):
          return Path.ChangeExtension(value,".csv")
    -> PropertyMapping(FileName)
    -> Bonsai.IO.CsvReader => #38
      FileName="C:\Users\HugoMarques\Downloads\two video files for bonsai\MC-EmptyTNT_2Trh2NorpA-20Looms-5F-4_7d-FH0-CamA-2024-06-10T14_51_42.csv"
      ScanPattern="%i,%i,%i"
      SkipRows=1
    Annotation Why??(Text="") => #39
    #38, #39 -> Take(Count=60960) => #40
    -> MemberSelector(Selector=Item1) => #41
    #40 -> MemberSelector(Selector=Item2) => #42
    #40 -> MemberSelector(Selector=Item3) => #43
    SubscribeSubject Centroids
    -> MemberSelector(Selector=Count) => #45
    #41, #42, #43, #45 -> Zip
    -> BehaviorSubject LEDs

    SubscribeSubject "Fly Sorting"
    -> SelectMany "Get Fly Positions Array"
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> Concat
        -> MemberSelector(Selector=Centroid)
        -> Take(Count=5)
        -> ToArray
        -> WorkflowOutput
    -> BehaviorSubject "Fly Sort Data"

    SubscribeSubject Frames
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> BehaviorSubject "Frame Number"
-> Concat
