WorkflowBuilder(Version=2.8.2)
Bonsai.IO.GetFiles(Path=C:\Users\HugoMarques\Downloads\Mirjam, SearchPattern=*.avi, SearchOption=TopDirectoryOnly)
-> Concat
-> CreateObservable ProcessNew
    WorkflowInput Source1
    -> BehaviorSubject Filename
    -> GroupWorkflow "Create File Prefix"
        WorkflowInput Source1 => #0
        -> Bonsai.IO.GetDirectoryName
        -> Add(Operand=StringProperty(Value=\)) => #2
        #0 -> Bonsai.IO.GetFileNameWithoutExtension => #3
        #2, #3 -> Zip
        -> Add
        -> Add(Operand=StringProperty(Value=.))
        -> WorkflowOutput
    -> BehaviorSubject "File Prefix"

    IntProperty(Value=5)
    -> BehaviorSubject "Number of Animals"

    SubscribeSubject Filename
    -> PropertyMapping(FileName)
    -> Bonsai.Vision.FileCapture
      FileName=C:\Users\HugoMarques\Downloads\Mirjam\MH-Empty_TNT_5F-20Loom_50cm-FH1_1-2023-03-24T13_42_57.avi
      PlaybackRate=25
      StartPosition=0
      PositionUnits=Frames
      Loop=true
      Playing=true
    -> DistinctUntilChanged
    -> Bonsai.Vision.Grayscale => #10
    Annotation Why??(Text="") => #11
    #10, #11 -> Take(Count=36560) => #12
    SubscribeSubject Filename
    -> PropertyMapping(FileName)
    -> Bonsai.Vision.FileCapture
      FileName=C:\Users\HugoMarques\Downloads\Mirjam\MH-Empty_TNT_5F-20Loom_50cm-FH1_1-2023-03-24T13_42_57.avi
      PlaybackRate=0
      StartPosition=0
      PositionUnits=Frames
      Loop=false
      Playing=true
    -> Bonsai.Vision.Grayscale
    -> GroupWorkflow "Calculate Background"
        WorkflowInput Source1
        -> BonZeb.CalculateBackground(PixelSearch=Brightest, NoiseThreshold=0)
        -> Take(Count=100)
        -> TakeLast(Count=1)
        -> WorkflowOutput
    -> PublishSubject BackgroundImage => #18
    #12, #18 -> SubscribeWhen
    -> BehaviorSubject Frames
    -> GroupWorkflow "Subtract Background"
        SubscribeSubject BackgroundImage => #0
        WorkflowInput Source1 => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Dsp.AbsoluteDifference
        -> WorkflowOutput
    -> BehaviorSubject "Background Subtracted Frames"
    -> GroupWorkflow Centroids
        WorkflowInput Source1
        -> Bonsai.Vision.Threshold(ThresholdValue=52, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=1500)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> WorkflowOutput
    -> BehaviorSubject Centroids

    SubscribeSubject Filename
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        from System.IO import Path

        @returns(str)
        def process(value):
          return Path.ChangeExtension(value,".csv")
    -> PropertyMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=C:\Users\HugoMarques\Downloads\Mirjam\MH-Empty_TNT_5F-20Loom_50cm-FH1_1-2023-03-24T13_42_57.csv, ScanPattern="%i %i %i %d %d ", SkipRows=0)
    -> Take(Count=60960) => #29
    -> MemberSelector(Selector=Item1) => #30
    #29 -> MemberSelector(Selector=Item2) => #31
    #29 -> MemberSelector(Selector=Item3) => #32
    SubscribeSubject Centroids
    -> MemberSelector(Selector=Count) => #34
    #30, #31, #32, #34 -> Zip
    -> BehaviorSubject LEDs

    SubscribeSubject "Fly Sorting"
    -> SelectMany "Get Fly Positions Array"
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> Concat
        -> MemberSelector(Selector=Centroid)
        -> Take(Count=5)
        -> ToArray
        -> WorkflowOutput
    -> BehaviorSubject "Fly Sort Data"

    SubscribeSubject Frames
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> BehaviorSubject "Frame Number"

    GroupWorkflow "Create Tracking Video" => #44
        SubscribeSubject Frames => #0
        SubscribeSubject "Background Subtracted Frames" => #1
        SubscribeSubject Centroids => #2
        SubscribeSubject "Number of Animals"
        -> PropertyMapping(ExpectedConnectedComponents) => #4
        #2, #4 -> BinaryRegionsTracking(ExpectedConnectedComponents=5) => #5
        #1, #5 -> Zip
        -> BehaviorSubject "Fly Sorting"
        -> SelectMany "Get Centroid Array" => #8
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Concat
            -> MemberSelector(Selector=Centroid) => #3
            SubscribeSubject "Number of Animals"
            -> PropertyMapping(Count) => #5
            #3, #5 -> Take(Count=5)
            -> ToArray
            -> Take(Count=1)
            -> WorkflowOutput
        #0, #8 -> Zip
        -> MultiVisualizer(RadiusSize=30) => #10
        SubscribeSubject LEDs => #11
        SubscribeSubject "Frame Number" => #12
        #10, #11, #12 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform PaintLED => #14
          Script:
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import *
            from math import sin, cos, pi

            font = None
            def load():
              global font
              font = Font(2,2)

            @returns(IplImage)
            def process(value):
              output =  value.Item1.Clone()
              #image = value.Item1.Clone()
              #output = IplImage(image.Size, image.Depth, 3)
              #CV.CvtColor(image,output,ColorConversion.Gray2Bgr)

              LoomState = value.Item2.Item1
              RedState = value.Item2.Item2
              GreenState = value.Item2.Item3

              if RedState == 1:
                CV.Circle(output, Point(70, 90), 55, Scalar.Rgb(204, 0, 0), -1)

              if GreenState == 1:
                CV.Circle(output, Point(70, 90), 55, Scalar.Rgb(0, 204, 0), -1)

              if LoomState == 0:
                CV.Circle(output, Point(70, 90), 40, Scalar.Rgb(255, 255, 255), -1)
              else:
                CV.Circle(output, Point(70, 90), 40, Scalar.Rgb(32, 32, 32), -1)

              text = value.Item3.ToString()

              CV.PutText(output,text,Point(30,220),font,Scalar.All(0))

              return output
        SubscribeSubject Filename
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from System.IO import Path

            @returns(str)
            def process(value):
              return Path.ChangeExtension(value,"w_led.avi")
        -> PropertyMapping(FileName) => #17
        #14, #17 -> Bonsai.Vision.VideoWriter
          FileName=C:\Users\HugoMarques\Downloads\Mirjam\MH-Empty_TNT_5F-20Loom_50cm-FH1_1-2023-03-24T13_42_57.w_led.avi
          Suffix=None
          Buffered=true
          Overwrite=true
          FourCC=FMP4
          FrameRate=60
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> WorkflowOutput
    GroupWorkflow "Save Individual Fly Data" => #45
        SubscribeSubject Frames
        -> Skip(Count=2) => #1
        SubscribeSubject "Fly Sort Data" => #2
        #1, #2 -> Zip => #3
        -> GroupWorkflow 5FlyGroup => #4
            WorkflowInput Source1 => #0
            -> Condition "Include Animal1?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Length) => #1
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #2
                #1, #2 -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Animal1 Data" => #2
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2) => #2
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=0) => #4
                #2, #4 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: Item1[Item2]
                #1, #6 -> Zip
                -> WorkflowOutput
            -> GroupWorkflow FlyDataMH => #3
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2) => #1
                -> IncludeWorkflow(Path=Extensions\ValidPoint.bonsai)
                -> IncludeWorkflow(Path=Extensions\RollingAvg.bonsai) => #3
                #0 -> MemberSelector(Selector=Item1) => #4
                #3, #4 -> IncludeWorkflow(Path=Extensions\Zoomer.bonsai)
                -> Bonsai.Vision.CropPolygon
                  Regions
                    ArrayOfPoint
                      Point(X=14, Y=56)
                      Point(X=10, Y=50)
                      Point(X=7, Y=36)
                      Point(X=8, Y=29)
                      Point(X=10, Y=23)
                      Point(X=24, Y=9)
                      Point(X=37, Y=7)
                      Point(X=49, Y=9)
                      Point(X=61, Y=19)
                      Point(X=65, Y=30)
                      Point(X=66, Y=43)
                      Point(X=61, Y=54)
                      Point(X=50, Y=64)
                      Point(X=33, Y=66)
                      Point(X=17, Y=59)
                    ArrayOfPoint(Point(X=6, Y=7), Point(X=6, Y=7), Point(X=6, Y=7), Point(X=6, Y=7))
                    ArrayOfPoint(Point(X=6, Y=7), Point(X=6, Y=7), Point(X=6, Y=7), Point(X=6, Y=7))
                    ArrayOfPoint(Point(X=9, Y=42), Point(X=9, Y=42), Point(X=9, Y=42), Point(X=9, Y=42))
                    ArrayOfPoint(Point(X=9, Y=56), Point(X=9, Y=56), Point(X=9, Y=56), Point(X=9, Y=56))
                    ArrayOfPoint(Point(X=9, Y=55), Point(X=9, Y=55), Point(X=9, Y=55), Point(X=9, Y=55))
                    ArrayOfPoint(Point(X=24, Y=12), Point(X=24, Y=12), Point(X=24, Y=13), Point(X=24, Y=13))
                  MaskType=ToZero
                  FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
                -> IncludeWorkflow(Path=Extensions\PxChange.bonsai) => #7
                SubscribeSubject BackgroundImage => #8
                #4, #8 -> CombineLatest
                -> Bonsai.Dsp.AbsoluteDifference => #10
                #1, #10 -> IncludeWorkflow(Path=Extensions\Zoomer.bonsai)
                -> Bonsai.Vision.CropPolygon => #12
                  Regions
                    ArrayOfPoint
                      Point(X=14, Y=56)
                      Point(X=10, Y=50)
                      Point(X=7, Y=36)
                      Point(X=8, Y=29)
                      Point(X=10, Y=23)
                      Point(X=24, Y=9)
                      Point(X=37, Y=7)
                      Point(X=49, Y=9)
                      Point(X=61, Y=19)
                      Point(X=65, Y=30)
                      Point(X=66, Y=43)
                      Point(X=61, Y=54)
                      Point(X=50, Y=64)
                      Point(X=33, Y=66)
                      Point(X=17, Y=59)
                    ArrayOfPoint(Point(X=6, Y=7), Point(X=6, Y=7), Point(X=6, Y=7), Point(X=6, Y=7))
                    ArrayOfPoint(Point(X=6, Y=7), Point(X=6, Y=7), Point(X=6, Y=7), Point(X=6, Y=7))
                    ArrayOfPoint(Point(X=9, Y=42), Point(X=9, Y=42), Point(X=9, Y=42), Point(X=9, Y=42))
                    ArrayOfPoint(Point(X=9, Y=56), Point(X=9, Y=56), Point(X=9, Y=56), Point(X=9, Y=56))
                    ArrayOfPoint(Point(X=9, Y=55), Point(X=9, Y=55), Point(X=9, Y=55), Point(X=9, Y=55))
                    ArrayOfPoint(Point(X=24, Y=12), Point(X=24, Y=12), Point(X=24, Y=13), Point(X=24, Y=13))
                  MaskType=ToZero
                  FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
                -> IncludeWorkflow(Path=Extensions\FlyOrientation.bonsai)
                -> Bonsai.Scripting.IronPython.PythonTransform centHEADTAIL => #14
                  Script:
                    import clr
                    clr.AddReference("OpenCV.Net")
                    from System import Tuple, Math, Single
                    from OpenCV.Net import *
                    from math import sin, cos, pi


                    def distancesquare(pt1,pt2):
                      dx = (pt2.X - pt1.X)
                      dy = (pt2.Y - pt1.Y)
                      return dx * dx + dy * dy

                    @returns(Tuple[Point2f,Point2f])
                    def process(value):
                      tailState = value.Item1
                      extreme1 = value.Item2
                      extreme2 = value.Item3
                      head = value.Item3
                      tail = value.Item3

                      if (distancesquare(tailState,extreme1) <= distancesquare(tailState,extreme2)):
                        head = extreme2
                        tail = extreme1
                      else:
                        head = extreme1
                        tail = extreme2

                      #CV.Circle(output, Point(headState), 3, Scalar.Rgb(204, 0, 0), -1)

                      #CV.Circle(output, Point(tailState), 3, Scalar.Rgb(0, 204, 0), -1)

                      #CV.Circle(output, Point(headState), 2, Scalar.Rgb(0, 0, 204), -1)
                      #CV.Circle(output, Point(tail), 2, Scalar.Rgb(0, 204, 0), -1)
                      #CV.Circle(output, Point(head), 2, Scalar.Rgb(0, 0, 204), -1)
                      return Tuple[Point2f,Point2f](head,tail)
                -> MemberSelector(Selector=Item1) => #15
                #14 -> MemberSelector(Selector=Item2) => #16
                #1, #7, #15, #16 -> Zip
                -> Take(Count=36550)
                -> WorkflowOutput
                #12, #15, #16 -> Zip
                -> HeadTailVisualizer
            #0 -> Condition "Include Animal2?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Length) => #1
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #2
                #1, #2 -> GreaterThan(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> GroupWorkflow "Animal2 Data"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2) => #2
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=1) => #4
                #2, #4 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: Item1[Item2]
                #1, #6 -> Zip
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\FlyDataMH.bonsai) => #6
            #0 -> Condition "Include Animal3?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Length) => #1
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #2
                #1, #2 -> GreaterThan(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> GroupWorkflow "Animal3 Data"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2) => #2
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=2) => #4
                #2, #4 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: Item1[Item2]
                #1, #6 -> Zip
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\FlyDataMH.bonsai) => #9
            #0 -> Condition "Include Animal4?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Length) => #1
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #2
                #1, #2 -> GreaterThan(Operand=IntProperty(Value=3))
                -> WorkflowOutput
            -> GroupWorkflow "Animal4 Data"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2) => #2
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=3) => #4
                #2, #4 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: Item1[Item2]
                #1, #6 -> Zip
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\FlyDataMH.bonsai) => #12
            #0 -> Condition "Include Animal5?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Length) => #1
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #2
                #1, #2 -> GreaterThan(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            -> GroupWorkflow "Animal5 Data"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2) => #2
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=4) => #4
                #2, #4 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: Item1[Item2]
                #1, #6 -> Zip
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\FlyDataMH.bonsai) => #15
            #3, #6, #9, #12, #15 -> Merge
            -> Take(Count=5)
            -> ToArray => #18
            SubscribeSubject "Number of Animals"
            -> PropertyMapping(Count) => #20
            #18, #20 -> BufferCount(Count=5, Skip=nil)
            -> WorkflowOutput
            #2 -> MemberSelector(Selector=Item1)
            -> Bonsai.Dsp.Average

            Disable WorkflowInput Source1 => #25
            -> Disable MemberSelector(Selector=Item2)
            -> Disable Concat => #27
            #25 -> Disable MemberSelector(Selector=Item1) => #28
            #27, #28 -> Disable WithLatestFrom
            -> Disable GroupWorkflow "Revert Tupple"(Description="This is to be compatible with the input data of FlyDataMH") => #30
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2) => #1
                #0 -> MemberSelector(Selector=Item1) => #2
                #1, #2 -> Zip
                -> WorkflowOutput
            -> Disable IncludeWorkflow(Path=Extensions\FlyDataMH.bonsai) => #31
            #31, #25 -> Disable WithLatestFrom
            -> Disable WorkflowOutput
            #30 -> Disable MemberSelector(Selector=Item1)
            -> Disable Bonsai.Dsp.Average
        Annotation(Text="This reverses the order of Items in the tupple, in order to comform to the previous data") => #5
        #4, #5 -> GroupWorkflow "Revert Tupple" => #6
            WorkflowInput Source1 => #0
            SubscribeSubject LEDs => #1
            #0, #1 -> WithLatestFrom => #2
            -> MemberSelector(Selector=Item2) => #3
            #2 -> MemberSelector(Selector=Item1) => #4
            #3, #4 -> Zip
            -> WorkflowOutput
        Annotation(Text="In the original code there is a third input to the zip with the info from the image and the array of all points. Seems unnecessary") => #7
        Source1=#6, Source1=#7 -> GroupWorkflow "Save Data" => #8
            WorkflowInput Source1 => #0
            -> Condition => #1
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject "Number of Animals" => #3
                #2, #3 -> WithLatestFrom
                -> Mod => #5
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #6
                #5, #6 -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Save Fly1" => #2
                WorkflowInput Source1 => #0
                SubscribeSubject "File Prefix" => #1
                ExternalizedMapping(Value(DisplayName="Fly Suffix")) => #2
                #1, #2 -> Add(Operand=StringProperty(Value=fly1_tracked.csv))
                -> PropertyMapping(FileName) => #4
                #0, #4 -> Bonsai.IO.CsvWriter => #5
                  FileName=C:\Users\HugoMarques\Downloads\Mirjam\MH-Empty_TNT_5F-20Loom_50cm-FH1_1-2023-03-24T13_42_57.fly1_tracked.csv
                  Delimiter=","
                  Append=true
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=false
                  Selector=""
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=0)
                -> Condition => #8
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Number of Animals" => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                #5, #8 -> SubscribeWhen
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject "Number of Animals" => #3
                #2, #3 -> WithLatestFrom
                -> Mod => #5
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #6
                #5, #6 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> GroupWorkflow "Save Fly2" => #4
                WorkflowInput Source1 => #0
                SubscribeSubject "File Prefix" => #1
                ExternalizedMapping(Value(DisplayName="Fly Suffix")) => #2
                #1, #2 -> Add(Operand=StringProperty(Value=fly2_tracked.csv))
                -> PropertyMapping(FileName) => #4
                #0, #4 -> Bonsai.IO.CsvWriter => #5
                  FileName=C:\Users\HugoMarques\Downloads\Mirjam\MH-Empty_TNT_5F-20Loom_50cm-FH1_1-2023-03-24T13_42_57.fly2_tracked.csv
                  Delimiter=","
                  Append=true
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=false
                  Selector=""
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=1)
                -> Condition => #8
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Number of Animals" => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                #5, #8 -> SubscribeWhen
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject "Number of Animals" => #3
                #2, #3 -> WithLatestFrom
                -> Mod => #5
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #6
                #5, #6 -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> GroupWorkflow "Save Fly3" => #6
                WorkflowInput Source1 => #0
                SubscribeSubject "File Prefix" => #1
                ExternalizedMapping(Value(DisplayName="Fly Suffix")) => #2
                #1, #2 -> Add(Operand=StringProperty(Value=fly3_tracked.csv))
                -> PropertyMapping(FileName) => #4
                #0, #4 -> Bonsai.IO.CsvWriter => #5
                  FileName=C:\Users\HugoMarques\Downloads\Mirjam\MH-Empty_TNT_5F-20Loom_50cm-FH1_1-2023-03-24T13_42_57.fly3_tracked.csv
                  Delimiter=","
                  Append=true
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=false
                  Selector=""
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=2)
                -> Condition => #8
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Number of Animals" => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                #5, #8 -> SubscribeWhen
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject "Number of Animals" => #3
                #2, #3 -> WithLatestFrom
                -> Mod => #5
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #6
                #5, #6 -> Equal(Operand=IntProperty(Value=3))
                -> WorkflowOutput
            -> GroupWorkflow "Save Fly4" => #8
                WorkflowInput Source1 => #0
                SubscribeSubject "File Prefix" => #1
                ExternalizedMapping(Value(DisplayName="Fly Suffix")) => #2
                #1, #2 -> Add(Operand=StringProperty(Value=fly4_tracked.csv))
                -> PropertyMapping(FileName) => #4
                #0, #4 -> Bonsai.IO.CsvWriter => #5
                  FileName=C:\Users\HugoMarques\Downloads\Mirjam\MH-Empty_TNT_5F-20Loom_50cm-FH1_1-2023-03-24T13_42_57.fly4_tracked.csv
                  Delimiter=","
                  Append=true
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=false
                  Selector=""
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=3)
                -> Condition => #8
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Number of Animals" => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                #5, #8 -> SubscribeWhen
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject "Number of Animals" => #3
                #2, #3 -> WithLatestFrom
                -> Mod => #5
                ExternalizedMapping(Value(DisplayName="Fly Index")) => #6
                #5, #6 -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            -> GroupWorkflow "Save Fly5" => #10
                WorkflowInput Source1 => #0
                SubscribeSubject "File Prefix" => #1
                ExternalizedMapping(Value(DisplayName="Fly Suffix")) => #2
                #1, #2 -> Add(Operand=StringProperty(Value=fly5_tracked.csv))
                -> PropertyMapping(FileName) => #4
                #0, #4 -> Bonsai.IO.CsvWriter => #5
                  FileName=C:\Users\HugoMarques\Downloads\Mirjam\MH-Empty_TNT_5F-20Loom_50cm-FH1_1-2023-03-24T13_42_57.fly5_tracked.csv
                  Delimiter=","
                  Append=true
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=false
                  Selector=""
                ExternalizedMapping(Value(DisplayName="Animal Index"))
                -> IntProperty(Value=4)
                -> Condition => #8
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Number of Animals" => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                #5, #8 -> SubscribeWhen
                -> WorkflowOutput
            #2, #4, #6, #8, #10 -> Merge
            -> WorkflowOutput
            #2 -> ElementIndex
            -> MemberSelector(Selector=Index)
            #1 -> ElementIndex
            -> MemberSelector(Selector=Index)
            #0 -> ElementIndex
            -> MemberSelector(Selector=Index)
        SubscribeSubject "Number of Animals"
        -> PropertyMapping(Count) => #10
        #8, #10 -> BufferCount(Count=5, Skip=nil)
        -> WorkflowOutput
        #6 -> ElementIndex
        #4 -> ElementIndex
        #3 -> ElementIndex
    #44, #45 -> Zip => #46
    Annotation Why??(Text="") => #47
    #46, #47 -> Take(Count=36550)
    -> WorkflowOutput
-> Concat
