WorkflowBuilder(Version=2.8.5)
Disable GroupWorkflow "Harp Comm"
    BehaviorSubject<Bonsai.Harp.HarpMessage> DeviceCommands0 => #0
    ExternalizedMapping(PortName(DisplayName=Board1Port)) => #1
    #0, #1 -> Harp.LedArray.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM5)
    -> PublishSubject DeviceEvents0

    Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnablePowerPayload(EnablePower=None))

    BehaviorSubject<Bonsai.Harp.HarpMessage> DeviceCommands1 => #5
    ExternalizedMapping(PortName(DisplayName=Board2Port)) => #6
    #5, #6 -> Harp.LedArray.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM6)
    -> PublishSubject DeviceEvents1

    SubscribeSubject RoisProcessed => #9
    -> Condition Arena0? => #10
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Condition TurnOnLed?
        WorkflowInput Source1
        -> MemberSelector(Selector=LED)
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led0On)) => #12
    #10 -> Condition TurnOffLed?
        WorkflowInput Source1
        -> MemberSelector(Selector=LED)
        -> BitwiseNot
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led0Off)) => #14
    #9 -> Condition Arena1? => #15
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> Condition TurnOnLed?
        WorkflowInput Source1
        -> MemberSelector(Selector=LED)
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led1On)) => #17
    #15 -> Condition TurnOffLed?
        WorkflowInput Source1
        -> MemberSelector(Selector=LED)
        -> BitwiseNot
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led1Off)) => #19
    Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateAuxLedPowerPayload(AuxLedPower=20)) => #20
    Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnablePowerPayload(EnablePower=Led0On)) => #21
    Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnablePowerPayload(EnablePower=Led1On)) => #22
    #12, #14, #17, #19, #20, #21, #22 -> Merge
    -> MulticastSubject DeviceCommands0 => #24
    SubscribeSubject DeviceEvents0 => #25
    #24, #25 -> SubscribeWhen

    SubscribeSubject RoisProcessed => #27
    -> Condition Arena2? => #28
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> Condition TurnOnLed?
        WorkflowInput Source1
        -> MemberSelector(Selector=LED)
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led0On)) => #30
    #28 -> Condition TurnOffLed?
        WorkflowInput Source1
        -> MemberSelector(Selector=LED)
        -> BitwiseNot
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led0Off)) => #32
    #27 -> Condition Arena3? => #33
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> Condition TurnOnLed?
        WorkflowInput Source1
        -> MemberSelector(Selector=LED)
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led1On)) => #35
    #33 -> Condition TurnOffLed?
        WorkflowInput Source1
        -> MemberSelector(Selector=LED)
        -> BitwiseNot
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led1Off)) => #37
    Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateAuxLedPowerPayload(AuxLedPower=20)) => #38
    Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnablePowerPayload(EnablePower=Led0On)) => #39
    Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnablePowerPayload(EnablePower=Led1On)) => #40
    #30, #32, #35, #37, #38, #39, #40 -> Merge
    -> MulticastSubject DeviceCommands1 => #42
    SubscribeSubject DeviceEvents1 => #43
    #42, #43 -> SubscribeWhen

GroupWorkflow DebugSegmentation
    SubscribeSubject RoisActivity
    -> Condition Arena0?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MemberSelector(Selector=Segmentation)
    -> VisualizerMapping => #3
    SubscribeSubject RoisActivity
    -> Condition Arena1?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> MemberSelector(Selector=Segmentation)
    -> VisualizerMapping => #7
    SubscribeSubject RoisActivity
    -> Condition Arena2?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> MemberSelector(Selector=Segmentation)
    -> VisualizerMapping => #11
    SubscribeSubject RoisActivity
    -> Condition Arena3?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> MemberSelector(Selector=Segmentation)
    -> VisualizerMapping => #15
    #3, #7, #11, #15 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

GroupWorkflow LedActivation
    SubscribeSubject RoisProcessed => #0
    -> Condition Arena0?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MemberSelector(Selector=LED)
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
    -> VisualizerMapping => #4
    #0 -> Condition Arena1?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> MemberSelector(Selector=LED)
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
    -> VisualizerMapping => #8
    #0 -> Condition Arena2?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> MemberSelector(Selector=LED)
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
    -> VisualizerMapping => #12
    #0 -> Condition Arena3?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> MemberSelector(Selector=LED)
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
    -> VisualizerMapping => #16
    #4, #8, #12, #16 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

GroupWorkflow ExperimentLogic
    StringProperty
    -> BehaviorSubject StartButton

    BooleanProperty(Value=false)
    -> BehaviorSubject RecordingStarted

    ExternalizedMapping
      DueTime
        DisplayName=ExperimentTime
        Description="Terminates the experiment based on the Timer. This only occurs when using the FlyCapture workflow, and not with the FileCapture."
    -> Timer(DueTime=PT30M, Period=PT0S)
    -> StringProperty(Value=Button)
    -> MulticastSubject StopButton => #7
    SubscribeSubject StartButton
    -> Condition Button => #9
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=Button))
        -> WorkflowOutput
    Annotation ExperimentTermination(Text="") => #10
    #7, #9, #10 -> SubscribeWhen

    StringProperty
    -> BehaviorSubject StopButton

    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> StringProperty(Value=Button)
    -> MulticastSubject StartButton

    SubscribeSubject StartButton
    -> Condition
        WorkflowInput Source1 => #0
        -> Equal(Operand=StringProperty(Value=Button)) => #1
        #0 -> Equal(Operand=StringProperty(Value=File)) => #2
        #1, #2 -> Zip
        -> BitwiseOr
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject RecordingStarted

    IntProperty(Value=0)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> BehaviorSubject StartTime

SubscribeSubject RecordingStarted

ExternalizedMapping("MaxLedActivationTime (ms)", "MinCoinFlipInterval (ms)", LedActivationProb)
-> GroupWorkflow Init
    ExternalizedMapping(Value(DisplayName="MaxLedActivationTime (ms)"))
    -> DoubleProperty(Value=1000)
    -> BehaviorSubject MaxActivationTime

    ExternalizedMapping(Value(DisplayName="MinCoinFlipInterval (ms)"))
    -> DoubleProperty(Value=10)
    -> BehaviorSubject MinCoinFlipInterval

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> BehaviorSubject MyDistribution

    ExternalizedMapping(Value(DisplayName=LedActivationProb))
    -> DoubleProperty(Value=1)
    -> BehaviorSubject LedActivationProb

ExternalizedMapping(FilePath, VideoFileName)
-> GroupWorkflow LogData
    ExternalizedMapping(Value(DisplayName=FilePath))
    -> StringProperty(Value=data)
    -> BehaviorSubject FilePath

    ExternalizedMapping(Value(DisplayName=VideoFileName))
    -> StringProperty(Value=Video2.avi)
    -> BehaviorSubject VideoFileName

    SubscribeSubject RoisProcessed
    -> GroupBy(KeySelector=ArenaId, ElementSelector=it)
    -> SelectMany WriteHeader => #8
        WorkflowInput Source1
        -> Take(Count=1)
        -> Merge
        -> BehaviorSubject ArenaData

        SubscribeSubject ArenaData
        -> GroupWorkflow FileHeader
            StringProperty(Value="LocalDayTime, SecondsElapsed, Dt, Centroid.X, Centroid.Y, Orientation, MajorAxis, MinorAxis, Frame, Time") => #0
            WorkflowInput Source1
            -> MemberSelector(Selector=RoiActivity.RoiActivityDetected)
            -> InputMapping(Selector=it, Count(Selector=Rows))
            -> SelectMany => #4
                ExternalizedMapping(Count)
                -> Range(Start=0, Count=1) => #1
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: ", Roi" + Convert.ToString(it)
                #1 -> Last => #3
                #2, #3 -> BufferTrigger(Count=nil)
                -> Add
                -> Take(Count=1)
                -> WorkflowOutput
            StringProperty(Value=", ActivityDetected, LED") => #5
            #0, #4, #5 -> Zip
            -> Add
            -> WorkflowOutput
        -> Take(Count=1) => #6
        GroupWorkflow ArenaFilename
            SubscribeSubject FilePath => #0
            -> StringProperty(Value=\) => #1
            SubscribeSubject ArenaData
            -> Bonsai.Scripting.Expressions.ExpressionTransform ArenaFilename => #3
              Expression: "Arena" + Convert.ToSTring(it.ArenaId) + ".csv"
            #0, #1, #3 -> Zip
            -> Add
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #8
        #6, #8 -> Bonsai.IO.CsvWriter(FileName=data\Arena3.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #9
        SubscribeSubject ArenaData => #10
        #9, #10 -> SubscribeWhen
        -> WorkflowOutput
    SubscribeSubject MyArenas
    -> MemberSelector(Selector=Arenas.Count)
    -> PropertyMapping(Count) => #11
    #8, #11 -> Take(Count=4)
    -> IntProperty(Value=0) => #13
    SubscribeSubject RoisProcessed
    -> GroupBy(KeySelector=ArenaId, ElementSelector=it)
    -> SelectMany WriteRow
        WorkflowInput Source1
        -> Merge
        -> BehaviorSubject ArenaData

        SubscribeSubject ArenaData => #3
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Timestamp => #6
        -> MemberSelector(Selector=Timestamp.LocalDateTime) => #7
        #6 -> GroupWorkflow Timestamp => #8
            WorkflowInput Source1
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #1
            SubscribeSubject StartTime => #2
            #1, #2 -> WithLatestFrom
            -> Subtract
            -> WorkflowOutput
        #6 -> MemberSelector(Selector=Value) => #9
        #7, #8, #9 -> Zip => #10
        #3 -> MemberSelector(Selector=Contour) => #11
        -> MemberSelector(Selector=Centroid) => #12
        #11 -> MemberSelector(Selector=Orientation) => #13
        #11 -> MemberSelector(Selector=MajorAxisLength) => #14
        #11 -> MemberSelector(Selector=MinorAxisLength) => #15
        #12, #13, #14, #15 -> Zip => #16
        #3 -> MemberSelector(Selector=Frame) => #17
        #3 -> Timestamp
        -> MemberSelector(Selector=Timestamp.LocalDateTime) => #19
        #17, #19 -> Zip => #20
        #3 -> MemberSelector(Selector=RoiActivity.RoiActivityDetected)
        -> InputMapping(Selector=it, Value(Selector=Rows))
        -> SelectMany LogRoiState => #23
            Annotation Note
              Text: Because the rois are a list that can have different lengths for each arena, the activity of all the rois has to be converted into a string first and then saved as a string.

            WorkflowInput Source1
            -> BehaviorSubject Buffer

            ExternalizedMapping(Value)
            -> IntProperty(Value=1)
            -> BehaviorSubject RoiSize

            SubscribeSubject RoiSize
            -> Range(Start=0, Count=1) => #7
            SubscribeSubject Buffer
            -> Bonsai.Dsp.Transpose => #9
            #7, #9 -> WithLatestFrom
            -> InputMapping(Selector=Item2, Value(Selector=Item1))
            -> Index(Operand=IntProperty(Value=0))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression: Convert.ToString(it.Val0) + ","
            SubscribeSubject RoiSize
            -> PropertyMapping(Count) => #15
            #13, #15 -> BufferCount(Count=1, Skip=nil) => #16
            -> Add
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #18
              Expression: it.Substring(0,it.Length-1)
            SubscribeSubject RoiSize => #19
            #18, #19 -> SubscribeWhen
            -> Take(Count=1)
            -> WorkflowOutput
            #16 -> MemberSelector(Selector=Count)
        #3 -> MemberSelector(Selector=RoiActivity.ActivityDetected) => #24
        #3 -> MemberSelector(Selector=LED) => #25
        #10, #16, #20, #23, #24, #25 -> Zip => #26
        GroupWorkflow ArenaFilename
            SubscribeSubject FilePath => #0
            -> StringProperty(Value=\) => #1
            SubscribeSubject ArenaData
            -> Bonsai.Scripting.Expressions.ExpressionTransform ArenaFilename => #3
              Expression: "Arena" + Convert.ToSTring(it.ArenaId) + ".csv"
            #0, #1, #3 -> Zip
            -> Add
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #28
        #26, #28 -> Bonsai.IO.CsvWriter(FileName=data\Arena2.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false) => #29
        SubscribeSubject ArenaData => #30
        #29, #30 -> SubscribeWhen
        -> WorkflowOutput
    -> IntProperty(Value=0) => #17
    #13, #17 -> Concat => #18
    SubscribeSubject StartTime => #19
    #18, #19 -> SubscribeWhen

    SubscribeSubject Frames
    -> MemberSelector(Selector=Item1) => #22
    GroupWorkflow Filename
        SubscribeSubject FilePath => #0
        -> StringProperty(Value=\) => #1
        SubscribeSubject VideoFileName => #2
        #0, #1, #2 -> Zip
        -> Add
        -> WorkflowOutput
    -> PropertyMapping(FileName) => #24
    #22, #24 -> Bonsai.Vision.VideoWriter => #25
      FileName=data\Video2.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    SubscribeSubject StartTime => #26
    #25, #26 -> SubscribeWhen

    SubscribeSubject RecordingStarted
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Timestamp
    -> MemberSelector(Selector=Timestamp)
    -> Take(Count=1) => #32
    GroupWorkflow Filename
        SubscribeSubject FilePath => #0
        -> StringProperty(Value=\) => #1
        StringProperty(Value=StartingTime.csv) => #2
        #0, #1, #2 -> Zip
        -> Add
        -> WorkflowOutput
    -> PropertyMapping(FileName) => #34
    #32, #34 -> Bonsai.IO.CsvWriter(FileName=data\StartingTime.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)

Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
-> GroupWorkflow Gui
    Disable GroupWorkflow FlyZoom
        SubscribeSubject RoisActivity
        -> Condition Arena0? => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Frames => #2
        SubscribeSubject MyArenas
        -> IncludeWorkflow(Path=CF.BonFly:IndexedArenaToRegions.bonsai, Value=0) => #4
        #2, #4 -> WithLatestFrom
        -> InputMapping(Selector=Item1, Regions(Selector=Item2))
        -> Bonsai.Vision.CropPolygon
          Regions(ArrayOfPoint(Point(X=3, Y=113), Point(X=564, Y=113), Point(X=564, Y=679), Point(X=3, Y=679)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Dsp.Rescale(Min=254, Max=0, RangeMin=0, RangeMax=254, RescaleType=Linear) => #8
        #1, #8 -> WithLatestFrom
        -> InputMapping(Selector=Item2, X(Selector=Item1.Centroid.X), Y(Selector=Item1.Centroid.Y))
        -> IncludeWorkflow(Path=CF.BonFly:CropAnimal.bonsai, X=448.184021, Y=303.703979, HalfWidth=30, HalfHeight=30)
        -> VisualizerMapping => #12
        SubscribeSubject RoisActivity
        -> Condition Arena1? => #14
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        SubscribeSubject Frames => #15
        SubscribeSubject MyArenas
        -> IncludeWorkflow(Path=CF.BonFly:IndexedArenaToRegions.bonsai, Value=1) => #17
        #15, #17 -> WithLatestFrom
        -> InputMapping(Selector=Item1, Regions(Selector=Item2))
        -> Bonsai.Vision.CropPolygon
          Regions(ArrayOfPoint(Point(X=731, Y=117), Point(X=1289, Y=117), Point(X=1289, Y=679), Point(X=731, Y=679)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Dsp.Rescale(Min=254, Max=0, RangeMin=0, RangeMax=254, RescaleType=Linear) => #21
        #14, #21 -> WithLatestFrom
        -> InputMapping(Selector=Item2, X(Selector=Item1.Centroid.X), Y(Selector=Item1.Centroid.Y))
        -> IncludeWorkflow(Path=CF.BonFly:CropAnimal.bonsai, X=NaN, Y=NaN, HalfWidth=30, HalfHeight=30)
        -> VisualizerMapping => #25
        SubscribeSubject RoisActivity
        -> Condition Arena2? => #27
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        SubscribeSubject Frames => #28
        SubscribeSubject MyArenas
        -> IncludeWorkflow(Path=CF.BonFly:IndexedArenaToRegions.bonsai, Value=2) => #30
        #28, #30 -> WithLatestFrom
        -> InputMapping(Selector=Item1, Regions(Selector=Item2))
        -> Bonsai.Vision.CropPolygon
          Regions(ArrayOfPoint(Point(X=5, Y=851), Point(X=568, Y=851), Point(X=568, Y=1407), Point(X=5, Y=1407)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Dsp.Rescale(Min=254, Max=0, RangeMin=0, RangeMax=254, RescaleType=Linear) => #34
        #27, #34 -> WithLatestFrom
        -> InputMapping(Selector=Item2, X(Selector=Item1.Centroid.X), Y(Selector=Item1.Centroid.Y))
        -> IncludeWorkflow(Path=CF.BonFly:CropAnimal.bonsai, X=354.482727, Y=223.463409, HalfWidth=30, HalfHeight=30)
        -> VisualizerMapping => #38
        SubscribeSubject RoisActivity
        -> Condition Arena3? => #40
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        SubscribeSubject Frames => #41
        SubscribeSubject MyArenas
        -> IncludeWorkflow(Path=CF.BonFly:IndexedArenaToRegions.bonsai, Value=3) => #43
        #41, #43 -> WithLatestFrom
        -> InputMapping(Selector=Item1, Regions(Selector=Item2))
        -> Bonsai.Vision.CropPolygon
          Regions(ArrayOfPoint(Point(X=732, Y=857), Point(X=1286, Y=857), Point(X=1286, Y=1396), Point(X=732, Y=1396)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Dsp.Rescale(Min=254, Max=0, RangeMin=0, RangeMax=254, RescaleType=Linear) => #47
        #40, #47 -> WithLatestFrom
        -> InputMapping(Selector=Item2, X(Selector=Item1.Centroid.X), Y(Selector=Item1.Centroid.Y))
        -> IncludeWorkflow(Path=CF.BonFly:CropAnimal.bonsai, X=315.625122, Y=375.975616, HalfWidth=30, HalfHeight=30)
        -> VisualizerMapping => #51
        #12, #25, #38, #51 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> Disable VisualizerMapping

    Disable Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")

    Disable GroupWorkflow RoiActivityDetection
        SubscribeSubject RoisActivity
        -> Condition Arena0?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
        -> VisualizerMapping => #4
        SubscribeSubject RoisActivity
        -> Condition Arena1?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
        -> VisualizerMapping => #9
        SubscribeSubject RoisActivity
        -> Condition Arena2?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
        -> VisualizerMapping => #14
        SubscribeSubject RoisActivity
        -> Condition Arena3?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
        -> VisualizerMapping => #19
        #4, #9, #14, #19 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> Disable VisualizerMapping

    Disable GroupWorkflow RoiActivity
        SubscribeSubject RoisActivity
        -> Condition Arena0?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> Index(Operand=IntProperty(Value=0))
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
        -> VisualizerMapping => #5
        SubscribeSubject RoisActivity
        -> Condition Arena1?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> Index(Operand=IntProperty(Value=0))
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
        -> VisualizerMapping => #11
        SubscribeSubject RoisActivity
        -> Condition Arena2?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> Index(Operand=IntProperty(Value=0))
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
        -> VisualizerMapping => #17
        SubscribeSubject RoisActivity
        -> Condition Arena3?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> Index(Operand=IntProperty(Value=0))
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
        -> VisualizerMapping => #23
        #5, #11, #17, #23 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> Disable VisualizerMapping

    Disable WorkflowOutput

    SubscribeSubject RecordingStarted
    -> BitwiseNot
    -> PropertyMapping(Enabled)
    -> Bonsai.Gui.ButtonBuilder(Enabled=false, Visible=true, Font="Microsoft Sans Serif, 15.9000006pt", Text=Start)
    -> MulticastSubject StartButton
    -> VisualizerMapping => #13
    Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.9000006pt", Text=Stop)
    -> MulticastSubject StopButton
    -> VisualizerMapping => #16
    #13, #16 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #18
    WorkflowInput Source1
    -> VisualizerMapping => #20
    #18, #20 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #22
    GroupWorkflow Frames
        SubscribeSubject Frames
        -> MemberSelector(Selector=Item1) => #1
        -> InputMapping(Selector=it, Size(Selector="Width,Height"))
        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1408, Height=1408), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #3
        #1 -> Bonsai.Dsp.Split => #4
        -> MemberSelector(Selector=Item1) => #5
        #4 -> MemberSelector(Selector=Item1) => #6
        #4 -> MemberSelector(Selector=Item1) => #7
        #5, #6, #7 -> Zip
        -> Bonsai.Dsp.Merge
        -> PropertyMapping(Image) => #10
        #3, #10 -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=0, Height=0), Interpolation=Linear) => #11
        Bonsai.Vision.CreatePoint2f(X=-50, Y=-50) => #12
        SubscribeSubject StartButton
        -> Condition
            WorkflowInput Source1 => #0
            -> Equal(Operand=StringProperty(Value=Button)) => #1
            #0 -> Equal(Operand=StringProperty(Value=File)) => #2
            #1, #2 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> Bonsai.Vision.CreatePoint2f(X=50, Y=50) => #15
        #12, #15 -> Merge
        -> PropertyMapping(Center) => #17
        #11, #17 -> Bonsai.Vision.Drawing.Circle(Center(X=50, Y=50), Radius=20, Color(Val0=0, Val1=0, Val2=255, Val3=255), Thickness=20, LineType=Connected8, Shift=0)
        -> Bonsai.Vision.Drawing.DrawCanvas
        -> WorkflowOutput
    -> VisualizerMapping => #24
    SubscribeSubject RoisActivity
    -> Condition Arena0? => #26
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #27
    #26 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #29
    #27, #29 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi
            Point(X=345, Y=234)
            Point(X=345, Y=237)
            Point(X=344, Y=240)
            Point(X=343, Y=243)
            Point(X=341, Y=245)
            Point(X=339, Y=247)
            Point(X=337, Y=249)
            Point(X=335, Y=250)
            Point(X=332, Y=251)
            Point(X=330, Y=251)
            Point(X=327, Y=251)
            Point(X=324, Y=250)
            Point(X=322, Y=249)
            Point(X=320, Y=247)
            Point(X=318, Y=245)
            Point(X=316, Y=243)
            Point(X=315, Y=240)
            Point(X=314, Y=237)
            Point(X=314, Y=234)
            Point(X=314, Y=232)
            Point(X=315, Y=229)
            Point(X=316, Y=226)
            Point(X=318, Y=224)
            Point(X=320, Y=222)
            Point(X=322, Y=220)
            Point(X=324, Y=219)
            Point(X=327, Y=218)
            Point(X=330, Y=218)
            Point(X=332, Y=218)
            Point(X=335, Y=219)
            Point(X=337, Y=220)
            Point(X=339, Y=222)
            Point(X=341, Y=224)
            Point(X=343, Y=226)
            Point(X=344, Y=229)
            Point(X=345, Y=232)
          Rect(X=314, Y=218, Width=32, Height=34)
          Activity(Val0=0, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #31
    SubscribeSubject RoisActivity
    -> Condition Arena1? => #33
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #34
    #33 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #36
    #34, #36 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi(Point(X=507, Y=42), Point(X=530, Y=42), Point(X=530, Y=75), Point(X=507, Y=75))
          Rect(X=507, Y=42, Width=24, Height=34)
          Activity(Val0=0, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #38
    SubscribeSubject RoisActivity
    -> Condition Arena2? => #40
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #41
    #40 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #43
    #41, #43 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi
            Point(X=369, Y=238)
            Point(X=369, Y=241)
            Point(X=368, Y=244)
            Point(X=367, Y=247)
            Point(X=365, Y=250)
            Point(X=362, Y=252)
            Point(X=360, Y=254)
            Point(X=357, Y=255)
            Point(X=354, Y=256)
            Point(X=350, Y=256)
            Point(X=347, Y=256)
            Point(X=344, Y=255)
            Point(X=341, Y=254)
            Point(X=339, Y=252)
            Point(X=336, Y=250)
            Point(X=334, Y=247)
            Point(X=333, Y=244)
            Point(X=332, Y=241)
            Point(X=332, Y=238)
            Point(X=332, Y=235)
            Point(X=333, Y=232)
            Point(X=334, Y=229)
            Point(X=336, Y=226)
            Point(X=339, Y=224)
            Point(X=341, Y=222)
            Point(X=344, Y=221)
            Point(X=347, Y=220)
            Point(X=350, Y=220)
            Point(X=354, Y=220)
            Point(X=357, Y=221)
            Point(X=360, Y=222)
            Point(X=362, Y=224)
            Point(X=365, Y=226)
            Point(X=367, Y=229)
            Point(X=368, Y=232)
            Point(X=369, Y=235)
          Rect(X=332, Y=220, Width=38, Height=37)
          Activity(Val0=43095, Val1=0, Val2=0, Val3=0)
        RegionActivity
          Roi
            Point(X=308, Y=346)
            Point(X=308, Y=349)
            Point(X=307, Y=353)
            Point(X=306, Y=357)
            Point(X=304, Y=360)
            Point(X=301, Y=363)
            Point(X=299, Y=365)
            Point(X=296, Y=367)
            Point(X=293, Y=368)
            Point(X=290, Y=368)
            Point(X=286, Y=368)
            Point(X=283, Y=367)
            Point(X=280, Y=365)
            Point(X=278, Y=363)
            Point(X=275, Y=360)
            Point(X=273, Y=357)
            Point(X=272, Y=353)
            Point(X=271, Y=349)
            Point(X=271, Y=346)
            Point(X=271, Y=342)
            Point(X=272, Y=338)
            Point(X=273, Y=334)
            Point(X=275, Y=331)
            Point(X=278, Y=328)
            Point(X=280, Y=326)
            Point(X=283, Y=324)
            Point(X=286, Y=323)
            Point(X=290, Y=323)
            Point(X=293, Y=323)
            Point(X=296, Y=324)
            Point(X=299, Y=326)
            Point(X=301, Y=328)
            Point(X=304, Y=331)
            Point(X=306, Y=334)
            Point(X=307, Y=338)
            Point(X=308, Y=342)
          Rect(X=271, Y=323, Width=38, Height=46)
          Activity(Val0=0, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #45
    SubscribeSubject RoisActivity
    -> Condition Arena3? => #47
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #48
    #47 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #50
    #48, #50 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi
            Point(X=337, Y=206)
            Point(X=337, Y=210)
            Point(X=336, Y=213)
            Point(X=335, Y=216)
            Point(X=334, Y=219)
            Point(X=332, Y=222)
            Point(X=330, Y=224)
            Point(X=328, Y=226)
            Point(X=326, Y=227)
            Point(X=324, Y=227)
            Point(X=321, Y=227)
            Point(X=319, Y=226)
            Point(X=317, Y=224)
            Point(X=315, Y=222)
            Point(X=313, Y=219)
            Point(X=312, Y=216)
            Point(X=311, Y=213)
            Point(X=310, Y=210)
            Point(X=310, Y=206)
            Point(X=310, Y=202)
            Point(X=311, Y=199)
            Point(X=312, Y=196)
            Point(X=313, Y=193)
            Point(X=315, Y=190)
            Point(X=317, Y=188)
            Point(X=319, Y=186)
            Point(X=321, Y=185)
            Point(X=324, Y=185)
            Point(X=326, Y=185)
            Point(X=328, Y=186)
            Point(X=330, Y=188)
            Point(X=332, Y=190)
            Point(X=334, Y=193)
            Point(X=335, Y=196)
            Point(X=336, Y=199)
            Point(X=337, Y=202)
          Rect(X=310, Y=185, Width=28, Height=43)
          Activity(Val0=0, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #52
    #31, #38, #45, #52 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #54
    #22, #24, #54 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")

IntProperty(Value=0)
-> IncludeWorkflow(Path=CF.BonFly:LoadArenaSettings.bonsai, Path=ArenaList2.json)
-> BehaviorSubject MyArenas

Annotation "File tracking"(Text="Uncomment the full branch for file tracking.")
-> Bonsai.Vision.FileCapture => #15
  FileName=C:\Users\HugoMarques\Downloads\cam07_2024-10-31T14_14_55.avi
  PlaybackRate=100000
  StartPosition=4900
  PositionUnits=Frames
  Loop=false
  Playing=true
-> Bonsai.Vision.Grayscale => #16
#15 -> ElementIndex
-> MemberSelector(Selector=Index)
-> BehaviorSubject FrameNumber => #19
#16, #19 -> Zip
-> BehaviorSubject Frames
-> StringProperty(Value=File)
-> MulticastSubject StartButton
-> Last
-> MulticastSubject StopButton

Annotation "Camera tracking"(Text="Uncomment the full branch for camera tracking.")
-> Disable Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #27
-> Disable MemberSelector(Selector=Image)
-> Disable Bonsai.Vision.Grayscale => #29
#27 -> Disable MemberSelector(Selector=Metadata.embeddedFrameCounter)
-> Disable BehaviorSubject FrameNumber => #31
#29, #31 -> Disable Zip
-> Disable BehaviorSubject Frames
-> Disable TimeInterval
-> Disable MemberSelector(Selector=Interval.TotalMilliseconds)

SubscribeSubject Frames => #36
ExternalizedMapping("Bkg Frames") => #37
#36, #37 -> GroupWorkflow "Subtract Background" => #38
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1) => #1
    -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=-1, Shift=0) => #2
    #1 -> BonZeb.CalculateBackground(PixelSearch=Brightest, NoiseThreshold=0)
    -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0) => #4
    ExternalizedMapping(Count(DisplayName="Bkg Frames")) => #5
    #4, #5 -> Skip(Count=20)
    -> Take(Count=1) => #7
    #2, #7 -> WithLatestFrom
    -> Add
    -> WorkflowOutput
ExternalizedMapping(ThresholdValue) => #39
#38, #39 -> Bonsai.Vision.Threshold(ThresholdValue=34, MaxValue=255, ThresholdType=Binary) => #40
#36 -> MemberSelector(Selector=Item2) => #41
#40, #41 -> Zip
-> BehaviorSubject "Processed Frames"

SubscribeSubject "Processed Frames" => #44
SubscribeSubject MyArenas => #45
#44, #45 -> WithLatestFrom => #46
ExternalizedMapping(MinArea, MaxArea, RoiActivityThreshold) => #47
#46, #47 -> CreateObservable ProcessArenaRois
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item2)
    -> MemberSelector(Selector=Arenas)
    -> Concat => #3
    #0 -> MemberSelector(Selector=Item1) => #4
    #3, #4 -> WithLatestFrom
    -> InputMapping(Selector=it, RoiCount(Selector=Item1.Rois.Count)) => #6
    ExternalizedMapping(MinArea, MaxArea, RoiActivityThreshold) => #7
    #6, #7 -> SelectMany ProcessArena
        WorkflowInput Source1 => #0
        -> GroupWorkflow CropArena => #1
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2)
            -> MemberSelector(Selector=Item1) => #2
            #0 -> MemberSelector(Selector=Item1)
            -> IncludeWorkflow(Path=CF.BonFly:ArenaRegionToRegions.bonsai) => #4
            #2, #4 -> Zip
            -> InputMapping(Selector=Item1, Regions(Selector=Item2))
            -> Bonsai.Vision.CropPolygon
              Regions(ArrayOfPoint(Point(X=732, Y=857), Point(X=1286, Y=857), Point(X=1286, Y=1396), Point(X=732, Y=1396)))
              MaskType=ToZero
              FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
            -> WorkflowOutput
        #0 -> MemberSelector(Selector=Item1)
        -> IncludeWorkflow(Path=CF.BonFly:ArenaRoisToRegions.bonsai) => #3
        #1, #3 -> Zip => #4
        -> InputMapping(Selector=Item1, Regions(Selector=Item2)) => #5
        ExternalizedMapping(Operation) => #6
        #5, #6 -> Bonsai.Vision.RoiActivity => #7
          Regions
            ArrayOfPoint
              Point(X=337, Y=206)
              Point(X=337, Y=210)
              Point(X=336, Y=213)
              Point(X=335, Y=216)
              Point(X=334, Y=219)
              Point(X=332, Y=222)
              Point(X=330, Y=224)
              Point(X=328, Y=226)
              Point(X=326, Y=227)
              Point(X=324, Y=227)
              Point(X=321, Y=227)
              Point(X=319, Y=226)
              Point(X=317, Y=224)
              Point(X=315, Y=222)
              Point(X=313, Y=219)
              Point(X=312, Y=216)
              Point(X=311, Y=213)
              Point(X=310, Y=210)
              Point(X=310, Y=206)
              Point(X=310, Y=202)
              Point(X=311, Y=199)
              Point(X=312, Y=196)
              Point(X=313, Y=193)
              Point(X=315, Y=190)
              Point(X=317, Y=188)
              Point(X=319, Y=186)
              Point(X=321, Y=185)
              Point(X=324, Y=185)
              Point(X=326, Y=185)
              Point(X=328, Y=186)
              Point(X=330, Y=188)
              Point(X=332, Y=190)
              Point(X=334, Y=193)
              Point(X=335, Y=196)
              Point(X=336, Y=199)
              Point(X=337, Y=202)
          Operation=Sum
        ExternalizedMapping(RoiCount, RoiActivityThreshold) => #8
        #7, #8 -> SelectMany GetRoiActivityData => #9
            WorkflowInput Source1
            -> BehaviorSubject Rois

            ExternalizedMapping(Value(DisplayName=RoiCount))
            -> IntProperty(Value=1)
            -> BehaviorSubject RoisCount

            SubscribeSubject Rois
            -> Concat
            -> MemberSelector(Selector=Activity.Val0) => #7
            -> GroupWorkflow RoiActivity => #8
                WorkflowInput Source1 => #0
                SubscribeSubject RoisCount
                -> PropertyMapping(Count) => #2
                #0, #2 -> Bonsai.Dsp.Buffer(Count=1, Skip=nil)
                -> Bonsai.Dsp.Transpose
                -> WorkflowOutput
            ExternalizedMapping(RoiActivityThreshold) => #9
            #7, #9 -> GroupWorkflow RoiActivityDetected => #10
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=RoiActivityThreshold)) => #1
                #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                  Expression: Convert.ToInt32(it)
                SubscribeSubject RoisCount
                -> PropertyMapping(Count) => #5
                #3, #5 -> Bonsai.Dsp.Buffer(Count=1, Skip=nil)
                -> Bonsai.Dsp.Transpose
                -> WorkflowOutput
            -> Bonsai.Dsp.Sum
            -> MemberSelector(Selector=Val0) => #12
            #8, #10, #12 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
              Expression:
                new(
                  Item1 as RoiActivity,
                  Item2 as RoiActivityDetected,
                  Item3 as ActivityDetected
                )
            SubscribeSubject RoisCount => #15
            #14, #15 -> SubscribeWhen
            -> Take(Count=1)
            -> WorkflowOutput
        #4 -> MemberSelector(Selector=Item1) => #10
        ExternalizedMapping(MinArea, MaxArea) => #11
        #10, #11 -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=20, MaxArea=500) => #12
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion => #14
        #0 -> MemberSelector(Selector=Item2.Item2) => #15
        #7, #9, #10, #14, #15, #12 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> ElementIndex
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          it.Index as ArenaId,
          it.Value.Item1 as Rois,
          it.Value.Item2 as RoiActivity,
          it.Value.Item3 as CroppedArena,
          it.Value.Item4 as Contour,
          it.Value.Item5 as Frame,
          it.Value.Item6 as Segmentation
        )
    -> WorkflowOutput
-> Concat
-> BehaviorSubject RoisActivity
-> TimeInterval
-> MemberSelector(Selector=Interval.TotalMilliseconds)

SubscribeSubject RoisActivity
-> GroupBy(KeySelector=ArenaId, ElementSelector=it)
-> CreateObservable LedControl
    WorkflowInput Source1
    -> Take(Count=1)
    -> Merge
    -> BehaviorSubject ArenaData

    DoubleProperty(Value=0)
    -> BehaviorSubject ActivationTime

    BooleanProperty(Value=false)
    -> Timestamp
    -> PublishSubject ActivationReset

    SubscribeSubject ArenaData => #9
    SubscribeSubject ArenaData
    -> MemberSelector(Selector=RoiActivity.ActivityDetected)
    -> GreaterThan(Operand=DoubleProperty(Value=0))
    -> DistinctUntilChanged => #13
    -> Condition EnteredRoi => #14
        WorkflowInput Source1
        -> WorkflowOutput
    -> GroupWorkflow "Coin Flip" => #15
        WorkflowInput Source1
        -> Condition WaitingTimeElapsed?
            WorkflowInput Source1
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
            SubscribeSubject ActivationReset
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2, #4 -> WithLatestFrom
            -> Subtract => #6
            SubscribeSubject MinCoinFlipInterval
            -> PropertyMapping(Value) => #8
            #6, #8 -> GreaterThan(Operand=DoubleProperty(Value=10))
            -> WorkflowOutput
        -> GroupWorkflow FlipCoin
            WorkflowInput Source1 => #0
            SubscribeSubject MyDistribution => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Numerics.Distributions.Sample => #4
            SubscribeSubject LedActivationProb
            -> PropertyMapping(Value) => #6
            #4, #6 -> LessThan(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> WorkflowOutput
    #14 -> SelectMany Timeout?(Description="Turns OFF led if the maximum activation time is exceeded.\n")
        WorkflowInput Source1 => #0
        SubscribeSubject MaxActivationTime
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(DueTime) => #3
        #0, #3 -> Delay(DueTime=PT1S)
        -> BooleanProperty(Value=true) => #5
        SubscribeSubject ActivationReset
        -> BooleanProperty(Value=false) => #7
        #5, #7 -> Amb
        -> Take(Count=1)
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #17
    #13 -> Condition ExitedRoi
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> Timestamp
    -> MulticastSubject ActivationReset
    -> BooleanProperty(Value=false) => #21
    #15, #17, #21 -> Merge => #22
    #9, #22 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          Item1.ArenaId as ArenaId,
          Item1.Rois as Rois,
          Item1.RoiActivity as RoiActivity,
          Item1.CroppedArena as CroppedArena,
          Item1.Contour as Contour,
          Item1.Frame as Frame,
          Item1.Segmentation as Segmentation,
          Item2 as LED
        )
    -> WorkflowOutput
-> Merge
-> BehaviorSubject RoisProcessed

SubscribeSubject StopButton
-> Condition
    WorkflowInput Source1 => #0
    -> Equal(Operand=StringProperty(Value=Button)) => #1
    #0 -> Equal(Operand=StringProperty(Value=File)) => #2
    #1, #2 -> Zip
    -> BitwiseOr
    -> WorkflowOutput
-> Take(Count=1)
-> WorkflowOutput
