<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Arena RIO Selection</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arena Selected String</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Arena Selected</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Raw Frames</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Number of Arenas</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Count" Selector="Item2" />
              </PropertyMappings>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>0</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:RoiActivity">
                <cv:Operation>Sum</cv:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>0</rx:Count>
                <rx:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Arena ROI Activity Regions</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arena Regions </Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arena Selected</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:RoiActivity">
                <cv:Operation>Sum</cv:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Number of Arenas</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Count" Selector="Item2" />
                    </PropertyMappings>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Range">
                      <rx:Start>0</rx:Start>
                      <rx:Count>0</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Arena Selected</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Selected Index?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Equal" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1.Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Not Selected Index?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Equal" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Arena ROI Activity Regions</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="Item1.Item1" />
                    </PropertyMappings>
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Number of Arenas</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:BufferCount">
                      <rx:Count>4</rx:Count>
                      <rx:Skip xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="8" Label="Source2" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="12" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="17" Label="Source1" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="21" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="gui:ListBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Items>
                <gui:string>0</gui:string>
                <gui:string>1</gui:string>
                <gui:string>2</gui:string>
                <gui:string>3</gui:string>
              </gui:Items>
              <gui:SelectedItem>2</gui:SelectedItem>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Arena Selected String</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Selected Arena</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Arena Regions </Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Arena Selected</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Selected Arena ROIs</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Arena ROI Activity Regions</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Arena Selected</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>3</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="4" To="10" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="27" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="27" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source3" />
            <Edge From="27" To="28" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Number of Arenas</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Raw Frames</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Raw Frames</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Get Arena Rects</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Image Rescaling</Name>
              <Text><![CDATA[This shifts the intensity of the pixels to have a minimum value of 2 to allow for further ROI thresholding.]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>255</dsp:Max>
                <dsp:RangeMin>2</dsp:RangeMin>
                <dsp:RangeMax>255</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Regions" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="cv:CropPolygon,p1:Point[][]">
              <MemberName>Regions</MemberName>
              <Value>
                <ArrayOfPoint>
                  <Point>
                    <X>265</X>
                    <Y>348</Y>
                  </Point>
                  <Point>
                    <X>340</X>
                    <Y>348</Y>
                  </Point>
                  <Point>
                    <X>340</X>
                    <Y>400</Y>
                  </Point>
                  <Point>
                    <X>265</X>
                    <Y>400</Y>
                  </Point>
                </ArrayOfPoint>
                <ArrayOfPoint>
                  <Point>
                    <X>22</X>
                    <Y>266</Y>
                  </Point>
                  <Point>
                    <X>113</X>
                    <Y>266</Y>
                  </Point>
                  <Point>
                    <X>113</X>
                    <Y>343</Y>
                  </Point>
                  <Point>
                    <X>22</X>
                    <Y>343</Y>
                  </Point>
                </ArrayOfPoint>
                <ArrayOfPoint>
                  <Point>
                    <X>136</X>
                    <Y>135</Y>
                  </Point>
                  <Point>
                    <X>137</X>
                    <Y>135</Y>
                  </Point>
                  <Point>
                    <X>137</X>
                    <Y>143</Y>
                  </Point>
                  <Point>
                    <X>136</X>
                    <Y>143</Y>
                  </Point>
                </ArrayOfPoint>
                <ArrayOfPoint>
                  <Point>
                    <X>517</X>
                    <Y>200</Y>
                  </Point>
                  <Point>
                    <X>517</X>
                    <Y>200</Y>
                  </Point>
                  <Point>
                    <X>517</X>
                    <Y>198</Y>
                  </Point>
                  <Point>
                    <X>517</X>
                    <Y>198</Y>
                  </Point>
                </ArrayOfPoint>
              </Value>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Arena Rects</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Regions" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CropPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>265</cv:X>
                      <cv:Y>348</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>340</cv:X>
                      <cv:Y>348</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>340</cv:X>
                      <cv:Y>400</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>265</cv:X>
                      <cv:Y>400</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>22</cv:X>
                      <cv:Y>266</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>113</cv:X>
                      <cv:Y>266</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>113</cv:X>
                      <cv:Y>343</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>22</cv:X>
                      <cv:Y>343</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>136</cv:X>
                      <cv:Y>135</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>137</cv:X>
                      <cv:Y>135</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>137</cv:X>
                      <cv:Y>143</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>136</cv:X>
                      <cv:Y>143</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>517</cv:X>
                      <cv:Y>200</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>517</cv:X>
                      <cv:Y>200</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>517</cv:X>
                      <cv:Y>198</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>517</cv:X>
                      <cv:Y>198</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>ToZero</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Raw Frames</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Raw Frames</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Parse Arena Rects</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arena Rects</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Create Individual Region</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Regions" Selector="Item1" />
        </PropertyMappings>
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>517</cv:X>
                <cv:Y>200</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>517</cv:X>
                <cv:Y>200</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>517</cv:X>
                <cv:Y>198</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>517</cv:X>
                <cv:Y>198</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferCount">
          <rx:Count>4</rx:Count>
          <rx:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Arena Regions </Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Arena Rects</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Define ROIs</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>ROIs</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>Arena Buffer</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Raw Frames</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Subtract Background</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>Frames</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Frames</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>ROI Activity</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>Max ROI Activity</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>ROIs Max Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Arena Rects</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="viz:TableLayoutPanelBuilder">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Frames</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Max Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="viz:TableLayoutPanelBuilder">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="12" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="22" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="25" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="31" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="62" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="56" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="56" Label="Source2" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="56" Label="Source3" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source4" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="62" Label="Source2" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="62" Label="Source3" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source4" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>