WorkflowBuilder(Version=2.8.5)
Disable GroupWorkflow "Harp Comm"
    BehaviorSubject<Bonsai.Harp.HarpMessage> DeviceCommands0 => #0
    ExternalizedMapping(PortName(DisplayName=Board1Port)) => #1
    #0, #1 -> Harp.LedArray.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM5)
    -> PublishSubject DeviceEvents0

    BehaviorSubject<Bonsai.Harp.HarpMessage> DeviceCommands1 => #4
    ExternalizedMapping(PortName(DisplayName=Board2Port)) => #5
    #4, #5 -> Harp.LedArray.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM6)
    -> PublishSubject DeviceEvents1

    SubscribeSubject RoisActivity
    -> Condition Arena0? => #9
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Condition RoiActivityDetected
        WorkflowInput Source1
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led0On)) => #11
    #9 -> Condition RoiActivityNotDetected
        WorkflowInput Source1
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> Equal(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led0Off)) => #13
    SubscribeSubject RoisActivity
    -> Condition Arena1? => #15
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> Condition RoiActivityDetected
        WorkflowInput Source1
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnablePowerPayload(EnablePower=Led1On)) => #17
    #15 -> Condition RoiActivityNotDetected
        WorkflowInput Source1
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> Equal(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led1Off)) => #19
    Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateAuxLedPowerPayload(AuxLedPower=60)) => #20
    #11, #13, #17, #19, #20 -> Merge
    -> MulticastSubject DeviceCommands0 => #22
    SubscribeSubject DeviceEvents0 => #23
    #22, #23 -> SubscribeWhen

    SubscribeSubject RoisActivity
    -> Condition Arena2? => #26
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> Condition RoiActivityDetected
        WorkflowInput Source1
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnablePowerPayload(EnablePower=Led0On)) => #28
    #26 -> Condition RoiActivityNotDetected
        WorkflowInput Source1
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> Equal(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led0Off)) => #30
    SubscribeSubject RoisActivity
    -> Condition Arena3? => #32
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> Condition RoiActivityDetected
        WorkflowInput Source1
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led1On)) => #34
    #32 -> Condition RoiActivityNotDetected
        WorkflowInput Source1
        -> MemberSelector(Selector=RoiActivity.ActivityDetected)
        -> Equal(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateEnableLedPayload(EnableLed=Led1Off)) => #36
    Harp.LedArray.CreateMessage(MessageType=Write, Payload=Harp.LedArray.CreateAuxLedPowerPayload(AuxLedPower=60)) => #37
    #28, #30, #34, #36, #37 -> Merge
    -> MulticastSubject DeviceCommands1 => #39
    SubscribeSubject DeviceEvents1 => #40
    #39, #40 -> SubscribeWhen

GroupWorkflow Utils

GroupWorkflow SegmentationTroubleshooting
    SubscribeSubject RoisActivity
    -> Condition Arena0?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MemberSelector(Selector=Segmentation)
    -> VisualizerMapping => #3
    SubscribeSubject RoisActivity
    -> Condition Arena1?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> MemberSelector(Selector=Segmentation)
    -> VisualizerMapping => #7
    SubscribeSubject RoisActivity
    -> Condition Arena2?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> MemberSelector(Selector=Segmentation)
    -> VisualizerMapping => #11
    SubscribeSubject RoisActivity
    -> Condition Arena3?
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> MemberSelector(Selector=Segmentation)
    -> VisualizerMapping => #15
    #3, #7, #11, #15 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

ExternalizedMapping(FileName)
-> GroupWorkflow LogData
    SubscribeSubject RoisActivity
    -> GroupBy(KeySelector=ArenaId, ElementSelector=it)
    -> SelectMany WriteHeader => #2
        WorkflowInput Source1
        -> Take(Count=1)
        -> Merge
        -> BehaviorSubject ArenaData

        SubscribeSubject ArenaData
        -> GroupWorkflow FileHeader
            StringProperty(Value="Timestamp, Frame, Centroid.X, Centroid.Y, Angle") => #0
            WorkflowInput Source1
            -> MemberSelector(Selector=RoiActivity.RoiActivityDetected)
            -> InputMapping(Selector=it, Count(Selector=Rows))
            -> SelectMany => #4
                ExternalizedMapping(Count)
                -> Range(Start=0, Count=2) => #1
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: ", Roi" + Convert.ToString(it)
                #1 -> Last => #3
                #2, #3 -> BufferTrigger(Count=nil)
                -> Add
                -> Take(Count=1)
                -> WorkflowOutput
            StringProperty(Value=", LED") => #5
            #0, #4, #5 -> Zip
            -> Add
            -> WorkflowOutput
        -> Take(Count=1) => #6
        SubscribeSubject ArenaData
        -> Bonsai.Scripting.Expressions.ExpressionTransform ArenaFilename
          Expression: "Arena" + Convert.ToSTring(it.ArenaId) + ".csv"
        -> PropertyMapping(FileName) => #9
        #6, #9 -> Bonsai.IO.CsvWriter(FileName=Arena2.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #10
        SubscribeSubject ArenaData => #11
        #10, #11 -> SubscribeWhen
        -> WorkflowOutput
    SubscribeSubject MyArenas
    -> MemberSelector(Selector=Arenas.Count)
    -> PropertyMapping(Count) => #5
    #2, #5 -> Take(Count=4)
    -> IntProperty(Value=0) => #7
    SubscribeSubject RoisActivity
    -> GroupBy(KeySelector=ArenaId, ElementSelector=it)
    -> SelectMany WriteRow
        WorkflowInput Source1
        -> Merge
        -> BehaviorSubject ArenaData

        SubscribeSubject ArenaData => #3
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Timestamp => #6
        -> GroupWorkflow Timestamp => #7
            WorkflowInput Source1
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #1
            SubscribeSubject StartTime => #2
            #1, #2 -> WithLatestFrom
            -> Subtract
            -> WorkflowOutput
        #6 -> MemberSelector(Selector=Value) => #8
        #3 -> MemberSelector(Selector=Centroid) => #9
        #3 -> MemberSelector(Selector=RoiActivity.RoiActivityDetected)
        -> InputMapping(Selector=it, Value(Selector=Rows))
        -> SelectMany LogRoiState => #12
            Annotation Note
              Text: Because the rois are a list that can have different lengths for each arena, the activity of all the rois has to be converted into a string first and then saved as a string.

            WorkflowInput Source1
            -> BehaviorSubject Buffer

            ExternalizedMapping(Value)
            -> IntProperty(Value=1)
            -> BehaviorSubject RoiSize

            SubscribeSubject RoiSize
            -> Range(Start=0, Count=1) => #7
            SubscribeSubject Buffer
            -> Bonsai.Dsp.Transpose => #9
            #7, #9 -> WithLatestFrom
            -> InputMapping(Selector=Item2, Value(Selector=Item1))
            -> Index(Operand=IntProperty(Value=0))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression: Convert.ToString(it.Val0) + ","
            SubscribeSubject RoiSize
            -> PropertyMapping(Count) => #15
            #13, #15 -> BufferCount(Count=1, Skip=nil) => #16
            -> Add
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #18
              Expression: it.Substring(0,it.Length-1)
            SubscribeSubject RoiSize => #19
            #18, #19 -> SubscribeWhen
            -> Take(Count=1)
            -> WorkflowOutput
            #16 -> MemberSelector(Selector=Count)
        #3 -> MemberSelector(Selector=RoiActivity.ActivityDetected) => #13
        #7, #8, #9, #12, #13 -> Zip => #14
        SubscribeSubject ArenaData
        -> Bonsai.Scripting.Expressions.ExpressionTransform ArenaFilename
          Expression: "Arena" + Convert.ToSTring(it.ArenaId) + ".csv"
        -> PropertyMapping(FileName) => #17
        #14, #17 -> Bonsai.IO.CsvWriter(FileName=Arena1.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false) => #18
        SubscribeSubject ArenaData => #19
        #18, #19 -> SubscribeWhen
        -> WorkflowOutput
    -> IntProperty(Value=0) => #11
    #7, #11 -> Concat => #12
    SubscribeSubject StartTime => #13
    #12, #13 -> SubscribeWhen

    SubscribeSubject Frames => #15
    ExternalizedMapping(FileName) => #16
    #15, #16 -> Bonsai.Vision.VideoWriter => #17
      FileName=Video.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    SubscribeSubject StartTime => #18
    #17, #18 -> SubscribeWhen

Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
-> GroupWorkflow Gui
    Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.9000006pt", Text=Start)
    -> BehaviorSubject StartButton
    -> VisualizerMapping => #2
    Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.9000006pt", Text=Stop)
    -> BehaviorSubject StopButton
    -> VisualizerMapping => #5
    #2, #5 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #7
    WorkflowInput Source1
    -> VisualizerMapping => #9
    #7, #9 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #11
    SubscribeSubject RoisActivity
    -> Condition Arena0? => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #14
    #13 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #16
    #14, #16 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi
            Point(X=345, Y=234)
            Point(X=345, Y=237)
            Point(X=344, Y=240)
            Point(X=343, Y=243)
            Point(X=341, Y=245)
            Point(X=339, Y=247)
            Point(X=337, Y=249)
            Point(X=335, Y=250)
            Point(X=332, Y=251)
            Point(X=330, Y=251)
            Point(X=327, Y=251)
            Point(X=324, Y=250)
            Point(X=322, Y=249)
            Point(X=320, Y=247)
            Point(X=318, Y=245)
            Point(X=316, Y=243)
            Point(X=315, Y=240)
            Point(X=314, Y=237)
            Point(X=314, Y=234)
            Point(X=314, Y=232)
            Point(X=315, Y=229)
            Point(X=316, Y=226)
            Point(X=318, Y=224)
            Point(X=320, Y=222)
            Point(X=322, Y=220)
            Point(X=324, Y=219)
            Point(X=327, Y=218)
            Point(X=330, Y=218)
            Point(X=332, Y=218)
            Point(X=335, Y=219)
            Point(X=337, Y=220)
            Point(X=339, Y=222)
            Point(X=341, Y=224)
            Point(X=343, Y=226)
            Point(X=344, Y=229)
            Point(X=345, Y=232)
          Rect(X=314, Y=218, Width=32, Height=34)
          Activity(Val0=29.679334916864608, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #18
    SubscribeSubject RoisActivity
    -> Condition Arena1? => #20
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #21
    #20 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #23
    #21, #23 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi(Point(X=507, Y=42), Point(X=530, Y=42), Point(X=530, Y=75), Point(X=507, Y=75))
          Rect(X=507, Y=42, Width=24, Height=34)
          Activity(Val0=255, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #25
    SubscribeSubject RoisActivity
    -> Condition Arena2? => #27
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #28
    #27 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #30
    #28, #30 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi
            Point(X=369, Y=238)
            Point(X=369, Y=241)
            Point(X=368, Y=244)
            Point(X=367, Y=247)
            Point(X=365, Y=250)
            Point(X=362, Y=252)
            Point(X=360, Y=254)
            Point(X=357, Y=255)
            Point(X=354, Y=256)
            Point(X=350, Y=256)
            Point(X=347, Y=256)
            Point(X=344, Y=255)
            Point(X=341, Y=254)
            Point(X=339, Y=252)
            Point(X=336, Y=250)
            Point(X=334, Y=247)
            Point(X=333, Y=244)
            Point(X=332, Y=241)
            Point(X=332, Y=238)
            Point(X=332, Y=235)
            Point(X=333, Y=232)
            Point(X=334, Y=229)
            Point(X=336, Y=226)
            Point(X=339, Y=224)
            Point(X=341, Y=222)
            Point(X=344, Y=221)
            Point(X=347, Y=220)
            Point(X=350, Y=220)
            Point(X=354, Y=220)
            Point(X=357, Y=221)
            Point(X=360, Y=222)
            Point(X=362, Y=224)
            Point(X=365, Y=226)
            Point(X=367, Y=229)
            Point(X=368, Y=232)
            Point(X=369, Y=235)
          Rect(X=332, Y=220, Width=38, Height=37)
          Activity(Val0=0, Val1=0, Val2=0, Val3=0)
        RegionActivity
          Roi
            Point(X=308, Y=346)
            Point(X=308, Y=349)
            Point(X=307, Y=353)
            Point(X=306, Y=357)
            Point(X=304, Y=360)
            Point(X=301, Y=363)
            Point(X=299, Y=365)
            Point(X=296, Y=367)
            Point(X=293, Y=368)
            Point(X=290, Y=368)
            Point(X=286, Y=368)
            Point(X=283, Y=367)
            Point(X=280, Y=365)
            Point(X=278, Y=363)
            Point(X=275, Y=360)
            Point(X=273, Y=357)
            Point(X=272, Y=353)
            Point(X=271, Y=349)
            Point(X=271, Y=346)
            Point(X=271, Y=342)
            Point(X=272, Y=338)
            Point(X=273, Y=334)
            Point(X=275, Y=331)
            Point(X=278, Y=328)
            Point(X=280, Y=326)
            Point(X=283, Y=324)
            Point(X=286, Y=323)
            Point(X=290, Y=323)
            Point(X=293, Y=323)
            Point(X=296, Y=324)
            Point(X=299, Y=326)
            Point(X=301, Y=328)
            Point(X=304, Y=331)
            Point(X=306, Y=334)
            Point(X=307, Y=338)
            Point(X=308, Y=342)
          Rect(X=271, Y=323, Width=38, Height=46)
          Activity(Val0=0, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #32
    SubscribeSubject RoisActivity
    -> Condition Arena3? => #34
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #35
    #34 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #37
    #35, #37 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi
            Point(X=337, Y=206)
            Point(X=337, Y=210)
            Point(X=336, Y=213)
            Point(X=335, Y=216)
            Point(X=334, Y=219)
            Point(X=332, Y=222)
            Point(X=330, Y=224)
            Point(X=328, Y=226)
            Point(X=326, Y=227)
            Point(X=324, Y=227)
            Point(X=321, Y=227)
            Point(X=319, Y=226)
            Point(X=317, Y=224)
            Point(X=315, Y=222)
            Point(X=313, Y=219)
            Point(X=312, Y=216)
            Point(X=311, Y=213)
            Point(X=310, Y=210)
            Point(X=310, Y=206)
            Point(X=310, Y=202)
            Point(X=311, Y=199)
            Point(X=312, Y=196)
            Point(X=313, Y=193)
            Point(X=315, Y=190)
            Point(X=317, Y=188)
            Point(X=319, Y=186)
            Point(X=321, Y=185)
            Point(X=324, Y=185)
            Point(X=326, Y=185)
            Point(X=328, Y=186)
            Point(X=330, Y=188)
            Point(X=332, Y=190)
            Point(X=334, Y=193)
            Point(X=335, Y=196)
            Point(X=336, Y=199)
            Point(X=337, Y=202)
          Rect(X=310, Y=185, Width=28, Height=43)
          Activity(Val0=0, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #39
    #18, #25, #32, #39 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #41
    GroupWorkflow FlyZoom
        SubscribeSubject RoisActivity
        -> Condition Arena0? => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Frames => #2
        SubscribeSubject MyArenas
        -> IncludeWorkflow(Path=CF.BonFly:IndexedArenaToRegions.bonsai, Value=0) => #4
        #2, #4 -> WithLatestFrom
        -> InputMapping(Selector=Item1, Regions(Selector=Item2))
        -> Bonsai.Vision.CropPolygon
          Regions(ArrayOfPoint(Point(X=3, Y=113), Point(X=564, Y=113), Point(X=564, Y=679), Point(X=3, Y=679)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Dsp.Rescale(Min=254, Max=0, RangeMin=0, RangeMax=254, RescaleType=Linear) => #8
        #1, #8 -> WithLatestFrom
        -> InputMapping(Selector=Item2, X(Selector=Item1.Centroid.X), Y(Selector=Item1.Centroid.Y))
        -> IncludeWorkflow(Path=CF.BonFly:CropAnimal.bonsai, X=335.431244, Y=236.041672, HalfWidth=30, HalfHeight=30)
        -> VisualizerMapping => #12
        SubscribeSubject RoisActivity
        -> Condition Arena1? => #14
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        SubscribeSubject Frames => #15
        SubscribeSubject MyArenas
        -> IncludeWorkflow(Path=CF.BonFly:IndexedArenaToRegions.bonsai, Value=1) => #17
        #15, #17 -> WithLatestFrom
        -> InputMapping(Selector=Item1, Regions(Selector=Item2))
        -> Bonsai.Vision.CropPolygon
          Regions(ArrayOfPoint(Point(X=731, Y=117), Point(X=1289, Y=117), Point(X=1289, Y=679), Point(X=731, Y=679)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Dsp.Rescale(Min=254, Max=0, RangeMin=0, RangeMax=254, RescaleType=Linear) => #21
        #14, #21 -> WithLatestFrom
        -> InputMapping(Selector=Item2, X(Selector=Item1.Centroid.X), Y(Selector=Item1.Centroid.Y))
        -> IncludeWorkflow(Path=CF.BonFly:CropAnimal.bonsai, X=NaN, Y=NaN, HalfWidth=30, HalfHeight=30)
        -> VisualizerMapping => #25
        SubscribeSubject RoisActivity
        -> Condition Arena2? => #27
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        SubscribeSubject Frames => #28
        SubscribeSubject MyArenas
        -> IncludeWorkflow(Path=CF.BonFly:IndexedArenaToRegions.bonsai, Value=2) => #30
        #28, #30 -> WithLatestFrom
        -> InputMapping(Selector=Item1, Regions(Selector=Item2))
        -> Bonsai.Vision.CropPolygon
          Regions(ArrayOfPoint(Point(X=5, Y=851), Point(X=568, Y=851), Point(X=568, Y=1407), Point(X=5, Y=1407)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Dsp.Rescale(Min=254, Max=0, RangeMin=0, RangeMax=254, RescaleType=Linear) => #34
        #27, #34 -> WithLatestFrom
        -> InputMapping(Selector=Item2, X(Selector=Item1.Centroid.X), Y(Selector=Item1.Centroid.Y))
        -> IncludeWorkflow(Path=CF.BonFly:CropAnimal.bonsai, X=NaN, Y=NaN, HalfWidth=30, HalfHeight=30)
        -> VisualizerMapping => #38
        SubscribeSubject RoisActivity
        -> Condition Arena3? => #40
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        SubscribeSubject Frames => #41
        SubscribeSubject MyArenas
        -> IncludeWorkflow(Path=CF.BonFly:IndexedArenaToRegions.bonsai, Value=3) => #43
        #41, #43 -> WithLatestFrom
        -> InputMapping(Selector=Item1, Regions(Selector=Item2))
        -> Bonsai.Vision.CropPolygon
          Regions(ArrayOfPoint(Point(X=732, Y=857), Point(X=1286, Y=857), Point(X=1286, Y=1396), Point(X=732, Y=1396)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Dsp.Rescale(Min=254, Max=0, RangeMin=0, RangeMax=254, RescaleType=Linear) => #47
        #40, #47 -> WithLatestFrom
        -> InputMapping(Selector=Item2, X(Selector=Item1.Centroid.X), Y(Selector=Item1.Centroid.Y))
        -> IncludeWorkflow(Path=CF.BonFly:CropAnimal.bonsai, X=362.819916, Y=169.118774, HalfWidth=30, HalfHeight=30)
        -> VisualizerMapping => #51
        #12, #25, #38, #51 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping => #43
    GroupWorkflow RoiActivity
        SubscribeSubject RoisActivity
        -> Condition Arena0?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> VisualizerMapping => #3
        SubscribeSubject RoisActivity
        -> Condition Arena1?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> VisualizerMapping => #7
        SubscribeSubject RoisActivity
        -> Condition Arena2?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> VisualizerMapping => #11
        SubscribeSubject RoisActivity
        -> Condition Arena3?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> VisualizerMapping => #15
        #3, #7, #11, #15 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping => #45
    #11, #41, #43, #45 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")

    SubscribeSubject StartButton
    -> TimeInterval
    -> MemberSelector(Selector=Interval.TotalMilliseconds)
    -> Take(Count=1)
    -> BehaviorSubject StartTime

IntProperty(Value=0)
-> IncludeWorkflow(Path=CF.BonFly:LoadArenaSettings.bonsai, Path=ArenaList2.json)
-> BehaviorSubject MyArenas

Bonsai.Vision.FileCapture
  FileName=C:\Users\hgmar\Downloads\cam07_2024-10-31T10_13_40.avi
  PlaybackRate=16384
  StartPosition=10500
  PositionUnits=Frames
  Loop=false
  Playing=true
-> BehaviorSubject Frames
-> Bonsai.Vision.Grayscale => #12
ExternalizedMapping(ThresholdValue) => #13
#12, #13 -> Bonsai.Vision.Threshold(ThresholdValue=108, MaxValue=255, ThresholdType=BinaryInv)
-> BehaviorSubject "Processed Frames"

SubscribeSubject "Processed Frames" => #16
SubscribeSubject MyArenas => #17
#16, #17 -> WithLatestFrom => #18
ExternalizedMapping(MinArea, MaxArea) => #19
#18, #19 -> CreateObservable ProcessArenas
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item2)
    -> MemberSelector(Selector=Arenas)
    -> Concat => #3
    #0 -> MemberSelector(Selector=Item1) => #4
    #3, #4 -> WithLatestFrom
    -> InputMapping(Selector=it, RoiCount(Selector=Item1.Rois.Count)) => #6
    ExternalizedMapping(MinArea, MaxArea) => #7
    #6, #7 -> SelectMany ProcessArena
        WorkflowInput Source1 => #0
        -> GroupWorkflow CropArena => #1
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #1
            #0 -> MemberSelector(Selector=Item1)
            -> IncludeWorkflow(Path=CF.BonFly:ArenaRegionToRegions.bonsai) => #3
            #1, #3 -> Zip
            -> InputMapping(Selector=Item1, Regions(Selector=Item2))
            -> Bonsai.Vision.CropPolygon
              Regions(ArrayOfPoint(Point(X=732, Y=857), Point(X=1286, Y=857), Point(X=1286, Y=1396), Point(X=732, Y=1396)))
              MaskType=ToZero
              FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
            -> WorkflowOutput
        #0 -> MemberSelector(Selector=Item1)
        -> IncludeWorkflow(Path=CF.BonFly:ArenaRoisToRegions.bonsai) => #3
        #1, #3 -> Zip => #4
        -> InputMapping(Selector=Item1, Regions(Selector=Item2)) => #5
        ExternalizedMapping(Operation) => #6
        #5, #6 -> Bonsai.Vision.RoiActivity => #7
          Regions
            ArrayOfPoint
              Point(X=337, Y=206)
              Point(X=337, Y=210)
              Point(X=336, Y=213)
              Point(X=335, Y=216)
              Point(X=334, Y=219)
              Point(X=332, Y=222)
              Point(X=330, Y=224)
              Point(X=328, Y=226)
              Point(X=326, Y=227)
              Point(X=324, Y=227)
              Point(X=321, Y=227)
              Point(X=319, Y=226)
              Point(X=317, Y=224)
              Point(X=315, Y=222)
              Point(X=313, Y=219)
              Point(X=312, Y=216)
              Point(X=311, Y=213)
              Point(X=310, Y=210)
              Point(X=310, Y=206)
              Point(X=310, Y=202)
              Point(X=311, Y=199)
              Point(X=312, Y=196)
              Point(X=313, Y=193)
              Point(X=315, Y=190)
              Point(X=317, Y=188)
              Point(X=319, Y=186)
              Point(X=321, Y=185)
              Point(X=324, Y=185)
              Point(X=326, Y=185)
              Point(X=328, Y=186)
              Point(X=330, Y=188)
              Point(X=332, Y=190)
              Point(X=334, Y=193)
              Point(X=335, Y=196)
              Point(X=336, Y=199)
              Point(X=337, Y=202)
          Operation=Avg
        ExternalizedMapping(RoiCount) => #8
        #7, #8 -> SelectMany GetRoiActivityData => #9
            WorkflowInput Source1
            -> BehaviorSubject Rois

            ExternalizedMapping(Value(DisplayName=RoiCount))
            -> IntProperty(Value=1)
            -> BehaviorSubject RoisCount

            SubscribeSubject Rois
            -> Concat
            -> MemberSelector(Selector=Activity.Val0) => #7
            -> GroupWorkflow RoiActivity => #8
                WorkflowInput Source1 => #0
                SubscribeSubject RoisCount
                -> PropertyMapping(Count) => #2
                #0, #2 -> Bonsai.Dsp.Buffer(Count=1, Skip=nil)
                -> Bonsai.Dsp.Transpose
                -> WorkflowOutput
            #7 -> GroupWorkflow RoiActivityDetected => #9
                WorkflowInput Source1
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: Convert.ToInt32(it)
                SubscribeSubject RoisCount
                -> PropertyMapping(Count) => #4
                #2, #4 -> Bonsai.Dsp.Buffer(Count=1, Skip=nil)
                -> Bonsai.Dsp.Transpose
                -> WorkflowOutput
            -> Bonsai.Dsp.Sum
            -> MemberSelector(Selector=Val0) => #11
            #8, #9, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                  Item1 as RoiActivity,
                  Item2 as RoiActivityDetected,
                  Item3 as ActivityDetected
                )
            SubscribeSubject RoisCount => #14
            #13, #14 -> SubscribeWhen
            -> Take(Count=1)
            -> WorkflowOutput
        #4 -> MemberSelector(Selector=Item1) => #10
        ExternalizedMapping(MinArea, MaxArea) => #11
        #10, #11 -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=20, MaxArea=500) => #12
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion => #14
        -> MemberSelector(Selector=Centroid) => #15
        #14 -> MemberSelector(Selector=Orientation) => #16
        #7, #9, #10, #15, #16, #12 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> ElementIndex
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          it.Index as ArenaId,
          it.Value.Item1 as Rois,
          it.Value.Item2 as RoiActivity,
          it.Value.Item3 as CroppedArena,
          it.Value.Item4 as Centroid,
          it.Value.Item5 as Orientation,
          it.Value.Item6 as Segmentation
        )
    -> WorkflowOutput
-> Concat
-> BehaviorSubject RoisActivity
-> TimeInterval
-> MemberSelector(Selector=Interval.TotalMilliseconds)

SubscribeSubject StopButton
-> Take(Count=1)
-> WorkflowOutput
