WorkflowBuilder(Version=2.8.5)
GroupWorkflow Init
    GroupWorkflow UpdateArenaListBox
        StringProperty
        -> BufferCount(Count=1, Skip=nil) => #1
        BooleanProperty(Value=false) => #2
        #1, #2 -> Zip
        -> BehaviorSubject ArenaListBox

        SubscribeSubject NumArenas => #5
        -> Condition NotEmpty?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> InputMapping(Selector=it, Count(Selector=it))
        -> CreateObservable
            ExternalizedMapping(Count) => #0
            -> Range(Start=0, Count=4)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: it.ToString()
            #2, #0 -> BufferCount(Count=4, Skip=nil)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Merge => #9
        -> BooleanProperty(Value=true) => #10
        #9, #10 -> Zip => #11
        #5 -> Condition Empty => #12
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> WorkflowOutput
        -> StringProperty
        -> BufferCount(Count=1, Skip=nil) => #14
        #12 -> BooleanProperty(Value=true) => #15
        #14, #15 -> Zip => #16
        #11, #16 -> Merge
        -> MulticastSubject ArenaListBox

    IntProperty(Value=4)
    -> BehaviorSubject NumArenas

    BooleanProperty(Value=true)
    -> BehaviorSubject ArenaRegionsEmpty?

    PropertySource<Bonsai.Vision.CropPolygon,OpenCV.Net.Point[][]>(MemberName=Value)
    -> BehaviorSubject ArenaRegions

    IntProperty(Value=0)
    -> BehaviorSubject SelectedArena

    PropertySource<Bonsai.Vision.CropPolygon,OpenCV.Net.Point[][]>(MemberName=Value)
    -> BehaviorSubject ArenaROIs

    ArenaList.ArenaList
    -> BehaviorSubject ArenaList
    -> MemberSelector(Selector=Arenas.Count)

    BooleanProperty(Value=false)
    -> BehaviorSubject UpdateRegions?

Annotation
  Text:
    CF.BonFly

    AddRegion(ArenaList, Point[])
    AddRoi(ArenaList, Point[][])
    UpdateRois(ArenaList, Point[][], ArenaIndex)
    PointArrayToRegion
    RegionsToROIs
    RegionToPointArray
    RoisToRegions

Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
-> GroupWorkflow GUI
    Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Font="Calibri, 14.1pt", Text="Load Arenas")
    -> BehaviorSubject LoadArenas
    -> VisualizerMapping => #2
    Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Font="Calibri, 14.1pt", Text="Save Arenas")
    -> BehaviorSubject SaveArenas
    -> VisualizerMapping => #5
    SubscribeSubject ArenaRegions
    -> SelectMany
        WorkflowInput Source1 => #0
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> WorkflowOutput
        -> IntProperty(Value=0) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=Length) => #4
        #2, #4 -> Merge
        -> InputMapping(Selector=it, Count(Selector=it))
        -> Range(Start=0, Count=2)
        -> ToList
        -> WorkflowOutput
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> MulticastSubject SelectedArena
    -> VisualizerMapping => #10
    #2, #5, #10 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #12
    WorkflowInput Source1
    -> VisualizerMapping => #14
    #12, #14 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #16
    SubscribeSubject "Raw Frames" => #17
    SubscribeSubject MyRegions
    -> PropertyMapping(Value) => #19
    #17, #19 -> PropertySource<Bonsai.Vision.RoiActivity,OpenCV.Net.Point[][]>
      MemberName=Regions
      Value
        ArrayOfPoint(Point(X=1504, Y=100), Point(X=1953, Y=100), Point(X=1953, Y=444), Point(X=1504, Y=444))
        ArrayOfPoint(Point(X=1604, Y=545), Point(X=1984, Y=545), Point(X=1984, Y=788), Point(X=1604, Y=788))
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.PolygonVisualizer>) => #21
    SubscribeSubject SelectedArenaCrop
    -> VisualizerMapping => #23
    #16, #21, #23 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

SubscribeSubject SelectedArenaCrop => #4
ExternalizedMapping(Regions(DisplayName=ROIs)) => #5
#4, #5 -> GroupWorkflow SetArenaROIs
    WorkflowInput Source1 => #0
    ExternalizedMapping(Value(DisplayName=Regions)) => #1
    SubscribeSubject ArenaROIs
    -> PropertyMapping(Value) => #3
    #0, #1, #3 -> PropertySource<Bonsai.Vision.RoiActivity,OpenCV.Net.Point[][]>(MemberName=Regions)
    -> Sink "Update ROIs"
        WorkflowInput Source1
        -> DistinctUntilChanged
        -> MulticastSubject ArenaROIs
        -> WorkflowOutput
    -> WorkflowOutput
-> BehaviorSubject MyROIs

SubscribeSubject ArenaROIs
-> CreateObservable
    WorkflowInput Source1 => #0
    SubscribeSubject ArenaList => #1
    #0, #1 -> WithLatestFrom
    -> SelectMany
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item2.Arenas)
        -> Concat
        -> ElementIndex => #3
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            SubscribeSubject SelectedArena => #2
            #1, #2 -> WithLatestFrom
            -> NotEqual
            -> WorkflowOutput
        -> InputMapping(Selector=it, Id(Selector=Value.Id), Region(Selector=Value.Region), Rois(Selector=Value.Rois))
        -> ArenaList.Arena(Id=0) => #6
        #3 -> Condition => #7
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            SubscribeSubject SelectedArena => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        #0 -> MemberSelector(Selector=Item1) => #8
        #7, #8 -> WithLatestFrom
        -> InputMapping(Selector=it, Id(Selector=Item1.Value.Id), Region(Selector=Item1.Value.Region), Rois(Selector=Item2))
        -> ArenaList.Arena(Id=0) => #11
        #6, #11 -> Merge
        -> ToArray
        -> WorkflowOutput
    -> WorkflowOutput
-> Concat

SubscribeSubject SelectedArena
-> DistinctUntilChanged
-> CreateObservable
    ArenaList.ArenaList => #0
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Arenas.Count)
        -> NotEqual(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MemberSelector(Selector=Arenas)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Rois)
    -> SelectMany => #5
        WorkflowInput Source1
        -> Concat
        -> SelectMany
            WorkflowInput Source1
            -> Concat
            -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y))
            -> Bonsai.Vision.CreatePoint(X=0, Y=0)
            -> ToArray
            -> WorkflowOutput
        -> ToArray
        -> WorkflowOutput
    #0 -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Arenas.Count)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> PropertySource<Bonsai.Vision.CropPolygon,OpenCV.Net.Point[][]>(MemberName=Value) => #7
    #5, #7 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Concat
-> MulticastSubject ArenaROIs

Bonsai.Vision.FileCapture
  FileName=C:\Users\hgmar\Downloads\Loom6_2024-04-04T15-00-322024-04-04T16_00_32.avi
  PlaybackRate=0
  StartPosition=1200
  PositionUnits=Frames
  Loop=false
  Playing=true
-> Bonsai.Vision.Grayscale
-> BehaviorSubject "Raw Frames"

SubscribeSubject "Raw Frames" => #19
ExternalizedMapping(Regions) => #20
#19, #20 -> GroupWorkflow SetArenaRegions
    WorkflowInput Source1 => #0
    ExternalizedMapping(Value(DisplayName=Regions)) => #1
    SubscribeSubject ArenaRegions
    -> PropertyMapping(Value) => #3
    #0, #1, #3 -> PropertySource<Bonsai.Vision.RoiActivity,OpenCV.Net.Point[][]>
      MemberName=Regions
      Value
        ArrayOfPoint(Point(X=1504, Y=100), Point(X=1953, Y=100), Point(X=1953, Y=444), Point(X=1504, Y=444))
        ArrayOfPoint(Point(X=1604, Y=545), Point(X=1984, Y=545), Point(X=1984, Y=788), Point(X=1604, Y=788))
    -> Sink "Update Regions"
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: it == null
        #0, #1 -> CombineLatest
        -> DistinctUntilChanged => #3
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject ArenaRegions => #5
        #3 -> MemberSelector(Selector=Item2)
        -> MulticastSubject ArenaRegionsEmpty? => #7
        #5, #7 -> CombineLatest
        -> BooleanProperty(Value=true)
        -> MulticastSubject UpdateRegions?
        -> WorkflowOutput
    -> WorkflowOutput
-> BehaviorSubject MyRegions

SubscribeSubject UpdateRegions?
-> CreateObservable
    SubscribeSubject ArenaRegions => #0
    SubscribeSubject ArenaList => #1
    #0, #1 -> WithLatestFrom => #2
    -> Condition RegionsNotEmpty? => #3
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 != null
        -> WorkflowOutput
    -> Condition RegionsModified?
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1.Length) => #1
        #0 -> MemberSelector(Selector=Item2.Arenas.Count) => #2
        #1, #2 -> Zip
        -> Equal
        -> WorkflowOutput
    -> GroupWorkflow UpdateArenaRegions => #5
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1)
            -> Concat => #2
            #0 -> MemberSelector(Selector=Item2.Arenas)
            -> Concat => #4
            #2, #4 -> Zip => #5
            -> MemberSelector(Selector=Item1)
            -> SelectMany PointArray => #7
                WorkflowInput Source1
                -> Concat
                -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y))
                -> ArenaList.Point(X=1604, Y=788)
                -> ToArray
                -> WorkflowOutput
            #5 -> ElementIndex
            -> MemberSelector(Selector=Index) => #9
            #5 -> MemberSelector(Selector=Item2.Rois) => #10
            #7, #9, #10 -> Zip
            -> InputMapping(Selector=it, Id(Selector=Item2), Region(Selector=Item1), Rois(Selector=Item3))
            -> ArenaList.Arena(Id=1)
            -> ToArray
            -> InputMapping(Selector=it, Arenas(Selector=it))
            -> ArenaList.ArenaList
            -> Take(Count=3)
            -> WorkflowOutput
        -> WorkflowOutput
    #3 -> Condition NumArenasMdified?
        WorkflowInput Source1 => #0
        -> Condition => #1
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 != null
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1.Length) => #2
        #1 -> MemberSelector(Selector=Item2.Arenas.Count) => #3
        #2, #3 -> Zip => #4
        #0 -> Condition => #5
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 == null
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #5 -> MemberSelector(Selector=Item2.Arenas.Count) => #7
        #6, #7 -> Zip => #8
        #4, #8 -> Merge
        -> NotEqual
        -> WorkflowOutput
    -> GroupWorkflow UpdateArenaList => #7
        WorkflowInput Source1 => #0
        -> Condition ArenaAdded? => #1
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.Length) => #1
            #0 -> MemberSelector(Selector=Item2.Arenas.Count) => #2
            #1, #2 -> Zip
            -> GreaterThan
            -> WorkflowOutput
        -> Condition ArenaListEmpty?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Arenas.Count)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany CreateNewArenaList => #3
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Index(Operand=IntProperty(Value=0))
            -> GroupWorkflow CreateArena
                WorkflowInput Source1
                -> Concat
                -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y))
                -> ArenaList.Point(X=982, Y=228)
                -> ToArray => #4
                ExternalizedMapping(Value(DisplayName=ArenaID))
                -> IntProperty(Value=0) => #6
                #4, #6 -> WithLatestFrom
                -> InputMapping(Selector=it, Region(Selector=Item1), Id(Selector=Item2))
                -> ArenaList.Arena(Id=0)
                -> WorkflowOutput
            -> Take(Count=1)
            -> ToArray
            -> InputMapping(Selector=it, Arenas(Selector=it))
            -> ArenaList.ArenaList
            -> WorkflowOutput
        #1 -> Condition ArenaListNotEmpty?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Arenas.Count)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany AppendNewArena => #5
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2.Arenas)
            -> Concat => #2
            -> Last => #3
            #0 -> MemberSelector(Selector=Item1) => #4
            -> Concat
            -> Last => #6
            #4 -> MemberSelector(Selector=Length) => #7
            #6, #7 -> WithLatestFrom
            -> InputMapping(Selector=Item1, ArenaID(Selector=Item2))
            -> GroupWorkflow CreateArena => #10
                WorkflowInput Source1
                -> Concat
                -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y))
                -> ArenaList.Point(X=1636, Y=276)
                -> ToArray => #4
                ExternalizedMapping(Value(DisplayName=ArenaID))
                -> IntProperty(Value=2) => #6
                #4, #6 -> WithLatestFrom
                -> InputMapping(Selector=it, Region(Selector=Item1), Id(Selector=Item2))
                -> ArenaList.Arena(Id=2)
                -> WorkflowOutput
            #3, #10 -> Zip
            -> MemberSelector(Selector=Item2)
            -> Take(Count=1) => #13
            #2, #13 -> Merge
            -> ToArray
            -> InputMapping(Selector=it, Arenas(Selector=it))
            -> ArenaList.ArenaList
            -> WorkflowOutput
        #0 -> Condition ArenaRemoved?
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2.Arenas.Count) => #1
            #0 -> Condition
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 != null
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1.Length) => #3
            #0 -> Condition
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 == null
                -> WorkflowOutput
            -> IntProperty(Value=0) => #5
            #3, #5 -> Merge => #6
            #1, #6 -> Zip
            -> GreaterThan
            -> WorkflowOutput
        -> Condition RegionsNotEmpty?
            WorkflowInput Source1 => #0
            SubscribeSubject ArenaRegionsEmpty? => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany RemoveArena => #8
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2.Arenas)
            -> Concat => #2
            #0 -> MemberSelector(Selector=Item1) => #3
            #2, #3 -> WithLatestFrom
            -> GroupWorkflow ArenaExistsInRegions?
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2)
                -> Concat => #2
                #0 -> MemberSelector(Selector=Item1.Region) => #3
                #2, #3 -> WithLatestFrom
                -> GroupWorkflow
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1)
                    -> Index(Operand=IntProperty(Value=0)) => #2
                    -> MemberSelector(Selector=X) => #3
                    #0 -> MemberSelector(Selector=Item2)
                    -> Index(Operand=IntProperty(Value=0)) => #5
                    -> MemberSelector(Selector=X) => #6
                    #3, #6 -> Zip
                    -> Equal => #8
                    #2 -> MemberSelector(Selector=Y) => #9
                    #5 -> MemberSelector(Selector=Y) => #10
                    #9, #10 -> Zip
                    -> Equal => #12
                    #8, #12 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                -> WorkflowOutput
            -> Condition => #6
                WorkflowInput Source1
                -> WorkflowOutput
            #6, #2 -> WithLatestFrom
            -> ElementIndex
            -> InputMapping(Selector=it, Region(Selector=Value.Item2.Region), Rois(Selector=Value.Item2.Rois), Id(Selector=Index))
            -> ArenaList.Arena(Id=0)
            -> ToArray
            -> InputMapping(Selector=it, Arenas(Selector=it))
            -> ArenaList.ArenaList
            -> WorkflowOutput
        #3, #5, #8 -> Merge
        -> WorkflowOutput
    #2 -> Condition RegionsEmpty?
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 == null
        -> WorkflowOutput
    -> ArenaList.ArenaList => #9
    #5, #7, #9 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Concat
-> MulticastSubject ArenaList

SubscribeSubject LoadArenas
-> CreateObservable
    ExternalizedMapping(Path)
    -> Bonsai.IO.ReadAllText(Path=ArenaList.json)
    -> ArenaList.DeserializeFromJson(Type=TypeMapping<ArenaList.ArenaList>)
    -> Take(Count=1)
    -> WorkflowOutput
-> Concat
-> MulticastSubject ArenaList
-> CreateObservable ArenaROIs
    WorkflowInput Source1
    -> MemberSelector(Selector=Arenas)
    -> Concat
    -> SelectMany
        WorkflowInput Source1
        -> MemberSelector(Selector=Region)
        -> Concat
        -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y))
        -> Bonsai.Vision.CreatePoint(X=1604, Y=788)
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> Take(Count=1)
    -> WorkflowOutput
-> Concat
-> MulticastSubject ArenaRegions

SubscribeSubject "Raw Frames"
-> GroupWorkflow GetCurrentArenaRegion
    WorkflowInput Source1 => #0
    SubscribeSubject SelectedArena => #1
    SubscribeSubject ArenaRegions
    -> Condition => #3
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it != null
        -> WorkflowOutput
    #1, #3 -> WithLatestFrom
    -> SelectMany => #5
        WorkflowInput Source1
        -> InputMapping(Selector=Item2, Value(Selector=Item1))
        -> Index(Operand=IntProperty(Value=1))
        -> ToArray
        -> WorkflowOutput
    #0, #5 -> WithLatestFrom
    -> WorkflowOutput
-> InputMapping(Selector=Item1, Regions(Selector=Item2))
-> Bonsai.Vision.CropPolygon
  Regions(ArrayOfPoint(Point(X=1604, Y=545), Point(X=1984, Y=545), Point(X=1984, Y=788), Point(X=1604, Y=788)))
  MaskType=ToZero
  FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
-> BehaviorSubject SelectedArenaCrop

SubscribeSubject SaveArenas => #39
SubscribeSubject ArenaList => #40
#39, #40 -> WithLatestFrom
-> MemberSelector(Selector=Item2)
-> ArenaList.SerializeToJson
-> Bonsai.IO.WriteAllText(Path=ArenaList.json, Overwrite=true, Append=false)

Disable GroupWorkflow SaveArenaRegions
    WorkflowInput Source1 => #0
    SubscribeSubject ArenaRegions => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> SelectMany
        WorkflowInput Source1
        -> Concat
        -> ElementIndex => #2
        -> MemberSelector(Selector=Value)
        -> SelectMany PointArray => #4
            WorkflowInput Source1
            -> Concat
            -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y))
            -> ArenaList.Point(X=1977, Y=638)
            -> ToArray
            -> WorkflowOutput
        #2 -> MemberSelector(Selector=Index) => #5
        #4, #5 -> Zip
        -> InputMapping(Selector=it, Id(Selector=Item2), Region(Selector=Item1))
        -> ArenaList.Arena(Id=2)
        -> ToArray
        -> InputMapping(Selector=it, Arenas(Selector=it))
        -> ArenaList.ArenaList
        -> Take(Count=3)
        -> WorkflowOutput
    -> WorkflowOutput

Disable GroupWorkflow LoadArenaRegions
    WorkflowInput Source1 => #0
    ExternalizedMapping(Path) => #1
    #0, #1 -> SelectMany "Load Arenas"
        ExternalizedMapping(Path)
        -> Bonsai.IO.ReadAllText(Path=ArenaList.json)
        -> ArenaList.DeserializeFromJson(Type=TypeMapping<ArenaList.ArenaList>)
        -> MemberSelector(Selector=Arenas)
        -> Concat
        -> CreateObservable "Get Region Point Array"
            WorkflowInput Source1
            -> MemberSelector(Selector=Region)
            -> Concat
            -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y))
            -> Bonsai.Vision.CreatePoint(X=1977, Y=638)
            -> ToArray
            -> WorkflowOutput
        -> Concat
        -> ToArray
        -> WorkflowOutput
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Length)
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MulticastSubject ArenaRegions
    -> WorkflowOutput

Annotation CreateArena(Text="Receives Point array from regions and the id")

Disable SubscribeSubject LoadArenas
-> Disable GroupWorkflow LoadArenaRegions
    WorkflowInput Source1 => #0
    ExternalizedMapping(FileName) => #1
    #0, #1 -> SelectMany "Load Arenas"
        ExternalizedMapping(FileName)
        -> Bonsai.IO.CsvReader(FileName=tmp.csv, ListSeparator=;, ScanPattern="", SkipRows=0)
        -> CreateObservable "Get Region Point Array"
            WorkflowInput Source1
            -> Concat
            -> Parse(Pattern=%i, Separator=",")
            -> InputMapping(Selector=it, X(Selector=it[0]), Y(Selector=it[1]))
            -> Bonsai.Vision.CreatePoint(X=1482, Y=463)
            -> ToArray
            -> WorkflowOutput
        -> Concat
        -> ToArray
        -> WorkflowOutput
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Length)
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MulticastSubject ArenaRegions
    -> WorkflowOutput

Disable SubscribeSubject SaveArenas
-> Disable GroupWorkflow SaveArenaRegions
    WorkflowInput Source1 => #0
    SubscribeSubject ArenaRegions => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> SelectMany
        WorkflowInput Source1 => #0
        -> Concat => #1
        -> MemberSelector(Selector=Length)
        -> PropertyMapping(Count) => #3
        #1, #3 -> SelectMany Array2String
            WorkflowInput Source1
            -> Concat => #1
            ExternalizedMapping(Expression(Description="Expression to be used in CSharpTransform for converting array elements to String.")) => #2
            #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
              Expression: Convert.ToString(X) + "," + Convert.ToString(Y)
            ExternalizedMapping(Value(DisplayName=Separator)) => #4
            #3, #4 -> Add(Operand=StringProperty(Value=;)) => #5
            ExternalizedMapping(Count) => #6
            #5, #6 -> BufferCount(Count=4, Skip=nil)
            -> Add => #8
            -> MemberSelector(Selector=Length) => #9
            #8, #9 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1.Substring(0,Item2-1)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Bonsai.IO.CsvWriter(FileName=tmp.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #5
        #0 -> MemberSelector(Selector=Length)
        -> PropertyMapping(Count) => #7
        #5, #7 -> Take(Count=3)
        -> WorkflowOutput
    -> WorkflowOutput
