<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:pgr="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:CreateArduino">
                <ard:Name>MyArduino</ard:Name>
                <ard:PortName>COM3</ard:PortName>
                <ard:BaudRate>57600</ard:BaudRate>
                <ard:SamplingInterval>19</ard:SamplingInterval>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>MyArduino</ard:PortName>
                <ard:Pin>11</ard:Pin>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Start</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>MyArduino</ard:PortName>
          <ard:Pin>11</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT30S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>MyArduino</ard:PortName>
          <ard:Pin>11</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT4S</rx:DueTime>
          <rx:Period>PT2S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it % 2 == 0 ? True : False</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>MyArduino</ard:PortName>
          <ard:Pin>10</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pgr:FlyCapture">
          <pgr:Index>0</pgr:Index>
          <pgr:ColorProcessing>Default</pgr:ColorProcessing>
          <pgr:NumBuffers>10</pgr:NumBuffers>
          <pgr:GrabMode>BufferFrames</pgr:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SkipUntil" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>.\Data\video.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Reduce">
          <dsp:Axis>1</dsp:Axis>
          <dsp:Operation>Avg</dsp:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Reduce">
          <dsp:Axis>0</dsp:Axis>
          <dsp:Operation>Avg</dsp:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new (
  Item1 as FrameCounter,
  Item2 as FrameIntensity
)</scr:Expression>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>.\Data\light_intensity.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="21" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="27" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>