<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p3="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>255</dsp:Max>
          <dsp:RangeMin>2</dsp:RangeMin>
          <dsp:RangeMax>255</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>41</cv:X>
                <cv:Y>52</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>210</cv:X>
                <cv:Y>52</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>210</cv:X>
                <cv:Y>172</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>41</cv:X>
                <cv:Y>172</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>405</cv:X>
                <cv:Y>161</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>552</cv:X>
                <cv:Y>161</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>552</cv:X>
                <cv:Y>319</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>405</cv:X>
                <cv:Y>319</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>100</cv:X>
                <cv:Y>271</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>204</cv:X>
                <cv:Y>271</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>204</cv:X>
                <cv:Y>389</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>100</cv:X>
                <cv:Y>389</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>1</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="RegionOfInterest" Selector="Item1.Contour.Rect" />
              </PropertyMappings>
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>364</cv:X>
                  <cv:Y>109</cv:Y>
                  <cv:Width>147</cv:Width>
                  <cv:Height>159</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Arena Frames</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Arena Frames</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Arena ID" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Arena Frames</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Arena ID" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Arena Frames</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Arena ID" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="viz:TableLayoutPanelBuilder">
        <viz:ColumnCount>2</viz:ColumnCount>
        <viz:RowCount>2</viz:RowCount>
        <viz:ColumnStyles />
        <viz:RowStyles />
        <viz:CellSpans />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Defer">
          <Name>Video Calibration</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>SetupBoard</Name>
          <Description>Setup LED Board</Description>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Fly1</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Fly2</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Fly3</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Fly4</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ipy:PythonTransform">
          <ipy:Name>TimerDisplay Cam05</ipy:Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Topleft Left Spot</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>LED TopLeft</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Topright Left Spot</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>LED TopRight</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Bottomleft Left Spot</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>LED BottomLeft</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Bottomright Left Spot</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>LED BottomRight</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Frame_dt</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Topleft Trigger</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Topright Trigger</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Bottomleft Trigger</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Bottomright Trigger</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p2:LedArrayCommand">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>LedArray0Commands</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p2:LedArrayCommand">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>LedArray1Commands</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p2:LedArrayCommand">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>LedArray0Commands</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p2:LedArrayCommand">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>LedArray1Commands</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="8" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="24" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="24" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source3" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="26" To="45" Label="Source1" />
      <Edge From="26" To="46" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="28" To="31" Label="Source1" />
      <Edge From="28" To="33" Label="Source1" />
      <Edge From="28" To="35" Label="Source1" />
      <Edge From="28" To="37" Label="Source1" />
      <Edge From="28" To="53" Label="Source1" />
      <Edge From="28" To="65" Label="Source1" />
      <Edge From="28" To="76" Label="Source1" />
      <Edge From="28" To="86" Label="Source1" />
      <Edge From="28" To="98" Label="Source1" />
      <Edge From="29" To="97" Label="Source1" />
      <Edge From="30" To="97" Label="Source2" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="100" Label="Source2" />
      <Edge From="32" To="39" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="33" To="104" Label="Source2" />
      <Edge From="34" To="39" Label="Source2" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="35" To="108" Label="Source2" />
      <Edge From="36" To="39" Label="Source3" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="112" Label="Source2" />
      <Edge From="38" To="39" Label="Source4" />
      <Edge From="39" To="97" Label="Source3" />
      <Edge From="40" To="43" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="41" To="54" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="42" To="48" Label="Source2" />
      <Edge From="42" To="50" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="43" To="118" Label="Source1" />
      <Edge From="44" To="97" Label="Source4" />
      <Edge From="45" To="50" Label="Source2" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source3" />
      <Edge From="50" To="52" Label="Source1" />
      <Edge From="51" To="52" Label="Source2" />
      <Edge From="52" To="97" Label="Source5" />
      <Edge From="53" To="55" Label="Source1" />
      <Edge From="53" To="57" Label="Source2" />
      <Edge From="54" To="55" Label="Source2" />
      <Edge From="54" To="63" Label="Source2" />
      <Edge From="54" To="66" Label="Source2" />
      <Edge From="54" To="74" Label="Source2" />
      <Edge From="54" To="77" Label="Source2" />
      <Edge From="54" To="84" Label="Source2" />
      <Edge From="54" To="87" Label="Source2" />
      <Edge From="54" To="94" Label="Source2" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="61" Label="Source2" />
      <Edge From="59" To="62" Label="Source1" />
      <Edge From="59" To="99" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source2" />
      <Edge From="61" To="72" Label="Source2" />
      <Edge From="61" To="82" Label="Source2" />
      <Edge From="61" To="92" Label="Source2" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="96" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="65" To="68" Label="Source2" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="70" Label="Source1" />
      <Edge From="69" To="70" Label="Source2" />
      <Edge From="69" To="80" Label="Source2" />
      <Edge From="69" To="90" Label="Source2" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="71" To="103" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="73" To="74" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="96" Label="Source2" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="76" To="79" Label="Source2" />
      <Edge From="77" To="78" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="79" To="80" Label="Source1" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="81" To="107" Label="Source1" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="83" To="84" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="85" To="96" Label="Source3" />
      <Edge From="86" To="87" Label="Source1" />
      <Edge From="86" To="89" Label="Source2" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="89" To="90" Label="Source1" />
      <Edge From="90" To="91" Label="Source1" />
      <Edge From="91" To="92" Label="Source1" />
      <Edge From="91" To="111" Label="Source1" />
      <Edge From="92" To="93" Label="Source1" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="94" To="95" Label="Source1" />
      <Edge From="95" To="96" Label="Source4" />
      <Edge From="96" To="97" Label="Source6" />
      <Edge From="97" To="116" Label="Source1" />
      <Edge From="98" To="100" Label="Source1" />
      <Edge From="98" To="104" Label="Source1" />
      <Edge From="98" To="108" Label="Source1" />
      <Edge From="98" To="112" Label="Source1" />
      <Edge From="99" To="100" Label="Source3" />
      <Edge From="100" To="102" Label="Source1" />
      <Edge From="101" To="102" Label="Source2" />
      <Edge From="102" To="115" Label="Source1" />
      <Edge From="103" To="104" Label="Source3" />
      <Edge From="104" To="106" Label="Source1" />
      <Edge From="105" To="106" Label="Source2" />
      <Edge From="106" To="115" Label="Source2" />
      <Edge From="107" To="108" Label="Source3" />
      <Edge From="108" To="110" Label="Source1" />
      <Edge From="109" To="110" Label="Source2" />
      <Edge From="110" To="115" Label="Source3" />
      <Edge From="111" To="112" Label="Source3" />
      <Edge From="112" To="114" Label="Source1" />
      <Edge From="113" To="114" Label="Source2" />
      <Edge From="114" To="115" Label="Source4" />
      <Edge From="115" To="116" Label="Source2" />
      <Edge From="116" To="127" Label="Source1" />
      <Edge From="117" To="118" Label="Source2" />
      <Edge From="118" To="119" Label="Source1" />
      <Edge From="119" To="120" Label="Source1" />
      <Edge From="120" To="121" Label="Source1" />
      <Edge From="121" To="122" Label="Source1" />
      <Edge From="122" To="123" Label="Source1" />
      <Edge From="123" To="124" Label="Source1" />
      <Edge From="124" To="125" Label="Source1" />
      <Edge From="125" To="126" Label="Source1" />
      <Edge From="126" To="127" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>