<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Arena ROI Selection</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arena Selected String</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Arena Selected</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Raw Frames</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Number of Arenas</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>Arena ROI Activity Regions</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arena Regions </Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arena Selected</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:RoiActivity">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>22</cv:X>
                      <cv:Y>15</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>30</cv:X>
                      <cv:Y>15</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>30</cv:X>
                      <cv:Y>22</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>22</cv:X>
                      <cv:Y>22</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>53</cv:X>
                      <cv:Y>23</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>63</cv:X>
                      <cv:Y>23</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>63</cv:X>
                      <cv:Y>31</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>53</cv:X>
                      <cv:Y>31</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:Operation>Sum</cv:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Update Arena ROI Activity</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="gui:ListBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Items>
                <gui:string>0</gui:string>
                <gui:string>1</gui:string>
                <gui:string>2</gui:string>
                <gui:string>3</gui:string>
              </gui:Items>
              <gui:SelectedItem>3</gui:SelectedItem>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Arena Selected String</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Selected Arena</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Arena Regions </Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Arena Selected</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Selected Arena ROIs</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="VisualizerMapping" />
            </Expression>
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>3</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="4" To="10" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="27" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="27" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source3" />
            <Edge From="27" To="28" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>4</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Number of Arenas</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Raw Frames</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Raw Frames</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Define Arenas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Set New Arena Rects</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>Image Rescaling</Name>
                    <Text><![CDATA[This shifts the intensity of the pixels to have a minimum value of 2 to allow for further ROI thresholding.]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0</dsp:Min>
                      <dsp:Max>255</dsp:Max>
                      <dsp:RangeMin>2</dsp:RangeMin>
                      <dsp:RangeMax>255</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Regions" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="cv:CropPolygon,p1:Point[][]">
                    <MemberName>Regions</MemberName>
                    <Value>
                      <ArrayOfPoint>
                        <Point>
                          <X>214</X>
                          <Y>206</Y>
                        </Point>
                        <Point>
                          <X>320</X>
                          <Y>206</Y>
                        </Point>
                        <Point>
                          <X>320</X>
                          <Y>286</Y>
                        </Point>
                        <Point>
                          <X>214</X>
                          <Y>286</Y>
                        </Point>
                      </ArrayOfPoint>
                      <ArrayOfPoint>
                        <Point>
                          <X>509</X>
                          <Y>94</Y>
                        </Point>
                        <Point>
                          <X>590</X>
                          <Y>94</Y>
                        </Point>
                        <Point>
                          <X>590</X>
                          <Y>192</Y>
                        </Point>
                        <Point>
                          <X>509</X>
                          <Y>192</Y>
                        </Point>
                      </ArrayOfPoint>
                      <ArrayOfPoint>
                        <Point>
                          <X>272</X>
                          <Y>82</Y>
                        </Point>
                        <Point>
                          <X>271</X>
                          <Y>88</Y>
                        </Point>
                        <Point>
                          <X>270</X>
                          <Y>93</Y>
                        </Point>
                        <Point>
                          <X>267</X>
                          <Y>98</Y>
                        </Point>
                        <Point>
                          <X>264</X>
                          <Y>102</Y>
                        </Point>
                        <Point>
                          <X>260</X>
                          <Y>106</Y>
                        </Point>
                        <Point>
                          <X>255</X>
                          <Y>109</Y>
                        </Point>
                        <Point>
                          <X>249</X>
                          <Y>111</Y>
                        </Point>
                        <Point>
                          <X>243</X>
                          <Y>113</Y>
                        </Point>
                        <Point>
                          <X>238</X>
                          <Y>113</Y>
                        </Point>
                        <Point>
                          <X>232</X>
                          <Y>113</Y>
                        </Point>
                        <Point>
                          <X>226</X>
                          <Y>111</Y>
                        </Point>
                        <Point>
                          <X>220</X>
                          <Y>109</Y>
                        </Point>
                        <Point>
                          <X>215</X>
                          <Y>106</Y>
                        </Point>
                        <Point>
                          <X>211</X>
                          <Y>102</Y>
                        </Point>
                        <Point>
                          <X>208</X>
                          <Y>98</Y>
                        </Point>
                        <Point>
                          <X>205</X>
                          <Y>93</Y>
                        </Point>
                        <Point>
                          <X>204</X>
                          <Y>88</Y>
                        </Point>
                        <Point>
                          <X>203</X>
                          <Y>82</Y>
                        </Point>
                        <Point>
                          <X>204</X>
                          <Y>77</Y>
                        </Point>
                        <Point>
                          <X>205</X>
                          <Y>72</Y>
                        </Point>
                        <Point>
                          <X>208</X>
                          <Y>67</Y>
                        </Point>
                        <Point>
                          <X>211</X>
                          <Y>63</Y>
                        </Point>
                        <Point>
                          <X>215</X>
                          <Y>59</Y>
                        </Point>
                        <Point>
                          <X>220</X>
                          <Y>56</Y>
                        </Point>
                        <Point>
                          <X>226</X>
                          <Y>54</Y>
                        </Point>
                        <Point>
                          <X>232</X>
                          <Y>52</Y>
                        </Point>
                        <Point>
                          <X>238</X>
                          <Y>52</Y>
                        </Point>
                        <Point>
                          <X>243</X>
                          <Y>52</Y>
                        </Point>
                        <Point>
                          <X>249</X>
                          <Y>54</Y>
                        </Point>
                        <Point>
                          <X>255</X>
                          <Y>56</Y>
                        </Point>
                        <Point>
                          <X>260</X>
                          <Y>59</Y>
                        </Point>
                        <Point>
                          <X>264</X>
                          <Y>63</Y>
                        </Point>
                        <Point>
                          <X>267</X>
                          <Y>67</Y>
                        </Point>
                        <Point>
                          <X>270</X>
                          <Y>72</Y>
                        </Point>
                        <Point>
                          <X>271</X>
                          <Y>77</Y>
                        </Point>
                      </ArrayOfPoint>
                      <ArrayOfPoint>
                        <Point>
                          <X>49</X>
                          <Y>305</Y>
                        </Point>
                        <Point>
                          <X>137</X>
                          <Y>305</Y>
                        </Point>
                        <Point>
                          <X>137</X>
                          <Y>406</Y>
                        </Point>
                        <Point>
                          <X>49</X>
                          <Y>406</Y>
                        </Point>
                      </ArrayOfPoint>
                    </Value>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Set Arena Rects</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Regions" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CropPolygon">
                      <cv:Regions>
                        <cv:ArrayOfPoint>
                          <cv:Point>
                            <cv:X>214</cv:X>
                            <cv:Y>206</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>320</cv:X>
                            <cv:Y>206</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>320</cv:X>
                            <cv:Y>286</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>214</cv:X>
                            <cv:Y>286</cv:Y>
                          </cv:Point>
                        </cv:ArrayOfPoint>
                        <cv:ArrayOfPoint>
                          <cv:Point>
                            <cv:X>509</cv:X>
                            <cv:Y>94</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>590</cv:X>
                            <cv:Y>94</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>590</cv:X>
                            <cv:Y>192</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>509</cv:X>
                            <cv:Y>192</cv:Y>
                          </cv:Point>
                        </cv:ArrayOfPoint>
                        <cv:ArrayOfPoint>
                          <cv:Point>
                            <cv:X>272</cv:X>
                            <cv:Y>82</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>271</cv:X>
                            <cv:Y>88</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>270</cv:X>
                            <cv:Y>93</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>267</cv:X>
                            <cv:Y>98</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>264</cv:X>
                            <cv:Y>102</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>260</cv:X>
                            <cv:Y>106</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>255</cv:X>
                            <cv:Y>109</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>249</cv:X>
                            <cv:Y>111</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>243</cv:X>
                            <cv:Y>113</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>238</cv:X>
                            <cv:Y>113</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>232</cv:X>
                            <cv:Y>113</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>226</cv:X>
                            <cv:Y>111</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>220</cv:X>
                            <cv:Y>109</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>215</cv:X>
                            <cv:Y>106</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>211</cv:X>
                            <cv:Y>102</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>208</cv:X>
                            <cv:Y>98</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>205</cv:X>
                            <cv:Y>93</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>204</cv:X>
                            <cv:Y>88</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>203</cv:X>
                            <cv:Y>82</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>204</cv:X>
                            <cv:Y>77</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>205</cv:X>
                            <cv:Y>72</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>208</cv:X>
                            <cv:Y>67</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>211</cv:X>
                            <cv:Y>63</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>215</cv:X>
                            <cv:Y>59</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>220</cv:X>
                            <cv:Y>56</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>226</cv:X>
                            <cv:Y>54</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>232</cv:X>
                            <cv:Y>52</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>238</cv:X>
                            <cv:Y>52</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>243</cv:X>
                            <cv:Y>52</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>249</cv:X>
                            <cv:Y>54</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>255</cv:X>
                            <cv:Y>56</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>260</cv:X>
                            <cv:Y>59</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>264</cv:X>
                            <cv:Y>63</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>267</cv:X>
                            <cv:Y>67</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>270</cv:X>
                            <cv:Y>72</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>271</cv:X>
                            <cv:Y>77</cv:Y>
                          </cv:Point>
                        </cv:ArrayOfPoint>
                        <cv:ArrayOfPoint>
                          <cv:Point>
                            <cv:X>49</cv:X>
                            <cv:Y>305</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>137</cv:X>
                            <cv:Y>305</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>137</cv:X>
                            <cv:Y>406</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>49</cv:X>
                            <cv:Y>406</cv:Y>
                          </cv:Point>
                        </cv:ArrayOfPoint>
                      </cv:Regions>
                      <cv:MaskType>ToZero</cv:MaskType>
                      <cv:FillValue>
                        <cv:Val0>0</cv:Val0>
                        <cv:Val1>0</cv:Val1>
                        <cv:Val2>0</cv:Val2>
                        <cv:Val3>0</cv:Val3>
                      </cv:FillValue>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Annotation">
              <Name>Load Arena Info</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>L</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Load Arenas</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>tmp.csv</io:FileName>
                    <io:ListSeparator>:</io:ListSeparator>
                    <io:SkipRows>0</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="Parse">
                    <Pattern>%s</Pattern>
                    <Separator>;</Separator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="it[0]" />
                      <Property Name="Y" Selector="it[1]" />
                    </PropertyMappings>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CreatePoint">
                      <cv:X>53</cv:X>
                      <cv:Y>51</cv:Y>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Loaded Arena Rects</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Save Arena Info</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>S</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arena Rects</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>Array2String</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Expression" Description="Expression to be used in CSharpTransform for converting array elements to String." />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>Convert.ToString(X) + "," + Convert.ToString(Y)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Separator" />
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="StringProperty">
                            <Value>;</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Count" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:BufferCount">
                            <rx:Count>4</rx:Count>
                            <rx:Skip xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Add" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Length</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>Item1.Substring(0,Item2-1)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="8" To="10" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>tmp.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>4</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="6" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Set Arena Rects</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Loaded Arena Rects</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Current Arena Info</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Arena Rects</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Arena Regions </Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Count</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Raw Frames</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Parse Arena Rects</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arena Rects</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Create Individual Region</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Regions" Selector="Item1" />
        </PropertyMappings>
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>49</cv:X>
                <cv:Y>305</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>137</cv:X>
                <cv:Y>305</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>137</cv:X>
                <cv:Y>406</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>49</cv:X>
                <cv:Y>406</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferCount">
          <rx:Count>4</rx:Count>
          <rx:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Arena Regions </Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Arena Rects</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Define ROIs</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>ROIs</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>Arena Buffer</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Raw Frames</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Subtract Background</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>Frames</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Frames</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>ROI Activity</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>Max ROI Activity</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>ROIs Max Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Arena Rects</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="viz:TableLayoutPanelBuilder">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Frames</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Max Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="viz:TableLayoutPanelBuilder">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ROIs Activity</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="13" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="23" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="26" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="32" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="63" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="57" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="57" Label="Source2" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="57" Label="Source3" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source4" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="63" Label="Source2" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="63" Label="Source3" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source4" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>