WorkflowBuilder(Version=2.8.1)
Bonsai.PointGrey.FlyCapture(Index=2, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames) => #0
-> MemberSelector(Selector=Image)
-> Defer "Video Calibration" => #2
    Bonsai.Vision.AffineTransform(Pivot(X=704, Y=704), Translation(X=0, Y=0), Rotation=3.14159274, Scale(X=1, Y=1))
    -> PropertyMapping(Transform) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Grayscale => #3
    #1, #3 -> Bonsai.Vision.WarpAffine(Transform="-1,-8.742278E-08,1408;8.742278E-08,-1,1408", Flags=Linear, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
    -> WorkflowOutput
-> Bonsai.Vision.VideoWriter => #3
  FileName=D:\data\cam05_.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
GroupWorkflow SetupBoard(Description="Setup LED Board") => #4
    SubscribeSubject LedArray0Commands => #0
    ExternalizedMapping(PortName(DisplayName=Port1)) => #1
    #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)

    SubscribeSubject LedArray1Commands => #3
    ExternalizedMapping(PortName(DisplayName=Port2)) => #4
    #3, #4 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)

    Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=32, PayloadType=U8, Value=0))
    -> IgnoreElements
    -> BehaviorSubject LedArray0Commands
    -> BehaviorSubject LedArray1Commands

    BooleanProperty(Value=true) => #10
    -> Bonsai.Harp.CF.LedArrayCommand(Type=EnableSupply, Mask=Index0) => #11
    -> MulticastSubject LedArray0Commands
    #11 -> MulticastSubject LedArray1Commands
    #10 -> Bonsai.Harp.CF.LedArrayCommand(Type=EnableSupply, Mask=Index1) => #14
    -> MulticastSubject LedArray0Commands
    #14 -> MulticastSubject LedArray1Commands

    ExternalizedMapping(Value(DisplayName="IR Intensity"))
    -> IntProperty(Value=30)
    -> Bonsai.Harp.CF.LedArrayCommand(Type=WriteAuxiliaryIntensity, Mask=Index1)
    -> MulticastSubject LedArray0Commands

    BooleanProperty(Value=true)
    -> Bonsai.Harp.CF.LedArrayCommand(Type=SetAuxiliaryOutput, Mask=Index1)
    -> MulticastSubject LedArray0Commands

    BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index0)
    -> MulticastSubject LedArray0Commands

    BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index0)
    -> MulticastSubject LedArray1Commands

    BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index1)
    -> MulticastSubject LedArray0Commands

    BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index1)
    -> MulticastSubject LedArray1Commands

    ExternalizedMapping(Value(DisplayName="RGB Intensity"))
    -> IntProperty(Value=60) => #37
    -> Bonsai.Harp.CF.LedArrayCommand(Type=WriteIntensity, Mask=Index0)
    -> MulticastSubject LedArray0Commands
    #37 -> Bonsai.Harp.CF.LedArrayCommand(Type=WriteIntensity, Mask=Index1)
    -> MulticastSubject LedArray0Commands
    #37 -> Bonsai.Harp.CF.LedArrayCommand(Type=WriteIntensity, Mask=Index0)
    -> MulticastSubject LedArray1Commands
    #37 -> Bonsai.Harp.CF.LedArrayCommand(Type=WriteIntensity, Mask=Index1)
    -> MulticastSubject LedArray1Commands
#2 -> GroupWorkflow Fly1 => #5
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=704, Height=704)) => #1
    Bonsai.Windows.Input.KeyDown(Filter=F1, SuppressRepetitions=false) => #2
    #1, #2 -> WindowTrigger(Count=nil)
    -> SelectMany BGSubtr
        WorkflowInput Source1
        -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=10, AdaptationRate=0, ThresholdValue=30, ThresholdType=Binary, SubtractionMethod=Dark)
        -> WorkflowOutput
    -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=5, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion => #7
    -> MemberSelector(Selector=Centroid)
    -> Add(Operand=WorkflowProperty<OpenCV.Net.Point2f>(Value(X=0, Y=0))) => #9
    #7 -> MemberSelector(Selector=Orientation) => #10
    #7 -> MemberSelector(Selector=MajorAxisLength) => #11
    #7 -> MemberSelector(Selector=MinorAxisLength) => #12
    #9, #10, #11, #12 -> Disable CombineLatest
    -> Zip
    -> WorkflowOutput
-> MemberSelector(Selector=Item1) => #6
#2 -> GroupWorkflow Fly2 => #7
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=704, Y=0, Width=704, Height=704)) => #1
    Bonsai.Windows.Input.KeyDown(Filter=F1, SuppressRepetitions=false) => #2
    #1, #2 -> WindowTrigger(Count=nil)
    -> SelectMany BGSubtr
        WorkflowInput Source1
        -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=10, AdaptationRate=0, ThresholdValue=30, ThresholdType=Binary, SubtractionMethod=Dark)
        -> WorkflowOutput
    -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=5, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion => #7
    -> MemberSelector(Selector=Centroid)
    -> Add(Operand=WorkflowProperty<OpenCV.Net.Point2f>(Value(X=704, Y=0))) => #9
    #7 -> MemberSelector(Selector=Orientation) => #10
    #7 -> MemberSelector(Selector=MajorAxisLength) => #11
    #7 -> MemberSelector(Selector=MinorAxisLength) => #12
    #9, #10, #11, #12 -> Disable CombineLatest
    -> Zip
    -> WorkflowOutput
-> MemberSelector(Selector=Item1) => #8
#2 -> GroupWorkflow Fly3 => #9
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=704, Width=704, Height=704)) => #1
    Bonsai.Windows.Input.KeyDown(Filter=F1, SuppressRepetitions=false) => #2
    #1, #2 -> WindowTrigger(Count=nil)
    -> SelectMany BGSubtr
        WorkflowInput Source1
        -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=10, AdaptationRate=0, ThresholdValue=30, ThresholdType=Binary, SubtractionMethod=Dark)
        -> WorkflowOutput
    -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=5, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion => #7
    -> MemberSelector(Selector=Centroid)
    -> Add(Operand=WorkflowProperty<OpenCV.Net.Point2f>(Value(X=0, Y=704))) => #9
    #7 -> MemberSelector(Selector=Orientation) => #10
    #7 -> MemberSelector(Selector=MajorAxisLength) => #11
    #7 -> MemberSelector(Selector=MinorAxisLength) => #12
    #9, #10, #11, #12 -> Disable CombineLatest
    -> Zip
    -> WorkflowOutput
-> MemberSelector(Selector=Item1) => #10
#2 -> GroupWorkflow Fly4 => #11
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=704, Y=704, Width=704, Height=704)) => #1
    Bonsai.Windows.Input.KeyDown(Filter=F1, SuppressRepetitions=false) => #2
    #1, #2 -> WindowTrigger(Count=nil)
    -> SelectMany BGSubtr
        WorkflowInput Source1
        -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=10, AdaptationRate=0, ThresholdValue=30, ThresholdType=Binary, SubtractionMethod=Dark)
        -> WorkflowOutput
    -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=5, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion => #7
    -> MemberSelector(Selector=Centroid)
    -> Add(Operand=WorkflowProperty<OpenCV.Net.Point2f>(Value(X=704, Y=704))) => #9
    #7 -> MemberSelector(Selector=Orientation) => #10
    #7 -> MemberSelector(Selector=MajorAxisLength) => #11
    #7 -> MemberSelector(Selector=MinorAxisLength) => #12
    #9, #10, #11, #12 -> Disable CombineLatest
    -> Zip
    -> WorkflowOutput
-> MemberSelector(Selector=Item1) => #12
#6, #8, #10, #12 -> CombineLatest => #13
Timer(DueTime=PT0S, Period=PT1S) => #14
ExternalizedMapping(Filter(DisplayName=StartKey)) => #15
-> Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false) => #16
#14, #16 -> SubscribeWhen => #17
-> Bonsai.Scripting.IronPython.PythonTransform "TimerDisplay Cam05" => #18
  Script:
    @returns(str)
    def process(value):
      minutes = int(value/60)
      return '{:02d}:'.format(minutes)+'{:02d}'.format(int(value%60))
#0 -> MemberSelector(Selector=Metadata) => #19
#0 -> ElementIndex
-> MemberSelector(Selector=Index) => #21
#21, #16 -> TakeUntil
-> TakeLast(Count=1) => #23
#16, #19, #23 -> Zip => #24
ExternalizedMapping(FileName(DisplayName=MetaFilename)) => #25
#24, #25 -> Bonsai.IO.CsvWriter(FileName=D:\data\cam05_metadata_.csv, Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true) => #26
#2 -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=0, Width=704, Height=704)) => #27
#15 -> Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false) => #28
#27, #28 -> WindowTrigger(Count=nil)
-> SelectMany => #30
    WorkflowInput Source1
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=10, AdaptationRate=0, ThresholdValue=27, ThresholdType=Binary, SubtractionMethod=Dark)
    -> WorkflowOutput
#30, #27 -> Zip
-> MemberSelector(Selector=Item1)
-> Bonsai.Vision.RoiActivity => #33
  Regions
    ArrayOfPoint
      Point(X=300, Y=364)
      Point(X=300, Y=371)
      Point(X=296, Y=379)
      Point(X=294, Y=388)
      Point(X=288, Y=396)
      Point(X=284, Y=400)
      Point(X=276, Y=406)
      Point(X=267, Y=408)
      Point(X=259, Y=412)
      Point(X=252, Y=412)
      Point(X=241, Y=412)
      Point(X=234, Y=408)
      Point(X=225, Y=406)
      Point(X=217, Y=400)
      Point(X=213, Y=396)
      Point(X=207, Y=388)
      Point(X=205, Y=379)
      Point(X=201, Y=371)
      Point(X=201, Y=364)
      Point(X=201, Y=353)
      Point(X=205, Y=346)
      Point(X=207, Y=337)
      Point(X=213, Y=329)
      Point(X=217, Y=325)
      Point(X=225, Y=319)
      Point(X=234, Y=317)
      Point(X=241, Y=313)
      Point(X=252, Y=313)
      Point(X=259, Y=313)
      Point(X=267, Y=317)
      Point(X=276, Y=319)
      Point(X=284, Y=325)
      Point(X=288, Y=329)
      Point(X=294, Y=337)
      Point(X=296, Y=346)
      Point(X=300, Y=353)
    ArrayOfPoint
      Point(X=266, Y=370)
      Point(X=266, Y=373)
      Point(X=265, Y=375)
      Point(X=264, Y=378)
      Point(X=262, Y=380)
      Point(X=260, Y=382)
      Point(X=258, Y=384)
      Point(X=255, Y=385)
      Point(X=253, Y=386)
      Point(X=250, Y=386)
      Point(X=247, Y=386)
      Point(X=245, Y=385)
      Point(X=242, Y=384)
      Point(X=240, Y=382)
      Point(X=238, Y=380)
      Point(X=236, Y=378)
      Point(X=235, Y=375)
      Point(X=234, Y=373)
      Point(X=234, Y=370)
      Point(X=234, Y=367)
      Point(X=235, Y=365)
      Point(X=236, Y=362)
      Point(X=238, Y=360)
      Point(X=240, Y=358)
      Point(X=242, Y=356)
      Point(X=245, Y=355)
      Point(X=247, Y=354)
      Point(X=250, Y=354)
      Point(X=253, Y=354)
      Point(X=255, Y=355)
      Point(X=258, Y=356)
      Point(X=260, Y=358)
      Point(X=262, Y=360)
      Point(X=264, Y=362)
      Point(X=265, Y=365)
      Point(X=266, Y=367)
  Operation=Sum
ExternalizedMapping(Value(DisplayName=CatchTrialProbability)) => #34
#34, #33 -> FloatProperty(Value=0.5) => #35
#33, #35 -> GroupWorkflow "Topleft Left Spot" => #36
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=1000)
    -> DistinctUntilChanged
    -> GroupWorkflow "Closed-loop Feeding" => #3
        WorkflowInput Source1
        -> DistinctUntilChanged => #1
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=true))
            -> WorkflowOutput
        -> Delay(DueTime=PT6S) => #3
        #1 -> Condition => #4
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #3, #4 -> TakeUntil
        -> Repeat => #6
        #6, #4 -> Merge
        -> WorkflowOutput
    WorkflowInput Source2 => #4
    #3, #4 -> CombineLatest
    -> DistinctUntilChanged
    -> Bonsai.Scripting.IronPython.PythonTransform Feeding => #7
      Script:
        import random

        @returns(bool)
        def process(value):
          if value.Item1:
            if random.random() < value.Item2:
              return False
            else:
              return True
          else:
            return False
    #0 -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=1000)
    -> DistinctUntilChanged => #9
    #9, #4 -> CombineLatest
    -> DistinctUntilChanged
    -> Bonsai.Scripting.IronPython.PythonTransform Approach => #12
      Script:
        import random

        @returns(bool)
        def process(value):
          if value.Item1:
            if random.random() < value.Item2:
              return False
            else:
              return True
          else:
            return False
    #7, #12 -> Merge
    -> WorkflowOutput
#36, #28 -> SubscribeWhen
-> GroupWorkflow "LED TopLeft" => #38
    WorkflowInput Source1
    -> DistinctUntilChanged => #1
    -> Condition "IF True" => #2
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StartBehavior, Mask=Index0)
    -> MulticastSubject LedArray0Commands
    #2 -> Disable Delay(DueTime=PT1S)
    -> Disable Bonsai.Harp.CF.LedArrayCommand(Type=DisableArray, Mask=Index0)
    -> Disable MulticastSubject LedArray0Commands
    #1 -> Condition "If False"
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index0)
    -> MulticastSubject LedArray0Commands
#2 -> Bonsai.Vision.Crop(RegionOfInterest(X=704, Y=0, Width=704, Height=704)) => #39
#39, #28 -> WindowTrigger(Count=nil)
-> SelectMany => #41
    WorkflowInput Source1
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=10, AdaptationRate=0, ThresholdValue=27, ThresholdType=Binary, SubtractionMethod=Dark)
    -> WorkflowOutput
#41, #39 -> Zip => #42
ExternalizedMapping(Selector(DisplayName="Operation Mode", Description="Select Item1 (Experiment) or Item2 (Calibration)")) => #43
#42, #43 -> MemberSelector(Selector=Item1)
-> Bonsai.Vision.RoiActivity => #45
  Regions
    ArrayOfPoint
      Point(X=334, Y=331)
      Point(X=334, Y=341)
      Point(X=328, Y=352)
      Point(X=325, Y=366)
      Point(X=317, Y=375)
      Point(X=310, Y=382)
      Point(X=301, Y=390)
      Point(X=287, Y=393)
      Point(X=276, Y=399)
      Point(X=266, Y=399)
      Point(X=252, Y=399)
      Point(X=242, Y=393)
      Point(X=228, Y=390)
      Point(X=219, Y=382)
      Point(X=212, Y=375)
      Point(X=204, Y=366)
      Point(X=201, Y=352)
      Point(X=195, Y=341)
      Point(X=195, Y=331)
      Point(X=195, Y=317)
      Point(X=201, Y=307)
      Point(X=204, Y=293)
      Point(X=212, Y=284)
      Point(X=219, Y=277)
      Point(X=228, Y=269)
      Point(X=242, Y=266)
      Point(X=252, Y=260)
      Point(X=266, Y=260)
      Point(X=276, Y=260)
      Point(X=287, Y=266)
      Point(X=301, Y=269)
      Point(X=310, Y=277)
      Point(X=317, Y=284)
      Point(X=325, Y=293)
      Point(X=328, Y=307)
      Point(X=334, Y=317)
    ArrayOfPoint
      Point(X=282, Y=330)
      Point(X=282, Y=333)
      Point(X=281, Y=335)
      Point(X=280, Y=338)
      Point(X=278, Y=340)
      Point(X=276, Y=342)
      Point(X=274, Y=344)
      Point(X=271, Y=345)
      Point(X=269, Y=346)
      Point(X=266, Y=346)
      Point(X=263, Y=346)
      Point(X=261, Y=345)
      Point(X=258, Y=344)
      Point(X=256, Y=342)
      Point(X=254, Y=340)
      Point(X=252, Y=338)
      Point(X=251, Y=335)
      Point(X=250, Y=333)
      Point(X=250, Y=330)
      Point(X=250, Y=327)
      Point(X=251, Y=325)
      Point(X=252, Y=322)
      Point(X=254, Y=320)
      Point(X=256, Y=318)
      Point(X=258, Y=316)
      Point(X=261, Y=315)
      Point(X=263, Y=314)
      Point(X=266, Y=314)
      Point(X=269, Y=314)
      Point(X=271, Y=315)
      Point(X=274, Y=316)
      Point(X=276, Y=318)
      Point(X=278, Y=320)
      Point(X=280, Y=322)
      Point(X=281, Y=325)
      Point(X=282, Y=327)
  Operation=Sum
#45, #35 -> GroupWorkflow "Topright Left Spot"
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=1000)
    -> DistinctUntilChanged
    -> GroupWorkflow "Closed-loop Feeding" => #3
        WorkflowInput Source1
        -> DistinctUntilChanged => #1
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=true))
            -> WorkflowOutput
        -> Delay(DueTime=PT6S) => #3
        #1 -> Condition => #4
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #3, #4 -> TakeUntil
        -> Repeat => #6
        #6, #4 -> Merge
        -> WorkflowOutput
    WorkflowInput Source2 => #4
    #3, #4 -> CombineLatest
    -> DistinctUntilChanged
    -> Bonsai.Scripting.IronPython.PythonTransform => #7
      Script:
        import random

        @returns(bool)
        def process(value):
          if value.Item1:
            if random.random() < value.Item2:
              return False
            else:
              return True
          else:
            return False
    #0 -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=1000)
    -> DistinctUntilChanged => #9
    #9, #4 -> CombineLatest
    -> DistinctUntilChanged
    -> Bonsai.Scripting.IronPython.PythonTransform => #12
      Script:
        import random

        @returns(bool)
        def process(value):
          if value.Item1:
            if random.random() < value.Item2:
              return False
            else:
              return True
          else:
            return False
    #7, #12 -> Merge
    -> WorkflowOutput
-> DistinctUntilChanged => #47
#47, #28 -> SubscribeWhen
-> GroupWorkflow "LED TopRight" => #49
    WorkflowInput Source1
    -> DistinctUntilChanged => #1
    -> Condition "IF True" => #2
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StartBehavior, Mask=Index0)
    -> MulticastSubject LedArray1Commands
    #2 -> Disable Delay(DueTime=PT1S)
    -> Disable Bonsai.Harp.CF.LedArrayCommand(Type=DisableArray, Mask=Index0)
    -> Disable MulticastSubject LedArray1Commands
    #1 -> Condition "If False"
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index0)
    -> MulticastSubject LedArray1Commands
#2 -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=704, Width=704, Height=704)) => #50
#50, #28 -> WindowTrigger(Count=nil)
-> SelectMany => #52
    WorkflowInput Source1
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=10, AdaptationRate=0, ThresholdValue=27, ThresholdType=Binary, SubtractionMethod=Dark)
    -> WorkflowOutput
#52, #50 -> Zip => #53
#53, #43 -> MemberSelector(Selector=Item1)
-> Bonsai.Vision.RoiActivity => #55
  Regions
    ArrayOfPoint
      Point(X=334, Y=331)
      Point(X=334, Y=341)
      Point(X=328, Y=352)
      Point(X=325, Y=366)
      Point(X=317, Y=375)
      Point(X=310, Y=382)
      Point(X=301, Y=390)
      Point(X=287, Y=393)
      Point(X=276, Y=399)
      Point(X=266, Y=399)
      Point(X=252, Y=399)
      Point(X=242, Y=393)
      Point(X=228, Y=390)
      Point(X=219, Y=382)
      Point(X=212, Y=375)
      Point(X=204, Y=366)
      Point(X=201, Y=352)
      Point(X=195, Y=341)
      Point(X=195, Y=331)
      Point(X=195, Y=317)
      Point(X=201, Y=307)
      Point(X=204, Y=293)
      Point(X=212, Y=284)
      Point(X=219, Y=277)
      Point(X=228, Y=269)
      Point(X=242, Y=266)
      Point(X=252, Y=260)
      Point(X=266, Y=260)
      Point(X=276, Y=260)
      Point(X=287, Y=266)
      Point(X=301, Y=269)
      Point(X=310, Y=277)
      Point(X=317, Y=284)
      Point(X=325, Y=293)
      Point(X=328, Y=307)
      Point(X=334, Y=317)
    ArrayOfPoint
      Point(X=282, Y=330)
      Point(X=282, Y=333)
      Point(X=281, Y=335)
      Point(X=280, Y=338)
      Point(X=278, Y=340)
      Point(X=276, Y=342)
      Point(X=274, Y=344)
      Point(X=271, Y=345)
      Point(X=269, Y=346)
      Point(X=266, Y=346)
      Point(X=263, Y=346)
      Point(X=261, Y=345)
      Point(X=258, Y=344)
      Point(X=256, Y=342)
      Point(X=254, Y=340)
      Point(X=252, Y=338)
      Point(X=251, Y=335)
      Point(X=250, Y=333)
      Point(X=250, Y=330)
      Point(X=250, Y=327)
      Point(X=251, Y=325)
      Point(X=252, Y=322)
      Point(X=254, Y=320)
      Point(X=256, Y=318)
      Point(X=258, Y=316)
      Point(X=261, Y=315)
      Point(X=263, Y=314)
      Point(X=266, Y=314)
      Point(X=269, Y=314)
      Point(X=271, Y=315)
      Point(X=274, Y=316)
      Point(X=276, Y=318)
      Point(X=278, Y=320)
      Point(X=280, Y=322)
      Point(X=281, Y=325)
      Point(X=282, Y=327)
  Operation=Sum
#55, #35 -> GroupWorkflow "Bottomleft Left Spot"
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=1000)
    -> DistinctUntilChanged
    -> GroupWorkflow "Closed-loop Feeding" => #3
        WorkflowInput Source1
        -> DistinctUntilChanged => #1
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=true))
            -> WorkflowOutput
        -> Delay(DueTime=PT6S) => #3
        #1 -> Condition => #4
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #3, #4 -> TakeUntil
        -> Repeat => #6
        #6, #4 -> Merge
        -> WorkflowOutput
    WorkflowInput Source2 => #4
    #3, #4 -> CombineLatest
    -> DistinctUntilChanged
    -> Bonsai.Scripting.IronPython.PythonTransform => #7
      Script:
        import random

        @returns(bool)
        def process(value):
          if value.Item1:
            if random.random() < value.Item2:
              return False
            else:
              return True
          else:
            return False
    #0 -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=1000)
    -> DistinctUntilChanged => #9
    #9, #4 -> CombineLatest
    -> DistinctUntilChanged
    -> Bonsai.Scripting.IronPython.PythonTransform => #12
      Script:
        import random

        @returns(bool)
        def process(value):
          if value.Item1:
            if random.random() < value.Item2:
              return False
            else:
              return True
          else:
            return False
    #7, #12 -> Merge
    -> WorkflowOutput
-> DistinctUntilChanged => #57
#57, #28 -> SubscribeWhen
-> GroupWorkflow "LED BottomLeft" => #59
    WorkflowInput Source1
    -> DistinctUntilChanged => #1
    -> Condition "IF True" => #2
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StartBehavior, Mask=Index1)
    -> MulticastSubject LedArray0Commands
    #2 -> Disable Delay(DueTime=PT1S)
    -> Disable Bonsai.Harp.CF.LedArrayCommand(Type=DisableArray, Mask=Index1)
    -> Disable MulticastSubject LedArray0Commands
    #1 -> Condition "If False"
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index1)
    -> MulticastSubject LedArray0Commands
#2 -> Bonsai.Vision.Crop(RegionOfInterest(X=704, Y=704, Width=704, Height=704)) => #60
#60, #28 -> WindowTrigger(Count=nil)
-> SelectMany => #62
    WorkflowInput Source1
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=10, AdaptationRate=0, ThresholdValue=27, ThresholdType=Binary, SubtractionMethod=Dark)
    -> WorkflowOutput
#62, #60 -> Zip => #63
#63, #43 -> MemberSelector(Selector=Item1)
-> Bonsai.Vision.RoiActivity => #65
  Regions
    ArrayOfPoint
      Point(X=334, Y=331)
      Point(X=334, Y=341)
      Point(X=328, Y=352)
      Point(X=325, Y=366)
      Point(X=317, Y=375)
      Point(X=310, Y=382)
      Point(X=301, Y=390)
      Point(X=287, Y=393)
      Point(X=276, Y=399)
      Point(X=266, Y=399)
      Point(X=252, Y=399)
      Point(X=242, Y=393)
      Point(X=228, Y=390)
      Point(X=219, Y=382)
      Point(X=212, Y=375)
      Point(X=204, Y=366)
      Point(X=201, Y=352)
      Point(X=195, Y=341)
      Point(X=195, Y=331)
      Point(X=195, Y=317)
      Point(X=201, Y=307)
      Point(X=204, Y=293)
      Point(X=212, Y=284)
      Point(X=219, Y=277)
      Point(X=228, Y=269)
      Point(X=242, Y=266)
      Point(X=252, Y=260)
      Point(X=266, Y=260)
      Point(X=276, Y=260)
      Point(X=287, Y=266)
      Point(X=301, Y=269)
      Point(X=310, Y=277)
      Point(X=317, Y=284)
      Point(X=325, Y=293)
      Point(X=328, Y=307)
      Point(X=334, Y=317)
    ArrayOfPoint
      Point(X=282, Y=330)
      Point(X=282, Y=333)
      Point(X=281, Y=335)
      Point(X=280, Y=338)
      Point(X=278, Y=340)
      Point(X=276, Y=342)
      Point(X=274, Y=344)
      Point(X=271, Y=345)
      Point(X=269, Y=346)
      Point(X=266, Y=346)
      Point(X=263, Y=346)
      Point(X=261, Y=345)
      Point(X=258, Y=344)
      Point(X=256, Y=342)
      Point(X=254, Y=340)
      Point(X=252, Y=338)
      Point(X=251, Y=335)
      Point(X=250, Y=333)
      Point(X=250, Y=330)
      Point(X=250, Y=327)
      Point(X=251, Y=325)
      Point(X=252, Y=322)
      Point(X=254, Y=320)
      Point(X=256, Y=318)
      Point(X=258, Y=316)
      Point(X=261, Y=315)
      Point(X=263, Y=314)
      Point(X=266, Y=314)
      Point(X=269, Y=314)
      Point(X=271, Y=315)
      Point(X=274, Y=316)
      Point(X=276, Y=318)
      Point(X=278, Y=320)
      Point(X=280, Y=322)
      Point(X=281, Y=325)
      Point(X=282, Y=327)
  Operation=Sum
#65, #35 -> GroupWorkflow "Bottomright Left Spot"
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=1000)
    -> DistinctUntilChanged
    -> GroupWorkflow "Closed-loop Feeding" => #3
        WorkflowInput Source1
        -> DistinctUntilChanged => #1
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=true))
            -> WorkflowOutput
        -> Delay(DueTime=PT6S) => #3
        #1 -> Condition => #4
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #3, #4 -> TakeUntil
        -> Repeat => #6
        #6, #4 -> Merge
        -> WorkflowOutput
    WorkflowInput Source2 => #4
    #3, #4 -> CombineLatest
    -> DistinctUntilChanged
    -> Bonsai.Scripting.IronPython.PythonTransform => #7
      Script:
        import random

        @returns(bool)
        def process(value):
          if value.Item1:
            if random.random() < value.Item2:
              return False
            else:
              return True
          else:
            return False
    #0 -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=1000)
    -> DistinctUntilChanged => #9
    #9, #4 -> CombineLatest
    -> DistinctUntilChanged
    -> Bonsai.Scripting.IronPython.PythonTransform => #12
      Script:
        import random

        @returns(bool)
        def process(value):
          if value.Item1:
            if random.random() < value.Item2:
              return False
            else:
              return True
          else:
            return False
    #7, #12 -> Merge
    -> WorkflowOutput
-> DistinctUntilChanged => #67
#67, #28 -> SubscribeWhen
-> GroupWorkflow "LED BottomRight" => #69
    WorkflowInput Source1
    -> DistinctUntilChanged => #1
    -> Condition "IF True" => #2
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StartBehavior, Mask=Index1)
    -> MulticastSubject LedArray1Commands
    #2 -> Disable Delay(DueTime=PT1S)
    -> Disable Bonsai.Harp.CF.LedArrayCommand(Type=DisableArray, Mask=Index1)
    -> Disable MulticastSubject LedArray1Commands
    #1 -> Condition "If False"
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index1)
    -> MulticastSubject LedArray1Commands
#38, #49, #59, #69 -> CombineLatest => #70
#3, #4, #13, #18, #26, #70 -> CombineLatest => #71
#2 -> GroupWorkflow Frame_dt => #72
    WorkflowInput Source1
    -> ElementIndex
    -> MemberSelector(Selector=Index) => #2
    -> Timestamp
    -> TimeInterval
    -> MemberSelector(Selector=Interval.TotalSeconds) => #5
    #5, #2 -> Zip
    -> WorkflowOutput
#33 -> GroupWorkflow "Topleft Trigger" => #73
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=1000) => #1
    #0 -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=1000) => #2
    #1, #2 -> Zip
    -> WorkflowOutput
#72, #5, #73 -> Zip => #74
ExternalizedMapping(FileName(DisplayName=DataFilename1Topleft)) => #75
#74, #75 -> Bonsai.IO.CsvWriter => #76
  FileName=D:\data\cam05_fly1_.csv
  Delimiter=","
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=false
  Selector="Item1.Item1,Item1.Item2,Item2.Item1.X,Item2.Item1.Y,Item2.Item2,Item2.Item3,Item2.Item4,Item3.Item1,Item3.Item2"
#45 -> GroupWorkflow "Topright Trigger" => #77
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=1000) => #1
    #0 -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=1000) => #2
    #1, #2 -> Zip
    -> WorkflowOutput
#72, #7, #77 -> Zip => #78
ExternalizedMapping(FileName(DisplayName=DataFilename2Topright)) => #79
#78, #79 -> Bonsai.IO.CsvWriter => #80
  FileName=D:\data\cam05_fly2_.csv
  Delimiter=","
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=false
  Selector="Item1.Item1,Item1.Item2,Item2.Item1.X,Item2.Item1.Y,Item2.Item2,Item2.Item3,Item2.Item4,Item3.Item1,Item3.Item2"
#55 -> GroupWorkflow "Bottomleft Trigger" => #81
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=1000) => #1
    #0 -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=1000) => #2
    #1, #2 -> Zip
    -> WorkflowOutput
#72, #9, #81 -> Zip => #82
ExternalizedMapping(FileName(DisplayName=DataFilename3Bottomleft)) => #83
#82, #83 -> Bonsai.IO.CsvWriter => #84
  FileName=D:\data\cam05_fly3_.csv
  Delimiter=","
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=false
  Selector="Item1.Item1,Item1.Item2,Item2.Item1.X,Item2.Item1.Y,Item2.Item2,Item2.Item3,Item2.Item4,Item3.Item1,Item3.Item2"
#65 -> GroupWorkflow "Bottomright Trigger" => #85
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=1000) => #1
    #0 -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=1000) => #2
    #1, #2 -> Zip
    -> WorkflowOutput
#72, #11, #85 -> Zip => #86
ExternalizedMapping(FileName(DisplayName=DataFilename4Bottomright)) => #87
#86, #87 -> Bonsai.IO.CsvWriter => #88
  FileName=D:\data\cam05_fly4_.csv
  Delimiter=","
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=false
  Selector="Item1.Item1,Item1.Item2,Item2.Item1.X,Item2.Item1.Y,Item2.Item2,Item2.Item3,Item2.Item4,Item3.Item1,Item3.Item2"
#76, #80, #84, #88 -> CombineLatest => #89
#71, #89 -> CombineLatest => #90
ExternalizedMapping("TimerDuration (secs)") => #91
#17, #91 -> Condition
    WorkflowInput Source1 => #0
    ExternalizedMapping(Value(DisplayName="TimerDuration (secs)")) => #1
    #0, #1 -> GreaterThan(Operand=WorkflowProperty<System.Int64>(Value=1801))
    -> WorkflowOutput
-> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index0)
-> MulticastSubject LedArray0Commands
-> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index0)
-> MulticastSubject LedArray1Commands
-> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index1)
-> MulticastSubject LedArray0Commands
-> Bonsai.Harp.CF.LedArrayCommand(Type=StopBehavior, Mask=Index1)
-> MulticastSubject LedArray1Commands => #100
#90, #100 -> TakeUntil
