<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p2="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Path" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>data\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Path</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>0</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CameraOrientation</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>0</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CameraPosition</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Timeout (ms)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>5000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromMilliseconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Timeout</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ITI (ms)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>2000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromMilliseconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ITI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StartRadius</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StartAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>-3.14</p1:Lower>
                <p1:Upper>3.14</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>AngleDistribution</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" DisplayName="PositionMin" />
              <Property Name="Upper" DisplayName="PositionMax" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>-15</p1:Lower>
                <p1:Upper>15</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RadiusDistribution</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RotationGain" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.05</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RotationGain</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TranslationGain" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TranslationGain</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="24" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitShaders</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>320</gl:Width>
                <gl:Height>240</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>DimGray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location>
                  <gl:X>0</gl:X>
                  <gl:Y>0</gl:Y>
                </gl:Location>
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Maximized</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:MeshResources">
                <gl:Meshes>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>cone</gl:Name>
                    <gl:FileName>Models\cone.obj</gl:FileName>
                  </gl:MeshConfiguration>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>cube</gl:Name>
                    <gl:FileName>Models\cube.obj</gl:FileName>
                  </gl:MeshConfiguration>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>cylinder</gl:Name>
                    <gl:FileName>Models\cylinder.obj</gl:FileName>
                  </gl:MeshConfiguration>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>icosphere</gl:Name>
                    <gl:FileName>Models\icosphere.obj</gl:FileName>
                  </gl:MeshConfiguration>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>sphere</gl:Name>
                    <gl:FileName>Models\sphere.obj</gl:FileName>
                  </gl:MeshConfiguration>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>suzanne</gl:Name>
                    <gl:FileName>Models\suzanne.obj</gl:FileName>
                  </gl:MeshConfiguration>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>torus</gl:Name>
                    <gl:FileName>Models\torus.obj</gl:FileName>
                  </gl:MeshConfiguration>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>inwards_cylinder</gl:Name>
                    <gl:FileName>Models\inwards_cylinder.obj</gl:FileName>
                  </gl:MeshConfiguration>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>empty_cylinder</gl:Name>
                    <gl:FileName>Models\empty_cylinder.obj</gl:FileName>
                  </gl:MeshConfiguration>
                </gl:Meshes>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:ShaderResources">
                <gl:Shaders>
                  <gl:ShaderConfiguration xsi:type="gl:Material">
                    <gl:Name>MyShader</gl:Name>
                    <gl:RenderState />
                    <gl:ShaderUniforms>
                      <gl:UniformConfiguration xsi:type="gl:FloatUniform">
                        <gl:Name>height</gl:Name>
                        <gl:Value>100</gl:Value>
                      </gl:UniformConfiguration>
                    </gl:ShaderUniforms>
                    <gl:BufferBindings>
                      <gl:BufferBinding xsi:type="gl:TextureBinding">
                        <gl:Name>panorama</gl:Name>
                        <gl:TextureSlot>Texture0</gl:TextureSlot>
                        <gl:TextureName>PatternedArena</gl:TextureName>
                        <gl:TextureTarget>Texture2D</gl:TextureTarget>
                      </gl:BufferBinding>
                    </gl:BufferBindings>
                    <gl:FramebufferAttachments />
                    <gl:VertexShader>Shaders\cyl.vert</gl:VertexShader>
                    <gl:FragmentShader>Shaders\cyl.frag</gl:FragmentShader>
                    <gl:MeshName>empty_cylinder</gl:MeshName>
                  </gl:ShaderConfiguration>
                </gl:Shaders>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>PatternedArena</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Arenas\PatternedArena.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>big_cicle</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Arenas\big_circle.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>one_line</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Arenas\one_line.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>three_lines</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Arenas\three_lines.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>small_circles</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Arenas\small_circles.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>BallMovements</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>Frames</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:Crop">
                  <cv:RegionOfInterest>
                    <cv:X>288</cv:X>
                    <cv:Y>357</cv:Y>
                    <cv:Width>48</cv:Width>
                    <cv:Height>50</cv:Height>
                  </cv:RegionOfInterest>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:OpticalFlow">
                  <cv:PyramidScale>0.5</cv:PyramidScale>
                  <cv:Levels>3</cv:Levels>
                  <cv:WindowSize>12</cv:WindowSize>
                  <cv:Iterations>3</cv:Iterations>
                  <cv:PolyN>5</cv:PolyN>
                  <cv:PolySigma>1.1</cv:PolySigma>
                  <cv:Flags>None</cv:Flags>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Split" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Average" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Val0</Selector>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>Pan</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Average" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Val0</Selector>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>Tilt</Name>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="3" To="8" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DrawArena</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraPosition</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Eye" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraTarget</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Target" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
              <Eye>
                <X>5.744355</X>
                <Y>-0</Y>
                <Z>8.560919</Z>
              </Eye>
              <Target>
                <X>5.18716764</X>
                <Y>0</Y>
                <Z>7.730532</Z>
              </Target>
              <Up>
                <X>0</X>
                <Y>1</Y>
                <Z>0</Z>
              </Up>
              <FieldOfView>90</FieldOfView>
              <NearClip>0.1</NearClip>
              <FarClip>1000</FarClip>
              <Light>
                <X>0</X>
                <Y>1</Y>
                <Z>1</Z>
              </Light>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>big_cicle</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>25</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>0</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>90</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>50</ScaleX>
              <ScaleY>25</ScaleY>
              <ScaleZ>50</ScaleZ>
              <Ambient>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>one_line</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>-25</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>0</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>90</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>50</ScaleX>
              <ScaleY>25</ScaleY>
              <ScaleZ>50</ScaleZ>
              <Ambient>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>three_lines</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>0</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>25</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>50</ScaleX>
              <ScaleY>25</ScaleY>
              <ScaleZ>50</ScaleZ>
              <Ambient>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>small_circles</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>0</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>-25</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>50</ScaleX>
              <ScaleY>25</ScaleY>
              <ScaleZ>50</ScaleZ>
              <Ambient>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateCameraTarget</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraPosition</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraOrientation</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CameraTarget</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ITI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ITI</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RadiusDistribution</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TranslationGain</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>0.2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartRadius</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AngleDistribution</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RotationGain</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>0.05</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartAngle</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>RunTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Manual Navigation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartAngle</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>A</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>-1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>D</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RotationGain</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Cos" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Sin" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="Item1" />
                      <Property Name="Y" Selector="Item2" />
                      <Property Name="Z" Selector="Item3" />
                    </PropertyMappings>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>-0.557187438</gl:X>
                      <gl:Y>0</gl:Y>
                      <gl:Z>-0.830386758</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CameraOrientation</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartRadius</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>W</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>S</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>-1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TranslationGain</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraOrientation</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>NormVector</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>LengthFast</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Divide" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Divide" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Z</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Divide" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="X" Selector="Item1" />
                            <Property Name="Y" Selector="Item2" />
                            <Property Name="Z" Selector="Item3" />
                          </PropertyMappings>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:CreateVector3">
                            <gl:X>-0.556244731</gl:X>
                            <gl:Y>0</gl:Y>
                            <gl:Z>-0.8289818</gl:Z>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="0" To="5" Label="Source1" />
                        <Edge From="0" To="8" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="2" To="6" Label="Source2" />
                        <Edge From="2" To="9" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="11" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="11" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source3" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="Item1" />
                    </PropertyMappings>
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Vector3Multiply</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>-10.3270283</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Multiply" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Multiply" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Z</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Multiply" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="X" Selector="Item1" />
                            <Property Name="Y" Selector="Item2" />
                            <Property Name="Z" Selector="Item3" />
                          </PropertyMappings>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:CreateVector3">
                            <gl:X>5.744355</gl:X>
                            <gl:Y>-0</gl:Y>
                            <gl:Z>8.560919</gl:Z>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="6" Label="Source1" />
                        <Edge From="0" To="9" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="3" To="7" Label="Source2" />
                        <Edge From="3" To="10" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="12" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="12" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source3" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>CameraPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraOrientation</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
  it.Timestamp.TimeOfDay.TotalMilliseconds as Timestamp,
  it.Value.Item1.X as x,
  it.Value.Item1.Z as y,
  it.Value.Item2.X as vx,
  it.Value.Item2.Z as vy
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Path</Name>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="StringProperty">
                      <Value>FlyPosition.csv</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>data\FlyPosition.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>FileCount</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source3" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="9" To="12" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="13" Label="Source2" />
                  <Edge From="12" To="13" Label="Source3" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="22" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="22" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source3" />
                  <Edge From="22" To="24" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="28" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source2" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="33" To="35" Label="Source1" />
                  <Edge From="34" To="35" Label="Source2" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="41" Label="Source1" />
                  <Edge From="37" To="39" Label="Source1" />
                  <Edge From="38" To="39" Label="Source2" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source2" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="47" Label="Source1" />
                  <Edge From="44" To="45" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="46" To="47" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Navigation</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="DoubleProperty">
                        <Value>5</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Pan</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" DisplayName="RotationGain" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>0.05</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:WithLatestFrom" />
                    </Expression>
                    <Expression xsi:type="Multiply" />
                    <Expression xsi:type="rx:Accumulate" />
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="num:Cos" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="num:Sin" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="InputMapping">
                      <PropertyMappings>
                        <Property Name="X" Selector="Item1" />
                        <Property Name="Y" Selector="Item2" />
                        <Property Name="Z" Selector="Item3" />
                      </PropertyMappings>
                      <Selector>it</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="gl:CreateVector3">
                        <gl:X>0.6053169</gl:X>
                        <gl:Y>0</gl:Y>
                        <gl:Z>0.795984566</gl:Z>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>CameraOrientation</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="DoubleProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Tilt</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" DisplayName="SpeedGain" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="FloatProperty">
                        <Value>0.2</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:WithLatestFrom" />
                    </Expression>
                    <Expression xsi:type="Multiply" />
                    <Expression xsi:type="SubscribeSubject">
                      <Name>CameraOrientation</Name>
                    </Expression>
                    <Expression xsi:type="GroupWorkflow">
                      <Name>NormVector</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>X</Selector>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>LengthFast</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="Divide" />
                          <Expression xsi:type="MemberSelector">
                            <Selector>Y</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="Divide" />
                          <Expression xsi:type="MemberSelector">
                            <Selector>Z</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="Divide" />
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="InputMapping">
                            <PropertyMappings>
                              <Property Name="X" Selector="Item1" />
                              <Property Name="Y" Selector="Item2" />
                              <Property Name="Z" Selector="Item3" />
                            </PropertyMappings>
                            <Selector>it</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="gl:CreateVector3">
                              <gl:X>0.6042928</gl:X>
                              <gl:Y>0</gl:Y>
                              <gl:Z>0.7946379</gl:Z>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="0" To="2" Label="Source1" />
                          <Edge From="0" To="5" Label="Source1" />
                          <Edge From="0" To="8" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="2" To="6" Label="Source2" />
                          <Edge From="2" To="9" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="11" Label="Source1" />
                          <Edge From="5" To="6" Label="Source1" />
                          <Edge From="6" To="7" Label="Source1" />
                          <Edge From="7" To="11" Label="Source2" />
                          <Edge From="8" To="9" Label="Source1" />
                          <Edge From="9" To="10" Label="Source1" />
                          <Edge From="10" To="11" Label="Source3" />
                          <Edge From="11" To="12" Label="Source1" />
                          <Edge From="12" To="13" Label="Source1" />
                          <Edge From="13" To="14" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:WithLatestFrom" />
                    </Expression>
                    <Expression xsi:type="InputMapping">
                      <PropertyMappings>
                        <Property Name="Value" Selector="Item1" />
                      </PropertyMappings>
                      <Selector>Item2</Selector>
                    </Expression>
                    <Expression xsi:type="GroupWorkflow">
                      <Name>Vector3Multiply</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>X</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="FloatProperty">
                              <Value>0.02249645</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="Multiply" />
                          <Expression xsi:type="MemberSelector">
                            <Selector>Y</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="Multiply" />
                          <Expression xsi:type="MemberSelector">
                            <Selector>Z</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="Multiply" />
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="InputMapping">
                            <PropertyMappings>
                              <Property Name="X" Selector="Item1" />
                              <Property Name="Y" Selector="Item2" />
                              <Property Name="Z" Selector="Item3" />
                            </PropertyMappings>
                            <Selector>it</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="gl:CreateVector3">
                              <gl:X>0.013594443</gl:X>
                              <gl:Y>0</gl:Y>
                              <gl:Z>0.0178765319</gl:Z>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="0" To="6" Label="Source1" />
                          <Edge From="0" To="9" Label="Source1" />
                          <Edge From="1" To="4" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="3" To="4" Label="Source2" />
                          <Edge From="3" To="7" Label="Source2" />
                          <Edge From="3" To="10" Label="Source2" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="12" Label="Source1" />
                          <Edge From="6" To="7" Label="Source1" />
                          <Edge From="7" To="8" Label="Source1" />
                          <Edge From="8" To="12" Label="Source2" />
                          <Edge From="9" To="10" Label="Source1" />
                          <Edge From="10" To="11" Label="Source1" />
                          <Edge From="11" To="12" Label="Source3" />
                          <Edge From="12" To="13" Label="Source1" />
                          <Edge From="13" To="14" Label="Source1" />
                          <Edge From="14" To="15" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:Accumulate" />
                    <Expression xsi:type="rx:BehaviorSubject">
                      <Name>CameraPosition</Name>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="2" Label="Source2" />
                    <Edge From="2" To="5" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source2" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="7" To="8" Label="Source1" />
                    <Edge From="7" To="9" Label="Source1" />
                    <Edge From="7" To="10" Label="Source1" />
                    <Edge From="8" To="11" Label="Source1" />
                    <Edge From="9" To="11" Label="Source2" />
                    <Edge From="10" To="11" Label="Source3" />
                    <Edge From="11" To="12" Label="Source1" />
                    <Edge From="12" To="13" Label="Source1" />
                    <Edge From="13" To="14" Label="Source1" />
                    <Edge From="15" To="17" Label="Source1" />
                    <Edge From="16" To="17" Label="Source2" />
                    <Edge From="17" To="20" Label="Source1" />
                    <Edge From="18" To="19" Label="Source1" />
                    <Edge From="19" To="20" Label="Source2" />
                    <Edge From="20" To="21" Label="Source1" />
                    <Edge From="21" To="24" Label="Source1" />
                    <Edge From="22" To="23" Label="Source1" />
                    <Edge From="23" To="24" Label="Source2" />
                    <Edge From="24" To="25" Label="Source1" />
                    <Edge From="25" To="26" Label="Source1" />
                    <Edge From="26" To="27" Label="Source1" />
                    <Edge From="27" To="28" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Timeout</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p2:FlyCapture">
            <p2:Index>0</p2:Index>
            <p2:ColorProcessing>Default</p2:ColorProcessing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>Frames</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Draw</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
          <TranslationX>-1</TranslationX>
          <TranslationY>0</TranslationY>
          <TranslationZ>1</TranslationZ>
          <RotationZ>-25.0819683</RotationZ>
          <RotationY>0</RotationY>
          <RotationX>-35.4098358</RotationX>
          <ScaleX>0.3</ScaleX>
          <ScaleY>0.2</ScaleY>
          <ScaleZ>0.2</ScaleZ>
          <Ambient>
            <X>0.5</X>
            <Y>0.2</Y>
            <Z>0.2</Z>
          </Ambient>
          <Diffuse>
            <X>0.8</X>
            <Y>0.8</Y>
            <Z>0.8</Z>
          </Diffuse>
          <Specular>
            <X>0.8</X>
            <Y>0.8</Y>
            <Z>0.8</Z>
          </Specular>
          <SpecularExponent>10</SpecularExponent>
          <MeshName>torus</MeshName>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Draw</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
          <Duration>3</Duration>
          <RangeBegin>0</RangeBegin>
          <RangeEnd>359</RangeEnd>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Repeat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="num:DegreeToRadian" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="RotationY" Selector="it" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
          <TranslationX>-1</TranslationX>
          <TranslationY>0</TranslationY>
          <TranslationZ>1</TranslationZ>
          <RotationZ>59.01639</RotationZ>
          <RotationY>231.35556</RotationY>
          <RotationX>0</RotationX>
          <ScaleX>0.22</ScaleX>
          <ScaleY>0.22</ScaleY>
          <ScaleZ>0.22</ScaleZ>
          <Ambient>
            <X>0</X>
            <Y>0.2</Y>
            <Z>0.5</Z>
          </Ambient>
          <Diffuse>
            <X>0.8</X>
            <Y>0.8</Y>
            <Z>0.8</Z>
          </Diffuse>
          <Specular>
            <X>0.8</X>
            <Y>0.8</Y>
            <Z>0.8</Z>
          </Specular>
          <SpecularExponent>10</SpecularExponent>
          <MeshName>icosphere</MeshName>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Draw</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
          <TranslationX>-0.7</TranslationX>
          <TranslationY>0</TranslationY>
          <TranslationZ>0.5</TranslationZ>
          <RotationZ>0</RotationZ>
          <RotationY>0</RotationY>
          <RotationX>0</RotationX>
          <ScaleX>0.3</ScaleX>
          <ScaleY>0.3</ScaleY>
          <ScaleZ>0.3</ScaleZ>
          <Ambient>
            <X>0.5</X>
            <Y>0.5</Y>
            <Z>0</Z>
          </Ambient>
          <Diffuse>
            <X>0.5</X>
            <Y>0.5</Y>
            <Z>0.5</Z>
          </Diffuse>
          <Specular>
            <X>0.8</X>
            <Y>0.8</Y>
            <Z>0.8</Z>
          </Specular>
          <SpecularExponent>10</SpecularExponent>
          <MeshName>cone</MeshName>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="20" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>