WorkflowBuilder(Version=2.9.0)
GroupWorkflow "Init Session"
    DoubleProperty(Value=0)
    -> BehaviorSubject "Target X"

    DoubleProperty(Value=0)
    -> BehaviorSubject "Target Y"

    DoubleProperty(Value=0)
    -> BehaviorSubject "Rotation Angle1"

    DoubleProperty(Value=0)
    -> BehaviorSubject "Rotation Angle2"

    StringProperty(Value="C:\Users\HugoMarques\Carey Lab Dropbox\Hugo Marques\Hugo\Projects\Teaching\INDP2022\MarcoMartaVisuomotorRotation\Bonsai\Data\S0\S0")
    -> BehaviorSubject subjectInfo

    IntProperty(Value=0)
    -> BehaviorSubject trialNumber

    DoubleProperty(Value=0)
    -> BehaviorSubject "Aim X"

    DoubleProperty(Value=0)
    -> BehaviorSubject "Aim Y"

    ExternalizedMapping(Value(DisplayName=Path))
    -> StringProperty(Value=data)
    -> BehaviorSubject Path

    ExternalizedMapping(Value(DisplayName=Subject))
    -> StringProperty(Value=HugoTestError)
    -> BehaviorSubject Subject

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=8)
    -> BehaviorSubject MyDistribution

    FloatProperty(Value=0)
    -> BehaviorSubject "Cursor1 Layer"

    FloatProperty(Value=0)
    -> BehaviorSubject "Cursor2 Layer"

    SubscribeSubject Path => #29
    StringProperty(Value=\) => #30
    SubscribeSubject Subject => #31
    #29, #30, #31 -> Zip
    -> Add
    -> BehaviorSubject "Data Path"

    DoubleProperty(Value=1)
    -> BehaviorSubject Instruction

    SubscribeSubject "Experimental File"
    -> PropertyMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=experiments\double_cursor_full.csv, SkipRows=0)
    -> ToArray
    -> MemberSelector(Selector=Length)
    -> Subtract(Operand=IntProperty(Value=1)) => #42
    ExternalizedMapping(Value(DisplayName=ExperimentalFIle))
    -> StringProperty(Value=experiments\double_cursor_full.csv)
    -> BehaviorSubject "Experimental File" => #45
    #42, #45 -> SubscribeWhen
    -> BehaviorSubject "Number of Trials"

    DoubleProperty(Value=0)
    -> BehaviorSubject "Cursor1 PositionX" => #49
    DoubleProperty(Value=0)
    -> BehaviorSubject "Cursor1 PositionY" => #51
    #49, #51 -> Zip
    -> BehaviorSubject "Cursor1 Position"
    -> Take(Count=1)
    -> InputMapping(Y(Selector=Item2), X(Selector=Item1))
    -> Bonsai.Shaders.CreateVector2(X=0, Y=0)
    -> ToArray
    -> BehaviorSubject "Cursor1 Trajectory"

    DoubleProperty(Value=0) => #59
    DoubleProperty(Value=0) => #60
    #59, #60 -> Zip
    -> Take(Count=1)
    -> InputMapping(Y(Selector=Item2), X(Selector=Item1))
    -> Bonsai.Shaders.CreateVector2(X=0, Y=0)
    -> ToArray
    -> BehaviorSubject "Cursor2 Trajectory"

GroupWorkflow FileManagement
    SubscribeSubject "Data Path"
    -> PropertyMapping(Arguments)
    -> Bonsai.IO.StartProcess(FileName="cmd.exe ", Arguments=data\HugoTestError)

    SubscribeSubject "Data Path"
    -> Add(Operand=StringProperty(Value=\experimental_file.txt)) => #4
    SubscribeSubject "Experimental File" => #5
    #4, #5 -> WithLatestFrom
    -> InputMapping(Selector=Item2, FileName(Selector=Item1))
    -> SelectMany => #8
        WorkflowInput Source1 => #0
        ExternalizedMapping(FileName) => #1
        #0, #1 -> Bonsai.IO.CsvWriter(FileName=data\HugoTestError\experimental_file.txt, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject "Data Path" => #9
    #8, #9 -> SubscribeWhen

    StringProperty(Value='copy "') => #11
    SubscribeSubject "Experimental File" => #12
    StringProperty(Value='" "') => #13
    SubscribeSubject "Data Path" => #14
    StringProperty(Value='\experiment.csv"') => #15
    #11, #12, #13, #14, #15 -> Zip
    -> Add
    -> PropertyMapping(Arguments)
    -> Bonsai.IO.StartProcess(FileName=cmd.exe, Arguments='copy "experiments\double_cursor_full.csv" "data\HugoTestError\experiment.csv"')

GroupWorkflow JoystickListenerRotation
    Bonsai.Shaders.Input.GamePad(Index=0)
    -> MemberSelector(Selector=ThumbSticks.Left) => #1
    -> MemberSelector(Selector=Y)
    -> BehaviorSubject PadY => #3
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> GreaterThan(Operand=FloatProperty(Value=0.18))
        -> WorkflowOutput
    -> Bonsai.Dsp.Rescale(Min=-1, Max=1, RangeMin=-0.15, RangeMax=0.15, RescaleType=Linear) => #5
    #3 -> Condition
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThanOrEqual(Operand=FloatProperty(Value=0.18))
        -> WorkflowOutput
    -> DoubleProperty(Value=0) => #7
    #5, #7 -> Merge => #8
    #1 -> MemberSelector(Selector=X)
    -> BehaviorSubject PadX => #10
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> GreaterThan(Operand=FloatProperty(Value=0.18))
        -> WorkflowOutput
    -> Bonsai.Dsp.Rescale(Min=-1, Max=1, RangeMin=-0.15, RangeMax=0.15, RescaleType=Linear) => #12
    #10 -> Condition
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThanOrEqual(Operand=FloatProperty(Value=0.18))
        -> WorkflowOutput
    -> DoubleProperty(Value=0) => #14
    #12, #14 -> Merge => #15
    #8, #15 -> Zip
    -> Bonsai.Dsp.CartToPolar(AngleInDegrees=true) => #17
    -> MemberSelector(Selector=Item1) => #18
    #17 -> MemberSelector(Selector=Item2) => #19
    SubscribeSubject "Rotation Angle1"
    -> Bonsai.Numerics.RadianToDegree
    -> PropertyMapping(Value) => #22
    #19, #22 -> Add(Operand=DoubleProperty(Value=0)) => #23
    #18, #23 -> Zip
    -> Bonsai.Dsp.PolarToCart(AngleInDegrees=true) => #25
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject "Cursor1 VelocityY"
    #25 -> MemberSelector(Selector=Item2)
    -> BehaviorSubject "Cursor1 VelocityX"

GroupWorkflow "Scene Management"
    Bonsai.Shaders.CreateWindow
      Width=200
      Height=200
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=400, Y=100)
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration(Name=line), MeshConfiguration(Name=line2)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=LineShader
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.Quad.vert
          GeometryShader=shaders\line.geom
          FragmentShader=BonVision:Shaders.Color.frag
          MeshName=""
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=LineShader2
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.Quad.vert
          GeometryShader=shaders\line2.geom
          FragmentShader=BonVision:Shaders.Color.frag
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=circular_grid
          Width=1000
          Height=1000
          InternalFormat=Rgba
          WrapS=ClampToBorder
          WrapT=ClampToBorder
          MinFilter=Linear
          MagFilter=Linear
          FileName=shaders\circular_grid_non_cardinals.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=UseRed
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=instructions\UseRed.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=UseRedLookGreen
          Width=400
          Height=400
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=instructions\UseRedLookGreen.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=UseGreen
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=instructions\UseGreen.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=UseRedAgain
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=instructions\UseRedAgain.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=TestPrediction
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=shaders\circular_grid_non_cardinals_numbers.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=PredictionQuestion
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=instructions\PredictionQuestion.png
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame => #6
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
    -> BehaviorSubject DrawStimuli => #8
    #6 -> MemberSelector(Selector=Sender.Width) => #9
    #6 -> MemberSelector(Selector=Sender.Height) => #10
    #9, #10 -> Zip
    -> Divide
    -> BehaviorSubject AspectRatio => #13
    #8, #13 -> Zip

    Bonsai.Shaders.RenderFrame
    -> Bonsai.Shaders.DrawMesh(ShaderName=LineShader2, MeshName=line2)

    Bonsai.Shaders.CreateVector4(X=0, Y=1, Z=0, W=1)
    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=LineShader2)

    SubscribeSubject "Cursor2 Position"
    -> Condition "Show Trajectory2?"
        WorkflowInput Source1 => #0
        SubscribeSubject "Cursor2 Layer" => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> GreaterThan(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> DistinctUntilChanged
    -> SelectMany
        WorkflowInput Source1 => #0
        SubscribeSubject "Cursor2 Trajectory" => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Merge
        -> SelectMany => #5
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject "Cursor2 Position"
        -> InputMapping(Y(Selector=Item2), X(Selector=Item1))
        -> Bonsai.Shaders.CreateVector2(X=0, Y=0) => #8
        #0, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #10
        #5, #10 -> Merge
        -> ToArray
        -> MulticastSubject "Cursor2 Trajectory"
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany TransformToAspectRatio
        WorkflowInput Source1
        -> Merge
        -> GroupWorkflow TransformToAspectRatio
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=X) => #1
            -> Condition => #2
                WorkflowInput Source1 => #0
                -> Bonsai.Shaders.AspectRatio => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> LessThan(Operand=FloatProperty(Value=1))
                -> WorkflowOutput
            #1 -> Condition => #3
                WorkflowInput Source1 => #0
                -> Bonsai.Shaders.AspectRatio => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> GreaterThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> Bonsai.Shaders.AspectRatio => #4
            #3, #4 -> Zip
            -> Divide => #6
            #2, #6 -> Merge => #7
            #0 -> MemberSelector(Selector=Y) => #8
            #7, #8 -> Zip
            -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2))
            -> Bonsai.Shaders.CreateVector2(X=0, Y=0)
            -> WorkflowOutput

            SubscribeSubject "Number of Trials"
        -> ToArray
        -> Take(Count=1)
        -> WorkflowOutput
    -> Bonsai.Shaders.UpdateVertexBuffer(MeshName=line2, DrawMode=LineStrip, Usage=DynamicDraw, VertexAttributes(VertexAttributeMapping(Size=2, Normalized=false, Type=Float)))

    Bonsai.Shaders.CreateVector4(X=1, Y=0, Z=0, W=1)
    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=LineShader)

    Bonsai.Shaders.RenderFrame
    -> Bonsai.Shaders.DrawMesh(ShaderName=LineShader, MeshName=line)

    SubscribeSubject "Cursor1 Position"
    -> Condition "Show Trajectory1?"
        WorkflowInput Source1 => #0
        SubscribeSubject "Cursor1 Layer" => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> GreaterThan(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> DistinctUntilChanged
    -> SelectMany
        WorkflowInput Source1 => #0
        SubscribeSubject "Cursor1 Trajectory" => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Merge
        -> SelectMany => #5
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject "Cursor1 Position"
        -> InputMapping(Y(Selector=Item2), X(Selector=Item1))
        -> Bonsai.Shaders.CreateVector2(X=0, Y=0) => #8
        #0, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #10
        #5, #10 -> Merge
        -> ToArray
        -> MulticastSubject "Cursor1 Trajectory"
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany TransformToAspectRatio
        WorkflowInput Source1
        -> Merge
        -> GroupWorkflow TransformToAspectRatio
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=X) => #1
            -> Condition => #2
                WorkflowInput Source1 => #0
                -> Bonsai.Shaders.AspectRatio => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> LessThan(Operand=FloatProperty(Value=1))
                -> WorkflowOutput
            #1 -> Condition => #3
                WorkflowInput Source1 => #0
                -> Bonsai.Shaders.AspectRatio => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> GreaterThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> Bonsai.Shaders.AspectRatio => #4
            #3, #4 -> Zip
            -> Divide => #6
            #2, #6 -> Merge => #7
            #0 -> MemberSelector(Selector=Y) => #8
            #7, #8 -> Zip
            -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2))
            -> Bonsai.Shaders.CreateVector2(X=0, Y=0)
            -> WorkflowOutput

            SubscribeSubject "Number of Trials"
        -> ToArray
        -> Take(Count=1)
        -> WorkflowOutput
    -> Bonsai.Shaders.UpdateVertexBuffer(MeshName=line, DrawMode=LineStrip, Usage=DynamicDraw, VertexAttributes(VertexAttributeMapping(Size=2, Normalized=false, Type=Float)))

GroupWorkflow MovementPlayer
    SubscribeSubject "Cursor1 VelocityY" => #0
    SubscribeSubject "Cursor1 PositionY" => #1
    #0, #1 -> WithLatestFrom
    -> Add
    -> MulticastSubject "Cursor1 PositionY"

    SubscribeSubject "Cursor1 VelocityX" => #5
    SubscribeSubject "Cursor1 PositionX" => #6
    #5, #6 -> WithLatestFrom
    -> Add
    -> MulticastSubject "Cursor1 PositionX"

GroupWorkflow "Cursor2 Control"
    SubscribeSubject "Cursor1 Position"
    -> Bonsai.Dsp.CartToPolar(AngleInDegrees=true) => #1
    -> MemberSelector(Selector=Item1) => #2
    #1 -> MemberSelector(Selector=Item2) => #3
    SubscribeSubject "Rotation Angle2" => #4
    #3, #4 -> WithLatestFrom
    -> Add => #6
    #2, #6 -> Zip
    -> Bonsai.Dsp.PolarToCart(AngleInDegrees=true)
    -> BehaviorSubject "Cursor2 Position"

SubscribeSubject "Experimental File"
-> InputMapping(Selector=it, FileName(Selector=it))
-> SelectMany "Init Trial"
    ExternalizedMapping(Name)
    -> SubscribeSubject trialNumber
    -> Add(Operand=IntProperty(Value=1))
    -> PropertyMapping(SkipRows) => #3
    ExternalizedMapping(FileName) => #4
    #3, #4 -> Bonsai.IO.CsvReader(FileName=experiments\double_cursor_full.csv, ListSeparator="", ScanPattern=%s, SkipRows=116)
    -> Take(Count=1)
    -> Parse(Pattern=%d, Separator=",") => #7
    -> Index(Operand=IntProperty(Value=1))
    -> MulticastSubject "Target X" => #9
    #7 -> Index(Operand=IntProperty(Value=2))
    -> MulticastSubject "Target Y" => #11
    #7 -> Index(Operand=IntProperty(Value=3))
    -> MulticastSubject "Aim X" => #13
    #7 -> Index(Operand=IntProperty(Value=4))
    -> MulticastSubject "Aim Y" => #15
    #7 -> Index(Operand=IntProperty(Value=5))
    -> MulticastSubject "Rotation Angle1" => #17
    #7 -> Index(Operand=IntProperty(Value=6))
    -> MulticastSubject "Rotation Angle2" => #19
    #7 -> Index(Operand=IntProperty(Value=7))
    -> MulticastSubject "Cursor1 Layer" => #21
    #7 -> Index(Operand=IntProperty(Value=8))
    -> MulticastSubject "Cursor2 Layer" => #23
    #7 -> Index(Operand=IntProperty(Value=9))
    -> MulticastSubject Instruction => #25
    #9, #11, #13, #15, #17, #19, #21, #23, #25 -> Zip
    -> WorkflowOutput

    DoubleProperty(Value=0)
    -> MulticastSubject "Cursor1 PositionX" => #29
    DoubleProperty(Value=0)
    -> MulticastSubject "Cursor1 PositionY" => #31
    #29, #31 -> Zip
    -> MulticastSubject "Cursor1 Position"
    -> MulticastSubject "Cursor2 Position"

    DoubleProperty(Value=0) => #35
    DoubleProperty(Value=0) => #36
    #35, #36 -> Zip
    -> InputMapping(Y(Selector=Item2), X(Selector=Item1))
    -> Bonsai.Shaders.CreateVector2(X=0, Y=0)
    -> Take(Count=1)
    -> ToArray
    -> MulticastSubject "Cursor1 Trajectory"
    -> Bonsai.Shaders.UpdateVertexBuffer(MeshName=line, DrawMode=LineStrip, Usage=DynamicDraw, VertexAttributes(VertexAttributeMapping(Size=2, Normalized=false, Type=Float)))

    DoubleProperty(Value=0) => #44
    DoubleProperty(Value=0) => #45
    #44, #45 -> Zip
    -> InputMapping(Y(Selector=Item2), X(Selector=Item1))
    -> Bonsai.Shaders.CreateVector2(X=0, Y=0)
    -> Take(Count=1)
    -> ToArray
    -> MulticastSubject "Cursor2 Trajectory"
    -> Bonsai.Shaders.UpdateVertexBuffer(MeshName=line2, DrawMode=LineStrip, Usage=DynamicDraw, VertexAttributes(VertexAttributeMapping(Size=2, Normalized=false, Type=Float)))
-> SelectMany "Show Instruction"
    SubscribeSubject Instruction => #0
    -> Condition
        SubscribeSubject Instruction
        -> Equal(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> DoubleProperty(Value=0) => #2
    #0 -> Condition
        SubscribeSubject Instruction => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    -> SelectMany
        Bonsai.Shaders.Input.GamePad(Index=0)
        -> MemberSelector(Selector=Buttons.A)
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<OpenTK.Input.ButtonState>(Value=Pressed))
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject DrawStimuli => #5
        ExternalizedMapping(TextureName) => #6
        #5, #6 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawImage.bonsai
          TextureName=UseRed
          ExtentX=2
          ExtentY=2
          LocationX=0
          LocationY=0
          Layer=-1
          Angle=0
          ScaleX=1
          ScaleY=1
          ShiftX=0
          ShiftY=0
    -> DoubleProperty(Value=1) => #5
    #0 -> Condition
        SubscribeSubject Instruction => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=DoubleProperty(Value=2))
        -> WorkflowOutput
    -> SelectMany
        Bonsai.Shaders.Input.GamePad(Index=0)
        -> MemberSelector(Selector=Buttons.A)
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<OpenTK.Input.ButtonState>(Value=Pressed))
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject DrawStimuli => #5
        ExternalizedMapping(TextureName) => #6
        #5, #6 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawImage.bonsai
          TextureName=UseRedLookGreen
          ExtentX=2
          ExtentY=2
          LocationX=0
          LocationY=0
          Layer=-1
          Angle=0
          ScaleX=1
          ScaleY=1
          ShiftX=0
          ShiftY=0
    -> DoubleProperty(Value=2) => #8
    #0 -> Condition
        SubscribeSubject Instruction => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=DoubleProperty(Value=3))
        -> WorkflowOutput
    -> SelectMany
        Bonsai.Shaders.Input.GamePad(Index=0)
        -> MemberSelector(Selector=Buttons.A)
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<OpenTK.Input.ButtonState>(Value=Pressed))
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject DrawStimuli => #5
        ExternalizedMapping(TextureName) => #6
        #5, #6 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawImage.bonsai
          TextureName=UseGreen
          ExtentX=2
          ExtentY=2
          LocationX=0
          LocationY=0
          Layer=-1
          Angle=0
          ScaleX=1
          ScaleY=1
          ShiftX=0
          ShiftY=0
    -> DoubleProperty(Value=3) => #11
    #0 -> Condition
        SubscribeSubject Instruction => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=DoubleProperty(Value=4))
        -> WorkflowOutput
    -> SelectMany
        Bonsai.Shaders.Input.GamePad(Index=0)
        -> MemberSelector(Selector=Buttons.A)
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<OpenTK.Input.ButtonState>(Value=Pressed))
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject DrawStimuli => #5
        ExternalizedMapping(TextureName) => #6
        #5, #6 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawImage.bonsai
          TextureName=UseRedAgain
          ExtentX=2
          ExtentY=2
          LocationX=0
          LocationY=0
          Layer=-1
          Angle=0
          ScaleX=1
          ScaleY=1
          ShiftX=0
          ShiftY=0
    -> DoubleProperty(Value=4) => #14
    #0 -> Condition
        SubscribeSubject Instruction
        -> Equal(Operand=DoubleProperty(Value=5))
        -> WorkflowOutput
    -> SelectMany
        SubscribeSubject MyDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> BehaviorSubject "Sorted Number"

        Bonsai.Shaders.Input.KeyDown(Key=nil, Modifiers=nil)
        -> MemberSelector(Selector=EventArgs.Key)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(it)-109
        -> Condition => #6
            WorkflowInput Source1 => #0
            -> GreaterThanOrEqual(Operand=IntProperty(Value=1)) => #1
            #0 -> LessThanOrEqual(Operand=IntProperty(Value=8)) => #2
            #1, #2 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        SubscribeSubject "Sorted Number" => #7
        #6, #7 -> WithLatestFrom => #8
        SubscribeSubject "Data Path"
        -> Add(Operand=StringProperty(Value=\predictions.csv))
        -> PropertyMapping(FileName) => #11
        #8, #11 -> Bonsai.IO.CsvWriter(FileName=data\HugoTestError\predictions.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject DrawStimuli => #15
        ExternalizedMapping(TextureName) => #16
        #15, #16 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawImage.bonsai
          TextureName=TestPrediction
          ExtentX=2
          ExtentY=2
          LocationX=0
          LocationY=0
          Layer=-1
          Angle=0
          ScaleX=1
          ScaleY=1
          ShiftX=0
          ShiftY=0

        SubscribeSubject DrawStimuli
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawImage.bonsai
          TextureName=PredictionQuestion
          ExtentX=2
          ExtentY=2
          LocationX=0
          LocationY=0
          Layer=-1
          Angle=0
          ScaleX=1
          ScaleY=1
          ShiftX=0
          ShiftY=0

        SubscribeSubject DrawStimuli => #20
        SubscribeSubject "Sorted Number"
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToString(it)
        -> PropertyMapping(Text) => #23
        #20, #23 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawText.bonsai
          ExtentX=1
          ExtentY=1
          Text=3
          Font="Microsoft Sans Serif, 65pt"
          Alignment=Center
          LineAlignment=Center
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          LocationX=0
          LocationY=-0.1
          Layer=0
          Angle=0
    -> DoubleProperty(Value=5) => #17
    #2, #5, #8, #11, #14, #17 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany "Run Trial"
    GroupWorkflow "Log Cursor1"
        SubscribeSubject "Cursor1 Position"
        -> DistinctUntilChanged
        -> Timestamp => #2
        SubscribeSubject "Data Path"
        -> Add(Operand=StringProperty(Value=/cursor1_trial.txt))
        -> PropertyMapping(FileName) => #5
        #2, #5 -> Bonsai.IO.CsvWriter(FileName=data\HugoTestError/cursor1_trial.txt, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
        -> WorkflowOutput

    GroupWorkflow "Log Cursor2"
        SubscribeSubject "Cursor2 Position"
        -> DistinctUntilChanged
        -> Timestamp => #2
        SubscribeSubject "Data Path"
        -> Add(Operand=StringProperty(Value=/cursor2_trial.txt))
        -> PropertyMapping(FileName) => #5
        #2, #5 -> Bonsai.IO.CsvWriter(FileName=data\HugoTestError/cursor2_trial.txt, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
        -> WorkflowOutput

    WorkflowInput Source1
    -> SelectMany Game
        GroupWorkflow "Draw Target"
            SubscribeSubject DrawStimuli => #0
            SubscribeSubject "Target X"
            -> PropertyMapping(LocationX) => #2
            SubscribeSubject "Target Y"
            -> PropertyMapping(LocationY) => #4
            #0, #2, #4 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawCircle.bonsai
              Diameter=0.05
              LocationX=-0.3444151
              LocationY=-0.8314916
              Layer=-1
              ColorR=0.3
              ColorG=0.3
              ColorB=1
              ColorA=1
            -> WorkflowOutput

        SubscribeSubject DrawStimuli
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawImage.bonsai
          TextureName=circular_grid
          ExtentX=2
          ExtentY=2
          LocationX=0
          LocationY=0
          Layer=-1
          Angle=0
          ScaleX=1
          ScaleY=1
          ShiftX=0
          ShiftY=0

        SubscribeSubject "Cursor1 Layer"
        -> Condition
            WorkflowInput Source1
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany "Draw Cursor1"
            SubscribeSubject DrawStimuli
            -> Skip(Count=1) => #1
            FloatProperty(Value=1)
            -> PropertyMapping(ColorA) => #3
            SubscribeSubject "Cursor1 Position" => #4
            -> MemberSelector(Selector=Item1)
            -> PropertyMapping(LocationX) => #6
            #4 -> MemberSelector(Selector=Item2)
            -> PropertyMapping(LocationY) => #8
            SubscribeSubject "Cursor1 Layer"
            -> PropertyMapping(Layer) => #10
            #1, #3, #6, #8, #10 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=0.06, LocationX=0, LocationY=0, Layer=2, ColorR=1, ColorG=0.2, ColorB=0.2, ColorA=1)
            -> WorkflowOutput
            #4 -> DistinctUntilChanged

        SubscribeSubject "Cursor2 Layer"
        -> Condition
            WorkflowInput Source1
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany "Draw Cursor2"
            SubscribeSubject DrawStimuli
            -> Skip(Count=1) => #1
            SubscribeSubject "Cursor2 Position" => #2
            -> MemberSelector(Selector=Item1)
            -> PropertyMapping(LocationX) => #4
            #2 -> MemberSelector(Selector=Item2)
            -> PropertyMapping(LocationY) => #6
            SubscribeSubject "Cursor2 Layer"
            -> PropertyMapping(Layer) => #8
            #1, #4, #6, #8 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=0.06, LocationX=0, LocationY=0, Layer=1, ColorR=0.3, ColorG=1, ColorB=0.3, ColorA=1)
            -> WorkflowOutput

        GroupWorkflow "Cursor Center Distance" => #9
            SubscribeSubject "Cursor1 PositionX"
            -> Bonsai.Dsp.Pow(Power=2) => #1
            SubscribeSubject "Cursor1 PositionY"
            -> Bonsai.Dsp.Pow(Power=2) => #3
            #1, #3 -> Zip
            -> Add
            -> Bonsai.Numerics.Sqrt
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> LessThanOrEqual(Operand=DoubleProperty(Value=0.9))
            -> WorkflowOutput
        -> SelectMany "Next Point" => #11
            SubscribeSubject "Cursor1 PositionX" => #0
            SubscribeSubject "Cursor1 PositionY" => #1
            #0, #1 -> Zip
            -> WorkflowOutput
        #9 -> Condition
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0.9))
            -> WorkflowOutput
        -> SelectMany "Line/Circle Intercept"
            SubscribeSubject "Cursor1 PositionX" => #0
            SubscribeSubject "Cursor1 PositionY" => #1
            WorkflowInput Source1
            -> SelectMany GetLastPoint => #3
                WorkflowInput Source1 => #0
                SubscribeSubject "Cursor1 Trajectory" => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Merge
                -> SelectMany
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Last
                -> WorkflowOutput
            -> MemberSelector(Selector=X) => #4
            #3 -> MemberSelector(Selector=Y) => #5
            #0, #1, #4, #5 -> Zip => #6
            -> Condition "Non-Vertical Line?"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item3) => #2
                #1, #2 -> Zip
                -> NotEqual
                -> WorkflowOutput
            -> SelectMany "Line/Circle Intersection" => #8
                WorkflowInput Source1 => #0
                ExternalizedMapping(Radius) => #1
                #0, #1 -> GroupWorkflow "Init Variables"
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1)
                    -> BehaviorSubject X0 => #2
                    #0 -> MemberSelector(Selector=Item2)
                    -> BehaviorSubject Y0 => #4
                    #0 -> MemberSelector(Selector=Item3)
                    -> BehaviorSubject X1 => #6
                    #0 -> MemberSelector(Selector=Item4)
                    -> BehaviorSubject Y1 => #8
                    ExternalizedMapping(Value(DisplayName=Radius))
                    -> DoubleProperty(Value=0.9)
                    -> BehaviorSubject Radius => #11
                    #2, #4, #6, #8, #11 -> Zip
                    -> WorkflowOutput
                -> GroupWorkflow "Line Equation Parameters"
                    WorkflowInput Source1

                    SubscribeSubject X0 => #1
                    SubscribeSubject Y0 => #2
                    SubscribeSubject X1 => #3
                    SubscribeSubject Y1 => #4
                    #1, #2, #3, #4 -> Zip => #5
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Slope
                      Expression: (Item4-Item2)/(Item3-Item1)
                    -> BehaviorSubject Slope => #7
                    #5 -> Bonsai.Scripting.Expressions.ExpressionTransform Intercept
                      Expression: Item4-(Item4-Item2)/(Item3-Item1)*Item3
                    -> BehaviorSubject Intercept => #9
                    #7, #9 -> Zip
                    -> WorkflowOutput
                -> GroupWorkflow "Quadratic Equation Parameters"
                    WorkflowInput Source1

                    SubscribeSubject Slope => #1
                    -> Bonsai.Dsp.Pow(Power=2)
                    -> Add(Operand=DoubleProperty(Value=1))
                    -> BehaviorSubject a => #4
                    SubscribeSubject Intercept => #5
                    #1, #5 -> Zip
                    -> Multiply
                    -> Multiply(Operand=DoubleProperty(Value=2))
                    -> BehaviorSubject b => #9
                    #5 -> Bonsai.Dsp.Pow(Power=2) => #10
                    SubscribeSubject Radius
                    -> Bonsai.Dsp.Pow(Power=2) => #12
                    #10, #12 -> Zip
                    -> Subtract
                    -> BehaviorSubject c => #15
                    #4, #9, #15 -> Zip
                    -> WorkflowOutput
                -> GroupWorkflow "Solve Quadratic Equation For X"
                    WorkflowInput Source1

                    SubscribeSubject b
                    -> Bonsai.Dsp.Pow(Power=2) => #2
                    SubscribeSubject a => #3
                    SubscribeSubject c => #4
                    #3, #4 -> Zip
                    -> Multiply
                    -> Multiply(Operand=DoubleProperty(Value=4)) => #7
                    #2, #7 -> Zip
                    -> Subtract
                    -> Bonsai.Numerics.Sqrt
                    -> BehaviorSubject discriminant

                    SubscribeSubject b
                    -> Multiply(Operand=DoubleProperty(Value=-1)) => #13
                    SubscribeSubject discriminant => #14
                    #13, #14 -> Zip => #15
                    -> Add => #16
                    SubscribeSubject a
                    -> Multiply(Operand=DoubleProperty(Value=2)) => #18
                    #16, #18 -> Zip
                    -> Divide
                    -> BehaviorSubject Xv1 => #21
                    #15 -> Subtract => #22
                    SubscribeSubject a
                    -> Multiply(Operand=DoubleProperty(Value=2)) => #24
                    #22, #24 -> Zip
                    -> Divide
                    -> BehaviorSubject Xv2 => #27
                    #21, #27 -> Zip
                    -> WorkflowOutput
                -> GroupWorkflow "Solve Line for Ys"
                    WorkflowInput Source1

                    SubscribeSubject Xv1 => #1
                    SubscribeSubject Slope => #2
                    #1, #2 -> Zip
                    -> Multiply => #4
                    SubscribeSubject Intercept => #5
                    #4, #5 -> Zip
                    -> Add
                    -> BehaviorSubject Yv1 => #8
                    SubscribeSubject Xv2 => #9
                    #2, #9 -> Zip
                    -> Multiply => #11
                    #11, #5 -> Zip
                    -> Add
                    -> BehaviorSubject Yv2 => #14
                    #8, #14 -> Zip
                    -> WorkflowOutput
                -> GroupWorkflow "Calculate Point Distance"
                    WorkflowInput Source1

                    SubscribeSubject X0 => #1
                    SubscribeSubject Xv1 => #2
                    #1, #2 -> Zip
                    -> Subtract
                    -> Bonsai.Dsp.Pow(Power=2) => #5
                    SubscribeSubject Y1 => #6
                    SubscribeSubject Yv1 => #7
                    #6, #7 -> Zip
                    -> Subtract
                    -> Bonsai.Dsp.Pow(Power=2) => #10
                    #5, #10 -> Zip
                    -> Add
                    -> BehaviorSubject D1 => #13
                    SubscribeSubject X0 => #14
                    SubscribeSubject Xv2 => #15
                    #14, #15 -> Zip
                    -> Subtract
                    -> Bonsai.Dsp.Pow(Power=2) => #18
                    SubscribeSubject Y1 => #19
                    SubscribeSubject Yv2 => #20
                    #19, #20 -> Zip
                    -> Subtract
                    -> Bonsai.Dsp.Pow(Power=2) => #23
                    #18, #23 -> Zip
                    -> Add
                    -> BehaviorSubject D2 => #26
                    #13, #26 -> Zip
                    -> WorkflowOutput
                -> GroupWorkflow "Select Intersection Point"
                    WorkflowInput Source1

                    SubscribeSubject D1 => #1
                    SubscribeSubject D2 => #2
                    #1, #2 -> Zip
                    -> Subtract => #4
                    -> Condition
                        WorkflowInput Source1
                        -> GreaterThan(Operand=DoubleProperty(Value=0))
                        -> WorkflowOutput
                    -> SelectMany => #6
                        SubscribeSubject Xv2 => #0
                        SubscribeSubject Yv2 => #1
                        #0, #1 -> Zip
                        -> WorkflowOutput
                    #4 -> Condition
                        WorkflowInput Source1
                        -> LessThanOrEqual(Operand=DoubleProperty(Value=0))
                        -> WorkflowOutput
                    -> SelectMany => #8
                        SubscribeSubject Xv1 => #0
                        SubscribeSubject Yv1 => #1
                        #0, #1 -> Zip
                        -> WorkflowOutput
                    #6, #8 -> Merge
                    -> WorkflowOutput
                -> WorkflowOutput
            #6 -> Condition "Vertical Line?"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item3) => #2
                #1, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> SelectMany "North or South Point" => #10
                WorkflowInput Source1 => #0
                -> DoubleProperty(Value=0) => #1
                #0 -> MemberSelector(Selector=Item2)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it / Math.Abs(it)
                -> Multiply(Operand=DoubleProperty(Value=0.9)) => #4
                #1, #4 -> Zip
                -> WorkflowOutput
            #8, #10 -> Merge
            -> WorkflowOutput
        -> BehaviorSubject EndTrial => #14
        #11, #14 -> Merge
        -> MulticastSubject "Cursor1 Position" => #16
        SubscribeSubject EndTrial => #17
        #16, #17 -> SkipUntil
        -> Take(Count=1)
        -> Disable Delay(DueTime=PT0.5S)
        -> WorkflowOutput
    -> Take(Count=1)
    -> Disable SelectMany Outcome
        SubscribeSubject DrawStimuli => #0
        DoubleProperty(Value=0.9) => #1
        SubscribeSubject "Cursor1 PositionX"
        -> Take(Count=1) => #3
        SubscribeSubject "Cursor1 PositionY"
        -> Take(Count=1) => #5
        #3, #5 -> Zip
        -> Bonsai.Dsp.CartToPolar(AngleInDegrees=true)
        -> MemberSelector(Selector=Item2) => #8
        #1, #8 -> Zip
        -> Bonsai.Dsp.PolarToCart(AngleInDegrees=true) => #10
        -> MemberSelector(Selector=Item1) => #11
        -> PropertyMapping(LocationX) => #12
        #10 -> MemberSelector(Selector=Item2) => #13
        -> PropertyMapping(LocationY) => #14
        #0, #12, #14 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=0.06, LocationX=5.51072853E-17, LocationY=-0.9, Layer=0, ColorR=1, ColorG=1, ColorB=1, ColorA=1) => #15
        SubscribeSubject DrawStimuli => #16
        SubscribeSubject "Target X"
        -> PropertyMapping(LocationX) => #18
        SubscribeSubject "Target Y"
        -> PropertyMapping(LocationY) => #20
        #16, #18, #20 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=0.05, LocationX=0, LocationY=-0.9, Layer=0, ColorR=1, ColorG=0.3, ColorB=0.3, ColorA=1) => #21
        #15, #21 -> Merge => #22
        Bonsai.Shaders.Timer(DueTime=PT1S) => #23
        #22, #23 -> TakeUntil
        -> TakeLast(Count=1)
        -> WorkflowOutput
        #11, #13 -> Zip
        -> MulticastSubject "Cursor1 Position"

        Disable BooleanProperty(Value=false)
        -> Disable MulticastSubject "Update Cursor Position"
    -> WorkflowOutput
-> SelectMany "Finish Trial"
    GroupWorkflow "Draw Target"
        SubscribeSubject DrawStimuli => #0
        SubscribeSubject "Target X"
        -> PropertyMapping(LocationX) => #2
        SubscribeSubject "Target Y"
        -> PropertyMapping(LocationY) => #4
        #0, #2, #4 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawCircle.bonsai
          Diameter=0.05
          LocationX=0.8314916
          LocationY=0.3444151
          Layer=-1
          ColorR=0.3
          ColorG=0.3
          ColorB=1
          ColorA=1
        -> WorkflowOutput

    SubscribeSubject DrawStimuli
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawImage.bonsai
      TextureName=circular_grid
      ExtentX=2
      ExtentY=2
      LocationX=0
      LocationY=0
      Layer=-1
      Angle=0
      ScaleX=1
      ScaleY=1
      ShiftX=0
      ShiftY=0

    SubscribeSubject "Cursor1 Layer"
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> SelectMany "Draw Cursor1"
        SubscribeSubject DrawStimuli
        -> Skip(Count=1) => #1
        FloatProperty(Value=1)
        -> PropertyMapping(ColorA) => #3
        SubscribeSubject "Cursor1 Position" => #4
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(LocationX) => #6
        #4 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(LocationY) => #8
        SubscribeSubject "Cursor1 Layer"
        -> PropertyMapping(Layer) => #10
        #1, #3, #6, #8, #10 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawCircle.bonsai
          Diameter=0.06
          LocationX=-0.9
          LocationY=5.51072853E-17
          Layer=2
          ColorR=1
          ColorG=0.2
          ColorB=0.2
          ColorA=1
        -> WorkflowOutput

    SubscribeSubject "Cursor2 Layer"
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> SelectMany "Draw Cursor2"
        SubscribeSubject DrawStimuli
        -> Skip(Count=1) => #1
        SubscribeSubject "Cursor2 Position" => #2
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(LocationX) => #4
        #2 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(LocationY) => #6
        SubscribeSubject "Cursor2 Layer"
        -> PropertyMapping(Layer) => #8
        #1, #4, #6, #8 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawCircle.bonsai
          Diameter=0.06
          LocationX=-0.6363961
          LocationY=-0.6363961
          Layer=1
          ColorR=0.3
          ColorG=1
          ColorB=0.3
          ColorA=1
        -> WorkflowOutput

    WorkflowInput Source1 => #9
    SubscribeSubject trialNumber => #10
    #9, #10 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject trialNumber

    SubscribeSubject PadX
    -> Bonsai.Dsp.Abs
    -> Bonsai.Dsp.Buffer(Count=10, Skip=1)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> LessThan(Operand=DoubleProperty(Value=0.1)) => #20
    SubscribeSubject PadY
    -> Bonsai.Dsp.Abs
    -> Bonsai.Dsp.Buffer(Count=10, Skip=1)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> LessThan(Operand=DoubleProperty(Value=0.1)) => #26
    #20, #26 -> Zip
    -> BitwiseAnd
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput

    SubscribeSubject "Cursor1 Trajectory"
    -> Merge
-> Disable SelectMany "Wait To Center Pad"
    GroupWorkflow "Draw Target"
        SubscribeSubject DrawStimuli => #0
        SubscribeSubject "Target X"
        -> PropertyMapping(LocationX) => #2
        SubscribeSubject "Target Y"
        -> PropertyMapping(LocationY) => #4
        #0, #2, #4 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=0.05, LocationX=0.2329, LocationY=0.8693, Layer=-1, ColorR=0.3, ColorG=0.3, ColorB=1, ColorA=1)
        -> WorkflowOutput

    SubscribeSubject DrawStimuli
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawImage.bonsai
      TextureName=circular_grid
      ExtentX=2
      ExtentY=2
      LocationX=0
      LocationY=0
      Layer=-1
      Angle=0
      ScaleX=1
      ScaleY=1
      ShiftX=0
      ShiftY=0

    SubscribeSubject "Cursor1 Layer"
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> SelectMany "Draw Cursor1"
        SubscribeSubject DrawStimuli => #0
        FloatProperty(Value=1)
        -> PropertyMapping(ColorA) => #2
        SubscribeSubject "Cursor1 Position" => #3
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(LocationX) => #5
        #3 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(LocationY) => #7
        SubscribeSubject "Cursor1 Layer"
        -> PropertyMapping(Layer) => #9
        #0, #2, #5, #7, #9 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawCircle.bonsai
          Diameter=0.06
          LocationX=-0.06222963
          LocationY=0.897846043
          Layer=2
          ColorR=1
          ColorG=0.2
          ColorB=0.2
          ColorA=1
        -> WorkflowOutput

    SubscribeSubject "Cursor2 Layer"
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> SelectMany "Draw Cursor2"
        SubscribeSubject DrawStimuli => #0
        SubscribeSubject "Cursor2 Position" => #1
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(LocationX) => #3
        #1 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(LocationY) => #5
        SubscribeSubject "Cursor2 Layer"
        -> PropertyMapping(Layer) => #7
        #0, #3, #5, #7 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawCircle.bonsai
          Diameter=0.06
          LocationX=-0.678876
          LocationY=0.59087
          Layer=1
          ColorR=0.3
          ColorG=1
          ColorB=0.3
          ColorA=1
        -> WorkflowOutput

    SubscribeSubject PadX
    -> Bonsai.Dsp.Abs
    -> Bonsai.Dsp.Buffer(Count=10, Skip=1)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> LessThan(Operand=DoubleProperty(Value=0.05)) => #14
    SubscribeSubject PadY
    -> Bonsai.Dsp.Abs
    -> Bonsai.Dsp.Buffer(Count=10, Skip=1)
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> LessThan(Operand=DoubleProperty(Value=0.05)) => #20
    #14, #20 -> Zip
    -> BitwiseAnd
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Take(Count=1) => #13
SubscribeSubject "Number of Trials"
-> PropertyMapping(Count) => #15
#13, #15 -> RepeatCount(Count=470)
-> Last
-> WorkflowOutput

SubscribeSubject "Cursor1 Trajectory"
-> MemberSelector(Selector=Length)

SubscribeSubject "Cursor1 Position"
-> MemberSelector(Selector=Item1)
