WorkflowBuilder(Version=2.8.2)
GroupWorkflow "Init File Processing"
    ExternalizedMapping(Value(DisplayName="Min Egg Distance"))
    -> IntProperty(Value=5)
    -> BehaviorSubject "Min Egg Distance"

    ExternalizedMapping(Value(DisplayName="Egg Threshold"))
    -> IntProperty(Value=13)
    -> BehaviorSubject "Egg Threshold"

    ExternalizedMapping(Value(DisplayName="Egg Min Area"))
    -> IntProperty(Value=15)
    -> BehaviorSubject "Egg Min Area"

    ExternalizedMapping(Value(DisplayName="Egg Max Area"))
    -> IntProperty(Value=300)
    -> BehaviorSubject "Egg Max Area"

    IntProperty(Value=0)
    -> BehaviorSubject "Current File Number"

    StringProperty(Value="")
    -> BehaviorSubject "Current File"

    StringProperty(Value=Init)
    -> BehaviorSubject Status

    ExternalizedMapping(Value(DisplayName="Input path"))
    -> StringProperty(Value=.\data\fly6newcut)
    -> BehaviorSubject "Input Path"

    ExternalizedMapping(Value(DisplayName="Output path"))
    -> StringProperty(Value=.\out)
    -> BehaviorSubject "Output Path"

    StringProperty
    -> BehaviorSubject "Current Output Path"

    StringProperty
    -> BehaviorSubject Filestem

    SubscribeSubject "Input Path"
    -> PropertyMapping(Path) => #29
    ExternalizedMapping(SearchPattern) => #30
    #29, #30 -> Bonsai.IO.GetFiles(Path=.\data\fly6newcut, SearchPattern=*.avi, SearchOption=AllDirectories)
    -> BehaviorSubject "File List"

    SubscribeSubject "File List"
    -> MemberSelector(Selector=Length)
    -> InputMapping(Selector=it, Value(Selector=it))
    -> IntProperty(Value=1)
    -> BehaviorSubject "Number of Files"

SubscribeSubject "File List"
-> SelectMany "Prepare Current File"
    WorkflowInput Source1
    -> SelectMany "Select Current File"
        WorkflowInput Source1
        -> Concat => #1
        SubscribeSubject "Current File Number"
        -> PropertyMapping(Count) => #3
        #1, #3 -> Skip(Count=0)
        -> Take(Count=1)
        -> MulticastSubject "Current File"
        -> WorkflowOutput
    -> SelectMany "Get Filestem"
        SubscribeSubject "Output Path" => #0
        WorkflowInput Source1 => #1
        SubscribeSubject "Input Path"
        -> MemberSelector(Selector=Length) => #3
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Item1.Substring(Item2)
        -> MemberSelector(Selector=Length) => #6
        #5, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
          Expression: Item1.Substring(0, Item2-4)
        #0, #8 -> Zip
        -> Add
        -> MulticastSubject Filestem
        -> WorkflowOutput
    -> SelectMany "Create Output Path"
        StringProperty(Value='/C mkdir "') => #0
        WorkflowInput Source1 => #1
        -> MemberSelector(Selector=Length) => #2
        #1 -> Bonsai.IO.GetFileName
        -> MemberSelector(Selector=Length) => #4
        #1, #2, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: Item1.Substring(0, Item2-Item3)
        #0, #6 -> Zip
        -> Add => #8
        StringProperty(Value='"') => #9
        #8, #9 -> Zip
        -> Add
        -> PropertyMapping(Arguments)
        -> Bonsai.IO.StartProcess(FileName=cmd.exe, Arguments='/C mkdir ".\out\"')
        -> WorkflowOutput
    -> WorkflowOutput

    StringProperty(Value="Prepare current file")
    -> MulticastSubject Status
-> SelectMany "Process Current File"
    GroupWorkflow Initialize
        IntProperty(Value=0)
        -> BehaviorSubject "Max Contours"

        IntProperty(Value=1)
        -> Take(Count=1)
        -> ToArray
        -> BehaviorSubject "Egg Starting Frame"

        IntProperty(Value=0)
        -> Take(Count=1)
        -> ToArray
        -> BehaviorSubject "Egg Persistence"

        Bonsai.Vision.CreatePoint2f(X=0, Y=0)
        -> Take(Count=1)
        -> ToArray
        -> BehaviorSubject "Egg Positions"

        Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=180)
        -> BehaviorSubject "Random Color Distribution"

    GroupWorkflow "Compute Background"
        SubscribeSubject "Current File"
        -> PropertyMapping(FileName)
        -> Bonsai.Vision.FileCapture
          FileName=.\data\fly6newcut\Nostim6_2024-07-25T14-35-182024-07-25T15_35_18_fly6.avi
          PlaybackRate=10000
          StartPosition=0
          PositionUnits=Frames
          Loop=false
          Playing=true
        -> Bonsai.Vision.Grayscale
        -> BonZeb.CalculateBackground(PixelSearch=Brightest, NoiseThreshold=0)
        -> Take(Count=1000)
        -> TakeLast(Count=1)
        -> BehaviorSubject "Background Frame"
        -> WorkflowOutput

    SubscribeSubject "Current File"
    -> PropertyMapping(FileName)
    -> Bonsai.Vision.FileCapture
      FileName=.\data\fly6newcut\Nostim6_2024-07-25T14-35-182024-07-25T15_35_18_fly6.avi
      PlaybackRate=10000
      StartPosition=0
      PositionUnits=Frames
      Loop=false
      Playing=true
    -> DistinctUntilChanged
    -> Disable Take(Count=1500)
    -> BehaviorSubject "Original Frames"
    -> GroupWorkflow "Subtract Background" => #8
        WorkflowInput Source1
        -> Bonsai.Vision.Grayscale => #1
        SubscribeSubject "Background Frame" => #2
        #1, #2 -> SubscribeWhen => #3
        #3, #2 -> WithLatestFrom
        -> Bonsai.Dsp.AbsoluteDifference
        -> WorkflowOutput
    SubscribeSubject "Egg Threshold"
    -> PropertyMapping(ThresholdValue) => #10
    #8, #10 -> Bonsai.Vision.Threshold(ThresholdValue=13, MaxValue=255, ThresholdType=Binary)
    -> GroupWorkflow "Update Frame Data" => #12
        WorkflowInput Source1
        -> ElementIndex => #1
        -> MemberSelector(Selector=Value)
        -> BehaviorSubject Frames => #3
        #1 -> MemberSelector(Selector=Index)
        -> BehaviorSubject "Current Frame" => #5
        #3, #5 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    SubscribeSubject "Egg Min Area"
    -> PropertyMapping(MinArea) => #14
    SubscribeSubject "Egg Max Area"
    -> PropertyMapping(MaxArea) => #16
    #12, #14, #16 -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=15, MaxArea=300)
    -> BehaviorSubject Contours
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> BehaviorSubject Regions
    -> Last
    -> BehaviorSubject "Video Terminated"

    SubscribeSubject "Egg Starting Frame"
    -> DistinctUntilChanged
    -> Concat

    SubscribeSubject Regions
    -> SelectMany "Add Egg Positions"
        WorkflowInput Source1 => #0
        -> Take(Count=1)
        -> Concat
        -> MemberSelector(Selector=Centroid)
        -> SelectMany "Minimum Distance" => #4
            WorkflowInput Source1
            -> BehaviorSubject Centroid

            SubscribeSubject "Egg Positions"
            -> Take(Count=1)
            -> Concat => #4
            SubscribeSubject Centroid => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Math.Sqrt(Math.Pow(Item1.X - Item2.X, 2) + Math.Pow(Item1.Y - Item2.Y, 2))
            -> Min => #8
            SubscribeSubject Centroid => #9
            #8, #9 -> WithLatestFrom
            -> WorkflowOutput
        -> Condition "Add No Egg?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> GreaterThan(Operand=DoubleProperty(Value=10))
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #4 -> Condition "Add Point?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1) => #1
            SubscribeSubject "Min Egg Distance"
            -> PropertyMapping(Value) => #3
            #1, #3 -> GreaterThan(Operand=DoubleProperty(Value=5))
            -> WorkflowOutput
        -> SelectMany "Add New Egg"
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #1
            SubscribeSubject "Egg Positions" => #2
            #1, #2 -> WithLatestFrom
            -> SelectMany "Add Element To Array"
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Item2)
                -> Concat => #3
                #1 -> MemberSelector(Selector=Item1) => #4
                #3, #4 -> Merge
                -> ToArray
                -> WorkflowOutput
            -> MulticastSubject "Egg Positions"
            -> MemberSelector(Selector=Length) => #6
            #0 -> IntProperty(Value=0) => #7
            SubscribeSubject "Egg Persistence" => #8
            #7, #8 -> WithLatestFrom
            -> SelectMany "Add Element To Array"
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Item2)
                -> Concat => #3
                #1 -> MemberSelector(Selector=Item1) => #4
                #3, #4 -> Merge
                -> ToArray
                -> WorkflowOutput
            -> MulticastSubject "Egg Persistence"
            -> MemberSelector(Selector=Length) => #12
            SubscribeSubject "Current Frame" => #13
            #0, #13 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #15
            SubscribeSubject "Egg Starting Frame" => #16
            #15, #16 -> WithLatestFrom
            -> SelectMany "Add Element To Array"
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Item2)
                -> Concat => #3
                #1 -> MemberSelector(Selector=Item1) => #4
                #3, #4 -> Merge
                -> ToArray
                -> WorkflowOutput
            -> MulticastSubject "Egg Starting Frame"
            -> MemberSelector(Selector=Length) => #20
            #6, #12, #20 -> Zip
            -> WorkflowOutput
        -> IntProperty(Value=1) => #9
        #0 -> Condition "Empty Regions?"
            WorkflowInput Source1
            -> MemberSelector(Selector=Count)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IntProperty(Value=2) => #11
        #6, #9, #11 -> Merge
        -> IntProperty(Value=0)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany "Update Egg Persistency"
        SubscribeSubject "Egg Positions"
        -> Take(Count=1)
        -> Concat
        -> ElementIndex
        -> SelectMany "Calculate Egg Persistence"
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value)
            -> GroupWorkflow "Get Egg Center Pixel Value" => #2
                WorkflowInput Source1 => #0
                SubscribeSubject Frames => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item2[int32(Item1.Y), int32(Item1.X)].Val0
                -> WorkflowOutput
            -> Condition "Egg Is Present"
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=255))
                -> WorkflowOutput
            -> IntProperty(Value=1) => #4
            #2 -> Condition "Egg Is Not Present"
                WorkflowInput Source1
                -> Equal(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> IntProperty(Value=-10) => #6
            #4, #6 -> Merge => #7
            #0 -> MemberSelector(Selector=Index)
            -> GroupWorkflow "Get Egg Current Persistence" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject "Egg Persistence" => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item2[Item1]
                -> WorkflowOutput
            #7, #9 -> Zip
            -> Add
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Math.Min(it, 50)
            -> Take(Count=1)
            -> WorkflowOutput
        -> ToArray
        -> MulticastSubject "Egg Persistence"
        -> WorkflowOutput
    -> SelectMany "Remove Non-Persistent Eggs"
        SubscribeSubject "Egg Persistence"
        -> Take(Count=1)
        -> Concat
        -> ElementIndex
        -> Condition "Keep Egg?" => #4
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Index)
            -> Equal(Operand=IntProperty(Value=0)) => #2
            #0 -> MemberSelector(Selector=Value) => #3
            ExternalizedMapping(Value(DisplayName=MinPersistence)) => #4
            #3, #4 -> GreaterThan(Operand=IntProperty(Value=-10)) => #5
            #2, #5 -> Zip
            -> LogicalOr
            -> WorkflowOutput
        -> MemberSelector(Selector=Index) => #5
        SubscribeSubject "Egg Positions" => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item2[Item1]
        -> ToArray
        -> MulticastSubject "Egg Positions" => #10
        #4 -> MemberSelector(Selector=Index) => #11
        SubscribeSubject "Egg Persistence" => #12
        #11, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item2[Item1]
        -> ToArray
        -> MulticastSubject "Egg Persistence" => #16
        #4 -> MemberSelector(Selector=Index) => #17
        SubscribeSubject "Egg Starting Frame" => #18
        #17, #18 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item2[Item1]
        -> ToArray
        -> MulticastSubject "Egg Starting Frame" => #22
        #10, #16, #22 -> Zip
        -> WorkflowOutput

    GroupWorkflow "Save Data" => #30
        Annotation "Save Egg Positions"(Text="")
        -> SubscribeSubject "Egg Positions"
        -> GroupWorkflow "Parse Array" => #2
            WorkflowInput Source1
            -> Concat
            -> SelectMany
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject Filestem
        -> Add(Operand=StringProperty(Value=_EggPositions.csv))
        -> PropertyMapping(FileName) => #5
        #2, #5 -> Bonsai.IO.CsvWriter(FileName=.\out\Nostim6_2024-07-25T14-35-182024-07-25T15_35_18_fly6_EggPositions.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #6
        Annotation "Save Egg Persistece"(Text="")
        -> SubscribeSubject "Egg Persistence"
        -> GroupWorkflow "Parse Array" => #9
            WorkflowInput Source1
            -> Concat
            -> SelectMany
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject Filestem
        -> Add(Operand=StringProperty(Value=_EggPersistence.csv))
        -> PropertyMapping(FileName) => #12
        #9, #12 -> Bonsai.IO.CsvWriter(FileName=.\out\Nostim6_2024-07-25T14-35-182024-07-25T15_35_18_fly6_EggPersistence.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #13
        Annotation "Save Egg Starting Frame"(Text="")
        -> SubscribeSubject "Egg Starting Frame"
        -> GroupWorkflow "Parse Array" => #16
            WorkflowInput Source1
            -> Concat
            -> SelectMany
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject Filestem
        -> Add(Operand=StringProperty(Value=_EggLayingFrames.csv))
        -> PropertyMapping(FileName) => #19
        #16, #19 -> Bonsai.IO.CsvWriter(FileName=.\out\Nostim6_2024-07-25T14-35-182024-07-25T15_35_18_fly6_EggLayingFrames.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #20
        Annotation "Draw Final Contours"(Text="")
        -> SubscribeSubject "Contour Canvas"
        -> Bonsai.Vision.Drawing.DrawCanvas => #23
        SubscribeSubject Filestem
        -> Add(Operand=StringProperty(Value=_Contours.png))
        -> PropertyMapping(FileName) => #26
        #23, #26 -> Bonsai.Vision.SaveImage(FileName=.\out\Nostim6_2024-07-25T14-35-182024-07-25T15_35_18_fly6_Contours.png, Suffix=None) => #27
        Annotation "Draw Last Frame"(Text="")
        -> SubscribeSubject "Last Frame Canvas"
        -> Take(Count=1)
        -> Bonsai.Vision.Drawing.DrawCanvas => #31
        SubscribeSubject Filestem
        -> Add(Operand=StringProperty(Value=_LastFrame.png))
        -> PropertyMapping(FileName) => #34
        #31, #34 -> Bonsai.Vision.SaveImage(FileName=.\out\Nostim6_2024-07-25T14-35-182024-07-25T15_35_18_fly6_LastFrame.png, Suffix=None) => #35
        Annotation "Draw Last Frame Labelled"(Text="")
        -> GroupWorkflow "Add Frame Numbers" => #37
            SubscribeSubject "Egg Starting Frame"
            -> Concat => #1
            SubscribeSubject "Last Frame Canvas" => #2
            #1, #2 -> Zip
            -> GroupWorkflow "Add Text"
                WorkflowInput Source1
                -> ElementIndex => #1
                -> MemberSelector(Selector=Value) => #2
                -> MemberSelector(Selector=Item2) => #3
                -> SelectMany "Get Random Color" => #4
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Random Color Distribution"
                    -> Bonsai.Numerics.Distributions.SampleArray(Count=3) => #2
                    -> Index(Operand=IntProperty(Value=0)) => #3
                    #2 -> Index(Operand=IntProperty(Value=1)) => #4
                    #2 -> Index(Operand=IntProperty(Value=2)) => #5
                    #2 -> IntProperty(Value=255) => #6
                    #3, #4, #5, #6 -> Zip => #7
                    #0, #7 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> WithLatestFrom
                -> InputMapping(Selector=Item1, Color(Selector="Item2.Item1,Item2.Item2,Item2.Item3,Item2.Item4")) => #6
                #2 -> MemberSelector(Selector=Item1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Convert.ToString(it)
                -> PropertyMapping(Text) => #9
                #1 -> MemberSelector(Selector=Index) => #10
                SubscribeSubject "Egg Positions" => #11
                #10, #11 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item2[Item1]
                -> PropertyMapping(Origin) => #14
                #6, #9, #14 -> Bonsai.Vision.Drawing.AddText
                  Text=1416
                  Alignment=Center
                  LineAlignment=Center
                  TextRenderingHint=AntiAliasGridFit
                  Color(Val0=142.48495460603615, Val1=69.102367204196, Val2=2.6994843700432614, Val3=255)
                  Font="Arial, 10.2pt, style=Bold"
                  Origin(X=4, Y=196)
                -> WorkflowOutput
            -> Delay(DueTime=PT0.05S)
            -> MulticastSubject "Last Frame Canvas"
            -> WorkflowOutput
        SubscribeSubject "Egg Starting Frame"
        -> MemberSelector(Selector=Length)
        -> Subtract(Operand=IntProperty(Value=1))
        -> PropertyMapping(Count) => #41
        #37, #41 -> Skip(Count=14)
        -> Bonsai.Vision.Drawing.DrawCanvas => #43
        SubscribeSubject Filestem
        -> Add(Operand=StringProperty(Value=_LastFrameLabelled.png))
        -> PropertyMapping(FileName) => #46
        #43, #46 -> Bonsai.Vision.SaveImage(FileName=.\out\Nostim6_2024-07-25T14-35-182024-07-25T15_35_18_fly6_LastFrameLabelled.png, Suffix=None) => #47
        #6, #13, #20, #27, #35, #47 -> Zip
        -> WorkflowOutput

        GroupWorkflow "Create Frame Canvas"
            SubscribeSubject "Original Frames"
            -> MemberSelector(Selector=Size)
            -> PropertyMapping(Size)
            -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=544, Height=318), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #3
            SubscribeSubject "Original Frames"
            -> PropertyMapping(Image) => #5
            #3, #5 -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=0, Height=0), Interpolation=Linear)
            -> WorkflowOutput
        -> Take(Count=1)
        -> BehaviorSubject "Last Frame Canvas"
        -> BehaviorSubject "Start Adding Text"

        GroupWorkflow "Create Contour Canvas"
            SubscribeSubject Frames
            -> MemberSelector(Selector=Size)
            -> PropertyMapping(Size)
            -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=544, Height=318), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #3
            SubscribeSubject Contours
            -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1) => #5
            SubscribeSubject Contours
            -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1) => #7
            SubscribeSubject Contours
            -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1) => #9
            #5, #7, #9 -> Zip
            -> Bonsai.Dsp.Merge
            -> PropertyMapping(Image) => #12
            #3, #12 -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=0, Height=0), Interpolation=Linear)
            -> WorkflowOutput
        -> BehaviorSubject "Contour Canvas"
    SubscribeSubject "Video Terminated" => #31
    #30, #31 -> SubscribeWhen
    -> Take(Count=1)
    -> WorkflowOutput

    SubscribeSubject "Current File"
    -> MulticastSubject Status

    SubscribeSubject Frames
    SubscribeSubject "Egg Persistence"
-> SelectMany "Prepare Next File"
    WorkflowInput Source1 => #0
    SubscribeSubject "Current File Number" => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject "Current File Number"
    -> WorkflowOutput

    StringProperty(Value="Preparing next file")
    -> MulticastSubject Status
-> Take(Count=1) => #5
SubscribeSubject "Number of Files"
-> PropertyMapping(Count) => #7
#5, #7 -> RepeatCount(Count=1)
-> WorkflowOutput

SubscribeSubject "Current File"
SubscribeSubject Status
IntProperty(Value=0)
