<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Max Contours</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>EggLyingFly.avi</cv:FileName>
          <cv:PlaybackRate>10000</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>45</cv:X>
            <cv:Y>42</cv:Y>
            <cv:Width>547</cv:Width>
            <cv:Height>300</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>EggLyingFly.avi</cv:FileName>
          <cv:PlaybackRate>10000</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="bz:CalculateBackground">
          <bz:PixelSearch>Brightest</bz:PixelSearch>
          <bz:NoiseThreshold>0</bz:NoiseThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1000</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeLast">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>45</cv:X>
            <cv:Y>42</cv:Y>
            <cv:Width>547</cv:Width>
            <cv:Height>300</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:AbsoluteDifference" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>19</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>30</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Count</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>100</dsp:Count>
          <dsp:Skip>1</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Floor" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Max Contours</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="GreaterThan" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Max Contours</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Max Contours</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>EggLayingFrames.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="12" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="28" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>