<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Max Contours</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Current File Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Current File</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Init</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Status</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filepath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filestem</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="Filepath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFiles">
                <io:Path>.\data</io:Path>
                <io:SearchPattern>*</io:SearchPattern>
                <io:SearchOption>TopDirectoryOnly</io:SearchOption>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>File List</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="it" />
              </PropertyMappings>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Number of Files</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init Arrays</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Egg Starting Frame</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Egg Persistency</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CreatePoint2f">
                <cv:X>0</cv:X>
                <cv:Y>0</cv:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Egg Positions</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>File List</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Select Current File</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Current File Number</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Current File</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Prepare Next File</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Processing file: </Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Current File</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MulticastSubject">
              <Name>Status</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>Process File</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>File Path</Name>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:FileCapture">
                  <cv:FileName>data\Loom6_2024-04-04T15-00-322024-04-04T16_00_32_fly1.avi</cv:FileName>
                  <cv:PlaybackRate>10000</cv:PlaybackRate>
                  <cv:StartPosition>0</cv:StartPosition>
                  <cv:PositionUnits>Frames</cv:PositionUnits>
                  <cv:Loop>false</cv:Loop>
                  <cv:Playing>true</cv:Playing>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:DistinctUntilChanged" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:Grayscale" />
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Background Frame</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:SubscribeWhen" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:WithLatestFrom" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:AbsoluteDifference" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:Threshold">
                  <cv:ThresholdValue>19</cv:ThresholdValue>
                  <cv:MaxValue>255</cv:MaxValue>
                  <cv:ThresholdType>Binary</cv:ThresholdType>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:ElementIndex" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Value</Selector>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>Frames</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Index</Selector>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>Current Frame</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:FindContours">
                  <cv:Mode>External</cv:Mode>
                  <cv:Method>ChainApproxNone</cv:Method>
                  <cv:Offset>
                    <cv:X>0</cv:X>
                    <cv:Y>0</cv:Y>
                  </cv:Offset>
                  <cv:MinArea>30</cv:MinArea>
                  <cv:MaxArea>100</cv:MaxArea>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:BinaryRegionAnalysis" />
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>Regions</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Last" />
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>Video Terminated</Name>
              </Expression>
              <Expression xsi:type="Annotation">
                <Name>NOTE</Name>
                <Text><![CDATA[Points need to be added in order]]></Text>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Regions</Name>
              </Expression>
              <Expression xsi:type="rx:SelectMany">
                <Name>Add Egg Positions</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Concat" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Centroid</Selector>
                    </Expression>
                    <Expression xsi:type="rx:SelectMany">
                      <Name>Minimum Distance</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="rx:BehaviorSubject">
                            <Name>Centroid</Name>
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>Egg Positions</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Concat" />
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>Centroid</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="scr:ExpressionTransform">
                            <scr:Expression>Math.Sqrt(Math.Pow(Item1.X - Item2.X, 2) + Math.Pow(Item1.Y - Item2.Y, 2))</scr:Expression>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Min" />
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>Centroid</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="6" Label="Source1" />
                          <Edge From="5" To="6" Label="Source2" />
                          <Edge From="6" To="7" Label="Source1" />
                          <Edge From="7" To="8" Label="Source1" />
                          <Edge From="8" To="10" Label="Source1" />
                          <Edge From="9" To="10" Label="Source2" />
                          <Edge From="10" To="11" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Name>Add No Egg?</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item1</Selector>
                          </Expression>
                          <Expression xsi:type="GreaterThan">
                            <Operand xsi:type="DoubleProperty">
                              <Value>10</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="BitwiseNot" />
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="3" To="4" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Name>Add Point?</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item1</Selector>
                          </Expression>
                          <Expression xsi:type="GreaterThan">
                            <Operand xsi:type="DoubleProperty">
                              <Value>10</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:SelectMany">
                      <Name>Add New Egg</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item2</Selector>
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>Egg Positions</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="rx:SelectMany">
                            <Name>Add Element To Array</Name>
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Take">
                                    <rx:Count>1</rx:Count>
                                  </Combinator>
                                </Expression>
                                <Expression xsi:type="MemberSelector">
                                  <Selector>Item2</Selector>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Concat" />
                                </Expression>
                                <Expression xsi:type="MemberSelector">
                                  <Selector>Item1</Selector>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Merge" />
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:ToArray" />
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                                <Edge From="1" To="2" Label="Source1" />
                                <Edge From="1" To="4" Label="Source1" />
                                <Edge From="2" To="3" Label="Source1" />
                                <Edge From="3" To="5" Label="Source1" />
                                <Edge From="4" To="5" Label="Source2" />
                                <Edge From="5" To="6" Label="Source1" />
                                <Edge From="6" To="7" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="MulticastSubject">
                            <Name>Egg Positions</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Length</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="IntProperty">
                              <Value>0</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>Egg Persistency</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="rx:SelectMany">
                            <Name>Add Element To Array</Name>
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Take">
                                    <rx:Count>1</rx:Count>
                                  </Combinator>
                                </Expression>
                                <Expression xsi:type="MemberSelector">
                                  <Selector>Item2</Selector>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Concat" />
                                </Expression>
                                <Expression xsi:type="MemberSelector">
                                  <Selector>Item1</Selector>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Merge" />
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:ToArray" />
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                                <Edge From="1" To="2" Label="Source1" />
                                <Edge From="1" To="4" Label="Source1" />
                                <Edge From="2" To="3" Label="Source1" />
                                <Edge From="3" To="5" Label="Source1" />
                                <Edge From="4" To="5" Label="Source2" />
                                <Edge From="5" To="6" Label="Source1" />
                                <Edge From="6" To="7" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="MulticastSubject">
                            <Name>Egg Persistency</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Length</Selector>
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>Current Frame</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item2</Selector>
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>Egg Starting Frame</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="rx:SelectMany">
                            <Name>Add Element To Array</Name>
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Take">
                                    <rx:Count>1</rx:Count>
                                  </Combinator>
                                </Expression>
                                <Expression xsi:type="MemberSelector">
                                  <Selector>Item2</Selector>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Concat" />
                                </Expression>
                                <Expression xsi:type="MemberSelector">
                                  <Selector>Item1</Selector>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Merge" />
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:ToArray" />
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                                <Edge From="1" To="2" Label="Source1" />
                                <Edge From="1" To="4" Label="Source1" />
                                <Edge From="2" To="3" Label="Source1" />
                                <Edge From="3" To="5" Label="Source1" />
                                <Edge From="4" To="5" Label="Source2" />
                                <Edge From="5" To="6" Label="Source1" />
                                <Edge From="6" To="7" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="MulticastSubject">
                            <Name>Egg Starting Frame</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Length</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="0" To="7" Label="Source1" />
                          <Edge From="0" To="14" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source1" />
                          <Edge From="6" To="21" Label="Source1" />
                          <Edge From="7" To="9" Label="Source1" />
                          <Edge From="8" To="9" Label="Source2" />
                          <Edge From="9" To="10" Label="Source1" />
                          <Edge From="10" To="11" Label="Source1" />
                          <Edge From="11" To="12" Label="Source1" />
                          <Edge From="12" To="21" Label="Source2" />
                          <Edge From="13" To="14" Label="Source2" />
                          <Edge From="14" To="15" Label="Source1" />
                          <Edge From="15" To="17" Label="Source1" />
                          <Edge From="16" To="17" Label="Source2" />
                          <Edge From="17" To="18" Label="Source1" />
                          <Edge From="18" To="19" Label="Source1" />
                          <Edge From="19" To="20" Label="Source1" />
                          <Edge From="20" To="21" Label="Source3" />
                          <Edge From="21" To="22" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>1</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Name>Empty Regions?</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Count</Selector>
                          </Expression>
                          <Expression xsi:type="Equal">
                            <Operand xsi:type="IntProperty">
                              <Value>0</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>2</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="10" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="4" To="7" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="12" Label="Source1" />
                    <Edge From="7" To="8" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="12" Label="Source2" />
                    <Edge From="10" To="11" Label="Source1" />
                    <Edge From="11" To="12" Label="Source3" />
                    <Edge From="12" To="13" Label="Source1" />
                    <Edge From="13" To="14" Label="Source1" />
                    <Edge From="14" To="15" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="rx:SelectMany">
                <Name>Update Egg Persistency</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Egg Positions</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Concat" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:ElementIndex" />
                    </Expression>
                    <Expression xsi:type="rx:SelectMany">
                      <Name>Calculate Egg Persistence</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Value</Selector>
                          </Expression>
                          <Expression xsi:type="GroupWorkflow">
                            <Name>Get Egg Center Pixel Value</Name>
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>Frames</Name>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:WithLatestFrom" />
                                </Expression>
                                <Expression xsi:type="scr:ExpressionTransform">
                                  <scr:Expression>Item2[int32(Item1.Y), int32(Item1.X)].Val0</scr:Expression>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="2" Label="Source1" />
                                <Edge From="1" To="2" Label="Source2" />
                                <Edge From="2" To="3" Label="Source1" />
                                <Edge From="3" To="4" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="rx:Condition">
                            <Name>Egg Is Present</Name>
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="Equal">
                                  <Operand xsi:type="DoubleProperty">
                                    <Value>255</Value>
                                  </Operand>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                                <Edge From="1" To="2" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="IntProperty">
                              <Value>1</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="rx:Condition">
                            <Name>Egg Is Not Present</Name>
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="Equal">
                                  <Operand xsi:type="DoubleProperty">
                                    <Value>0</Value>
                                  </Operand>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                                <Edge From="1" To="2" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="IntProperty">
                              <Value>-1</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Merge" />
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Index</Selector>
                          </Expression>
                          <Expression xsi:type="GroupWorkflow">
                            <Name>Get Egg Current Persistence</Name>
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>Egg Persistency</Name>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:WithLatestFrom" />
                                </Expression>
                                <Expression xsi:type="scr:ExpressionTransform">
                                  <scr:Expression>Item2[Item1]</scr:Expression>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="2" Label="Source1" />
                                <Edge From="1" To="2" Label="Source2" />
                                <Edge From="2" To="3" Label="Source1" />
                                <Edge From="3" To="4" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="Add" />
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="0" To="8" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="2" To="5" Label="Source1" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="7" Label="Source1" />
                          <Edge From="5" To="6" Label="Source1" />
                          <Edge From="6" To="7" Label="Source2" />
                          <Edge From="7" To="10" Label="Source1" />
                          <Edge From="8" To="9" Label="Source1" />
                          <Edge From="9" To="10" Label="Source2" />
                          <Edge From="10" To="11" Label="Source1" />
                          <Edge From="11" To="12" Label="Source1" />
                          <Edge From="12" To="13" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:ToArray" />
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>Egg Persistency</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="rx:SelectMany">
                <Name>Remove Non-Persistent Eggs</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Egg Persistency</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Concat" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:ElementIndex" />
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Name>Keep Egg?</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Index</Selector>
                          </Expression>
                          <Expression xsi:type="Equal">
                            <Operand xsi:type="IntProperty">
                              <Value>0</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Value</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" DisplayName="MinPersistence" />
                          </Expression>
                          <Expression xsi:type="GreaterThan">
                            <Operand xsi:type="IntProperty">
                              <Value>-10</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="LogicalOr" />
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="0" To="3" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="6" Label="Source1" />
                          <Edge From="3" To="5" Label="Source1" />
                          <Edge From="4" To="5" Label="Source2" />
                          <Edge From="5" To="6" Label="Source2" />
                          <Edge From="6" To="7" Label="Source1" />
                          <Edge From="7" To="8" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Index</Selector>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Egg Positions</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:WithLatestFrom" />
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Expression>Item2[Item1]</scr:Expression>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:ToArray" />
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>Egg Positions</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Index</Selector>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Egg Persistency</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:WithLatestFrom" />
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Expression>Item2[Item1]</scr:Expression>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:ToArray" />
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>Egg Persistency</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Index</Selector>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Egg Starting Frame</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:WithLatestFrom" />
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Expression>Item2[Item1]</scr:Expression>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:ToArray" />
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>Egg Starting Frame</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="4" To="11" Label="Source1" />
                    <Edge From="4" To="17" Label="Source1" />
                    <Edge From="5" To="7" Label="Source1" />
                    <Edge From="6" To="7" Label="Source2" />
                    <Edge From="7" To="8" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                    <Edge From="10" To="23" Label="Source1" />
                    <Edge From="11" To="13" Label="Source1" />
                    <Edge From="12" To="13" Label="Source2" />
                    <Edge From="13" To="14" Label="Source1" />
                    <Edge From="14" To="15" Label="Source1" />
                    <Edge From="15" To="16" Label="Source1" />
                    <Edge From="16" To="23" Label="Source2" />
                    <Edge From="17" To="19" Label="Source1" />
                    <Edge From="18" To="19" Label="Source2" />
                    <Edge From="19" To="20" Label="Source1" />
                    <Edge From="20" To="21" Label="Source1" />
                    <Edge From="21" To="22" Label="Source1" />
                    <Edge From="22" To="23" Label="Source3" />
                    <Edge From="23" To="24" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>File Path</Name>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:FileCapture">
                  <cv:FileName>data/</cv:FileName>
                  <cv:PlaybackRate>10000</cv:PlaybackRate>
                  <cv:StartPosition>0</cv:StartPosition>
                  <cv:PositionUnits>Frames</cv:PositionUnits>
                  <cv:Loop>true</cv:Loop>
                  <cv:Playing>true</cv:Playing>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:Grayscale" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="bz:CalculateBackground">
                  <bz:PixelSearch>Brightest</bz:PixelSearch>
                  <bz:NoiseThreshold>0</bz:NoiseThreshold>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1000</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:TakeLast">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>Background Frame</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Egg Positions</Name>
              </Expression>
              <Expression xsi:type="io:CsvWriter">
                <io:FileName>EggPositions.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>true</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Egg Persistency</Name>
              </Expression>
              <Expression xsi:type="io:CsvWriter">
                <io:FileName>EggPersistence.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>true</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Egg Starting Frame</Name>
              </Expression>
              <Expression xsi:type="io:CsvWriter">
                <io:FileName>EggStartingFrame.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>true</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Video Terminated</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:SubscribeWhen" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
              <Expression xsi:type="SubscribeSubject">
                <Name>Egg Starting Frame</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Length</Selector>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Egg Persistency</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Length</Selector>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Egg Positions</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Length</Selector>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="6" Label="Source1" />
              <Edge From="5" To="6" Label="Source2" />
              <Edge From="5" To="7" Label="Source2" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="10" To="13" Label="Source1" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="12" To="15" Label="Source1" />
              <Edge From="13" To="14" Label="Source1" />
              <Edge From="14" To="15" Label="Source2" />
              <Edge From="15" To="16" Label="Source1" />
              <Edge From="16" To="17" Label="Source1" />
              <Edge From="17" To="18" Label="Source1" />
              <Edge From="18" To="19" Label="Source1" />
              <Edge From="19" To="20" Label="Source1" />
              <Edge From="20" To="21" Label="Source1" />
              <Edge From="22" To="23" Label="Source1" />
              <Edge From="23" To="24" Label="Source1" />
              <Edge From="24" To="25" Label="Source1" />
              <Edge From="25" To="26" Label="Source1" />
              <Edge From="27" To="28" Label="Source1" />
              <Edge From="28" To="29" Label="Source1" />
              <Edge From="29" To="30" Label="Source1" />
              <Edge From="30" To="31" Label="Source1" />
              <Edge From="31" To="32" Label="Source1" />
              <Edge From="32" To="33" Label="Source1" />
              <Edge From="33" To="34" Label="Source1" />
              <Edge From="35" To="36" Label="Source1" />
              <Edge From="36" To="41" Label="Source1" />
              <Edge From="37" To="38" Label="Source1" />
              <Edge From="38" To="41" Label="Source2" />
              <Edge From="39" To="40" Label="Source1" />
              <Edge From="40" To="41" Label="Source3" />
              <Edge From="41" To="43" Label="Source1" />
              <Edge From="42" To="43" Label="Source2" />
              <Edge From="43" To="44" Label="Source1" />
              <Edge From="44" To="45" Label="Source1" />
              <Edge From="46" To="47" Label="Source1" />
              <Edge From="48" To="49" Label="Source1" />
              <Edge From="50" To="51" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Prepare Next File</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Current File Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Current File Number</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Terminating</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Status</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Number of Files</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>2</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Current File</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Status</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>