<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>TestData\trajectories_wo_gaps_2020-10-30_133125.trajectories.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ToPoint2fArray" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>TestData\CF-CS_1F-20Loom-7days-FH1_1-2020-10-20T10_56_25.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Background</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bz:CalculateBackground">
                <bz:PixelSearch>Brightest</bz:PixelSearch>
                <bz:NoiseThreshold>0</bz:NoiseThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:AbsoluteDifference" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>VideoWithcCentroids</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoWithcCentroids</Name>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Index</rx:KeySelector>
        <rx:ElementSelector>Value</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ValidPoint.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Stabilizer.bonsai" />
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Zoomer.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HeadTailGroup.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\OrientationVisualizer.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Zoomer.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PxChange.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="9" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="7" To="11" Label="Source2" />
            <Edge From="8" To="11" Label="Source4" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source3" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>5</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>3</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>4</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>0</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:MultiVisualizer">
          <p1:RadiusSize>30</p1:RadiusSize>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="6" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="14" Label="Source1" />
      <Edge From="8" To="29" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="16" To="21" Label="Source1" />
      <Edge From="16" To="23" Label="Source1" />
      <Edge From="16" To="25" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="27" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="27" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="27" Label="Source3" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="27" Label="Source4" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source5" />
      <Edge From="27" To="28" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>