<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>Videos\5flies_group.avi</cv:FileName>
          <cv:PlaybackRate>8246337208320</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Background</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bz:CalculateBackground">
                <bz:PixelSearch>Brightest</bz:PixelSearch>
                <bz:NoiseThreshold>0</bz:NoiseThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:AbsoluteDifference" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>20</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Centroids</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>52</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>ConnectedComponent</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>100</cv:MinArea>
                <cv:MaxArea>1500</cv:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FlySorting</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Count</Selector>
                    </Expression>
                    <Expression xsi:type="NotEqual">
                      <Operand xsi:type="IntProperty">
                        <Value>6</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ExpectedConnectedComponents" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:BinaryRegionsTracking">
                <p1:ExpectedConnectedComponents>5</p1:ExpectedConnectedComponents>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Index</rx:KeySelector>
        <rx:ElementSelector>Value</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ValidPoint.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Stabilizer.bonsai" />
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Zoomer.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HeadTailGroup.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\OrientationVisualizer.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Zoomer.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PxChange.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="9" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="7" To="11" Label="Source2" />
            <Edge From="8" To="11" Label="Source4" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source3" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>5</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>3</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>4</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>0</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="dsp:ConvertToArray">
              <dsp:Depth xsi:nil="true" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:MultiVisualizer">
          <p1:RadiusSize>30</p1:RadiusSize>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="24" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="23" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="10" To="15" Label="Source1" />
      <Edge From="10" To="17" Label="Source1" />
      <Edge From="10" To="19" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="21" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="21" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="21" Label="Source3" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="21" Label="Source4" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source5" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>